def model aslanidi_2009 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit cm as
    unit metre {mult: 0.01};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit cm_per_s as
    unit metre {mult: 0.01};
    unit second {expo: -1.0};
  enddef;
  def unit g2_m4_per_s8_per_A2_times_1e6 as
    unit gram {expo: 2.0, mult: 1000000};
    unit metre {expo: 4.0};
    unit second {expo: -8.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol4_per_m12 as
    unit metre {expo: -12.0};
    unit mole {expo: 4.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit s7_A2_per_g2_per_m4_times_1e_minus_3 as
    unit gram {expo: -2.0, mult: 0.001};
    unit metre {expo: -4.0};
    unit second {expo: 7.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit s_A_per_m3 as
    unit metre {expo: -3.0};
    unit second;
    unit ampere;
  enddef;
  def unit uF_per_cm2 as
    unit gram {expo: -1.0, mult: 1e-05};
    unit metre {expo: -4.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit uL as
    unit metre {expo: 3.0, mult: 1e-09};
  enddef;

  def comp CT_K_Cl as
    var CT_K_Cl: mM_per_ms {pub: out};
    var CT_K_Cl_max: mM_per_ms {init: 7.07559999999999965e-06};
    var E_Cl: mV {pub: in};
    var E_K: mV {pub: in};
    CT_K_Cl = CT_K_Cl_max*(E_K-E_Cl)/(E_K+87.8251{mV}-E_Cl);
  enddef;

  def comp CT_Na_Cl as
    var CT_Na_Cl: mM_per_ms {pub: out};
    var CT_Na_Cl_max: mM_per_ms {init: 9.84429999999999992e-06};
    var E_Cl: mV {pub: in};
    var E_Na: mV {pub: in};
    CT_Na_Cl = CT_Na_Cl_max*pow(E_Na-E_Cl, 4.0{dimensionless})/(pow(E_Na-E_Cl, 4.0{dimensionless})+pow(87.8251{mV}, 4.0{dimensionless}));
  enddef;

  def comp Ca_JSR as
    var CSQN_max: mM {init: 10.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_JSR: mM {pub: out, init: 1.14330506365185958e+00};
    var km_CSQN: mM {init: 0.8};
    var q_rel_q_rel: mM_per_ms {pub: in};
    var q_tr_q_tr: mM_per_ms {pub: in};
    var time: ms {pub: in};
    ode(Ca_JSR, time) = (q_tr_q_tr-q_rel_q_rel)/(1.0{dimensionless}+CSQN_max*km_CSQN/sqr(km_CSQN+Ca_JSR));
  enddef;

  def comp Ca_MK_act as
    var Ca_MK_0: dimensionless {init: 0.05};
    var Ca_MK_act: dimensionless {pub: out};
    var Ca_MK_bound: dimensionless;
    var Ca_MK_trap: dimensionless {init: 8.78916828478280858e-06};
    var Ca_r_Ca_r: mM {pub: in};
    var alpha_Ca_MK: mS_per_uF {init: 0.05};
    var beta_Ca_MK: mS_per_uF {init: 0.00068};
    var km_Ca_MK: mM {pub: out, init: 0.15};
    var time: ms {pub: in};
    Ca_MK_act = Ca_MK_bound+Ca_MK_trap;
    Ca_MK_bound = Ca_MK_0*(1.0{dimensionless}-Ca_MK_trap)/(1.0{dimensionless}+km_Ca_MK/Ca_r_Ca_r);
    ode(Ca_MK_trap, time) = alpha_Ca_MK*Ca_MK_bound*(Ca_MK_bound+Ca_MK_trap)-beta_Ca_MK*Ca_MK_trap;
  enddef;

  def comp Ca_NSR as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Ca_NSR: mM {pub: out, init: 1.21325246958494537e+00};
    var Vol_jsr: uL {pub: in};
    var Vol_nsr: uL {pub: in};
    var q_leak_q_leak: mM_per_ms {pub: in};
    var q_tr_q_tr: mM_per_ms {pub: in};
    var q_up_q_up: mM_per_ms {pub: in};
    var time: ms {pub: in};
    ode(Ca_NSR, time) = q_up_q_up-(q_leak_q_leak+q_tr_q_tr*Vol_jsr/Vol_nsr);
  enddef;

  def comp Ca_i as
    var CMDN: dimensionless;
    var CMDN_max: mM {init: 0.05};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {pub: out, init: 2.23554334594349427e-04};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mol {pub: in};
    var TRPN: dimensionless;
    var TRPN_max: mM {init: 0.07};
    var Vol_myo: uL {pub: in};
    var Vol_nsr: uL {pub: in};
    var Vol_ss: uL {pub: in};
    var a_cap: cm2 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var b_myo: dimensionless;
    var i_Ca_b: A_per_F {pub: in};
    var i_Ca_p_i_Ca_p: A_per_F {pub: in};
    var i_NaCa_i_NaCa: A_per_F {pub: in};
    var km_CMDN: mM {init: 0.00238};
    var km_TRPN: mM {init: 0.0005};
    var q_diff: mM_per_ms {pub: in};
    var q_leak_q_leak: mM_per_ms {pub: in};
    var q_up_q_up: mM_per_ms {pub: in};
    var time: ms {pub: in};
    CMDN = 2.0{dimensionless}*CMDN_max*Ca_i/sqr(Ca_i+km_CMDN);
    ode(Ca_i, time) = -b_myo*(Cm*(i_Ca_b+i_Ca_p_i_Ca_p-2.0{dimensionless}*i_NaCa_i_NaCa)*a_cap/(2.0{dimensionless}*Vol_myo*F)+(q_up_q_up-q_leak_q_leak)*Vol_nsr/Vol_myo-q_diff*Vol_ss/Vol_myo);
    TRPN = 2.0{dimensionless}*TRPN_max*Ca_i/sqr(Ca_i+km_TRPN);
    b_myo = 1.0{dimensionless}/(1.0{dimensionless}+TRPN+CMDN);
  enddef;

  def comp Ca_r as
    var Ca_i_Ca_i: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_r: mM {pub: out, init: 2.24181171179039341e-04};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_flux_scaling_from_intrinsic_buffers
    var Ca_r_tot: dimensionless;
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mol {pub: in};
    var Vol_jsr: uL {pub: in};
    var Vol_ss: uL {pub: in};
    var a_cap: cm2 {pub: in};
    var b_SL: dimensionless;
    var b_SL_max: mM {init: 1.124};
    var b_SR: dimensionless;
    var b_SR_max: mM {init: 0.047};
    var i_Ca_L_i_Ca_L: A_per_F {pub: in};
    var km_b_SL: mM {init: 0.0087};
    var km_b_SR: mM {init: 0.00087};
    var q_diff: mM_per_ms {pub: out};
    var q_rel_q_rel: mM_per_ms {pub: in};
    var tau_ss: ms {init: 0.2};
    var time: ms {pub: in};
    var z_Ca: dimensionless {pub: in};
    ode(Ca_r, time) = Ca_r_tot*(-Cm*i_Ca_L_i_Ca_L*a_cap/(Vol_ss*z_Ca*F)+q_rel_q_rel*Vol_jsr/Vol_ss-q_diff);
    Ca_r_tot = 1.0{dimensionless}/(1.0{dimensionless}+b_SR+b_SL);
    b_SL = 2.0{dimensionless}*b_SL_max*Ca_r/sqr(Ca_r+km_b_SL);
    b_SR = 2.0{dimensionless}*b_SR_max*Ca_r/sqr(Ca_r+km_b_SR);
    q_diff = (Ca_r-Ca_i_Ca_i)/tau_ss;
  enddef;

  def comp background_currents as
    var Ca_i_Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var E_Cl: mV {pub: in};
    var E_K: mV {pub: in};
    var E_Na: mV {pub: in};
    var F: C_per_mol {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_Cl_b: mS_per_uF {init: 0.000225};
    var g_K_b: mS_per_uF {init: 0.005};
    var g_Na_b: mS_per_uF {init: 0.0025};
    var gamma_Cai: dimensionless {pub: in};
    var gamma_Cao: dimensionless {pub: in};
    var i_Ca_b: A_per_F {pub: out};
    var i_Cl_b: A_per_F {pub: out};
    var i_K_b: A_per_F {pub: out};
    var i_Na_b: A_per_F {pub: out};
    var p_Ca_b: cm_per_s {init: 1.99508400000000011e-07};
    var z_Ca: dimensionless {pub: in};
    i_Ca_b = 1.0{dimensionless}*p_Ca_b/Cm*sqr(z_Ca)*V*sqr(F)/(R*T)*(gamma_Cai*Ca_i_Ca_i*exp(z_Ca*V*F/(R*T))-gamma_Cao*Ca_o)/(exp(z_Ca*V*F/(R*T))-1.0{dimensionless});
    i_Cl_b = g_Cl_b*(V-E_Cl);
    i_K_b = g_K_b*(V-E_K);
    i_Na_b = g_Na_b*(V-E_Na);
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp equilibrium_potentials as
    var Ca_i_Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#calcium_reversal_potential
    var E_Ca: mV;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#chloride_reversal_potential
    var E_Cl: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: mV {pub: out};
    var E_Ks: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: mV {pub: out};
    var F: C_per_mol {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var r_NaK: dimensionless {init: 0.01833};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_o/Ca_i_Ca_i);
    E_Cl = -R*T/F*ln(Cl_o/Cl_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+r_NaK*Na_o)/(K_i+r_NaK*Na_i));
    E_Na = R*T/F*ln(Na_o/Na_i);
  enddef;

  def comp i_Ca_L as
    var Ca_o: mM {pub: in};
    var Ca_r_Ca_r: mM {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var Driving_term_ghk: s_A_per_m3;
    var F: C_per_mol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var Open_Prob: dimensionless;
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var d: dimensionless {pub: in};
    var f: dimensionless {pub: in};
    var f2: dimensionless {pub: in};
    var f_Ca: dimensionless {pub: in};
    var f_Ca2: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_Ca_L: dimensionless {pub: out, init: 0.3392328};
    var gamma_Cai: dimensionless {pub: in};
    var gamma_Cao: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L: A_per_F {pub: out};
    var i_Ca_L_max: A_per_F {pub: out};
    var p_Ca: cm_per_s {init: 0.000243};
    var z_Ca: dimensionless {pub: in};
    Driving_term_ghk = sqr(z_Ca)*(V-15.0{mV})*sqr(F)/(R*T)*(gamma_Cai*Ca_r_Ca_r*exp(z_Ca*F*(V-15.0{mV})/(R*T))-gamma_Cao*Ca_o)/(exp(z_Ca*F*(V-15.0{mV})/(R*T))-1.0{dimensionless});
    Open_Prob = d*f*f2*f_Ca*f_Ca2;
    i_Ca_L = Open_Prob*i_Ca_L_max;
    i_Ca_L_max = p_Ca/Cm*Driving_term_ghk;
  enddef;

  def comp i_Ca_L_d_gate as
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {pub: out, init: 2.32222386514736302e-06};
    var d_infinity: dimensionless;
    var tau_d: ms;
    var time: ms {pub: in};
    ode(d, time) = (d_infinity-d)/tau_d;
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-4.0{mV})/6.74{mV}));
    tau_d = 0.59{ms}+0.8{ms}*exp(0.052{per_mV}*(V+13.0{mV}))/(1.0{dimensionless}+exp(0.132{per_mV}*(V+13.0{mV})));
  enddef;

  def comp i_Ca_L_f2_gate as
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate
    var f2: dimensionless {pub: out, init: 8.17343543667465755e-01};
    var f2_infinity: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate_tau
    var tau_f2: ms;
    var time: ms {pub: in};
    ode(f2, time) = (f2_infinity-f2)/tau_f2;
    f2_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+18.0{mV})/10.0{mV}));
    tau_f2 = 38.0{ms}+0.07{s7_A2_per_g2_per_m4_times_1e_minus_3}*sqr(V-18.6{mV});
  enddef;

  def comp i_Ca_L_f_Ca2_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa2_gate
    var f_Ca2: dimensionless {pub: out, init: 8.68690796671854004e-01};
    var f_Ca2_infinity: dimensionless;
    var i_Ca_L_i_Ca_L: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa2_gate_tau
    var tau_f_Ca2: ms;
    var time: ms {pub: in};
    ode(f_Ca2, time) = (f_Ca2_infinity-f_Ca2)/tau_f_Ca2;
    f_Ca2_infinity = 1.0{dimensionless}/(1.0{dimensionless}-i_Ca_L_i_Ca_L/0.01{A_per_F});
    tau_f_Ca2 = 125.0{ms}+300.0{ms}/(1.0{dimensionless}+exp((-i_Ca_L_i_Ca_L-0.175{A_per_F})/0.04{A_per_F}));
  enddef;

  def comp i_Ca_L_f_Ca_gate as
    var Ca_MK_act_Ca_MK_act: dimensionless {pub: in};
    var Ca_r_Ca_r: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var f_Ca: dimensionless {pub: out, init: 9.61055128552965821e-01};
    var f_Ca_infinity: dimensionless;
    var i_Ca_L_i_Ca_L: A_per_F {pub: in};
    var km_Ca_MK: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate_tau
    var tau_f_Ca: ms;
    var time: ms {pub: in};
    ode(f_Ca, time) = (f_Ca_infinity-f_Ca)/tau_f_Ca;
    f_Ca_infinity = 0.3{dimensionless}/(1.0{dimensionless}-i_Ca_L_i_Ca_L/0.05{A_per_F})+0.55{dimensionless}/(1.0{dimensionless}+Ca_r_Ca_r/0.003{mM})+0.15{dimensionless};
    tau_f_Ca = 0.5{ms}+10.0{ms}*1.0{mM}*Ca_MK_act_Ca_MK_act/(1.0{mM}*Ca_MK_act_Ca_MK_act+km_Ca_MK)+1.0{ms}/(1.0{dimensionless}+Ca_r_Ca_r/0.003{mM});
  enddef;

  def comp i_Ca_L_f_gate as
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {pub: out, init: 9.98560732946235818e-01};
    var f_infinity: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: ms;
    var time: ms {pub: in};
    ode(f, time) = (f_infinity-f)/tau_f;
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+18.0{mV})/10.0{mV}));
    tau_f = 4.0{ms}+0.005{s7_A2_per_g2_per_m4_times_1e_minus_3}*sqr(V-2.5{mV});
  enddef;

  def comp i_Ca_T as
    var V: mV {pub: in};
    var b: dimensionless {pub: in};
    var g: dimensionless {pub: in};
    var g_Ca_T: mS_per_uF {init: 0.13};
    var i_Ca_T: A_per_F {pub: out};
    i_Ca_T = g_Ca_T*b*g*(V-50.0{mV});
  enddef;

  def comp i_Ca_T_b_gate as
    var V: mV {pub: in};
    var alpha_b: mS_per_uF;
    var b: dimensionless {pub: out, init: 2.56393763098443806e-04};
    var b_infinity: dimensionless;
    var beta_b: mS_per_uF;
    var tau_b: ms;
    var time: ms {pub: in};
    alpha_b = 1.068{mS_per_uF}*exp((V+16.3{mV})/30.0{mV});
    ode(b, time) = (b_infinity-b)/tau_b;
    b_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+33.0{mV})/6.1{mV}));
    beta_b = 1.068{mS_per_uF}*exp(-(V+16.3{mV})/30.0{mV});
    tau_b = 1.0{dimensionless}/(alpha_b+beta_b);
  enddef;

  def comp i_Ca_T_g_gate as
    var V: mV {pub: in};
    var alpha_g: mS_per_uF;
    var beta_g: mS_per_uF;
    var g: dimensionless {pub: out, init: 9.72043260184833113e-01};
    var g_infinity: dimensionless;
    var tau_g: ms;
    var time: ms {pub: in};
    alpha_g = 0.015{mS_per_uF}*exp(-(V+71.7{mV})/83.3{mV});
    beta_g = 0.015{mS_per_uF}*exp((V+71.7{mV})/15.4{mV});
    ode(g, time) = (g_infinity-g)/tau_g;
    g_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+60.0{mV})/6.6{mV}));
    tau_g = 1.0{dimensionless}/(alpha_g+beta_g);
  enddef;

  def comp i_Ca_p as
    var Ca_i_Ca_i: mM {pub: in};
    var i_Ca_p: A_per_F {pub: out};
    var i_Ca_p_max: A_per_F {init: 0.0575};
    var km_Ca_p: mM {init: 0.0005};
    i_Ca_p = i_Ca_p_max*Ca_i_Ca_i/(km_Ca_p+Ca_i_Ca_i);
  enddef;

  def comp i_K1 as
    var E_K: mV {pub: in};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var g_K1: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1_max: mS_per_uF {init: 0.25};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: A_per_F {pub: out};
    var xK1: dimensionless {pub: in};
    g_K1 = g_K1_max*sqrt(K_o/5.4{mM});
    i_K1 = (g_K1*xK1+0.004{mS_per_uF})*(V-E_K);
  enddef;

  def comp i_K1_xK1_gate as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var alpha_xK1: dimensionless;
    var beta_xK1: dimensionless;
    var xK1: dimensionless {pub: out};
    alpha_xK1 = 1.02{dimensionless}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V-(E_K+59.215{mV}))));
    beta_xK1 = (0.49124{dimensionless}*exp(0.08032{per_mV}*(V+5.476{mV}-E_K))+exp(0.06175{per_mV}*(V-(594.31{mV}+E_K))))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V+4.753{mV}-E_K)));
    xK1 = alpha_xK1/(alpha_xK1+beta_xK1);
  enddef;

  def comp i_K_p as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var g_K_p: mS_per_uF {init: 0.00276};
    var i_K_p: A_per_F {pub: out};
    var kp: dimensionless;
    i_K_p = g_K_p*kp*(V-E_K);
    kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
  enddef;

  def comp i_Kr as
    var E_K: mV {pub: in};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance_scaling_factor
    var g_Kr_max: mS_per_uF {init: 4.00084880000000018e-02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: A_per_F {pub: out};
    var rr_infinity: dimensionless;
    var xr: dimensionless {pub: in};
    g_Kr = g_Kr_max*sqrt(K_o/5.4{mM});
    i_Kr = g_Kr*xr*rr_infinity*(V-E_K);
    rr_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-5.4{mV})/20.4{mV}));
  enddef;

  def comp i_Kr_xr_gate as
    var V: mV {pub: in};
    var tau_xr: ms;
    var time: ms {pub: in};
    var xr: dimensionless {pub: out, init: 7.08493940822291085e-02};
    var xr_infinity: dimensionless;
    tau_xr = 900.0{ms}/(1.0{dimensionless}+exp(V/5.0{mV}))+100.0{ms};
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
    xr_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+0.085{mV})/12.25{mV}));
  enddef;

  def comp i_Ks as
    var Ca_i_Ca_i: mM {pub: in};
    var E_Ks: mV {pub: in};
    var V: mV {pub: in};
    var g_Ks: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks_max: mS_per_uF {init: 5.25813290000000030e-02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: A_per_F {pub: out};
    var xs1: dimensionless {pub: in};
    var xs2: dimensionless {pub: in};
    g_Ks = g_Ks_max*(1.0{dimensionless}+0.6{dimensionless}/(1.0{dimensionless}+pow(3.8e-05{mM}/Ca_i_Ca_i, 1.4{dimensionless})));
    i_Ks = g_Ks*xs1*xs2*(V-E_Ks);
  enddef;

  def comp i_Ks_xs1_gate as
    var V: mV {pub: in};
    var tau_xs1: ms;
    var time: ms {pub: in};
    var xs1: dimensionless {pub: out, init: 1.17376544330431254e-03};
    var xs1_infinity: dimensionless;
    tau_xs1 = 1.0{ms}/(7.61e-05{per_mV}*(V+44.6{mV})/(1.0{dimensionless}-exp(-9.97{per_mV}*(V+44.6{mV})))+0.00036{per_mV}*(V-0.55{mV})/(exp(0.128{per_mV}*(V-0.55{mV}))-1.0{dimensionless}));
    ode(xs1, time) = (xs1_infinity-xs1)/tau_xs1;
    xs1_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-9.0{mV})/13.7{mV}));
  enddef;

  def comp i_Ks_xs2_gate as
    var V: mV {pub: in};
    var tau_xs2: ms;
    var time: ms {pub: in};
    var xs2: dimensionless {pub: out, init: 1.17944286747009310e-03};
    var xs2_infinity: dimensionless;
    tau_xs2 = 2.0{dimensionless}*1.0{ms}/(7.61e-05{per_mV}*(V+44.6{mV})/(1.0{dimensionless}-exp(-9.97{per_mV}*(V+44.6{mV})))+0.00036{per_mV}*(V-0.55{mV})/(exp(0.128{per_mV}*(V-0.55{mV}))-1.0{dimensionless}));
    ode(xs2, time) = (xs2_infinity-xs2)/tau_xs2;
    xs2_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-9.0{mV})/13.7{mV}));
  enddef;

  def comp i_Na as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: mS_per_uF {init: 8.0};
    var h: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: A_per_F {pub: out};
    var j: dimensionless {pub: in};
    var m: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {pub: out, init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: mV {pub: out, init: 0.0};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*(0.8{dimensionless}*h+0.2{dimensionless}*j)*(V-E_Na);
  enddef;

  def comp i_NaCa as
    var Ca_i_Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var F: C_per_mol {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var X_NaCa: dimensionless {init: 0.4};
    var dNaCa_1: mol4_per_m12;
    var dNaCa_2: mol4_per_m12;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var i_NaCa_max: A_per_F {init: 4.5};
    var k_sat: dimensionless {init: 0.27};
    var km_Ca_act: mM {init: 0.000125};
    var km_Ca_i: mM {init: 0.0036};
    var km_Ca_o: mM {init: 1.3};
    var km_Na_i_1: mM {init: 12.3};
    var km_Na_o: mM {init: 87.5};
    dNaCa_1 = km_Ca_o*pow(Na_i, 3.0{dimensionless})+1.5{dimensionless}*pow(km_Na_o, 3.0{dimensionless})*Ca_i_Ca_i+pow(km_Na_i_1, 3.0{dimensionless})*Ca_o*(1.0{dimensionless}+1.5{dimensionless}*Ca_i_Ca_i/km_Ca_i);
    dNaCa_2 = km_Ca_i*pow(Na_o, 3.0{dimensionless})*(1.0{dimensionless}+Na_i/km_Na_i_1)+pow(Na_i, 3.0{dimensionless})*Ca_o+1.5{dimensionless}*pow(Na_o, 3.0{dimensionless})*Ca_i_Ca_i;
    i_NaCa = (X_NaCa*i_NaCa_max*pow(Na_i, 3.0{dimensionless})*Ca_o*exp(0.35{dimensionless}*F*V/(R*T))-1.5{A_per_F}*pow(Na_o, 3.0{dimensionless})*Ca_i_Ca_i*exp(-0.65{dimensionless}*F*V/(R*T)))/((1.0{dimensionless}+sqr(km_Ca_act/(1.5{dimensionless}*Ca_i_Ca_i)))*(1.0{dimensionless}+k_sat*exp(-0.65{dimensionless}*V*F/(R*T)))*(dNaCa_1+dNaCa_2));
  enddef;

  def comp i_NaK as
    var F: C_per_mol {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var f_NaK: dimensionless;
    var g_NaK: A_per_F {init: 0.61875};
    var i_NaK: A_per_F {pub: out};
    var km_K_o: mM {init: 1.5};
    var km_Na_i_2: mM {init: 10.0};
    var sigma: dimensionless;
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*F*V/(R*T))+0.0365{dimensionless}*sigma*exp(-F*V/(R*T)));
    i_NaK = g_NaK*f_NaK*1.0{dimensionless}/(1.0{dimensionless}+sqr(km_Na_i_2/Na_i))*K_o/(K_o+km_K_o);
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Na_o/67.3{mM})-1.0{dimensionless});
  enddef;

  def comp i_Na_L as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current_conductance
    var g_Na_L: mS_per_uF {init: 0.037375};
    var h_L: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current
    var i_Na_L: A_per_F {pub: out};
    var m_L: dimensionless {pub: in};
    i_Na_L = g_Na_L*pow(m_L, 3.0{dimensionless})*h_L*(V-E_Na);
  enddef;

  def comp i_Na_L_h_L_gate as
    var V: mV {pub: in};
    var h_L: dimensionless {pub: out, init: 8.94696837265920308e-01};
    var h_L_infinity: dimensionless;
    var tau_h_L: ms;
    var time: ms {pub: in};
    ode(h_L, time) = (h_L_infinity-h_L)/tau_h_L;
    h_L_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+69.0{mV})/6.1{mV}));
    tau_h_L = 175.0{ms}+125.0{ms}/(1.0{dimensionless}+exp(-(V+25.0{mV})/6.0{mV}));
  enddef;

  def comp i_Na_L_m_L_gate as
    var V: mV {pub: in};
    var alpha_m_L: mS_per_uF;
    var beta_m_L: mS_per_uF;
    var m_L: dimensionless {pub: out, init: 2.00339043223450412e-03};
    var m_L_infinity: dimensionless;
    var tau_m_L: ms;
    var time: ms {pub: in};
    alpha_m_L = 0.32{per_mV_per_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    beta_m_L = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    ode(m_L, time) = (m_L_infinity-m_L)/tau_m_L;
    m_L_infinity = alpha_m_L/(alpha_m_L+beta_m_L);
    tau_m_L = 1.0{dimensionless}/(alpha_m_L+beta_m_L);
  enddef;

  def comp i_Na_h_gate as
    var V: mV {pub: in};
    var alpha_h: mS_per_uF;
    var beta_h: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {pub: out, init: 9.78639093330856746e-01};
    var h_infinity: dimensionless;
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var shift_INa_inact: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: ms;
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40.0{mV}:
        0.135{mS_per_uF}*exp((V+80.0{mV}-shift_INa_inact)/(-6.8{mV}));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    beta_h = sel
      case V < -40.0{mV}:
        3.56{mS_per_uF}*exp(0.079{per_mV}*(V-shift_INa_inact))+310000.0{mS_per_uF}*exp(0.35{per_mV}*(V-shift_INa_inact));
      otherwise:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp((V+10.66{mV}-shift_INa_inact)/(-11.1{mV}))));
    endsel;
    ode(h, time) = (h_infinity-h)/tau_h;
    h_infinity = alpha_h*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    tau_h = 1.0{dimensionless}/(alpha_h+beta_h);
  enddef;

  def comp i_Na_j_gate as
    var V: mV {pub: in};
    var alpha_j: mS_per_uF;
    var beta_j: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {pub: out, init: 9.86644725816758911e-02};
    var j_infinity: dimensionless;
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var shift_INa_inact: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: ms;
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40.0{mV}:
        (-127140.0{per_mV_per_ms}*exp(0.2444{per_mV}*(V-shift_INa_inact))-3.474e-05{per_mV_per_ms}*exp(-0.04391{per_mV}*(V-shift_INa_inact)))*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}-shift_INa_inact)));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    beta_j = sel
      case V < -40.0{mV}:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}-shift_INa_inact)));
      otherwise:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV}-shift_INa_inact)));
    endsel;
    ode(j, time) = (j_infinity-j)/tau_j;
    j_infinity = alpha_j*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(alpha_j+beta_j)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    tau_j = 1.0{dimensionless}/(alpha_j+beta_j);
  enddef;

  def comp i_Na_m_gate as
    var V: mV {pub: in};
    var alpha_m: mS_per_uF;
    var beta_m: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {pub: out, init: 2.00339043223450412e-03};
    var m_infinity: dimensionless;
    var tau_m: ms;
    var time: ms {pub: in};
    alpha_m = 0.32{per_mV_per_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    beta_m = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    ode(m, time) = (m_infinity-m)/tau_m;
    m_infinity = alpha_m/(alpha_m+beta_m);
    tau_m = 1.0{dimensionless}/(alpha_m+beta_m);
  enddef;

  def comp i_to_1 as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to_1: mS_per_uF {init: 1.41359440000000003e-01};
    var i: dimensionless {pub: in};
    var i2: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to_1: A_per_F {pub: out};
    var i_to_1_a_gate_a: dimensionless {pub: in};
    i_to_1 = g_to_1*i_to_1_a_gate_a*(0.8{dimensionless}*i+0.2{dimensionless}*i2)*(V-E_K);
  enddef;

  def comp i_to_1_a_gate as
    var V: mV {pub: in};
    var a: dimensionless {pub: out, init: 4.23872942934238879e-04};
    var a_infinity: dimensionless;
    var alpha_a: mS_per_uF;
    var beta_a: mS_per_uF;
    var tau_a: ms;
    var time: ms {pub: in};
    ode(a, time) = (a_infinity-a)/tau_a;
    a_infinity = alpha_a/(alpha_a+beta_a);
    alpha_a = 25.0{mS_per_uF}*exp((V-76.0{mV})/20.0{mV})/(1.0{dimensionless}+exp((V-76.0{mV})/20.0{mV}));
    beta_a = 25.0{mS_per_uF}*exp(-(V+54.0{mV})/20.0{mV})/(1.0{dimensionless}+exp(-(V+54.0{mV})/20.0{mV}));
    tau_a = 1.0{dimensionless}/(alpha_a+beta_a);
  enddef;

  def comp i_to_1_i2_gate as
    var V: mV {pub: in};
    var alpha_i2: mS_per_uF;
    var beta_i2: mS_per_uF;
    var i2: dimensionless {pub: out, init: 9.77736843968176395e-01};
    var i2_infinity: dimensionless;
    var tau_i2: ms;
    var time: ms {pub: in};
    alpha_i2 = 0.00442{mS_per_uF}/(1.0{dimensionless}+exp((V+26.0{mV})/15.0{mV}));
    beta_i2 = 0.05{mS_per_uF}*exp((V-10.0{mV})/15.0{mV})/(1.0{dimensionless}+exp((V-10.0{mV})/15.0{mV}));
    ode(i2, time) = (i2_infinity-i2)/tau_i2;
    i2_infinity = alpha_i2/(alpha_i2+beta_i2);
    tau_i2 = 21.5{ms}+30.0{ms}/(1.0{dimensionless}+exp((V-25.0{mV})/10.0{mV}));
  enddef;

  def comp i_to_1_i_gate as
    var V: mV {pub: in};
    var alpha_i: mS_per_uF;
    var beta_i: mS_per_uF;
    var i: dimensionless {pub: out, init: 9.99093580245949631e-01};
    var i_infinity: dimensionless;
    var tau_i: ms;
    var time: ms {pub: in};
    alpha_i = 0.03{mS_per_uF}/(1.0{dimensionless}+exp((V+25.0{mV})/15.0{mV}));
    beta_i = 0.1{mS_per_uF}*exp((V-40.0{mV})/15.0{mV})/(1.0{dimensionless}+exp((V-40.0{mV})/15.0{mV}));
    ode(i, time) = (i_infinity-i)/tau_i;
    i_infinity = alpha_i/(alpha_i+beta_i);
    tau_i = 6.0{ms}+5.0{ms}/(1.0{dimensionless}+exp((V-16.5{mV})/10.0{mV}));
  enddef;

  def comp i_to_2 as
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mol {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var i_to_2: A_per_F {pub: out};
    var i_to_2_a_gate_a: dimensionless {pub: in};
    var i_to_2_max: A_per_F;
    var p_Cl: cm_per_s {init: 4e-07};
    var z_Cl: dimensionless;
    i_to_2 = 20.0{dimensionless}*i_to_2_max*i_to_2_a_gate_a;
    i_to_2_max = 1.0{dimensionless}*p_Cl/Cm*sqr(z_Cl)*V*sqr(F)/(R*T)*(Cl_i-Cl_o*exp(-z_Cl*V*F/(R*T)))/(1.0{dimensionless}-exp(-z_Cl*V*F/(R*T)));
    z_Cl = -1.0{dimensionless};
  enddef;

  def comp i_to_2_a_gate as
    var Ca_r_Ca_r: mM {pub: in};
    var a: dimensionless {pub: out, init: 1.49094375250008113e-03};
    var a_infinity: dimensionless;
    var km_to_2: mM {init: 0.1502};
    var tau_a: ms {init: 1.0};
    var time: ms {pub: in};
    ode(a, time) = (a_infinity-a)/tau_a;
    a_infinity = 1.0{dimensionless}/(1.0{dimensionless}+km_to_2/Ca_r_Ca_r);
  enddef;

  def comp intracellular_ion_concentrations as
    var CT_K_Cl_CT_K_Cl: mM_per_ms {pub: in};
    var CT_Na_Cl_CT_Na_Cl: mM_per_ms {pub: in};
    var Cl_i: mM {pub: out, init: 1.89046824701404077e+01};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {pub: out, init: 1.41967080174605712e+02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {pub: out, init: 9.92715555293273333e+00};
    var Vol_myo: uL {pub: in};
    var a_cap: cm2 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1.0};
    var i_Cl_b: A_per_F {pub: in};
    var i_K1_i_K1: A_per_F {pub: in};
    var i_K_b: A_per_F {pub: in};
    var i_K_p_i_K_p: A_per_F {pub: in};
    var i_Kr_i_Kr: A_per_F {pub: in};
    var i_Ks_i_Ks: A_per_F {pub: in};
    var i_NaCa_i_NaCa: A_per_F {pub: in};
    var i_NaK_i_NaK: A_per_F {pub: in};
    var i_Na_L_i_Na_L: A_per_F {pub: in};
    var i_Na_b: A_per_F {pub: in};
    var i_Na_i_Na: A_per_F {pub: in};
    var i_to_1_i_to_1: A_per_F {pub: in};
    var i_to_2_i_to_2: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(Cl_i, time) = conc_clamp*(-Cm*(i_to_2_i_to_2+i_Cl_b)*a_cap/(Vol_myo*F)+CT_Na_Cl_CT_Na_Cl+CT_K_Cl_CT_K_Cl);
    ode(K_i, time) = conc_clamp*(-Cm*(i_to_1_i_to_1+i_K1_i_K1+i_Kr_i_Kr+i_Ks_i_Ks+i_K_p_i_K_p+i_K_b-2.0{dimensionless}*i_NaK_i_NaK)*a_cap/(Vol_myo*F)+CT_K_Cl_CT_K_Cl);
    ode(Na_i, time) = conc_clamp*(-Cm*(i_Na_i_Na+i_Na_L_i_Na_L+i_Na_b+3.0{dimensionless}*i_NaK_i_NaK+3.0{dimensionless}*i_NaCa_i_NaCa)*a_cap/(Vol_myo*F)+CT_Na_Cl_CT_Na_Cl);
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -8.34381284628680788e+01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: ms {init: 1.0};
    var i_Ca_L_i_Ca_L: A_per_F {pub: in};
    var i_Ca_T_i_Ca_T: A_per_F {pub: in};
    var i_Ca_b: A_per_F {pub: in};
    var i_Ca_p_i_Ca_p: A_per_F {pub: in};
    var i_Cl_b: A_per_F {pub: in};
    var i_K1_i_K1: A_per_F {pub: in};
    var i_K_b: A_per_F {pub: in};
    var i_K_p_i_K_p: A_per_F {pub: in};
    var i_Kr_i_Kr: A_per_F {pub: in};
    var i_Ks_i_Ks: A_per_F {pub: in};
    var i_NaCa_i_NaCa: A_per_F {pub: in};
    var i_NaK_i_NaK: A_per_F {pub: in};
    var i_Na_L_i_Na_L: A_per_F {pub: in};
    var i_Na_b: A_per_F {pub: in};
    var i_Na_i_Na: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_stim: A_per_F;
    var i_to_1_i_to_1: A_per_F {pub: in};
    var i_to_2_i_to_2: A_per_F {pub: in};
    var i_tot: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: ms {init: 100.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: ms {init: 800.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: A_per_F;
    var stim_end: ms {init: 100000.0};
    var time: ms {pub: in};
    ode(V, time) = -(i_tot+i_stim);
    i_stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*stim_amplitude;
    i_tot = i_Na_i_Na+i_Na_L_i_Na_L+i_Ca_L_i_Ca_L+i_Ca_T_i_Ca_T+i_to_1_i_to_1+i_to_2_i_to_2+i_Kr_i_Kr+i_Ks_i_Ks+i_K1_i_K1+i_NaCa_i_NaCa+i_NaK_i_NaK+i_Na_b+i_K_b+i_Ca_b+i_Cl_b+i_Ca_p_i_Ca_p+i_K_p_i_K_p;
    stim_amplitude = -80.0{A_per_F};
  enddef;

  def comp model_parameters as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {pub: out, init: 1.8};
    var Cl_o: mM {pub: out, init: 100.0};
    var Cm: uF_per_cm2 {pub: out, init: 1.0};
    var F: C_per_mol {pub: out, init: 96485.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {pub: out, init: 5.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {pub: out, init: 140.0};
    var R: mJ_per_mol_per_K {pub: out, init: 8314.0};
    var T: kelvin {pub: out, init: 310.0};
    var Vol_cell: uL {init: 0.3454};
    var Vol_jsr: uL {pub: out};
    var Vol_myo: uL {pub: out};
    var Vol_nsr: uL {pub: out};
    var Vol_ss: uL {pub: out};
    var a_cap: cm2 {pub: out};
    var a_geo: cm2;
    var gamma_Cai: dimensionless {pub: out, init: 1.0};
    var gamma_Cao: dimensionless {pub: out, init: 0.341};
    var length: cm {init: 0.01};
    var radius: cm {init: 0.0011};
    var rcg: dimensionless {init: 2.0};
    var z_Ca: dimensionless {pub: out, init: 2.0};
    Vol_jsr = Vol_cell*0.0048{dimensionless};
    Vol_myo = Vol_cell*0.68{dimensionless};
    Vol_nsr = Vol_cell*0.0552{dimensionless};
    Vol_ss = Vol_cell*0.02{dimensionless};
    a_cap = rcg*a_geo;
    a_geo = 2.0{dimensionless}*3.14{dimensionless}*sqr(radius)+2.0{dimensionless}*3.14{dimensionless}*radius*length;
  enddef;

  def comp q_leak as
    var Ca_NSR_Ca_NSR: mM {pub: in};
    var NSR_max: mM {init: 15.0};
    var q_leak: mM_per_ms {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var q_leak_max: mM_per_ms {init: 0.004375};
    q_leak = q_leak_max*Ca_NSR_Ca_NSR/NSR_max;
  enddef;

  def comp q_rel as
    var Ca_JSR_Ca_JSR: mM {pub: in};
    var Ca_r_Ca_r: mM {pub: in};
    var g_Ca_L: dimensionless {pub: in};
    var g_rel: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var g_rel_max: mS_per_uF {init: 3000.0};
    var i_Ca_L_max: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var q_rel: mM_per_ms {pub: out};
    var ri: dimensionless {pub: in};
    var ro: dimensionless {pub: in};
    var vg: dimensionless;
    g_rel = g_rel_max*vg;
    q_rel = g_rel*ro*ri*(Ca_JSR_Ca_JSR-Ca_r_Ca_r);
    vg = 1.0{dimensionless}/(1.0{dimensionless}+exp((g_Ca_L*i_Ca_L_max+13.0{A_per_F})/5.0{A_per_F}));
  enddef;

  def comp q_rel_ri_gate as
    var Ca_MK_act_Ca_MK_act: dimensionless {pub: in};
    var Ca_fac: mM;
    var Ca_r_Ca_r: mM {pub: in};
    var i_Ca_L_i_Ca_L: A_per_F {pub: in};
    var km_Ca_MK: mM {pub: in};
    var ri: dimensionless {pub: out, init: 7.80287006656790405e-01};
    var ri_infinity: dimensionless;
    var tau_Ca_MK: ms;
    var tau_Ca_MK_max: ms {init: 10.0};
    var tau_ri: ms;
    var time: ms {pub: in};
    Ca_fac = 1.0{mM}/(1.0{dimensionless}+exp((i_Ca_L_i_Ca_L+0.05{A_per_F})/0.015{A_per_F}));
    ode(ri, time) = (ri_infinity-ri)/tau_ri;
    ri_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((Ca_r_Ca_r-0.0004{mM}+0.002{dimensionless}*Ca_fac)/2.5e-05{mM}));
    tau_Ca_MK = tau_Ca_MK_max*1.0{mM}*Ca_MK_act_Ca_MK_act/(km_Ca_MK+1.0{mM}*Ca_MK_act_Ca_MK_act);
    tau_ri = (350.0{ms}-tau_Ca_MK)/(1.0{dimensionless}+exp((Ca_r_Ca_r-0.003{mM}+0.003{dimensionless}*Ca_fac)/0.0002{mM}))+3.0{ms}+tau_Ca_MK;
  enddef;

  def comp q_rel_ro_gate as
    var Ca_JSR_Ca_JSR: mM {pub: in};
    var Ca_r_Ca_r: mM {pub: in};
    var i_Ca_L_i_Ca_L: A_per_F {pub: in};
    var ro: dimensionless {pub: out, init: 1.27857347606747630e-09};
    var ro_infinity: dimensionless;
    var ro_infinity_JSR: dimensionless;
    var tau_ro: ms {init: 3.0};
    var time: ms {pub: in};
    ode(ro, time) = (ro_infinity-ro)/tau_ro;
    ro_infinity = ro_infinity_JSR*sqr(i_Ca_L_i_Ca_L)/(sqr(i_Ca_L_i_Ca_L)+1.0{g2_m4_per_s8_per_A2_times_1e6});
    ro_infinity_JSR = pow(Ca_JSR_Ca_JSR, 1.9{dimensionless})/(pow(Ca_JSR_Ca_JSR, 1.9{dimensionless})+pow(49.28{mM}*Ca_r_Ca_r/(Ca_r_Ca_r+0.0028{mM}), 1.9{dimensionless}));
  enddef;

  def comp q_tr as
    var Ca_JSR_Ca_JSR: mM {pub: in};
    var Ca_NSR_Ca_NSR: mM {pub: in};
    var q_tr: mM_per_ms {pub: out};
    var tau_tr: ms {init: 120.0};
    q_tr = (Ca_NSR_Ca_NSR-Ca_JSR_Ca_JSR)/tau_tr;
  enddef;

  def comp q_up as
    var Ca_MK_act_Ca_MK_act: dimensionless {pub: in};
    var Ca_i_Ca_i: mM {pub: in};
    var X_q_up: dimensionless {init: 0.5};
    var dkm_plb: mM;
    var dkm_plb_max: mM {init: 0.00017};
    var dq_up_Ca_MK: dimensionless;
    var dq_up_Ca_MK_max: dimensionless {init: 0.75};
    var km_Ca_MK: mM {pub: in};
    var km_up: mM {init: 0.00092};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var q_up: mM_per_ms {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var q_up_max: mM_per_ms {init: 0.004375};
    dkm_plb = dkm_plb_max*Ca_MK_act_Ca_MK_act*1.0{mM}/(km_Ca_MK+Ca_MK_act_Ca_MK_act*1.0{mM});
    dq_up_Ca_MK = dq_up_Ca_MK_max*Ca_MK_act_Ca_MK_act*1.0{mM}/(km_Ca_MK+Ca_MK_act_Ca_MK_act*1.0{mM});
    q_up = X_q_up*(dq_up_Ca_MK+1.0{dimensionless})*q_up_max*Ca_i_Ca_i/(Ca_i_Ca_i+km_up-dkm_plb);
  enddef;
  def map between CT_K_Cl and equilibrium_potentials for
    vars E_Cl and E_Cl;
    vars E_K and E_K;
  enddef;
  def map between CT_K_Cl and intracellular_ion_concentrations for
    vars CT_K_Cl and CT_K_Cl_CT_K_Cl;
  enddef;
  def map between CT_Na_Cl and equilibrium_potentials for
    vars E_Cl and E_Cl;
    vars E_Na and E_Na;
  enddef;
  def map between CT_Na_Cl and intracellular_ion_concentrations for
    vars CT_Na_Cl and CT_Na_Cl_CT_Na_Cl;
  enddef;
  def map between Ca_JSR and environment for
    vars time and time;
  enddef;
  def map between Ca_JSR and q_rel for
    vars Ca_JSR and Ca_JSR_Ca_JSR;
    vars q_rel_q_rel and q_rel;
  enddef;
  def map between Ca_JSR and q_rel_ro_gate for
    vars Ca_JSR and Ca_JSR_Ca_JSR;
  enddef;
  def map between Ca_JSR and q_tr for
    vars Ca_JSR and Ca_JSR_Ca_JSR;
    vars q_tr_q_tr and q_tr;
  enddef;
  def map between Ca_MK_act and Ca_r for
    vars Ca_r_Ca_r and Ca_r;
  enddef;
  def map between Ca_MK_act and environment for
    vars time and time;
  enddef;
  def map between Ca_MK_act and i_Ca_L_f_Ca_gate for
    vars Ca_MK_act and Ca_MK_act_Ca_MK_act;
    vars km_Ca_MK and km_Ca_MK;
  enddef;
  def map between Ca_MK_act and q_rel_ri_gate for
    vars Ca_MK_act and Ca_MK_act_Ca_MK_act;
    vars km_Ca_MK and km_Ca_MK;
  enddef;
  def map between Ca_MK_act and q_up for
    vars Ca_MK_act and Ca_MK_act_Ca_MK_act;
    vars km_Ca_MK and km_Ca_MK;
  enddef;
  def map between Ca_NSR and environment for
    vars time and time;
  enddef;
  def map between Ca_NSR and model_parameters for
    vars Vol_jsr and Vol_jsr;
    vars Vol_nsr and Vol_nsr;
  enddef;
  def map between Ca_NSR and q_leak for
    vars Ca_NSR and Ca_NSR_Ca_NSR;
    vars q_leak_q_leak and q_leak;
  enddef;
  def map between Ca_NSR and q_tr for
    vars Ca_NSR and Ca_NSR_Ca_NSR;
    vars q_tr_q_tr and q_tr;
  enddef;
  def map between Ca_NSR and q_up for
    vars q_up_q_up and q_up;
  enddef;
  def map between Ca_i and Ca_r for
    vars Ca_i and Ca_i_Ca_i;
    vars q_diff and q_diff;
  enddef;
  def map between Ca_i and background_currents for
    vars Ca_i and Ca_i_Ca_i;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between Ca_i and environment for
    vars time and time;
  enddef;
  def map between Ca_i and equilibrium_potentials for
    vars Ca_i and Ca_i_Ca_i;
  enddef;
  def map between Ca_i and i_Ca_p for
    vars Ca_i and Ca_i_Ca_i;
    vars i_Ca_p_i_Ca_p and i_Ca_p;
  enddef;
  def map between Ca_i and i_Ks for
    vars Ca_i and Ca_i_Ca_i;
  enddef;
  def map between Ca_i and i_NaCa for
    vars Ca_i and Ca_i_Ca_i;
    vars i_NaCa_i_NaCa and i_NaCa;
  enddef;
  def map between Ca_i and model_parameters for
    vars Cm and Cm;
    vars F and F;
    vars Vol_myo and Vol_myo;
    vars Vol_nsr and Vol_nsr;
    vars Vol_ss and Vol_ss;
    vars a_cap and a_cap;
  enddef;
  def map between Ca_i and q_leak for
    vars q_leak_q_leak and q_leak;
  enddef;
  def map between Ca_i and q_up for
    vars Ca_i and Ca_i_Ca_i;
    vars q_up_q_up and q_up;
  enddef;
  def map between Ca_r and environment for
    vars time and time;
  enddef;
  def map between Ca_r and i_Ca_L for
    vars Ca_r and Ca_r_Ca_r;
    vars i_Ca_L_i_Ca_L and i_Ca_L;
  enddef;
  def map between Ca_r and i_Ca_L_f_Ca_gate for
    vars Ca_r and Ca_r_Ca_r;
  enddef;
  def map between Ca_r and i_to_2_a_gate for
    vars Ca_r and Ca_r_Ca_r;
  enddef;
  def map between Ca_r and model_parameters for
    vars Cm and Cm;
    vars F and F;
    vars Vol_jsr and Vol_jsr;
    vars Vol_ss and Vol_ss;
    vars a_cap and a_cap;
    vars z_Ca and z_Ca;
  enddef;
  def map between Ca_r and q_rel for
    vars Ca_r and Ca_r_Ca_r;
    vars q_rel_q_rel and q_rel;
  enddef;
  def map between Ca_r and q_rel_ri_gate for
    vars Ca_r and Ca_r_Ca_r;
  enddef;
  def map between Ca_r and q_rel_ro_gate for
    vars Ca_r and Ca_r_Ca_r;
  enddef;
  def map between background_currents and equilibrium_potentials for
    vars E_Cl and E_Cl;
    vars E_K and E_K;
    vars E_Na and E_Na;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars i_Cl_b and i_Cl_b;
    vars i_K_b and i_K_b;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between background_currents and membrane for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars i_Cl_b and i_Cl_b;
    vars i_K_b and i_K_b;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between background_currents and model_parameters for
    vars Ca_o and Ca_o;
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
    vars gamma_Cai and gamma_Cai;
    vars gamma_Cao and gamma_Cao;
    vars z_Ca and z_Ca;
  enddef;
  def map between environment and i_Ca_L_d_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ca_L_f2_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ca_L_f_Ca2_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ca_L_f_Ca_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ca_L_f_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ca_T_b_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ca_T_g_gate for
    vars time and time;
  enddef;
  def map between environment and i_Kr_xr_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ks_xs1_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ks_xs2_gate for
    vars time and time;
  enddef;
  def map between environment and i_Na_L_h_L_gate for
    vars time and time;
  enddef;
  def map between environment and i_Na_L_m_L_gate for
    vars time and time;
  enddef;
  def map between environment and i_Na_h_gate for
    vars time and time;
  enddef;
  def map between environment and i_Na_j_gate for
    vars time and time;
  enddef;
  def map between environment and i_Na_m_gate for
    vars time and time;
  enddef;
  def map between environment and i_to_1_a_gate for
    vars time and time;
  enddef;
  def map between environment and i_to_1_i2_gate for
    vars time and time;
  enddef;
  def map between environment and i_to_1_i_gate for
    vars time and time;
  enddef;
  def map between environment and i_to_2_a_gate for
    vars time and time;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and q_rel_ri_gate for
    vars time and time;
  enddef;
  def map between environment and q_rel_ro_gate for
    vars time and time;
  enddef;
  def map between equilibrium_potentials and i_K1 for
    vars E_K and E_K;
  enddef;
  def map between equilibrium_potentials and i_K1_xK1_gate for
    vars E_K and E_K;
  enddef;
  def map between equilibrium_potentials and i_K_p for
    vars E_K and E_K;
  enddef;
  def map between equilibrium_potentials and i_Kr for
    vars E_K and E_K;
  enddef;
  def map between equilibrium_potentials and i_Ks for
    vars E_Ks and E_Ks;
  enddef;
  def map between equilibrium_potentials and i_Na for
    vars E_Na and E_Na;
  enddef;
  def map between equilibrium_potentials and i_Na_L for
    vars E_Na and E_Na;
  enddef;
  def map between equilibrium_potentials and i_to_1 for
    vars E_K and E_K;
  enddef;
  def map between equilibrium_potentials and intracellular_ion_concentrations for
    vars Cl_i and Cl_i;
    vars K_i and K_i;
    vars Na_i and Na_i;
  enddef;
  def map between equilibrium_potentials and model_parameters for
    vars Ca_o and Ca_o;
    vars Cl_o and Cl_o;
    vars F and F;
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_Ca_L and i_Ca_L_d_gate for
    vars d and d;
  enddef;
  def map between i_Ca_L and i_Ca_L_f2_gate for
    vars f2 and f2;
  enddef;
  def map between i_Ca_L and i_Ca_L_f_Ca2_gate for
    vars f_Ca2 and f_Ca2;
    vars i_Ca_L and i_Ca_L_i_Ca_L;
  enddef;
  def map between i_Ca_L and i_Ca_L_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars i_Ca_L and i_Ca_L_i_Ca_L;
  enddef;
  def map between i_Ca_L and i_Ca_L_f_gate for
    vars f and f;
  enddef;
  def map between i_Ca_L and membrane for
    vars V and V;
    vars i_Ca_L and i_Ca_L_i_Ca_L;
  enddef;
  def map between i_Ca_L and model_parameters for
    vars Ca_o and Ca_o;
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
    vars gamma_Cai and gamma_Cai;
    vars gamma_Cao and gamma_Cao;
    vars z_Ca and z_Ca;
  enddef;
  def map between i_Ca_L and q_rel for
    vars g_Ca_L and g_Ca_L;
    vars i_Ca_L_max and i_Ca_L_max;
  enddef;
  def map between i_Ca_L and q_rel_ri_gate for
    vars i_Ca_L and i_Ca_L_i_Ca_L;
  enddef;
  def map between i_Ca_L and q_rel_ro_gate for
    vars i_Ca_L and i_Ca_L_i_Ca_L;
  enddef;
  def map between i_Ca_L_d_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Ca_L_f2_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Ca_L_f_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Ca_T and i_Ca_T_b_gate for
    vars b and b;
  enddef;
  def map between i_Ca_T and i_Ca_T_g_gate for
    vars g and g;
  enddef;
  def map between i_Ca_T and membrane for
    vars V and V;
    vars i_Ca_T and i_Ca_T_i_Ca_T;
  enddef;
  def map between i_Ca_T_b_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Ca_T_g_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Ca_p and membrane for
    vars i_Ca_p and i_Ca_p_i_Ca_p;
  enddef;
  def map between i_K1 and i_K1_xK1_gate for
    vars xK1 and xK1;
  enddef;
  def map between i_K1 and intracellular_ion_concentrations for
    vars i_K1 and i_K1_i_K1;
  enddef;
  def map between i_K1 and membrane for
    vars V and V;
    vars i_K1 and i_K1_i_K1;
  enddef;
  def map between i_K1 and model_parameters for
    vars K_o and K_o;
  enddef;
  def map between i_K1_xK1_gate and membrane for
    vars V and V;
  enddef;
  def map between i_K_p and intracellular_ion_concentrations for
    vars i_K_p and i_K_p_i_K_p;
  enddef;
  def map between i_K_p and membrane for
    vars V and V;
    vars i_K_p and i_K_p_i_K_p;
  enddef;
  def map between i_Kr and i_Kr_xr_gate for
    vars xr and xr;
  enddef;
  def map between i_Kr and intracellular_ion_concentrations for
    vars i_Kr and i_Kr_i_Kr;
  enddef;
  def map between i_Kr and membrane for
    vars V and V;
    vars i_Kr and i_Kr_i_Kr;
  enddef;
  def map between i_Kr and model_parameters for
    vars K_o and K_o;
  enddef;
  def map between i_Kr_xr_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Ks and i_Ks_xs1_gate for
    vars xs1 and xs1;
  enddef;
  def map between i_Ks and i_Ks_xs2_gate for
    vars xs2 and xs2;
  enddef;
  def map between i_Ks and intracellular_ion_concentrations for
    vars i_Ks and i_Ks_i_Ks;
  enddef;
  def map between i_Ks and membrane for
    vars V and V;
    vars i_Ks and i_Ks_i_Ks;
  enddef;
  def map between i_Ks_xs1_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Ks_xs2_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Na and i_Na_h_gate for
    vars h and h;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between i_Na and i_Na_j_gate for
    vars j and j;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between i_Na and i_Na_m_gate for
    vars m and m;
  enddef;
  def map between i_Na and intracellular_ion_concentrations for
    vars i_Na and i_Na_i_Na;
  enddef;
  def map between i_Na and membrane for
    vars V and V;
    vars i_Na and i_Na_i_Na;
  enddef;
  def map between i_NaCa and intracellular_ion_concentrations for
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa_i_NaCa;
  enddef;
  def map between i_NaCa and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa_i_NaCa;
  enddef;
  def map between i_NaCa and model_parameters for
    vars Ca_o and Ca_o;
    vars F and F;
    vars Na_o and Na_o;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_NaK and intracellular_ion_concentrations for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK_i_NaK;
  enddef;
  def map between i_NaK and membrane for
    vars V and V;
    vars i_NaK and i_NaK_i_NaK;
  enddef;
  def map between i_NaK and model_parameters for
    vars F and F;
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_Na_L and i_Na_L_h_L_gate for
    vars h_L and h_L;
  enddef;
  def map between i_Na_L and i_Na_L_m_L_gate for
    vars m_L and m_L;
  enddef;
  def map between i_Na_L and intracellular_ion_concentrations for
    vars i_Na_L and i_Na_L_i_Na_L;
  enddef;
  def map between i_Na_L and membrane for
    vars V and V;
    vars i_Na_L and i_Na_L_i_Na_L;
  enddef;
  def map between i_Na_L_h_L_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Na_L_m_L_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Na_h_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Na_j_gate and membrane for
    vars V and V;
  enddef;
  def map between i_Na_m_gate and membrane for
    vars V and V;
  enddef;
  def map between i_to_1 and i_to_1_a_gate for
    vars i_to_1_a_gate_a and a;
  enddef;
  def map between i_to_1 and i_to_1_i2_gate for
    vars i2 and i2;
  enddef;
  def map between i_to_1 and i_to_1_i_gate for
    vars i and i;
  enddef;
  def map between i_to_1 and intracellular_ion_concentrations for
    vars i_to_1 and i_to_1_i_to_1;
  enddef;
  def map between i_to_1 and membrane for
    vars V and V;
    vars i_to_1 and i_to_1_i_to_1;
  enddef;
  def map between i_to_1_a_gate and membrane for
    vars V and V;
  enddef;
  def map between i_to_1_i2_gate and membrane for
    vars V and V;
  enddef;
  def map between i_to_1_i_gate and membrane for
    vars V and V;
  enddef;
  def map between i_to_2 and i_to_2_a_gate for
    vars i_to_2_a_gate_a and a;
  enddef;
  def map between i_to_2 and intracellular_ion_concentrations for
    vars Cl_i and Cl_i;
    vars i_to_2 and i_to_2_i_to_2;
  enddef;
  def map between i_to_2 and membrane for
    vars V and V;
    vars i_to_2 and i_to_2_i_to_2;
  enddef;
  def map between i_to_2 and model_parameters for
    vars Cl_o and Cl_o;
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between intracellular_ion_concentrations and model_parameters for
    vars Cm and Cm;
    vars F and F;
    vars Vol_myo and Vol_myo;
    vars a_cap and a_cap;
  enddef;
  def map between q_rel and q_rel_ri_gate for
    vars ri and ri;
  enddef;
  def map between q_rel and q_rel_ro_gate for
    vars ro and ro;
  enddef;
enddef;
