def model aslanidi_atrial_model_2009 as
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit m12_A_per_mol4_times_1e_minus_12 as
    unit metre {expo: 12.0, mult: 1e-12};
    unit ampere;
    unit mole {expo: -4.0};
  enddef;
  def unit m12_per_mol4 as
    unit metre {expo: 12.0};
    unit mole {expo: -4.0};
  enddef;
  def unit m3_A_per_mol_times_1e_minus_12 as
    unit metre {expo: 3.0, mult: 1e-12};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit m3_per_s_per_mol as
    unit metre {expo: 3.0};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m3_per_s_times_1e_minus_12 as
    unit metre {expo: 3.0, mult: 1e-12};
    unit second {expo: -1.0};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit nF as
    unit gram {expo: -1.0, mult: 1e-12};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit nL as
    unit metre {expo: 3.0, mult: 1e-12};
  enddef;
  def unit nS as
    unit gram {expo: -1.0, mult: 1e-12};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit pA as
    unit ampere {mult: 1e-12};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit s2_A_per_g_per_m2 as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;

  def comp Ca_handling_by_the_SR as
    var Ca_i: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_rel: mM {init: 0.726776};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Ca_up: mM {init: 0.730866};
    var F: C_per_mol {pub: in};
    var F1: dimensionless {init: 0.288039};
    var F2: dimensionless {init: 0.002262};
    var F3: dimensionless {init: 0.612697};
    var I_up_max: pA {init: 2.8};
    var O_Calse: dimensionless {pub: out, init: 0.465921};
    var V: mV {pub: in};
    var Vol_rel: nL {init: 4.4e-08};
    var Vol_up: nL {init: 3.969e-07};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var alpha_rel: m3_A_per_mol_times_1e_minus_12 {init: 200.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: pA {pub: out};
    var i_tr: pA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var i_up: pA {pub: out};
    var k_F3: hertz {init: 0.815};
    var k_cyca: mM {init: 0.0003};
    var k_rel: mM {init: 0.0003};
    var k_srca: mM {init: 0.5};
    var k_xcs: dimensionless {init: 0.4};
    var r_act: hertz;
    var r_inact: hertz;
    var tau_tr: second {init: 0.01};
    var time: second {pub: in};
    ode(Ca_rel, time) = (i_tr-i_rel)/(2.0{dimensionless}*Vol_rel*F)-31.0{mM}*ode(O_Calse, time);
    ode(Ca_up, time) = (i_up-i_tr)/(2.0{dimensionless}*Vol_up*F);
    ode(F1, time) = k_F3*F3-r_act*F1;
    ode(F2, time) = r_act*F1-r_inact*F2;
    ode(F3, time) = F2*r_inact-k_F3*F3;
    ode(O_Calse, time) = 480.0{m3_per_s_per_mol}*Ca_rel*(1.0{dimensionless}-O_Calse)-400.0{hertz}*O_Calse;
    i_rel = alpha_rel*sqr(F2/(F2+0.25{dimensionless}))*(Ca_rel-Ca_i);
    i_tr = (Ca_up-Ca_rel)*2.0{dimensionless}*F*Vol_rel/tau_tr;
    i_up = I_up_max*(Ca_i/k_cyca-sqr(k_xcs)*Ca_up/k_srca)/((Ca_i+k_cyca)/k_cyca+k_xcs*(Ca_up+k_srca)/k_srca);
    r_act = 240.0{hertz}*exp(0.08{per_mV}*(V-20.0{mV}))+203.8{hertz}*pow(Ca_i/(Ca_i+k_rel), 4.0{dimensionless});
    r_inact = 33.96{hertz}+339.6{hertz}*pow(Ca_i/(Ca_i+k_rel), 4.0{dimensionless});
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    var CT: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: mV {pub: out};
    var F: C_per_mol {pub: in};
    var K_c: mM {pub: in};
    var K_i: mM {pub: in};
    var PM: dimensionless {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_to: nS {init: 0.050002};
    var i_sus: pA {pub: out};
    var i_to: pA {pub: out};
    var r: dimensionless {pub: in};
    var s1: dimensionless {pub: in};
    var s2: dimensionless {pub: in};
    var s3: dimensionless {pub: in};
    E_K = R*T/F*ln(K_c/K_i);
    i_sus = sel
      case (CT == 1.0{dimensionless}) and (PM == 0.0{dimensionless}):
        0.0014{nS}*(V+70.0{mV});
      case (CT == 0.0{dimensionless}) and (PM == 1.0{dimensionless}):
        0.0024{nS}*(V+70.0{mV});
      otherwise:
        0.001{nS}*(V+70.0{mV});
    endsel;
    i_to = sel
      case (CT == 1.0{dimensionless}) and (PM == 0.0{dimensionless}):
        0.2{dimensionless}*g_to*r*(0.59{dimensionless}*pow(s1, 3.0{dimensionless})+0.41{dimensionless}*pow(s2, 3.0{dimensionless}))*(0.6{dimensionless}*pow(s3, 6.0{dimensionless})+0.4{dimensionless})*(V-E_K);
      case (CT == 0.0{dimensionless}) and (PM == 1.0{dimensionless}):
        0.35{dimensionless}*g_to*r*(0.59{dimensionless}*pow(s1, 3.0{dimensionless})+0.41{dimensionless}*pow(s2, 3.0{dimensionless}))*(0.6{dimensionless}*pow(s3, 6.0{dimensionless})+0.4{dimensionless})*(V-E_K);
      otherwise:
        g_to*r*(0.59{dimensionless}*pow(s1, 3.0{dimensionless})+0.41{dimensionless}*pow(s2, 3.0{dimensionless}))*(0.6{dimensionless}*pow(s3, 6.0{dimensionless})+0.4{dimensionless})*(V-E_K);
    endsel;
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var V: mV {pub: in};
    var alpha_r: hertz;
    var beta_r: hertz;
    var r: dimensionless {pub: out, init: 6e-05};
    var r_infinity: dimensionless;
    var tau_r: second;
    var time: second {pub: in};
    alpha_r = 386.6{hertz}*exp(V/12.0{mV});
    beta_r = 8.011{hertz}*exp(V/(-7.2{mV}));
    ode(r, time) = (r_infinity-r)/tau_r;
    r_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+15.0{mV})/(-5.633{mV})));
    tau_r = 1.0{dimensionless}/(alpha_r+beta_r)+0.0004{second};
  enddef;

  def comp Ca_independent_transient_outward_K_current_s1_gate as
    var V: mV {pub: in};
    var s1: dimensionless {pub: out, init: 0.5753};
    var s1_infinity: dimensionless;
    var tau_s1: second;
    var time: second {pub: in};
    ode(s1, time) = (s1_infinity-s1)/tau_s1;
    s1_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+28.29{mV})/7.06{mV}));
    tau_s1 = 0.5466{second}/(1.0{dimensionless}+exp((V+32.8{mV})/0.1{mV}))+0.0204{second};
  enddef;

  def comp Ca_independent_transient_outward_K_current_s2_gate as
    var V: mV {pub: in};
    var s2: dimensionless {pub: out, init: 0.39871};
    var s2_infinity: dimensionless;
    var tau_s2: second;
    var time: second {pub: in};
    ode(s2, time) = (s2_infinity-s2)/tau_s2;
    s2_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+28.29{mV})/7.06{mV}));
    tau_s2 = 5.75{second}/(1.0{dimensionless}+exp((V+32.8{mV})/0.1{mV}))+0.45{second}/(1.0{dimensionless}+exp((V-13.54{mV})/(-13.97{mV})));
  enddef;

  def comp Ca_independent_transient_outward_K_current_s3_gate as
    var V: mV {pub: in};
    var s3: dimensionless {pub: out, init: 0.57363};
    var s3_infinity: dimensionless;
    var tau_s3: second;
    var time: second {pub: in};
    ode(s3, time) = (s3_infinity-s3)/tau_s3;
    s3_infinity = (1.0{dimensionless}/(1.0{dimensionless}+exp((V+50.67{mV})/27.38{mV}))+0.666{dimensionless})/1.666{dimensionless};
    tau_s3 = 7.5{second}/(1.0{dimensionless}+exp((V+23.0{mV})/0.5{mV}))+0.5{second};
  enddef;

  def comp L_type_Ca_channel as
    var CT: dimensionless {pub: in};
    var E_Ca_app: mV {init: 50.0};
    var PM: dimensionless {pub: in};
    var V: mV {pub: in};
    var d_L: dimensionless {pub: in};
    var d_prime: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_ohmic_driving_term
    var driving_term_ohmic: mV;
    var f_L: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_Ca_L: nS {init: 0.004};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L: pA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var open_prob: dimensionless;
    d_prime = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-23.0{mV})/(-12.0{mV})));
    driving_term_ohmic = V-E_Ca_app;
    i_Ca_L = sel
      case (CT == 1.0{dimensionless}) and (PM == 0.0{dimensionless}):
        1.8{dimensionless}*g_Ca_L*open_prob*driving_term_ohmic;
      case (CT == 0.0{dimensionless}) and (PM == 1.0{dimensionless}):
        2.1{dimensionless}*g_Ca_L*open_prob*driving_term_ohmic;
      otherwise:
        g_Ca_L*open_prob*driving_term_ohmic;
    endsel;
    open_prob = d_L*f_L+d_prime;
  enddef;

  def comp L_type_Ca_channel_d_L_gate as
    var E0_alpha_d_L: mV;
    var E0_beta_d_L: mV;
    var E10: mV;
    var V: mV {pub: in};
    var alpha_d_L: hertz;
    var beta_d_L: hertz;
    var d_L: dimensionless {pub: out, init: 3e-05};
    var d_L_infinity: dimensionless;
    var tau_d_L: second;
    var time: second {pub: in};
    E0_alpha_d_L = V+45.0{mV};
    E0_beta_d_L = V+5.0{mV};
    E10 = V+10.0{mV};
    alpha_d_L = -16.72{s2_A_per_g_per_m2}*E0_alpha_d_L/(exp(E0_alpha_d_L/(-2.5{mV}))-1.0{dimensionless})+(-50.0{s2_A_per_g_per_m2}*E10/(exp(E10/(-4.808{mV}))-1.0{dimensionless}));
    beta_d_L = 4.48{s2_A_per_g_per_m2}*E0_beta_d_L/(exp(E0_beta_d_L/2.5{mV})-1.0{dimensionless});
    ode(d_L, time) = (d_L_infinity-d_L)/tau_d_L;
    d_L_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E10+0.95{mV})/(-6.6{mV})));
    tau_d_L = 1.0{dimensionless}/(alpha_d_L+beta_d_L);
  enddef;

  def comp L_type_Ca_channel_f_L_gate as
    var E0_f_L: mV;
    var V: mV {pub: in};
    var alpha_f_L: hertz;
    var beta_f_L: hertz;
    var f_L: dimensionless {pub: out, init: 0.99981};
    var f_L_infinity: dimensionless;
    var tau_f_L: second;
    var time: second {pub: in};
    E0_f_L = V+18.0{mV};
    alpha_f_L = 8.49{s2_A_per_g_per_m2}*E0_f_L/(exp(E0_f_L/4.0{mV})-1.0{dimensionless});
    beta_f_L = 67.922{hertz}/(1.0{dimensionless}+exp(E0_f_L/(-4.0{mV})));
    ode(f_L, time) = (f_L_infinity-f_L)/tau_f_L;
    f_L_infinity = alpha_f_L/(alpha_f_L+beta_f_L);
    tau_f_L = 1.0{dimensionless}/(alpha_f_L+beta_f_L);
  enddef;

  def comp Na_Ca_ion_exchanger_current as
    var Ca_c: mM {pub: in};
    var Ca_i: mM {pub: in};
    var F: C_per_mol {pub: in};
    var Na_c: mM {pub: in};
    var Na_i: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var d_NaCa: m12_per_mol4 {init: 0.0003};
    var gamma: dimensionless {init: 0.45};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: pA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var k_NaCa: m12_A_per_mol4_times_1e_minus_12 {init: 2e-05};
    i_NaCa = k_NaCa*(pow(Na_i, 3.0{dimensionless})*Ca_c*exp(gamma*F*V/(R*T))-pow(Na_c, 3.0{dimensionless})*Ca_i*exp((gamma-1.0{dimensionless})*V*F/(R*T)))/(1.0{dimensionless}+d_NaCa*(pow(Na_c, 3.0{dimensionless})*Ca_i+pow(Na_i, 3.0{dimensionless})*Ca_c));
  enddef;

  def comp T_type_Ca_channel as
    var E_Ca_T: mV {init: 38.0};
    var V: mV {pub: in};
    var d_T: dimensionless {pub: in};
    var f_T: dimensionless {pub: in};
    var g_Ca_T: nS {init: 0.006};
    var i_Ca_T: pA {pub: out};
    i_Ca_T = g_Ca_T*d_T*f_T*(V-E_Ca_T);
  enddef;

  def comp T_type_Ca_channel_d_T_gate as
    var E0_d_T: mV;
    var V: mV {pub: in};
    var alpha_d_T: hertz;
    var beta_d_T: hertz;
    var d_T: dimensionless {pub: out, init: 0.00046};
    var d_T_infinity: dimensionless;
    var tau_d_T: second;
    var time: second {pub: in};
    E0_d_T = V+23.3{mV};
    alpha_d_T = 674.173{hertz}*exp(E0_d_T/30.0{mV});
    beta_d_T = 674.173{hertz}*exp(E0_d_T/(-30.0{mV}));
    ode(d_T, time) = (d_T_infinity-d_T)/tau_d_T;
    d_T_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E0_d_T-0.3{mV})/(-6.1{mV})));
    tau_d_T = 1.0{dimensionless}/(alpha_d_T+beta_d_T);
  enddef;

  def comp T_type_Ca_channel_f_T_gate as
    var E0_f_T: mV;
    var V: mV {pub: in};
    var alpha_f_T: hertz;
    var beta_f_T: hertz;
    var f_T: dimensionless {pub: out, init: 0.30752};
    var f_T_infinity: dimensionless;
    var tau_f_T: second;
    var time: second {pub: in};
    E0_f_T = V+75.0{mV};
    alpha_f_T = 9.637{hertz}*exp(E0_f_T/(-83.3{mV}));
    beta_f_T = 9.637{hertz}*exp(E0_f_T/15.38{mV});
    ode(f_T, time) = (f_T_infinity-f_T)/tau_f_T;
    f_T_infinity = alpha_f_T/(alpha_f_T+beta_f_T);
    tau_f_T = 1.0{dimensionless}/(alpha_f_T+beta_f_T);
  enddef;

  def comp background_currents as
    var CT: dimensionless {pub: in};
    var Ca_c: mM {pub: in};
    var Ca_i: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#calcium_reversal_potential
    var E_Ca: mV;
    var E_Na: mV {pub: in};
    var F: C_per_mol {pub: in};
    var PM: dimensionless {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_B_Ca: nS {init: 3.1e-05};
    var g_B_Na: nS {init: 6.4e-05};
    var i_B_Ca: pA {pub: out};
    var i_B_Na: pA {pub: out};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_c/Ca_i);
    i_B_Ca = sel
      case (CT == 1.0{dimensionless}) and (PM == 0.0{dimensionless}):
        2e-05{nS}*(V-E_Ca);
      case (CT == 0.0{dimensionless}) and (PM == 1.0{dimensionless}):
        3e-05{nS}*(V-E_Ca);
      otherwise:
        g_B_Ca*(V-E_Ca);
    endsel;
    i_B_Na = sel
      case (CT == 1.0{dimensionless}) and (PM == 0.0{dimensionless}):
        2e-05{nS}*(V-E_Na);
      case (CT == 0.0{dimensionless}) and (PM == 1.0{dimensionless}):
        3e-05{nS}*(V-E_Na);
      otherwise:
        g_B_Na*(V-E_Na);
    endsel;
  enddef;

  def comp cleft_space_ion_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_c: mM {pub: out, init: 2.5};
    var F: C_per_mol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_c: mM {pub: out, init: 5.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_c: mM {pub: out, init: 140.0};
    var Vol_c: nL {init: 2.5e-06};
    var i_K1: pA {pub: in};
    var i_Kr: pA {pub: in};
    var i_Ks: pA {pub: in};
    var i_p: pA {pub: in};
    var i_sus: pA {pub: in};
    var i_to: pA {pub: in};
    var time: second {pub: in};
    ode(K_c, time) = (i_to+i_sus+i_K1+i_Kr+i_Ks-2.0{dimensionless}*i_p)/(Vol_c*F);
  enddef;

  def comp delayed_rectifier_K_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: nS {init: 0.0035};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: nS {init: 0.0025};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: pA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: pA {pub: out};
    var p_a: dimensionless {pub: in};
    var p_i: dimensionless {pub: in};
    var z: dimensionless {pub: in};
    i_Kr = g_Kr*p_a*p_i*(V-E_K);
    i_Ks = g_Ks*z*(V-E_K);
  enddef;

  def comp delayed_rectifier_K_current_pa_gate as
    var V: mV {pub: in};
    var alpha_p_a: hertz;
    var beta_p_a: hertz;
    var p_a: dimensionless {pub: out, init: 0.00016};
    var p_a_infinity: dimensionless;
    var tau_p_a: second;
    var time: second {pub: in};
    alpha_p_a = 9.0{hertz}*exp(V/25.371{mV});
    beta_p_a = 1.3{hertz}*exp(V/(-13.026{mV}));
    ode(p_a, time) = (p_a_infinity-p_a)/tau_p_a;
    p_a_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+5.1{mV})/(-7.4{mV})));
    tau_p_a = 1.0{dimensionless}/(alpha_p_a+beta_p_a);
  enddef;

  def comp delayed_rectifier_K_current_pi_gate as
    var V: mV {pub: in};
    var alpha_p_i: hertz;
    var beta_p_i: hertz;
    var p_i: dimensionless {pub: out, init: 0.76898};
    var p_i_infinity: dimensionless;
    var tau_p_i: second;
    var time: second {pub: in};
    alpha_p_i = 100.0{hertz}*exp(V/(-54.645{mV}));
    beta_p_i = 656.0{hertz}*exp(V/106.157{mV});
    ode(p_i, time) = (p_i_infinity-p_i)/tau_p_i;
    p_i_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+47.3921{mV})/18.6603{mV}));
    tau_p_i = 1.0{dimensionless}/(alpha_p_i+beta_p_i);
  enddef;

  def comp delayed_rectifier_K_current_z_gate as
    var V: mV {pub: in};
    var alpha_z: hertz;
    var beta_z: hertz;
    var tau_z: second;
    var time: second {pub: in};
    var z: dimensionless {pub: out, init: 0.02032};
    var z_infinity: dimensionless;
    alpha_z = 1.66{hertz}*exp(V/69.452{mV});
    beta_z = 0.3{hertz}*exp(V/(-21.826{mV}));
    tau_z = 1.0{dimensionless}/(alpha_z+beta_z)+0.06{second};
    ode(z, time) = (z_infinity-z)/tau_z;
    z_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-0.9{mV})/(-13.8{mV})));
  enddef;

  def comp environment as
    var CT: dimensionless {pub: out, init: 1.0};
    var O_Calse: dimensionless {pub: in};
    var PM: dimensionless {pub: out, init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp intracellular_Ca_buffering as
    var Ca_i: mM {pub: in};
    var Mg_i: mM {init: 2.5};
    var O_C: dimensionless {init: 0.029108};
    var O_TC: dimensionless {init: 0.014071};
    var O_TMgC: dimensionless {init: 0.214036};
    var O_TMgMg: dimensionless {init: 0.693565};
    var dOCdt: hertz {pub: out};
    var dOTCdt: hertz {pub: out};
    var dOTMgCdt: hertz {pub: out};
    var time: second {pub: in};
    ode(O_C, time) = dOCdt;
    ode(O_TC, time) = dOTCdt;
    ode(O_TMgC, time) = dOTMgCdt;
    ode(O_TMgMg, time) = 2000.0{m3_per_s_per_mol}*Mg_i*(1.0{dimensionless}-O_TMgC-O_TMgMg)-666.0{hertz}*O_TMgMg;
    dOCdt = 200000.0{m3_per_s_per_mol}*Ca_i*(1.0{dimensionless}-O_C)-476.0{hertz}*O_C;
    dOTCdt = 78400.0{m3_per_s_per_mol}*Ca_i*(1.0{dimensionless}-O_TC)-392.0{hertz}*O_TC;
    dOTMgCdt = 200000.0{m3_per_s_per_mol}*Ca_i*(1.0{dimensionless}-O_TMgC-O_TMgMg)-6.6{hertz}*O_TMgC;
  enddef;

  def comp intracellular_ion_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {pub: out, init: 7.1e-05};
    var F: C_per_mol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {pub: out, init: 100.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {pub: out, init: 8.4};
    var Vol_Ca: nL {init: 5.884e-06};
    var Vol_i: nL {init: 1.26e-05};
    var dOCdt: hertz {pub: in};
    var dOTCdt: hertz {pub: in};
    var dOTMgCdt: hertz {pub: in};
    var i_B_Ca: pA {pub: in};
    var i_B_Na: pA {pub: in};
    var i_CaP: pA {pub: in};
    var i_Ca_L: pA {pub: in};
    var i_Ca_T: pA {pub: in};
    var i_K1: pA {pub: in};
    var i_Kr: pA {pub: in};
    var i_Ks: pA {pub: in};
    var i_Na: pA {pub: in};
    var i_NaCa: pA {pub: in};
    var i_p: pA {pub: in};
    var i_rel: pA {pub: in};
    var i_sus: pA {pub: in};
    var i_to: pA {pub: in};
    var i_up: pA {pub: in};
    var time: second {pub: in};
    ode(Ca_i, time) = -(i_Ca_L+i_Ca_T+i_B_Ca+i_CaP-2.0{dimensionless}*i_NaCa+i_up-i_rel)/(2.0{dimensionless}*Vol_Ca*F)-(0.08{mM}*dOTCdt+0.16{mM}*dOTMgCdt+0.045{mM}*dOCdt);
    ode(K_i, time) = -(i_to+i_sus+i_K1+i_Kr+i_Ks-2.0{dimensionless}*i_p)/(Vol_i*F);
    ode(Na_i, time) = -(i_Na+i_B_Na+3.0{dimensionless}*i_p+3.0{dimensionless}*i_NaCa)/(Vol_i*F);
  enddef;

  def comp inward_rectifier as
    var CT: dimensionless {pub: in};
    var E_K: mV {pub: in};
    var F: C_per_mol {pub: in};
    var K_c: mM {pub: in};
    var KmK1: mM {init: 0.59};
    var PM: dimensionless {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: nS {init: 0.00508};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: pA {pub: out};
    var shiftK1: mV;
    var steepK1: dimensionless {init: 1.393};
    i_K1 = sel
      case (CT == 1.0{dimensionless}) and (PM == 0.0{dimensionless}):
        2.0{dimensionless}*g_K1*(V-E_K)*pow(K_c/(K_c+KmK1), 3.0{dimensionless})*1.0{dimensionless}/(1.0{dimensionless}+exp(steepK1*F*(V-E_K-shiftK1)/(R*T)));
      case (CT == 0.0{dimensionless}) and (PM == 1.0{dimensionless}):
        2.5{dimensionless}*g_K1*(V-E_K)*pow(K_c/(K_c+KmK1), 3.0{dimensionless})*1.0{dimensionless}/(1.0{dimensionless}+exp(steepK1*F*(V-E_K-shiftK1)/(R*T)));
      otherwise:
        g_K1*(V-E_K)*pow(K_c/(K_c+KmK1), 3.0{dimensionless})*1.0{dimensionless}/(1.0{dimensionless}+exp(steepK1*F*(V-E_K-shiftK1)/(R*T)));
    endsel;
    shiftK1 = -3.6{mV};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: nF {init: 5e-05};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mol {pub: out, init: 96487.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: mJ_per_mol_per_K {pub: out, init: 8314.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {pub: out, init: 308.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -80.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: second {init: 0.0005};
    var i_B_Ca: pA {pub: in};
    var i_B_Na: pA {pub: in};
    var i_CaP: pA {pub: in};
    var i_Ca_L: pA {pub: in};
    var i_Ca_T: pA {pub: in};
    var i_K1: pA {pub: in};
    var i_Kr: pA {pub: in};
    var i_Ks: pA {pub: in};
    var i_Na: pA {pub: in};
    var i_NaCa: pA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: pA;
    var i_p: pA {pub: in};
    var i_sus: pA {pub: in};
    var i_to: pA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: second {init: 0.01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: second {init: 0.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: pA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_end
    var stim_end: second {init: 100.0};
    var time: second {pub: in};
    ode(V, time) = -1.0{dimensionless}/Cm*(i_Kr+i_Ks+i_Na+i_Ca_L+i_Ca_T+i_to+i_sus+i_K1+i_B_Na+i_B_Ca+i_p+i_CaP+i_NaCa+i_Stim);
    i_Stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*stim_amplitude;
    stim_amplitude = -4.0{pA};
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var Ca_i: mM {pub: in};
    var i_CaP: pA {pub: out};
    var i_CaP_max: pA {init: 0.009509};
    var k_CaP: mM {init: 0.0002};
    i_CaP = i_CaP_max*Ca_i/(Ca_i+k_CaP);
  enddef;

  def comp sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: mV {pub: out};
    var F: C_per_mol {pub: in};
    var Na_c: mM {pub: in};
    var Na_i: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var P_Na: m3_per_s_times_1e_minus_12 {init: 1.4e-06};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var h1: dimensionless {pub: in};
    var h2: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: pA {pub: out};
    var m: dimensionless {pub: in};
    E_Na = R*T/F*ln(Na_c/Na_i);
    i_Na = P_Na*pow(m, 3.0{dimensionless})*(0.635{dimensionless}*h1+0.365{dimensionless}*h2)*Na_c*V*sqr(F)/(R*T)*(exp((V-E_Na)*F/(R*T))-1.0{dimensionless})/(exp(V*F/(R*T))-1.0{dimensionless});
  enddef;

  def comp sodium_current_h1_gate as
    var V: mV {pub: in};
    var alpha_h: hertz;
    var beta_h: hertz;
    var h1: dimensionless {pub: out, init: 0.706};
    var h_infinity: dimensionless {pub: out};
    var tau_h1: second;
    var time: second {pub: in};
    alpha_h = 44.9{hertz}*exp((V+66.9{mV})/(-5.57{mV}));
    beta_h = 1491.0{hertz}/(1.0{dimensionless}+323.3{dimensionless}*exp((V+94.6{mV})/(-12.9{mV})));
    ode(h1, time) = (h_infinity-h1)/tau_h1;
    h_infinity = alpha_h/(alpha_h+beta_h);
    tau_h1 = 0.03{second}/(1.0{dimensionless}+exp((V+40.0{mV})/6.0{mV}))+0.00015{second};
  enddef;

  def comp sodium_current_h2_gate as
    var V: mV {pub: in};
    var h2: dimensionless {pub: out, init: 0.61493};
    var h_infinity: dimensionless {pub: in};
    var tau_h2: second;
    var time: second {pub: in};
    ode(h2, time) = (h_infinity-h2)/tau_h2;
    tau_h2 = 0.12{second}/(1.0{dimensionless}+exp((V+60.0{mV})/2.0{mV}))+0.00045{second};
  enddef;

  def comp sodium_current_m_gate as
    var E0_m: mV;
    var V: mV {pub: in};
    var alpha_m: hertz;
    var beta_m: hertz;
    var m: dimensionless {pub: out, init: 0.01309};
    var time: second {pub: in};
    E0_m = V+44.4{mV};
    alpha_m = -460.0{s2_A_per_g_per_m2}*E0_m/(exp(E0_m/(-12.673{mV}))-1.0{dimensionless});
    beta_m = 18400.0{hertz}*exp(E0_m/(-12.673{mV}));
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp sodium_potassium_pump as
    var K_c: mM {pub: in};
    var Na_i: mM {pub: in};
    var V: mV {pub: in};
    var i_NaK_max: pA {init: 0.06441};
    var i_p: pA {pub: out};
    var k_NaK_K: mM {init: 1.0};
    var k_NaK_Na: mM {init: 11.0};
    i_p = i_NaK_max*K_c/(K_c+k_NaK_K)*pow(Na_i, 1.5{dimensionless})/(pow(Na_i, 1.5{dimensionless})+pow(k_NaK_Na, 1.5{dimensionless}))*1.6{dimensionless}/(1.5{dimensionless}+exp((V+60.0{mV})/(-40.0{mV})));
  enddef;
  def map between Ca_handling_by_the_SR and environment for
    vars O_Calse and O_Calse;
    vars time and time;
  enddef;
  def map between Ca_handling_by_the_SR and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_rel and i_rel;
    vars i_up and i_up;
  enddef;
  def map between Ca_handling_by_the_SR and membrane for
    vars F and F;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s1_gate for
    vars s1 and s1;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s2_gate for
    vars s2 and s2;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s3_gate for
    vars s3 and s3;
  enddef;
  def map between Ca_independent_transient_outward_K_current and cleft_space_ion_concentrations for
    vars K_c and K_c;
    vars i_sus and i_sus;
    vars i_to and i_to;
  enddef;
  def map between Ca_independent_transient_outward_K_current and delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and environment for
    vars CT and CT;
    vars PM and PM;
  enddef;
  def map between Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars K_i and K_i;
    vars i_sus and i_sus;
    vars i_to and i_to;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_sus and i_sus;
    vars i_to and i_to;
  enddef;
  def map between Ca_independent_transient_outward_K_current_r_gate and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current_r_gate and membrane for
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s1_gate and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s1_gate and membrane for
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s2_gate and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s2_gate and membrane for
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s3_gate and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s3_gate and membrane for
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_L_gate for
    vars d_L and d_L;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_L_gate for
    vars f_L and f_L;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars CT and CT;
    vars PM and PM;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel and membrane for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel_d_L_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel_d_L_gate and membrane for
    vars V and V;
  enddef;
  def map between L_type_Ca_channel_f_L_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel_f_L_gate and membrane for
    vars V and V;
  enddef;
  def map between Na_Ca_ion_exchanger_current and cleft_space_ion_concentrations for
    vars Ca_c and Ca_c;
    vars Na_c and Na_c;
  enddef;
  def map between Na_Ca_ion_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_ion_exchanger_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_d_T_gate for
    vars d_T and d_T;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_f_T_gate for
    vars f_T and f_T;
  enddef;
  def map between T_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between T_type_Ca_channel and membrane for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between T_type_Ca_channel_d_T_gate and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel_d_T_gate and membrane for
    vars V and V;
  enddef;
  def map between T_type_Ca_channel_f_T_gate and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel_f_T_gate and membrane for
    vars V and V;
  enddef;
  def map between background_currents and cleft_space_ion_concentrations for
    vars Ca_c and Ca_c;
  enddef;
  def map between background_currents and environment for
    vars CT and CT;
    vars PM and PM;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
  enddef;
  def map between background_currents and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
  enddef;
  def map between background_currents and sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between cleft_space_ion_concentrations and delayed_rectifier_K_current for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between cleft_space_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between cleft_space_ion_concentrations and inward_rectifier for
    vars K_c and K_c;
    vars i_K1 and i_K1;
  enddef;
  def map between cleft_space_ion_concentrations and membrane for
    vars F and F;
  enddef;
  def map between cleft_space_ion_concentrations and sodium_current for
    vars Na_c and Na_c;
  enddef;
  def map between cleft_space_ion_concentrations and sodium_potassium_pump for
    vars K_c and K_c;
    vars i_p and i_p;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_pa_gate for
    vars p_a and p_a;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_pi_gate for
    vars p_i and p_i;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_z_gate for
    vars z and z;
  enddef;
  def map between delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between delayed_rectifier_K_current and membrane for
    vars V and V;
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between delayed_rectifier_K_current_pa_gate and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_current_pa_gate and membrane for
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_current_pi_gate and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_current_pi_gate and membrane for
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_current_z_gate and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_current_z_gate and membrane for
    vars V and V;
  enddef;
  def map between environment and intracellular_Ca_buffering for
    vars time and time;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between environment and inward_rectifier for
    vars CT and CT;
    vars PM and PM;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and sodium_current_h1_gate for
    vars time and time;
  enddef;
  def map between environment and sodium_current_h2_gate for
    vars time and time;
  enddef;
  def map between environment and sodium_current_m_gate for
    vars time and time;
  enddef;
  def map between intracellular_Ca_buffering and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars dOCdt and dOCdt;
    vars dOTCdt and dOTCdt;
    vars dOTMgCdt and dOTMgCdt;
  enddef;
  def map between intracellular_ion_concentrations and inward_rectifier for
    vars i_K1 and i_K1;
  enddef;
  def map between intracellular_ion_concentrations and membrane for
    vars F and F;
  enddef;
  def map between intracellular_ion_concentrations and sarcolemmal_calcium_pump_current for
    vars Ca_i and Ca_i;
    vars i_CaP and i_CaP;
  enddef;
  def map between intracellular_ion_concentrations and sodium_current for
    vars Na_i and Na_i;
    vars i_Na and i_Na;
  enddef;
  def map between intracellular_ion_concentrations and sodium_potassium_pump for
    vars Na_i and Na_i;
    vars i_p and i_p;
  enddef;
  def map between inward_rectifier and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_CaP and i_CaP;
  enddef;
  def map between membrane and sodium_current for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and sodium_current_h1_gate for
    vars V and V;
  enddef;
  def map between membrane and sodium_current_h2_gate for
    vars V and V;
  enddef;
  def map between membrane and sodium_current_m_gate for
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_p and i_p;
  enddef;
  def map between sodium_current and sodium_current_h1_gate for
    vars h1 and h1;
  enddef;
  def map between sodium_current and sodium_current_h2_gate for
    vars h2 and h2;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
  enddef;
  def map between sodium_current_h1_gate and sodium_current_h2_gate for
    vars h_infinity and h_infinity;
  enddef;
enddef;
