<?xml version='1.0' encoding='UTF-8'?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" name="beeler_reuter_model_1977">
  <units name="A_per_m2">
    <unit units="metre" exponent="-2.0"/>
    <unit units="ampere"/>
  </units>
  <units name="C_per_mol">
    <unit units="second"/>
    <unit units="ampere"/>
    <unit units="mole" exponent="-1.0"/>
  </units>
  <units name="m3_per_mol">
    <unit units="metre" exponent="3.0"/>
    <unit units="mole" exponent="-1.0"/>
  </units>
  <units name="mM">
    <unit units="metre" exponent="-3.0"/>
    <unit units="mole"/>
  </units>
  <units name="mS_per_mm2">
    <unit units="gram" exponent="-1.0"/>
    <unit units="metre" exponent="-4.0"/>
    <unit units="second" exponent="3.0"/>
    <unit units="ampere" exponent="2.0"/>
  </units>
  <units name="mS_per_uF">
    <unit units="second" exponent="-1.0" multiplier="1000"/>
  </units>
  <units name="mV">
    <unit units="gram"/>
    <unit units="metre" exponent="2.0"/>
    <unit units="second" exponent="-3.0"/>
    <unit units="ampere" exponent="-1.0"/>
  </units>
  <units name="ms">
    <unit units="second" multiplier="0.001"/>
  </units>
  <units name="per_mV">
    <unit units="gram" exponent="-1.0"/>
    <unit units="metre" exponent="-2.0"/>
    <unit units="second" exponent="3.0"/>
    <unit units="ampere"/>
  </units>
  <units name="per_mV_per_ms">
    <unit units="gram" exponent="-1.0" multiplier="1000"/>
    <unit units="metre" exponent="-2.0"/>
    <unit units="second" exponent="2.0"/>
    <unit units="ampere"/>
  </units>
  <units name="per_mm">
    <unit units="metre" exponent="-1.0" multiplier="1000"/>
  </units>
  <units name="uF_per_mm2">
    <unit units="gram" exponent="-1.0" multiplier="0.001"/>
    <unit units="metre" exponent="-4.0"/>
    <unit units="second" exponent="4.0"/>
    <unit units="ampere" exponent="2.0"/>
  </units>
  <component name="environment">
    <variable name="time" units="ms" public_interface="out" cmeta:id="time"/>
  </component>
  <component name="membrane">
    <variable name="C" units="uF_per_mm2" initial_value="0.01" cmeta:id="C"/>
    <variable name="Istim" units="A_per_m2" public_interface="in"/>
    <variable name="V" units="mV" public_interface="out" initial_value="-84.624" cmeta:id="V"/>
    <variable name="i_K1" units="A_per_m2" public_interface="in"/>
    <variable name="i_Na" units="A_per_m2" public_interface="in"/>
    <variable name="i_s" units="A_per_m2" public_interface="in"/>
    <variable name="i_x1" units="A_per_m2" public_interface="in"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>V</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>Istim</ci>
            <apply>
              <plus/>
              <apply>
                <plus/>
                <apply>
                  <plus/>
                  <ci>i_Na</ci>
                  <ci>i_s</ci>
                </apply>
                <ci>i_x1</ci>
              </apply>
              <ci>i_K1</ci>
            </apply>
          </apply>
          <ci>C</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="slow_inward_current">
    <variable name="Cai" units="mM" initial_value="0.0001" cmeta:id="Cai"/>
    <variable name="Driving_term_ohmic" units="mV" cmeta:id="Driving_term_ohmic"/>
    <variable name="E_s" units="mV"/>
    <variable name="Open_Prob" units="dimensionless" cmeta:id="Open_Prob"/>
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="d" units="dimensionless" public_interface="in"/>
    <variable name="f" units="dimensionless" public_interface="in"/>
    <variable name="g_s" units="mS_per_mm2" initial_value="0.0009" cmeta:id="g_s"/>
    <variable name="i_s" units="A_per_m2" public_interface="out" cmeta:id="i_s"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cai</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <apply>
                <minus/>
                <cn cellml:units="per_mm">0.01</cn>
              </apply>
              <ci>i_s</ci>
            </apply>
            <cn cellml:units="C_per_mol">1.0</cn>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="mS_per_uF">0.07</cn>
            <apply>
              <minus/>
              <cn cellml:units="mM">0.0001</cn>
              <ci>Cai</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Driving_term_ohmic</ci>
        <apply>
          <minus/>
          <ci>V</ci>
          <ci>E_s</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>E_s</ci>
        <apply>
          <minus/>
          <apply>
            <minus/>
            <cn cellml:units="mV">82.3</cn>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="mV">13.0287</cn>
            <apply>
              <ln/>
              <apply>
                <times/>
                <ci>Cai</ci>
                <cn cellml:units="m3_per_mol">0.001</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Open_Prob</ci>
        <apply>
          <times/>
          <ci>d</ci>
          <ci>f</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>i_s</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <ci>g_s</ci>
            <ci>Open_Prob</ci>
          </apply>
          <ci>Driving_term_ohmic</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="slow_inward_current_d_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_d" units="mS_per_uF"/>
    <variable name="beta_d" units="mS_per_uF"/>
    <variable name="d" units="dimensionless" public_interface="out" initial_value="0.003" cmeta:id="d"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_d</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="mS_per_uF">0.095</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <minus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">5.0</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">100.0</cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <minus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">5.0</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">13.89</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_d</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="mS_per_uF">0.07</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">44.0</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">59.0</cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">44.0</cn>
                </apply>
                <cn cellml:units="mV">20.0</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>d</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_d</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <ci>d</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>beta_d</ci>
            <ci>d</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="slow_inward_current_f_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_f" units="mS_per_uF"/>
    <variable name="beta_f" units="mS_per_uF"/>
    <variable name="f" units="dimensionless" public_interface="out" initial_value="0.994" cmeta:id="f"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_f</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="mS_per_uF">0.012</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">28.0</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">125.0</cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">28.0</cn>
                </apply>
                <cn cellml:units="mV">6.67</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_f</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="mS_per_uF">0.0065</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">30.0</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">50.0</cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">30.0</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">5.0</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>f</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_f</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <ci>f</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>beta_f</ci>
            <ci>f</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="sodium_current">
    <variable name="E_Na" units="mV" initial_value="50.0" cmeta:id="E_Na"/>
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="g_Na" units="mS_per_mm2" initial_value="0.04" cmeta:id="g_Na"/>
    <variable name="g_Nac" units="mS_per_mm2" initial_value="3e-05"/>
    <variable name="h" units="dimensionless" public_interface="in"/>
    <variable name="i_Na" units="A_per_m2" public_interface="out" cmeta:id="i_Na"/>
    <variable name="j" units="dimensionless" public_interface="in"/>
    <variable name="m" units="dimensionless" public_interface="in"/>
    <variable name="perc_reduced_inact_for_IpNa" units="dimensionless" public_interface="out" initial_value="0.0" cmeta:id="perc_reduced_inact_for_IpNa"/>
    <variable name="shift_INa_inact" units="mV" public_interface="out" initial_value="0.0" cmeta:id="shift_INa_inact"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>i_Na</ci>
        <apply>
          <times/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <ci>g_Na</ci>
                  <apply>
                    <power/>
                    <ci>m</ci>
                    <cn cellml:units="dimensionless">3.0</cn>
                  </apply>
                </apply>
                <ci>h</ci>
              </apply>
              <ci>j</ci>
            </apply>
            <ci>g_Nac</ci>
          </apply>
          <apply>
            <minus/>
            <ci>V</ci>
            <ci>E_Na</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="sodium_current_h_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_h" units="mS_per_uF"/>
    <variable name="beta_h" units="mS_per_uF"/>
    <variable name="h" units="dimensionless" public_interface="out" initial_value="0.988" cmeta:id="h"/>
    <variable name="h_inf" units="dimensionless"/>
    <variable name="perc_reduced_inact_for_IpNa" units="dimensionless" public_interface="in"/>
    <variable name="shift_INa_inact" units="mV" public_interface="in"/>
    <variable name="tau_h" units="ms" cmeta:id="tau_h"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_h</ci>
        <apply>
          <times/>
          <cn cellml:units="mS_per_uF">0.126</cn>
          <apply>
            <exp/>
            <apply>
              <times/>
              <apply>
                <minus/>
                <cn cellml:units="per_mV">0.25</cn>
              </apply>
              <apply>
                <minus/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">77.0</cn>
                </apply>
                <ci>shift_INa_inact</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_h</ci>
        <apply>
          <divide/>
          <cn cellml:units="mS_per_uF">1.7</cn>
          <apply>
            <plus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="per_mV">0.082</cn>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">22.5</cn>
                  </apply>
                  <ci>shift_INa_inact</ci>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>h</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>h_inf</ci>
            <ci>h</ci>
          </apply>
          <ci>tau_h</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>h_inf</ci>
        <apply>
          <plus/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>alpha_h</ci>
              <apply>
                <minus/>
                <cn cellml:units="dimensionless">1.0</cn>
                <apply>
                  <divide/>
                  <ci>perc_reduced_inact_for_IpNa</ci>
                  <cn cellml:units="dimensionless">100.0</cn>
                </apply>
              </apply>
            </apply>
            <apply>
              <plus/>
              <ci>alpha_h</ci>
              <ci>beta_h</ci>
            </apply>
          </apply>
          <apply>
            <divide/>
            <ci>perc_reduced_inact_for_IpNa</ci>
            <cn cellml:units="dimensionless">100.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>tau_h</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <ci>alpha_h</ci>
            <ci>beta_h</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="sodium_current_j_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_j" units="mS_per_uF"/>
    <variable name="beta_j" units="mS_per_uF"/>
    <variable name="j" units="dimensionless" public_interface="out" initial_value="0.975" cmeta:id="j"/>
    <variable name="j_inf" units="dimensionless"/>
    <variable name="perc_reduced_inact_for_IpNa" units="dimensionless" public_interface="in"/>
    <variable name="shift_INa_inact" units="mV" public_interface="in"/>
    <variable name="tau_j" units="ms" cmeta:id="tau_j"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_j</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="mS_per_uF">0.055</cn>
            <apply>
              <exp/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="per_mV">0.25</cn>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">78.0</cn>
                  </apply>
                  <ci>shift_INa_inact</ci>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="per_mV">0.2</cn>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">78.0</cn>
                  </apply>
                  <ci>shift_INa_inact</ci>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_j</ci>
        <apply>
          <divide/>
          <cn cellml:units="mS_per_uF">0.3</cn>
          <apply>
            <plus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="per_mV">0.1</cn>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">32.0</cn>
                  </apply>
                  <ci>shift_INa_inact</ci>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>j</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>j_inf</ci>
            <ci>j</ci>
          </apply>
          <ci>tau_j</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>j_inf</ci>
        <apply>
          <plus/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>alpha_j</ci>
              <apply>
                <minus/>
                <cn cellml:units="dimensionless">1.0</cn>
                <apply>
                  <divide/>
                  <ci>perc_reduced_inact_for_IpNa</ci>
                  <cn cellml:units="dimensionless">100.0</cn>
                </apply>
              </apply>
            </apply>
            <apply>
              <plus/>
              <ci>alpha_j</ci>
              <ci>beta_j</ci>
            </apply>
          </apply>
          <apply>
            <divide/>
            <ci>perc_reduced_inact_for_IpNa</ci>
            <cn cellml:units="dimensionless">100.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>tau_j</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <ci>alpha_j</ci>
            <ci>beta_j</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="sodium_current_m_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_m" units="mS_per_uF"/>
    <variable name="beta_m" units="mS_per_uF"/>
    <variable name="m" units="dimensionless" public_interface="out" initial_value="0.011" cmeta:id="m"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_m</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <minus/>
              <cn cellml:units="per_mV_per_ms">1.0</cn>
            </apply>
            <apply>
              <plus/>
              <ci>V</ci>
              <cn cellml:units="mV">47.0</cn>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="per_mV">0.1</cn>
                </apply>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">47.0</cn>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_m</ci>
        <apply>
          <times/>
          <cn cellml:units="mS_per_uF">40.0</cn>
          <apply>
            <exp/>
            <apply>
              <times/>
              <apply>
                <minus/>
                <cn cellml:units="per_mV">0.056</cn>
              </apply>
              <apply>
                <plus/>
                <ci>V</ci>
                <cn cellml:units="mV">72.0</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>m</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_m</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <ci>m</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>beta_m</ci>
            <ci>m</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="stimulus_protocol">
    <variable name="Istim" units="A_per_m2" public_interface="out" cmeta:id="Istim"/>
    <variable name="IstimAmplitude" units="A_per_m2" initial_value="0.5" cmeta:id="IstimAmplitude"/>
    <variable name="IstimEnd" units="ms" initial_value="50000.0"/>
    <variable name="duration" units="ms" initial_value="1.0" cmeta:id="duration"/>
    <variable name="offset" units="ms" initial_value="10.0" cmeta:id="offset"/>
    <variable name="period" units="ms" initial_value="1000.0" cmeta:id="period"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Istim</ci>
        <apply>
          <times/>
          <piecewise>
            <piece>
              <cn cellml:units="dimensionless">1.0</cn>
              <apply>
                <lt/>
                <apply>
                  <minus/>
                  <apply>
                    <minus/>
                    <ci>time</ci>
                    <ci>offset</ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci>period</ci>
                    <apply>
                      <floor/>
                      <apply>
                        <divide/>
                        <apply>
                          <minus/>
                          <ci>time</ci>
                          <ci>offset</ci>
                        </apply>
                        <ci>period</ci>
                      </apply>
                    </apply>
                  </apply>
                </apply>
                <ci>duration</ci>
              </apply>
            </piece>
            <otherwise>
              <cn cellml:units="dimensionless">0.0</cn>
            </otherwise>
          </piecewise>
          <ci>IstimAmplitude</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="time_dependent_outward_current">
    <variable name="G_Kr" units="A_per_m2" initial_value="0.008"/>
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="i_x1" units="A_per_m2" public_interface="out"/>
    <variable name="x1" units="dimensionless" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>i_x1</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <times/>
              <ci>x1</ci>
              <ci>G_Kr</ci>
            </apply>
            <apply>
              <minus/>
              <apply>
                <exp/>
                <apply>
                  <times/>
                  <cn cellml:units="per_mV">0.04</cn>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">77.0</cn>
                  </apply>
                </apply>
              </apply>
              <cn cellml:units="dimensionless">1.0</cn>
            </apply>
          </apply>
          <apply>
            <exp/>
            <apply>
              <times/>
              <cn cellml:units="per_mV">0.04</cn>
              <apply>
                <plus/>
                <ci>V</ci>
                <cn cellml:units="mV">35.0</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="time_dependent_outward_current_x1_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_x1" units="mS_per_uF"/>
    <variable name="beta_x1" units="mS_per_uF"/>
    <variable name="time" units="ms" public_interface="in"/>
    <variable name="x1" units="dimensionless" public_interface="out" initial_value="0.0001"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_x1</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="mS_per_uF">0.0005</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">50.0</cn>
                </apply>
                <cn cellml:units="mV">12.1</cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">50.0</cn>
                </apply>
                <cn cellml:units="mV">17.5</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_x1</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="mS_per_uF">0.0013</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">20.0</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">16.67</cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">20.0</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">25.0</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>x1</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_x1</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <ci>x1</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>beta_x1</ci>
            <ci>x1</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="time_independent_outward_current">
    <variable name="G_K1" units="A_per_m2" initial_value="0.0035" cmeta:id="G_K1"/>
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="i_K1" units="A_per_m2" public_interface="out" cmeta:id="i_K1"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>i_K1</ci>
        <apply>
          <times/>
          <ci>G_K1</ci>
          <apply>
            <plus/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <cn cellml:units="dimensionless">4.0</cn>
                <apply>
                  <minus/>
                  <apply>
                    <exp/>
                    <apply>
                      <times/>
                      <cn cellml:units="per_mV">0.04</cn>
                      <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="mV">85.0</cn>
                      </apply>
                    </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1.0</cn>
                </apply>
              </apply>
              <apply>
                <plus/>
                <apply>
                  <exp/>
                  <apply>
                    <times/>
                    <cn cellml:units="per_mV">0.08</cn>
                    <apply>
                      <plus/>
                      <ci>V</ci>
                      <cn cellml:units="mV">53.0</cn>
                    </apply>
                  </apply>
                </apply>
                <apply>
                  <exp/>
                  <apply>
                    <times/>
                    <cn cellml:units="per_mV">0.04</cn>
                    <apply>
                      <plus/>
                      <ci>V</ci>
                      <cn cellml:units="mV">53.0</cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <divide/>
              <apply>
                <times/>
                <cn cellml:units="per_mV">0.2</cn>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">23.0</cn>
                </apply>
              </apply>
              <apply>
                <minus/>
                <cn cellml:units="dimensionless">1.0</cn>
                <apply>
                  <exp/>
                  <apply>
                    <times/>
                    <apply>
                      <minus/>
                      <cn cellml:units="per_mV">0.04</cn>
                    </apply>
                    <apply>
                      <plus/>
                      <ci>V</ci>
                      <cn cellml:units="mV">23.0</cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="environment" component_2="membrane"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="slow_inward_current"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="slow_inward_current_d_gate"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="slow_inward_current_f_gate"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="sodium_current_h_gate"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="sodium_current_j_gate"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="sodium_current_m_gate"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="stimulus_protocol"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="time_dependent_outward_current_x1_gate"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="slow_inward_current"/>
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="i_s" variable_2="i_s"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="slow_inward_current_d_gate"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="slow_inward_current_f_gate"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="sodium_current"/>
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="i_Na" variable_2="i_Na"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="sodium_current_h_gate"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="sodium_current_j_gate"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="sodium_current_m_gate"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="stimulus_protocol"/>
    <map_variables variable_1="Istim" variable_2="Istim"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="time_dependent_outward_current"/>
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="i_x1" variable_2="i_x1"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="time_dependent_outward_current_x1_gate"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="time_independent_outward_current"/>
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="i_K1" variable_2="i_K1"/>
  </connection>
  <connection>
    <map_components component_1="slow_inward_current" component_2="slow_inward_current_d_gate"/>
    <map_variables variable_1="d" variable_2="d"/>
  </connection>
  <connection>
    <map_components component_1="slow_inward_current" component_2="slow_inward_current_f_gate"/>
    <map_variables variable_1="f" variable_2="f"/>
  </connection>
  <connection>
    <map_components component_1="sodium_current" component_2="sodium_current_h_gate"/>
    <map_variables variable_1="h" variable_2="h"/>
    <map_variables variable_1="perc_reduced_inact_for_IpNa" variable_2="perc_reduced_inact_for_IpNa"/>
    <map_variables variable_1="shift_INa_inact" variable_2="shift_INa_inact"/>
  </connection>
  <connection>
    <map_components component_1="sodium_current" component_2="sodium_current_j_gate"/>
    <map_variables variable_1="j" variable_2="j"/>
    <map_variables variable_1="perc_reduced_inact_for_IpNa" variable_2="perc_reduced_inact_for_IpNa"/>
    <map_variables variable_1="shift_INa_inact" variable_2="shift_INa_inact"/>
  </connection>
  <connection>
    <map_components component_1="sodium_current" component_2="sodium_current_m_gate"/>
    <map_variables variable_1="m" variable_2="m"/>
  </connection>
  <connection>
    <map_components component_1="time_dependent_outward_current" component_2="time_dependent_outward_current_x1_gate"/>
    <map_variables variable_1="x1" variable_2="x1"/>
  </connection>
  <rdf:RDF>
    <rdf:Description rdf:about="#C">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Cai">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Driving_term_ohmic">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_ohmic_driving_term"/>
    </rdf:Description>
    <rdf:Description rdf:about="#E_Na">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential"/>
    </rdf:Description>
    <rdf:Description rdf:about="#G_K1">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Istim">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current"/>
    </rdf:Description>
    <rdf:Description rdf:about="#IstimAmplitude">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Open_Prob">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability"/>
    </rdf:Description>
    <rdf:Description rdf:about="#V">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage"/>
    </rdf:Description>
    <rdf:Description rdf:about="#d">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate"/>
    </rdf:Description>
    <rdf:Description rdf:about="#duration">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#f">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate"/>
    </rdf:Description>
    <rdf:Description rdf:about="#g_Na">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance"/>
    </rdf:Description>
    <rdf:Description rdf:about="#g_s">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance"/>
    </rdf:Description>
    <rdf:Description rdf:about="#h">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate"/>
    </rdf:Description>
    <rdf:Description rdf:about="#i_K1">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current"/>
    </rdf:Description>
    <rdf:Description rdf:about="#i_Na">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current"/>
    </rdf:Description>
    <rdf:Description rdf:about="#i_s">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current"/>
    </rdf:Description>
    <rdf:Description rdf:about="#j">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate"/>
    </rdf:Description>
    <rdf:Description rdf:about="#m">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate"/>
    </rdf:Description>
    <rdf:Description rdf:about="#offset">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset"/>
    </rdf:Description>
    <rdf:Description rdf:about="#perc_reduced_inact_for_IpNa">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation"/>
    </rdf:Description>
    <rdf:Description rdf:about="#period">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period"/>
    </rdf:Description>
    <rdf:Description rdf:about="#shift_INa_inact">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation"/>
    </rdf:Description>
    <rdf:Description rdf:about="#tau_h">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau"/>
    </rdf:Description>
    <rdf:Description rdf:about="#tau_j">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau"/>
    </rdf:Description>
    <rdf:Description rdf:about="#time">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time"/>
    </rdf:Description>
  </rdf:RDF>
</model>
