def model bondarenko_2004_apical as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit m12_per_s_per_mol4_times_1e15 as
    unit metre {expo: 12.0, mult: 1000000000000000};
    unit second {expo: -1.0};
    unit mole {expo: -4.0};
  enddef;
  def unit m3_per_s_per_mol_times_1e6 as
    unit metre {expo: 3.0, mult: 1000000};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m9_per_s_per_mol3_times_1e12 as
    unit metre {expo: 9.0, mult: 1000000000000};
    unit second {expo: -1.0};
    unit mole {expo: -3.0};
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mV2 as
    unit gram {expo: 2.0};
    unit metre {expo: 4.0};
    unit second {expo: -6.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit mol_per_m3_per_s as
    unit metre {expo: -3.0};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit uF_per_cm2 as
    unit gram {expo: -1.0, mult: 1e-05};
    unit metre {expo: -4.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit uL as
    unit metre {expo: 3.0, mult: 1e-09};
  enddef;
  def unit uM as
    unit metre {expo: -3.0, mult: 0.001};
    unit mole;
  enddef;

  def comp L_type_calcium_current as
    var C1: dimensionless;
    var C2: dimensionless {init: 1.24215999999999991e-04};
    var C3: dimensionless {init: 5.78679000000000003e-09};
    var C4: dimensionless {init: 1.19816000000000002e-13};
    var Cass: uM {pub: in};
    var E_CaL: mV {init: 63.0};
    var I1: dimensionless {init: 4.97923000000000004e-19};
    var I2: dimensionless {init: 3.45847000000000021e-14};
    var I3: dimensionless {init: 1.85106000000000007e-14};
    var Kpc_half: uM {init: 20.0};
    var Kpc_max: mS_per_uF {init: 0.23324};
    var Kpcb: mS_per_uF {init: 0.0005};
    var Kpcf: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var O: dimensionless {init: 9.30307999999999919e-19};
    var V: mV {pub: in};
    var alpha: mS_per_uF;
    var beta: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_ohmic_driving_term
    var driving_term_ohmic: mV;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_CaL: mS_per_uF {init: 0.1729};
    var gamma: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_CaL: A_per_F {pub: out};
    var i_CaL_max: A_per_F {pub: out, init: 7.0};
    var time: ms {pub: in};
    C1 = 1.0{dimensionless}-(O+C2+C3+C4+I1+I2+I3);
    ode(C2, time) = 4.0{dimensionless}*alpha*C1+2.0{dimensionless}*beta*C3-(beta*C2+3.0{dimensionless}*alpha*C2);
    ode(C3, time) = 3.0{dimensionless}*alpha*C2+3.0{dimensionless}*beta*C4-(2.0{dimensionless}*beta*C3+2.0{dimensionless}*alpha*C3);
    ode(C4, time) = 2.0{dimensionless}*alpha*C3+4.0{dimensionless}*beta*O+0.01{ms}*(4.0{dimensionless}*Kpcb*beta*I1-alpha*gamma*C4)+0.002{dimensionless}*(4.0{dimensionless}*beta*I2-Kpcf*C4)+4.0{ms}*beta*Kpcb*I3-(3.0{dimensionless}*beta*C4+alpha*C4+1.0{ms}*gamma*Kpcf*C4);
    ode(I1, time) = gamma*O+0.001{dimensionless}*(alpha*I3-Kpcf*I1)+0.01{ms}*(alpha*gamma*C4-4.0{dimensionless}*beta*Kpcf*I1)-Kpcb*I1;
    ode(I2, time) = 0.001{dimensionless}*(Kpcf*O-alpha*I2)+Kpcb*I3+0.002{dimensionless}*(Kpcf*C4-4.0{dimensionless}*beta*I2)-gamma*I2;
    ode(I3, time) = 0.001{dimensionless}*(Kpcf*I1-alpha*I3)+gamma*I2+1.0{ms}*gamma*Kpcf*C4-(4.0{ms}*beta*Kpcb*I3+Kpcb*I3);
    Kpcf = 13.0{mS_per_uF}*(1.0{dimensionless}-exp(-sqr(V+14.5{mV})/100.0{mV2}));
    ode(O, time) = alpha*C4+Kpcb*I1+0.001{dimensionless}*(alpha*I2-Kpcf*O)-(4.0{dimensionless}*beta*O+gamma*O);
    alpha = 0.4{mS_per_uF}*exp((V+12.0{mV})/10.0{mV})*(1.0{dimensionless}+0.7{dimensionless}*exp(-sqr(V+40.0{mV})/10.0{mV2})-0.75{dimensionless}*exp(-sqr(V+20.0{mV})/400.0{mV2}))/(1.0{dimensionless}+0.12{dimensionless}*exp((V+12.0{mV})/10.0{mV}));
    beta = 0.05{mS_per_uF}*exp(-(V+12.0{mV})/13.0{mV});
    driving_term_ohmic = V-E_CaL;
    gamma = Kpc_max*Cass/(Kpc_half+Cass);
    i_CaL = g_CaL*O*driving_term_ohmic;
  enddef;

  def comp calcium_activated_chloride_current as
    var Cai: uM {pub: in};
    var E_Cl: mV;
    var Km_Cl: uM {init: 10.0};
    var O_ClCa: dimensionless;
    var V: mV {pub: in};
    var g_ClCa: mS_per_uF {init: 10.0};
    var i_ClCa: A_per_F {pub: out};
    E_Cl = -40.0{mV};
    O_ClCa = 0.2{dimensionless}/(1.0{dimensionless}+exp(-(V-46.7{mV})/7.8{mV}));
    i_ClCa = g_ClCa*O_ClCa*Cai/(Cai+Km_Cl)*(V-E_Cl);
  enddef;

  def comp calcium_background_current as
    var Cai: uM {pub: in};
    var Cao: uM {pub: in};
    var E_CaN: mV;
    var F: C_per_mmol {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_Cab: mS_per_uF {init: 0.000367};
    var i_Cab: A_per_F {pub: out};
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    i_Cab = g_Cab*(V-E_CaN);
  enddef;

  def comp calcium_buffering as
    var Cai: uM {pub: in};
    var HTRPN_Ca: uM {pub: out, init: 125.29};
    var HTRPN_tot: uM {pub: out, init: 140.0};
    var LTRPN_Ca: uM {pub: out, init: 11.2684};
    var LTRPN_tot: uM {pub: out, init: 70.0};
    var k_minus_htrpn: mS_per_uF {pub: in};
    var k_minus_ltrpn: mS_per_uF {pub: in};
    var k_plus_htrpn: m3_per_s_per_mol_times_1e6 {pub: in};
    var k_plus_ltrpn: m3_per_s_per_mol_times_1e6 {pub: in};
    var time: ms {pub: in};
    ode(HTRPN_Ca, time) = k_plus_htrpn*Cai*(HTRPN_tot-HTRPN_Ca)-k_minus_htrpn*HTRPN_Ca;
    ode(LTRPN_Ca, time) = k_plus_ltrpn*Cai*(LTRPN_tot-LTRPN_Ca)-k_minus_ltrpn*LTRPN_Ca;
  enddef;

  def comp calcium_concentration as
    var Acap: cm2 {pub: in};
    var BJSR: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var Bi: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_flux_scaling_from_intrinsic_buffers
    var Bss: dimensionless;
    var CMDN_tot: uM {init: 50.0};
    var CSQN_tot: uM {init: 15000.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var CaJSR: uM {pub: out, init: 1299.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var CaNSR: uM {pub: out, init: 1299.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: uM {pub: out, init: 0.115001};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Cass: uM {pub: out, init: 0.115001};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mmol {pub: in};
    var J_leak: mol_per_m3_per_s {pub: in};
    var J_rel: mol_per_m3_per_s {pub: in};
    var J_tr: mol_per_m3_per_s {pub: in};
    var J_trpn: mol_per_m3_per_s {pub: in};
    var J_up: mol_per_m3_per_s {pub: in};
    var J_xfer: mol_per_m3_per_s {pub: in};
    var Km_CMDN: uM {init: 0.238};
    var Km_CSQN: uM {init: 800.0};
    var VJSR: uL {pub: in};
    var VNSR: uL {pub: in};
    var Vmyo: uL {pub: in};
    var Vss: uL {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_Cab: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_pCa: A_per_F {pub: in};
    var time: ms {pub: in};
    BJSR = pow(1.0{dimensionless}+CSQN_tot*Km_CSQN/sqr(Km_CSQN+CaJSR), -1.0{dimensionless});
    Bi = pow(1.0{dimensionless}+CMDN_tot*Km_CMDN/sqr(Km_CMDN+Cai), -1.0{dimensionless});
    Bss = pow(1.0{dimensionless}+CMDN_tot*Km_CMDN/sqr(Km_CMDN+Cass), -1.0{dimensionless});
    ode(CaJSR, time) = BJSR*(J_tr-J_rel);
    ode(CaNSR, time) = (J_up-J_leak)*Vmyo/VNSR-J_tr*VJSR/VNSR;
    ode(Cai, time) = Bi*(J_leak+J_xfer-(J_up+J_trpn+(i_Cab+i_pCa-2.0{dimensionless}*i_NaCa)*Acap*Cm/(2.0{dimensionless}*Vmyo*F)));
    ode(Cass, time) = Bss*(J_rel*VJSR/Vss-(J_xfer*Vmyo/Vss+i_CaL*Acap*Cm/(2.0{dimensionless}*Vss*F)));
  enddef;

  def comp calcium_fluxes as
    var CaJSR: uM {pub: in};
    var CaNSR: uM {pub: in};
    var Cai: uM {pub: in};
    var Cass: uM {pub: in};
    var HTRPN_Ca: uM {pub: in};
    var HTRPN_tot: uM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var J_leak: mol_per_m3_per_s {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var J_rel: mol_per_m3_per_s {pub: out};
    var J_tr: mol_per_m3_per_s {pub: out};
    var J_trpn: mol_per_m3_per_s {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var J_up: mol_per_m3_per_s {pub: out};
    var J_xfer: mol_per_m3_per_s {pub: out};
    var Km_up: uM {init: 0.5};
    var LTRPN_Ca: uM {pub: in};
    var LTRPN_tot: uM {pub: in};
    var P_O1: dimensionless {pub: in};
    var P_O2: dimensionless {pub: in};
    var P_RyR: dimensionless {init: 0.0};
    var V: mV {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_CaL_max: A_per_F {pub: in};
    var k_minus_htrpn: mS_per_uF {pub: out, init: 3.2e-05};
    var k_minus_ltrpn: mS_per_uF {pub: out, init: 0.0196};
    var k_plus_htrpn: m3_per_s_per_mol_times_1e6 {pub: out, init: 0.00237};
    var k_plus_ltrpn: m3_per_s_per_mol_times_1e6 {pub: out, init: 0.0327};
    var tau_tr: ms {init: 20.0};
    var tau_xfer: ms {init: 8.0};
    var time: ms {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var v1: mS_per_uF {init: 4.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var v2: mS_per_uF {init: 1.74e-05};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var v3: mol_per_m3_per_s {init: 0.45};
    J_leak = v2*(CaNSR-Cai);
    J_rel = v1*(P_O1+P_O2)*(CaJSR-Cass)*P_RyR;
    J_tr = (CaNSR-CaJSR)/tau_tr;
    J_trpn = k_plus_htrpn*Cai*(HTRPN_tot-HTRPN_Ca)+k_plus_ltrpn*Cai*(LTRPN_tot-LTRPN_Ca)-(k_minus_htrpn*HTRPN_Ca+k_minus_ltrpn*LTRPN_Ca);
    J_up = v3*sqr(Cai)/(sqr(Km_up)+sqr(Cai));
    J_xfer = (Cass-Cai)/tau_xfer;
    ode(P_RyR, time) = -0.04{mS_per_uF}*P_RyR-0.1{mS_per_uF}*i_CaL/i_CaL_max*exp(-sqr(V-5.0{mV})/648.0{mV2});
  enddef;

  def comp calcium_pump_current as
    var Cai: uM {pub: in};
    var Km_pCa: uM {init: 0.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var i_pCa: A_per_F {pub: out};
    var i_pCa_max: A_per_F {init: 1.0};
    i_pCa = i_pCa_max*sqr(Cai)/(sqr(Km_pCa)+sqr(Cai));
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp fast_sodium_current as
    var C_Na1: dimensionless {init: 2.79132000000000024e-04};
    var C_Na2: dimensionless {init: 0.020752};
    var C_Na3: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var I1_Na: dimensionless {init: 6.73345000000000052e-07};
    var I2_Na: dimensionless {init: 1.55786999999999992e-09};
    var IC_Na2: dimensionless {init: 0.0113879};
    var IC_Na3: dimensionless {init: 0.34278};
    var IF_Na: dimensionless {init: 1.53176000000000012e-04};
    var Ki: uM {pub: in};
    var Ko: uM {pub: in};
    var Nai: uM {pub: in};
    var Nao: uM {pub: in};
    var O_Na: dimensionless {init: 7.13482999999999984e-07};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var alpha_Na11: mS_per_uF;
    var alpha_Na12: mS_per_uF;
    var alpha_Na13: mS_per_uF;
    var alpha_Na2: mS_per_uF;
    var alpha_Na3: mS_per_uF;
    var alpha_Na4: mS_per_uF;
    var alpha_Na5: mS_per_uF;
    var beta_Na11: mS_per_uF;
    var beta_Na12: mS_per_uF;
    var beta_Na13: mS_per_uF;
    var beta_Na2: mS_per_uF;
    var beta_Na3: mS_per_uF;
    var beta_Na4: mS_per_uF;
    var beta_Na5: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: mS_per_uF {init: 13.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: mV {init: 0.0};
    var time: ms {pub: in};
    ode(C_Na1, time) = alpha_Na12*C_Na2+beta_Na13*O_Na+alpha_Na3*IF_Na-(beta_Na12*C_Na1+alpha_Na13*C_Na1+beta_Na3*C_Na1);
    ode(C_Na2, time) = alpha_Na11*C_Na3+beta_Na12*C_Na1+alpha_Na3*IC_Na2-(beta_Na11*C_Na2+alpha_Na12*C_Na2+beta_Na3*C_Na2);
    C_Na3 = 1.0{dimensionless}-(O_Na+C_Na1+C_Na2+IF_Na+I1_Na+I2_Na+IC_Na2+IC_Na3);
    E_Na = R*T/F*ln((0.9{dimensionless}*Nao+0.1{dimensionless}*Ko)/(0.9{dimensionless}*Nai+0.1{dimensionless}*Ki));
    ode(I1_Na, time) = alpha_Na4*IF_Na+beta_Na5*I2_Na-(beta_Na4*I1_Na+alpha_Na5*I1_Na);
    ode(I2_Na, time) = alpha_Na5*I1_Na-beta_Na5*I2_Na;
    ode(IC_Na2, time) = alpha_Na11*IC_Na3+beta_Na12*IF_Na+beta_Na3*C_Na2-(beta_Na11*IC_Na2+alpha_Na12*IC_Na2+alpha_Na3*IC_Na2);
    ode(IC_Na3, time) = beta_Na11*IC_Na2+beta_Na3*C_Na3-(alpha_Na11*IC_Na3+alpha_Na3*IC_Na3);
    ode(IF_Na, time) = alpha_Na2*O_Na+beta_Na3*C_Na1+beta_Na4*I1_Na+alpha_Na12*IC_Na2-(beta_Na2*IF_Na+alpha_Na3*IF_Na+alpha_Na4*IF_Na+beta_Na12*IF_Na);
    ode(O_Na, time) = alpha_Na13*C_Na1+beta_Na2*IF_Na-(beta_Na13*O_Na+alpha_Na2*O_Na);
    alpha_Na11 = 3.802{mS_per_uF}/(0.1027{dimensionless}*exp(-(V+2.5{mV})/17.0{mV})+0.2{dimensionless}*exp(-(V+2.5{mV})/150.0{mV}));
    alpha_Na12 = 3.802{mS_per_uF}/(0.1027{dimensionless}*exp(-(V+2.5{mV})/15.0{mV})+0.23{dimensionless}*exp(-(V+2.5{mV})/150.0{mV}));
    alpha_Na13 = 3.802{mS_per_uF}/(0.1027{dimensionless}*exp(-(V+2.5{mV})/12.0{mV})+0.25{dimensionless}*exp(-(V+2.5{mV})/150.0{mV}));
    alpha_Na2 = 1.0{mS_per_uF}/(0.188495{dimensionless}*exp(-(V+7.0{mV}-shift_INa_inact)/16.6{mV})+0.393956{dimensionless});
    alpha_Na3 = 7e-07{mS_per_uF}*exp(-(V+7.0{mV})/7.7{mV});
    alpha_Na4 = alpha_Na2/1000.0{dimensionless};
    alpha_Na5 = alpha_Na2/95000.0{dimensionless};
    beta_Na11 = 0.1917{mS_per_uF}*exp(-(V+2.5{mV})/20.3{mV});
    beta_Na12 = 0.2{mS_per_uF}*exp(-(V-2.5{mV})/20.3{mV});
    beta_Na13 = 0.22{mS_per_uF}*exp(-(V-7.5{mV})/20.3{mV});
    beta_Na2 = alpha_Na13*alpha_Na2*alpha_Na3/(beta_Na13*beta_Na3);
    beta_Na3 = 0.0084{mS_per_uF}+2e-05{per_mV_per_ms}*(V+7.0{mV});
    beta_Na4 = alpha_Na3;
    beta_Na5 = alpha_Na3/50.0{dimensionless};
    i_Na = g_Na*O_Na*(V-E_Na);
  enddef;

  def comp fast_transient_outward_potassium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var Ki: uM {pub: in};
    var Ko: uM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var alpha_a: mS_per_uF;
    var alpha_i: mS_per_uF;
    var ato_f: dimensionless {init: 2.65562999999999997e-03};
    var beta_a: mS_per_uF;
    var beta_i: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_Kto_f: mS_per_uF {init: 0.4067};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_Kto_f: A_per_F {pub: out};
    var ito_f: dimensionless {init: 0.999977};
    var time: ms {pub: in};
    E_K = R*T/F*ln(Ko/Ki);
    alpha_a = 0.18064{mS_per_uF}*exp(0.03577{per_mV}*(V+30.0{mV}));
    alpha_i = 0.000152{mS_per_uF}*exp(-(V+13.5{mV})/7.0{mV})/(0.0067083{dimensionless}*exp(-(V+33.5{mV})/7.0{mV})+1.0{dimensionless});
    ode(ato_f, time) = alpha_a*(1.0{dimensionless}-ato_f)-beta_a*ato_f;
    beta_a = 0.3956{mS_per_uF}*exp(-0.06237{per_mV}*(V+30.0{mV}));
    beta_i = 0.00095{mS_per_uF}*exp((V+33.5{mV})/7.0{mV})/(0.051335{dimensionless}*exp((V+33.5{mV})/7.0{mV})+1.0{dimensionless});
    i_Kto_f = g_Kto_f*pow(ato_f, 3.0{dimensionless})*ito_f*(V-E_K);
    ode(ito_f, time) = alpha_i*(1.0{dimensionless}-ito_f)-beta_i*ito_f;
  enddef;

  def comp membrane as
    var Acap: cm2 {pub: out, init: 0.0001534};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: uM {pub: out, init: 1800.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: uF_per_cm2 {pub: out, init: 1.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mmol {pub: out, init: 96.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: uM {pub: out, init: 5400.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: uM {pub: out, init: 140000.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: J_per_mol_per_K {pub: out, init: 8.314};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {pub: out, init: 298.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -82.4202};
    var VJSR: uL {pub: out, init: 1.2e-07};
    var VNSR: uL {pub: out, init: 2.098e-06};
    var Vmyo: uL {pub: out, init: 2.584e-05};
    var Vss: uL {pub: out, init: 1.485e-09};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: ms {init: 0.5};
    var i_CaL: A_per_F {pub: in};
    var i_Cab: A_per_F {pub: in};
    var i_ClCa: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Kss: A_per_F {pub: in};
    var i_Kto_f: A_per_F {pub: in};
    var i_Kto_s: A_per_F {pub: in};
    var i_Kur: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Nab: A_per_F {pub: in};
    var i_pCa: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_stim: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: ms {init: 100.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: ms {init: 71.43};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_end
    var stim_end: ms {init: 100000.0};
    var time: ms {pub: in};
    ode(V, time) = -(i_CaL+i_pCa+i_NaCa+i_Cab+i_Na+i_Nab+i_NaK+i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kur+i_Kss+i_Kr+i_ClCa+i_stim);
    i_stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*stim_amplitude;
    stim_amplitude = -80.0{A_per_F};
  enddef;

  def comp non_inactivating_steady_state_potassium_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var aKss: dimensionless {init: 4.17069000000000001e-04};
    var ass: dimensionless {pub: in};
    var g_Kss: mS_per_uF {init: 0.05};
    var iKss: dimensionless {init: 1.0};
    var i_Kss: A_per_F {pub: out};
    var tau_Kss: ms;
    var time: ms {pub: in};
    ode(aKss, time) = (ass-aKss)/tau_Kss;
    ode(iKss, time) = 0.0{mS_per_uF};
    i_Kss = g_Kss*aKss*iKss*(V-E_K);
    tau_Kss = 39.3{ms}*exp(-0.0862{per_mV}*V)+13.17{ms};
  enddef;

  def comp potassium_concentration as
    var Acap: cm2 {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: uM {pub: out, init: 143720.0};
    var Vmyo: uL {pub: in};
    var conc_clamp: dimensionless {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Kss: A_per_F {pub: in};
    var i_Kto_f: A_per_F {pub: in};
    var i_Kto_s: A_per_F {pub: in};
    var i_Kur: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(Ki, time) = -conc_clamp*(i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kss+i_Kur+i_Kr-2.0{dimensionless}*i_NaK)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp rapid_delayed_rectifier_potassium_current as
    var C_K0: dimensionless;
    var C_K1: dimensionless {init: 9.92512999999999989e-04};
    var C_K2: dimensionless {init: 6.41228999999999996e-04};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#rapid_delayed_rectifier_potassium_reversal_potential
    var E_Kr: mV;
    var F: C_per_mmol {pub: in};
    var I_K: dimensionless {init: 3.19128999999999973e-05};
    var Ki: uM {pub: in};
    var Ko: uM {pub: in};
    var Nai: uM {pub: in};
    var Nao: uM {pub: in};
    var O_K: dimensionless {init: 1.75298000000000001e-04};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var alpha_a0: mS_per_uF;
    var alpha_a1: mS_per_uF;
    var alpha_i: mS_per_uF;
    var beta_a0: mS_per_uF;
    var beta_a1: mS_per_uF;
    var beta_i: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: mS_per_uF {init: 0.078};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: A_per_F {pub: out};
    var kb: mS_per_uF {init: 0.036778};
    var kf: mS_per_uF {init: 0.023761};
    var time: ms {pub: in};
    C_K0 = 1.0{dimensionless}-(C_K1+C_K2+O_K+I_K);
    ode(C_K1, time) = alpha_a0*C_K0+kb*C_K2-(beta_a0*C_K1+kf*C_K1);
    ode(C_K2, time) = kf*C_K1+beta_a1*O_K-(kb*C_K2+alpha_a1*C_K2);
    E_Kr = R*T/F*ln((0.98{dimensionless}*Ko+0.02{dimensionless}*Nao)/(0.98{dimensionless}*Ki+0.02{dimensionless}*Nai));
    ode(I_K, time) = alpha_i*O_K-beta_i*I_K;
    ode(O_K, time) = alpha_a1*C_K2+beta_i*I_K-(beta_a1*O_K+alpha_i*O_K);
    alpha_a0 = 0.022348{mS_per_uF}*exp(0.01176{per_mV}*V);
    alpha_a1 = 0.013733{mS_per_uF}*exp(0.038198{per_mV}*V);
    alpha_i = 0.090821{mS_per_uF}*exp(0.023391{per_mV}*(V+5.0{mV}));
    beta_a0 = 0.047002{mS_per_uF}*exp(-0.0631{per_mV}*V);
    beta_a1 = 6.89e-05{mS_per_uF}*exp(-0.04178{per_mV}*V);
    beta_i = 0.006497{mS_per_uF}*exp(-0.03268{per_mV}*(V+5.0{mV}));
    i_Kr = g_Kr*O_K*(V-E_Kr);
  enddef;

  def comp ryanodine_receptors as
    var Cass: uM {pub: in};
    var P_C1: dimensionless;
    var P_C2: dimensionless {init: 1.67739999999999990e-04};
    var P_O1: dimensionless {pub: out, init: 1.49102000000000000e-05};
    var P_O2: dimensionless {pub: out, init: 9.51725999999999945e-11};
    var k_minus_a: mS_per_uF {init: 0.07125};
    var k_minus_b: mS_per_uF {init: 0.965};
    var k_minus_c: mS_per_uF {init: 0.0008};
    var k_plus_a: m12_per_s_per_mol4_times_1e15 {init: 0.006075};
    var k_plus_b: m9_per_s_per_mol3_times_1e12 {init: 0.00405};
    var k_plus_c: mS_per_uF {init: 0.009};
    var m: dimensionless {init: 3.0};
    var n: dimensionless {init: 4.0};
    var time: ms {pub: in};
    P_C1 = 1.0{dimensionless}-(P_C2+P_O1+P_O2);
    ode(P_C2, time) = k_plus_c*P_O1-k_minus_c*P_C2;
    ode(P_O1, time) = k_plus_a*pow(Cass, n)*P_C1+k_minus_b*P_O2+k_minus_c*P_C2-(k_minus_a*P_O1+k_plus_b*pow(Cass, m)*P_O1+k_plus_c*P_O1);
    ode(P_O2, time) = k_plus_b*pow(Cass, m)*P_O1-k_minus_b*P_O2;
  enddef;

  def comp slow_delayed_rectifier_potassium_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var alpha_n: mS_per_uF;
    var beta_n: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: mS_per_uF {init: 0.00575};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: A_per_F {pub: out};
    var nKs: dimensionless {init: 2.62753000000000010e-04};
    var time: ms {pub: in};
    alpha_n = 4.81332999999999970e-06{per_mV_per_ms}*(V+26.5{mV})/(1.0{dimensionless}-exp(-0.128{per_mV}*(V+26.5{mV})));
    beta_n = 9.53332999999999974e-05{mS_per_uF}*exp(-0.038{per_mV}*(V+26.5{mV}));
    i_Ks = g_Ks*sqr(nKs)*(V-E_K);
    ode(nKs, time) = alpha_n*(1.0{dimensionless}-nKs)-beta_n*nKs;
  enddef;

  def comp slow_transient_outward_potassium_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var ass: dimensionless {pub: out};
    var ato_s: dimensionless {init: 4.17069000000000001e-04};
    var g_Kto_s: mS_per_uF {init: 0.0};
    var i_Kto_s: A_per_F {pub: out};
    var iss: dimensionless {pub: out};
    var ito_s: dimensionless {init: 0.998543};
    var tau_ta_s: ms;
    var tau_ti_s: ms;
    var time: ms {pub: in};
    ass = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+22.5{mV})/7.7{mV}));
    ode(ato_s, time) = (ass-ato_s)/tau_ta_s;
    i_Kto_s = g_Kto_s*ato_s*ito_s*(V-E_K);
    iss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+45.2{mV})/5.7{mV}));
    ode(ito_s, time) = (iss-ito_s)/tau_ti_s;
    tau_ta_s = 0.493{ms}*exp(-0.0629{per_mV}*V)+2.058{ms};
    tau_ti_s = 270.0{ms}+1050.0{ms}/(1.0{dimensionless}+exp((V+45.2{mV})/5.7{mV}));
  enddef;

  def comp sodium_background_current as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    var g_Nab: mS_per_uF {init: 0.0026};
    var i_Nab: A_per_F {pub: out};
    i_Nab = g_Nab*(V-E_Na);
  enddef;

  def comp sodium_calcium_exchange_current as
    var Cai: uM {pub: in};
    var Cao: uM {pub: in};
    var F: C_per_mmol {pub: in};
    var K_mCa: uM {init: 1380.0};
    var K_mNa: uM {init: 87500.0};
    var Nai: uM {pub: in};
    var Nao: uM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var eta: dimensionless {init: 0.35};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var k_NaCa: A_per_F {init: 292.8};
    var k_sat: dimensionless {init: 0.1};
    i_NaCa = k_NaCa*1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless}))*1.0{dimensionless}/(K_mCa+Cao)*1.0{dimensionless}/(1.0{dimensionless}+k_sat*exp((eta-1.0{dimensionless})*V*F/(R*T)))*(exp(eta*V*F/(R*T))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V*F/(R*T))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  def comp sodium_concentration as
    var Acap: cm2 {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: uM {pub: out, init: 14237.1};
    var Vmyo: uL {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {pub: out, init: 1.0};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Nab: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(Nai, time) = -conc_clamp*(i_Na+i_Nab+3.0{dimensionless}*i_NaK+3.0{dimensionless}*i_NaCa)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp sodium_potassium_pump_current as
    var F: C_per_mmol {pub: in};
    var Km_Ko: uM {init: 1500.0};
    var Km_Nai: uM {init: 21000.0};
    var Ko: uM {pub: in};
    var Nai: uM {pub: in};
    var Nao: uM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var f_NaK: dimensionless;
    var i_NaK: A_per_F {pub: out};
    var i_NaK_max: A_per_F {init: 0.88};
    var sigma: dimensionless;
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK = i_NaK_max*f_NaK*1.0{dimensionless}/(1.0{dimensionless}+pow(Km_Nai/Nai, 1.5{dimensionless}))*Ko/(Ko+Km_Ko);
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67300.0{uM})-1.0{dimensionless});
  enddef;

  def comp time_independent_potassium_current as
    var E_K: mV {pub: in};
    var Ko: uM {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: mS_per_uF {init: 0.2938};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: A_per_F {pub: out};
    i_K1 = g_K1*Ko/(Ko+210.0{uM})*(V-E_K)/(1.0{dimensionless}+exp(0.0896{per_mV}*(V-E_K)));
  enddef;

  def comp ultra_rapidly_activating_delayed_rectifier_potassium_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var ass: dimensionless {pub: in};
    var aur: dimensionless {init: 4.17069000000000001e-04};
    var g_Kur: mS_per_uF {init: 0.16};
    var i_Kur: A_per_F {pub: out};
    var iss: dimensionless {pub: in};
    var iur: dimensionless {init: 0.998543};
    var tau_aur: ms;
    var tau_iur: ms;
    var time: ms {pub: in};
    ode(aur, time) = (ass-aur)/tau_aur;
    i_Kur = g_Kur*aur*iur*(V-E_K);
    ode(iur, time) = (iss-iur)/tau_iur;
    tau_aur = 0.493{ms}*exp(-0.0629{per_mV}*V)+2.058{ms};
    tau_iur = 1200.0{ms}-170.0{ms}/(1.0{dimensionless}+exp((V+45.2{mV})/5.7{mV}));
  enddef;
  def map between L_type_calcium_current and calcium_concentration for
    vars Cass and Cass;
    vars i_CaL and i_CaL;
  enddef;
  def map between L_type_calcium_current and calcium_fluxes for
    vars i_CaL and i_CaL;
    vars i_CaL_max and i_CaL_max;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and membrane for
    vars V and V;
    vars i_CaL and i_CaL;
  enddef;
  def map between calcium_activated_chloride_current and calcium_concentration for
    vars Cai and Cai;
  enddef;
  def map between calcium_activated_chloride_current and membrane for
    vars V and V;
    vars i_ClCa and i_ClCa;
  enddef;
  def map between calcium_background_current and calcium_concentration for
    vars Cai and Cai;
    vars i_Cab and i_Cab;
  enddef;
  def map between calcium_background_current and membrane for
    vars Cao and Cao;
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Cab and i_Cab;
  enddef;
  def map between calcium_buffering and calcium_concentration for
    vars Cai and Cai;
  enddef;
  def map between calcium_buffering and calcium_fluxes for
    vars HTRPN_Ca and HTRPN_Ca;
    vars HTRPN_tot and HTRPN_tot;
    vars LTRPN_Ca and LTRPN_Ca;
    vars LTRPN_tot and LTRPN_tot;
    vars k_minus_htrpn and k_minus_htrpn;
    vars k_minus_ltrpn and k_minus_ltrpn;
    vars k_plus_htrpn and k_plus_htrpn;
    vars k_plus_ltrpn and k_plus_ltrpn;
  enddef;
  def map between calcium_buffering and environment for
    vars time and time;
  enddef;
  def map between calcium_concentration and calcium_fluxes for
    vars CaJSR and CaJSR;
    vars CaNSR and CaNSR;
    vars Cai and Cai;
    vars Cass and Cass;
    vars J_leak and J_leak;
    vars J_rel and J_rel;
    vars J_tr and J_tr;
    vars J_trpn and J_trpn;
    vars J_up and J_up;
    vars J_xfer and J_xfer;
  enddef;
  def map between calcium_concentration and calcium_pump_current for
    vars Cai and Cai;
    vars i_pCa and i_pCa;
  enddef;
  def map between calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between calcium_concentration and membrane for
    vars Acap and Acap;
    vars Cm and Cm;
    vars F and F;
    vars VJSR and VJSR;
    vars VNSR and VNSR;
    vars Vmyo and Vmyo;
    vars Vss and Vss;
  enddef;
  def map between calcium_concentration and ryanodine_receptors for
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and sodium_calcium_exchange_current for
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between calcium_fluxes and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes and membrane for
    vars V and V;
  enddef;
  def map between calcium_fluxes and ryanodine_receptors for
    vars P_O1 and P_O1;
    vars P_O2 and P_O2;
  enddef;
  def map between calcium_pump_current and membrane for
    vars i_pCa and i_pCa;
  enddef;
  def map between environment and fast_sodium_current for
    vars time and time;
  enddef;
  def map between environment and fast_transient_outward_potassium_current for
    vars time and time;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and non_inactivating_steady_state_potassium_current for
    vars time and time;
  enddef;
  def map between environment and potassium_concentration for
    vars time and time;
  enddef;
  def map between environment and rapid_delayed_rectifier_potassium_current for
    vars time and time;
  enddef;
  def map between environment and ryanodine_receptors for
    vars time and time;
  enddef;
  def map between environment and slow_delayed_rectifier_potassium_current for
    vars time and time;
  enddef;
  def map between environment and slow_transient_outward_potassium_current for
    vars time and time;
  enddef;
  def map between environment and sodium_concentration for
    vars time and time;
  enddef;
  def map between environment and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars time and time;
  enddef;
  def map between fast_sodium_current and membrane for
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and sodium_concentration for
    vars Nai and Nai;
    vars i_Na and i_Na;
  enddef;
  def map between fast_transient_outward_potassium_current and membrane for
    vars F and F;
    vars Ko and Ko;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Kto_f and i_Kto_f;
  enddef;
  def map between fast_transient_outward_potassium_current and non_inactivating_steady_state_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and potassium_concentration for
    vars Ki and Ki;
    vars i_Kto_f and i_Kto_f;
  enddef;
  def map between fast_transient_outward_potassium_current and slow_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and slow_transient_outward_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between membrane and non_inactivating_steady_state_potassium_current for
    vars V and V;
    vars i_Kss and i_Kss;
  enddef;
  def map between membrane and potassium_concentration for
    vars Acap and Acap;
    vars Cm and Cm;
    vars F and F;
    vars Vmyo and Vmyo;
  enddef;
  def map between membrane and rapid_delayed_rectifier_potassium_current for
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and slow_transient_outward_potassium_current for
    vars V and V;
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Nab and i_Nab;
  enddef;
  def map between membrane and sodium_calcium_exchange_current for
    vars Cao and Cao;
    vars F and F;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between membrane and sodium_concentration for
    vars Acap and Acap;
    vars Cm and Cm;
    vars F and F;
    vars Vmyo and Vmyo;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars Ko and Ko;
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Kur and i_Kur;
  enddef;
  def map between non_inactivating_steady_state_potassium_current and potassium_concentration for
    vars i_Kss and i_Kss;
  enddef;
  def map between non_inactivating_steady_state_potassium_current and slow_transient_outward_potassium_current for
    vars ass and ass;
  enddef;
  def map between potassium_concentration and rapid_delayed_rectifier_potassium_current for
    vars Ki and Ki;
    vars i_Kr and i_Kr;
  enddef;
  def map between potassium_concentration and slow_delayed_rectifier_potassium_current for
    vars i_Ks and i_Ks;
  enddef;
  def map between potassium_concentration and slow_transient_outward_potassium_current for
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between potassium_concentration and sodium_concentration for
    vars conc_clamp and conc_clamp;
  enddef;
  def map between potassium_concentration and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
  enddef;
  def map between potassium_concentration and time_independent_potassium_current for
    vars i_K1 and i_K1;
  enddef;
  def map between potassium_concentration and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars i_Kur and i_Kur;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and sodium_concentration for
    vars Nai and Nai;
  enddef;
  def map between slow_transient_outward_potassium_current and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars ass and ass;
    vars iss and iss;
  enddef;
  def map between sodium_background_current and sodium_concentration for
    vars i_Nab and i_Nab;
  enddef;
  def map between sodium_calcium_exchange_current and sodium_concentration for
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sodium_concentration and sodium_potassium_pump_current for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
enddef;
