<?xml version='1.0' encoding='UTF-8'?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" name="cabo_2003_ical">
  <units name="A_per_F">
    <unit units="gram" multiplier="1000"/>
    <unit units="metre" exponent="2"/>
    <unit units="second" exponent="-4"/>
    <unit units="ampere" exponent="-1"/>
  </units>
  <units name="C_per_mmol">
    <unit units="second" multiplier="1000"/>
    <unit units="ampere"/>
    <unit units="mole" exponent="-1"/>
  </units>
  <units name="J_per_mol_per_K">
    <unit units="gram" multiplier="1000"/>
    <unit units="metre" exponent="2"/>
    <unit units="second" exponent="-2"/>
    <unit units="kelvin" exponent="-1"/>
    <unit units="mole" exponent="-1"/>
  </units>
  <units name="cm2">
    <unit units="metre" exponent="2" multiplier="0.0001"/>
  </units>
  <units name="cm_per_s">
    <unit units="metre" multiplier="0.01"/>
    <unit units="second" exponent="-1"/>
  </units>
  <units name="mF">
    <unit units="gram" exponent="-1" multiplier="1e-06"/>
    <unit units="metre" exponent="-2"/>
    <unit units="second" exponent="4"/>
    <unit units="ampere" exponent="2"/>
  </units>
  <units name="mM">
    <unit units="metre" exponent="-3"/>
    <unit units="mole"/>
  </units>
  <units name="mS_per_uF">
    <unit units="second" exponent="-1" multiplier="1000"/>
  </units>
  <units name="mV">
    <unit units="gram"/>
    <unit units="metre" exponent="2"/>
    <unit units="second" exponent="-3"/>
    <unit units="ampere" exponent="-1"/>
  </units>
  <units name="ms">
    <unit units="second" multiplier="0.001"/>
  </units>
  <units name="pF">
    <unit units="gram" exponent="-1" multiplier="1e-15"/>
    <unit units="metre" exponent="-2"/>
    <unit units="second" exponent="4"/>
    <unit units="ampere" exponent="2"/>
  </units>
  <units name="per_mV">
    <unit units="gram" exponent="-1"/>
    <unit units="metre" exponent="-2"/>
    <unit units="second" exponent="3"/>
    <unit units="ampere"/>
  </units>
  <units name="per_mV_per_ms">
    <unit units="gram" exponent="-1" multiplier="1000"/>
    <unit units="metre" exponent="-2"/>
    <unit units="second" exponent="2"/>
    <unit units="ampere"/>
  </units>
  <units name="s_A_per_m3">
    <unit units="metre" exponent="-3"/>
    <unit units="second"/>
    <unit units="ampere"/>
  </units>
  <units name="s_A_per_m3_times_1e3">
    <unit units="metre" exponent="-3" multiplier="1000"/>
    <unit units="second"/>
    <unit units="ampere"/>
  </units>
  <units name="uF">
    <unit units="gram" exponent="-1" multiplier="1e-09"/>
    <unit units="metre" exponent="-2"/>
    <unit units="second" exponent="4"/>
    <unit units="ampere" exponent="2"/>
  </units>
  <component name="ICa">
    <variable name="Cai" units="mM" public_interface="in"/>
    <variable name="Cao" units="mM" public_interface="in"/>
    <variable name="F" units="C_per_mmol" public_interface="in"/>
    <variable name="I_CaCa" units="A_per_F"/>
    <variable name="I_CaK" units="A_per_F"/>
    <variable name="I_CaNa" units="A_per_F"/>
    <variable name="Ki" units="mM" public_interface="in"/>
    <variable name="Ko" units="mM" public_interface="in"/>
    <variable name="Nai" units="mM" public_interface="in"/>
    <variable name="Nao" units="mM" public_interface="in"/>
    <variable name="Open_Prob" units="dimensionless" cmeta:id="Open_Prob"/>
    <variable name="P_Ca" units="cm_per_s" initial_value="0.0003"/>
    <variable name="P_K" units="cm_per_s" initial_value="1.93e-07"/>
    <variable name="P_Na" units="cm_per_s" initial_value="6.75e-07"/>
    <variable name="R" units="J_per_mol_per_K" public_interface="in"/>
    <variable name="T" units="kelvin" public_interface="in"/>
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="d" units="dimensionless" public_interface="in"/>
    <variable name="driving_term_ghk" units="s_A_per_m3" cmeta:id="driving_term_ghk"/>
    <variable name="driving_term_ghk_Ca" units="s_A_per_m3_times_1e3"/>
    <variable name="driving_term_ghk_K" units="s_A_per_m3_times_1e3"/>
    <variable name="driving_term_ghk_Na" units="s_A_per_m3_times_1e3"/>
    <variable name="f" units="dimensionless" public_interface="in"/>
    <variable name="f_Ca" units="dimensionless" public_interface="in"/>
    <variable name="gamma_Cai" units="dimensionless" initial_value="1.0"/>
    <variable name="gamma_Cao" units="dimensionless" initial_value="0.341"/>
    <variable name="gamma_Ki" units="dimensionless" initial_value="0.75"/>
    <variable name="gamma_Ko" units="dimensionless" initial_value="0.75"/>
    <variable name="gamma_Nai" units="dimensionless" initial_value="0.75"/>
    <variable name="gamma_Nao" units="dimensionless" initial_value="0.75"/>
    <variable name="i_Ca" units="A_per_F" cmeta:id="i_Ca"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>I_CaCa</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>P_Ca</ci>
              <cn cellml:units="cm2">1000.0</cn>
            </apply>
            <cn cellml:units="mF">1.0</cn>
          </apply>
          <ci>driving_term_ghk_Ca</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>I_CaK</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>P_K</ci>
              <cn cellml:units="cm2">1000.0</cn>
            </apply>
            <cn cellml:units="mF">1.0</cn>
          </apply>
          <ci>driving_term_ghk_K</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>I_CaNa</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>P_Na</ci>
              <cn cellml:units="cm2">1000.0</cn>
            </apply>
            <cn cellml:units="mF">1.0</cn>
          </apply>
          <ci>driving_term_ghk_Na</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Open_Prob</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <ci>d</ci>
            <ci>f</ci>
          </apply>
          <ci>f_Ca</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>driving_term_ghk</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <cn cellml:units="uF">1.0</cn>
              <cn cellml:units="cm2">1.0</cn>
            </apply>
            <apply>
              <plus/>
              <apply>
                <plus/>
                <ci>I_CaCa</ci>
                <ci>I_CaK</ci>
              </apply>
              <ci>I_CaNa</ci>
            </apply>
          </apply>
          <ci>P_Ca</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>driving_term_ghk_Ca</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <cn cellml:units="dimensionless">2.0</cn>
                    <cn cellml:units="dimensionless">2.0</cn>
                  </apply>
                  <ci>V</ci>
                </apply>
                <apply>
                  <power/>
                  <ci>F</ci>
                  <cn cellml:units="dimensionless">2.0</cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>R</ci>
                <ci>T</ci>
              </apply>
            </apply>
            <apply>
              <minus/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <ci>gamma_Cai</ci>
                  <ci>Cai</ci>
                </apply>
                <apply>
                  <exp/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2.0</cn>
                        <ci>V</ci>
                      </apply>
                      <ci>F</ci>
                    </apply>
                    <apply>
                      <times/>
                      <ci>R</ci>
                      <ci>T</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>gamma_Cao</ci>
                <ci>Cao</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2.0</cn>
                    <ci>V</ci>
                  </apply>
                  <ci>F</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>driving_term_ghk_K</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <cn cellml:units="dimensionless">2.0</cn>
                  </apply>
                  <ci>V</ci>
                </apply>
                <apply>
                  <power/>
                  <ci>F</ci>
                  <cn cellml:units="dimensionless">2.0</cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>R</ci>
                <ci>T</ci>
              </apply>
            </apply>
            <apply>
              <minus/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <ci>gamma_Ki</ci>
                  <ci>Ki</ci>
                </apply>
                <apply>
                  <exp/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <ci>V</ci>
                      </apply>
                      <ci>F</ci>
                    </apply>
                    <apply>
                      <times/>
                      <ci>R</ci>
                      <ci>T</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>gamma_Ko</ci>
                <ci>Ko</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <ci>V</ci>
                  </apply>
                  <ci>F</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>driving_term_ghk_Na</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <cn cellml:units="dimensionless">2.0</cn>
                  </apply>
                  <ci>V</ci>
                </apply>
                <apply>
                  <power/>
                  <ci>F</ci>
                  <cn cellml:units="dimensionless">2.0</cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>R</ci>
                <ci>T</ci>
              </apply>
            </apply>
            <apply>
              <minus/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <ci>gamma_Nai</ci>
                  <ci>Nai</ci>
                </apply>
                <apply>
                  <exp/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <ci>V</ci>
                      </apply>
                      <ci>F</ci>
                    </apply>
                    <apply>
                      <times/>
                      <ci>R</ci>
                      <ci>T</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>gamma_Nao</ci>
                <ci>Nao</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <ci>V</ci>
                  </apply>
                  <ci>F</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>i_Ca</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <apply>
              <times/>
              <apply>
                <divide/>
                <cn cellml:units="cm2">1.0</cn>
                <cn cellml:units="uF">1.0</cn>
              </apply>
              <ci>P_Ca</ci>
            </apply>
            <ci>Open_Prob</ci>
          </apply>
          <ci>driving_term_ghk</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ICa_d_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_d" units="mS_per_uF"/>
    <variable name="beta_d" units="mS_per_uF"/>
    <variable name="d" units="dimensionless" public_interface="out" initial_value=" 2.50653215966786014e-10"/>
    <variable name="d_infinity" units="dimensionless"/>
    <variable name="tau_d" units="ms"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_d</ci>
        <apply>
          <divide/>
          <ci>d_infinity</ci>
          <ci>tau_d</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_d</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <ci>d_infinity</ci>
          </apply>
          <ci>tau_d</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>d</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_d</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <ci>d</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>beta_d</ci>
            <ci>d</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>d_infinity</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <minus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">9.3</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">5.7</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>tau_d</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>d_infinity</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <apply>
                <exp/>
                <apply>
                  <divide/>
                  <apply>
                    <minus/>
                    <apply>
                      <plus/>
                      <ci>V</ci>
                      <cn cellml:units="mV">10.0</cn>
                    </apply>
                  </apply>
                  <cn cellml:units="mV">6.24</cn>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="per_mV_per_ms">0.035</cn>
            <apply>
              <plus/>
              <ci>V</ci>
              <cn cellml:units="mV">10.0</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ICa_f_Ca_gate">
    <variable name="Cai" units="mM" public_interface="in"/>
    <variable name="Km_Ca" units="mM" initial_value="0.0006"/>
    <variable name="f_Ca" units="dimensionless" public_interface="out"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>f_Ca</ci>
        <apply>
          <divide/>
          <ci>Km_Ca</ci>
          <apply>
            <plus/>
            <ci>Km_Ca</ci>
            <ci>Cai</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ICa_f_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_f" units="mS_per_uF"/>
    <variable name="beta_f" units="mS_per_uF"/>
    <variable name="f" units="dimensionless" public_interface="out" initial_value=" 9.21303768505480014e-01"/>
    <variable name="f_infinity" units="dimensionless"/>
    <variable name="tau_f" units="ms"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_f</ci>
        <apply>
          <divide/>
          <ci>f_infinity</ci>
          <ci>tau_f</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_f</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <ci>f_infinity</ci>
          </apply>
          <ci>tau_f</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>f</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_f</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <ci>f</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>beta_f</ci>
            <ci>f</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>f_infinity</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">19.7</cn>
                </apply>
                <cn cellml:units="mV">6.8</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>tau_f</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <apply>
              <times/>
              <cn cellml:units="mS_per_uF">0.012</cn>
              <apply>
                <exp/>
                <apply>
                  <times/>
                  <apply>
                    <minus/>
                    <cn cellml:units="dimensionless">1.0</cn>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <times/>
                      <cn cellml:units="per_mV">0.0337</cn>
                      <apply>
                        <minus/>
                        <ci>V</ci>
                        <cn cellml:units="mV">30.0</cn>
                      </apply>
                    </apply>
                    <cn cellml:units="dimensionless">2.0</cn>
                  </apply>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="mS_per_uF">0.012</cn>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Ionic_concentrations">
    <variable name="Cai" units="mM" public_interface="out" initial_value="0.00012" cmeta:id="Cai"/>
    <variable name="Cao" units="mM" public_interface="out" initial_value="2.0" cmeta:id="Cao"/>
    <variable name="Ki" units="mM" public_interface="out" initial_value="140.0" cmeta:id="Ki"/>
    <variable name="Ko" units="mM" public_interface="out" initial_value="4.0" cmeta:id="Ko"/>
    <variable name="Nai" units="mM" public_interface="out" initial_value="10.0" cmeta:id="Nai"/>
    <variable name="Nao" units="mM" public_interface="out" initial_value="138.0" cmeta:id="Nao"/>
  </component>
  <component name="cell">
    <variable name="Cm" units="pF" initial_value="153.4" cmeta:id="Cm"/>
    <variable name="F" units="C_per_mmol" public_interface="out" initial_value="96.4867"/>
    <variable name="FonRT" units="per_mV"/>
    <variable name="R" units="J_per_mol_per_K" public_interface="out" initial_value="8.3143"/>
    <variable name="T" units="kelvin" public_interface="out" initial_value="310.15"/>
    <variable name="V" units="mV" public_interface="out" cmeta:id="V"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>FonRT</ci>
        <apply>
          <divide/>
          <ci>F</ci>
          <apply>
            <times/>
            <ci>R</ci>
            <ci>T</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>V</ci>
        <apply>
          <minus/>
          <cn cellml:units="dimensionless">80.0</cn>
        </apply>
      </apply>
    </math>
  </component>
  <component name="environment">
    <variable name="time" units="ms" public_interface="out" cmeta:id="time"/>
  </component>
  <connection>
    <map_components component_1="ICa" component_2="ICa_d_gate"/>
    <map_variables variable_1="d" variable_2="d"/>
  </connection>
  <connection>
    <map_components component_1="ICa" component_2="ICa_f_Ca_gate"/>
    <map_variables variable_1="f_Ca" variable_2="f_Ca"/>
  </connection>
  <connection>
    <map_components component_1="ICa" component_2="ICa_f_gate"/>
    <map_variables variable_1="f" variable_2="f"/>
  </connection>
  <connection>
    <map_components component_1="ICa" component_2="Ionic_concentrations"/>
    <map_variables variable_1="Cai" variable_2="Cai"/>
    <map_variables variable_1="Cao" variable_2="Cao"/>
    <map_variables variable_1="Ki" variable_2="Ki"/>
    <map_variables variable_1="Ko" variable_2="Ko"/>
    <map_variables variable_1="Nai" variable_2="Nai"/>
    <map_variables variable_1="Nao" variable_2="Nao"/>
  </connection>
  <connection>
    <map_components component_1="ICa" component_2="cell"/>
    <map_variables variable_1="F" variable_2="F"/>
    <map_variables variable_1="R" variable_2="R"/>
    <map_variables variable_1="T" variable_2="T"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="ICa_d_gate" component_2="cell"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="ICa_d_gate" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="ICa_f_Ca_gate" component_2="Ionic_concentrations"/>
    <map_variables variable_1="Cai" variable_2="Cai"/>
  </connection>
  <connection>
    <map_components component_1="ICa_f_gate" component_2="cell"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="ICa_f_gate" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <rdf:RDF>
    <rdf:Description rdf:about="#Cai">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Cao">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Cm">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Ki">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Ko">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Nai">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Nao">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Open_Prob">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability"/>
    </rdf:Description>
    <rdf:Description rdf:about="#V">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage"/>
    </rdf:Description>
    <rdf:Description rdf:about="#driving_term_ghk">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term"/>
    </rdf:Description>
    <rdf:Description rdf:about="#i_Ca">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current"/>
    </rdf:Description>
    <rdf:Description rdf:about="#time">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time"/>
    </rdf:Description>
  </rdf:RDF>
</model>
