def model courtemanche_1998 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m3_s_per_mol_times_1e_minus_3 as
    unit metre {expo: 3.0, mult: 0.001};
    unit second;
    unit mole {expo: -1.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit pA as
    unit ampere {mult: 1e-12};
  enddef;
  def unit pF as
    unit gram {expo: -1.0, mult: 1e-15};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit per_m3_times_1e18 as
    unit metre {expo: -3.0, mult: 1000000000000000000};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit um3 as
    unit metre {expo: 3.0, mult: 1e-18};
  enddef;

  def comp Ca_buffers as
    var CMDN_max: mM {pub: out, init: 0.05};
    var CSQN_max: mM {pub: out, init: 10.0};
    var Ca_CMDN: mM;
    var Ca_CSQN: mM;
    var Ca_TRPN: mM;
    var Ca_i: mM {pub: in};
    var Ca_rel: mM {pub: in};
    var Km_CMDN: mM {pub: out, init: 0.00238};
    var Km_CSQN: mM {pub: out, init: 0.8};
    var Km_TRPN: mM {pub: out, init: 0.0005};
    var TRPN_max: mM {pub: out, init: 0.07};
    Ca_CMDN = CMDN_max*Ca_i/(Ca_i+Km_CMDN);
    Ca_CSQN = CSQN_max*Ca_rel/(Ca_rel+Km_CSQN);
    Ca_TRPN = TRPN_max*Ca_i/(Ca_i+Km_TRPN);
  enddef;

  def comp Ca_leak_current_by_the_NSR as
    var Ca_up: mM {pub: in};
    var Ca_up_max: mM {init: 15.0};
    var I_up_max: mM_per_ms {pub: in};
    var i_up_leak: mM_per_ms {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var leak_factor: dimensionless {init: 1.0};
    i_up_leak = leak_factor*I_up_max*Ca_up/Ca_up_max;
  enddef;

  def comp Ca_release_current_from_JSR as
    var Ca_i: mM {pub: in};
    var Ca_rel: mM {pub: in};
    var F: C_per_mmol {pub: in};
    var Fn: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var K_rel: mS_per_uF {init: 30.0};
    var V_rel: um3 {pub: in};
    var i_Ca_L: pA {pub: in};
    var i_NaCa: pA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: mM_per_ms {pub: out};
    var u: dimensionless {pub: in};
    var v: dimensionless {pub: in};
    var w: dimensionless {pub: in};
    Fn = 1000.0{m3_s_per_mol_times_1e_minus_3}*(1e-15{per_m3_times_1e18}*V_rel*i_rel-1e-15{per_m3_times_1e18}/(2.0{dimensionless}*F)*(0.5{dimensionless}*i_Ca_L-0.2{dimensionless}*i_NaCa));
    i_rel = K_rel*sqr(u)*v*w*(Ca_rel-Ca_i);
  enddef;

  def comp Ca_release_current_from_JSR_u_gate as
    var Fn: dimensionless {pub: in};
    var tau_u: ms {init: 8.0};
    var time: ms {pub: in};
    var u: dimensionless {pub: out, init: 2.35e-112};
    var u_infinity: dimensionless;
    ode(u, time) = (u_infinity-u)/tau_u;
    u_infinity = pow(1.0{dimensionless}+exp(-(Fn-3.41749999999999983e-13{dimensionless})/1.367e-15{dimensionless}), -1.0{dimensionless});
  enddef;

  def comp Ca_release_current_from_JSR_v_gate as
    var Fn: dimensionless {pub: in};
    var tau_v: ms;
    var time: ms {pub: in};
    var v: dimensionless {pub: out, init: 1.0};
    var v_infinity: dimensionless;
    tau_v = 1.91{ms}+2.09{ms}*pow(1.0{dimensionless}+exp(-(Fn-3.41749999999999983e-13{dimensionless})/1.367e-15{dimensionless}), -1.0{dimensionless});
    ode(v, time) = (v_infinity-v)/tau_v;
    v_infinity = 1.0{dimensionless}-pow(1.0{dimensionless}+exp(-(Fn-6.835e-14{dimensionless})/1.367e-15{dimensionless}), -1.0{dimensionless});
  enddef;

  def comp Ca_release_current_from_JSR_w_gate as
    var V: mV {pub: in};
    var tau_w: ms;
    var time: ms {pub: in};
    var w: dimensionless {pub: out, init: 0.9992};
    var w_infinity: dimensionless;
    tau_w = sel
      case abs(V-7.9{mV}) < 1e-10{mV}:
        6.0{ms}*0.2{dimensionless}/1.3{dimensionless};
      otherwise:
        6.0{ms}*(1.0{dimensionless}-exp(-(V-7.9{mV})/5.0{mV}))/((1.0{dimensionless}+0.3{dimensionless}*exp(-(V-7.9{mV})/5.0{mV}))*1.0{per_mV}*(V-7.9{mV}));
    endsel;
    ode(w, time) = (w_infinity-w)/tau_w;
    w_infinity = 1.0{dimensionless}-pow(1.0{dimensionless}+exp(-(V-40.0{mV})/17.0{mV}), -1.0{dimensionless});
  enddef;

  def comp Ca_uptake_current_by_the_NSR as
    var Ca_i: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var I_up_max: mM_per_ms {pub: out, init: 0.005};
    var K_up: mM {init: 0.00092};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var i_up: mM_per_ms {pub: out};
    i_up = I_up_max/(1.0{dimensionless}+K_up/Ca_i);
  enddef;

  def comp L_type_Ca_channel as
    var Cm: pF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var Open_prob: dimensionless;
    var V: mV {pub: in};
    var d: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_ohmic_driving_term
    var driving_term_ohmic: mV;
    var f: dimensionless {pub: in};
    var f_Ca: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_Ca_L: mS_per_uF {init: 0.12375};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L: pA {pub: out};
    Open_prob = d*f*f_Ca;
    driving_term_ohmic = V-65.0{mV};
    i_Ca_L = Cm*g_Ca_L*Open_prob*driving_term_ohmic;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {pub: out, init: 0.0001367};
    var d_infinity: dimensionless;
    var tau_d: ms;
    var time: ms {pub: in};
    ode(d, time) = (d_infinity-d)/tau_d;
    d_infinity = pow(1.0{dimensionless}+exp((V+10.0{mV})/(-8.0{mV})), -1.0{dimensionless});
    tau_d = sel
      case abs(V+10.0{mV}) < 1e-10{mV}:
        4.579{ms}/(1.0{dimensionless}+exp((V+10.0{mV})/(-6.24{mV})));
      otherwise:
        (1.0{dimensionless}-exp((V+10.0{mV})/(-6.24{mV})))/(0.035{per_mV_per_ms}*(V+10.0{mV})*(1.0{dimensionless}+exp((V+10.0{mV})/(-6.24{mV}))));
    endsel;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    var Ca_i: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var f_Ca: dimensionless {pub: out, init: 0.7755};
    var f_Ca_infinity: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate_tau
    var tau_f_Ca: ms {init: 2.0};
    var time: ms {pub: in};
    ode(f_Ca, time) = (f_Ca_infinity-f_Ca)/tau_f_Ca;
    f_Ca_infinity = pow(1.0{dimensionless}+Ca_i/0.00035{mM}, -1.0{dimensionless});
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {pub: out, init: 0.9996};
    var f_infinity: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: ms;
    var time: ms {pub: in};
    ode(f, time) = (f_infinity-f)/tau_f;
    f_infinity = exp(-(V+28.0{mV})/6.9{mV})/(1.0{dimensionless}+exp(-(V+28.0{mV})/6.9{mV}));
    tau_f = 9.0{ms}*pow(0.0197{dimensionless}*exp(-sqr(0.0337{per_mV})*sqr(V+10.0{mV}))+0.02{dimensionless}, -1.0{dimensionless});
  enddef;

  def comp Na_Ca_exchanger_current as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Cm: pF {pub: in};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var I_NaCa_max: A_per_F {init: 1600.0};
    var K_mCa: mM {init: 1.38};
    var K_mNa: mM {init: 87.5};
    var K_sat: dimensionless {init: 0.1};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var gamma: dimensionless {init: 0.35};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: pA {pub: out};
    i_NaCa = Cm*I_NaCa_max*(exp(gamma*F*V/(R*T))*pow(Na_i, 3.0{dimensionless})*Ca_o-exp((gamma-1.0{dimensionless})*F*V/(R*T))*pow(Na_o, 3.0{dimensionless})*Ca_i)/((pow(K_mNa, 3.0{dimensionless})+pow(Na_o, 3.0{dimensionless}))*(K_mCa+Ca_o)*(1.0{dimensionless}+K_sat*exp((gamma-1.0{dimensionless})*V*F/(R*T))));
  enddef;

  def comp background_currents as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Cm: pF {pub: in};
    var E_Ca: mV;
    var E_K: mV {pub: in};
    var E_Na: mV {pub: in};
    var F: C_per_mmol {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_B_Ca: mS_per_uF {init: 0.001131};
    var g_B_K: mS_per_uF {init: 0.0};
    var g_B_Na: mS_per_uF {init: 6.74437500000000015e-04};
    var i_B_Ca: pA {pub: out};
    var i_B_K: pA {pub: out};
    var i_B_Na: pA {pub: out};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_o/Ca_i);
    i_B_Ca = Cm*g_B_Ca*(V-E_Ca);
    i_B_K = Cm*g_B_K*(V-E_K);
    i_B_Na = Cm*g_B_Na*(V-E_Na);
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp fast_sodium_current as
    var Cm: pF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: mS_per_uF {init: 7.8};
    var h: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: pA {pub: out};
    var j: dimensionless {pub: in};
    var m: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {pub: out, init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: mV {pub: out, init: 0.0};
    E_Na = R*T/F*ln(Na_o/Na_i);
    i_Na = Cm*g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_h_gate as
    var V: mV {pub: in};
    var alpha_h: mS_per_uF;
    var beta_h: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {pub: out, init: 0.9649};
    var h_inf: dimensionless;
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var shift_INa_inact: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: ms;
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40.0{mV}:
        0.135{mS_per_uF}*exp((V+80.0{mV}-shift_INa_inact)/(-6.8{mV}));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    beta_h = sel
      case V < -40.0{mV}:
        3.56{mS_per_uF}*exp(0.079{per_mV}*(V-shift_INa_inact))+310000.0{mS_per_uF}*exp(0.35{per_mV}*(V-shift_INa_inact));
      otherwise:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp((V+10.66{mV}-shift_INa_inact)/(-11.1{mV}))));
    endsel;
    ode(h, time) = (h_inf-h)/tau_h;
    h_inf = alpha_h*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    tau_h = 1.0{dimensionless}/(alpha_h+beta_h);
  enddef;

  def comp fast_sodium_current_j_gate as
    var V: mV {pub: in};
    var alpha_j: mS_per_uF;
    var beta_j: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {pub: out, init: 0.9775};
    var j_inf: dimensionless;
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var shift_INa_inact: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: ms;
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40.0{mV}:
        (-127140.0{per_mV_per_ms}*exp(0.2444{per_mV}*(V-shift_INa_inact))-3.474e-05{per_mV_per_ms}*exp(-0.04391{per_mV}*(V-shift_INa_inact)))*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}-shift_INa_inact)));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    beta_j = sel
      case V < -40.0{mV}:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}-shift_INa_inact)));
      otherwise:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV}-shift_INa_inact)));
    endsel;
    ode(j, time) = (j_inf-j)/tau_j;
    j_inf = alpha_j*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(alpha_j+beta_j)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    tau_j = 1.0{dimensionless}/(alpha_j+beta_j);
  enddef;

  def comp fast_sodium_current_m_gate as
    var V: mV {pub: in};
    var alpha_m: mS_per_uF;
    var beta_m: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {pub: out, init: 0.002908};
    var m_inf: dimensionless;
    var tau_m: ms;
    var time: ms {pub: in};
    alpha_m = sel
      case V == -47.13{mV}:
        3.2{mS_per_uF};
      otherwise:
        0.32{per_mV_per_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    endsel;
    beta_m = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    ode(m, time) = (m_inf-m)/tau_m;
    m_inf = alpha_m/(alpha_m+beta_m);
    tau_m = 1.0{dimensionless}/(alpha_m+beta_m);
  enddef;

  def comp intracellular_ion_concentrations as
    var B1: mM_per_ms;
    var B2: dimensionless;
    var CMDN_max: mM {pub: in};
    var CSQN_max: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {pub: out, init: 0.0001013};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_rel: mM {pub: out, init: 1.488};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Ca_up: mM {pub: out, init: 1.488};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {pub: out, init: 139.0};
    var Km_CMDN: mM {pub: in};
    var Km_CSQN: mM {pub: in};
    var Km_TRPN: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {pub: out, init: 11.17};
    var TRPN_max: mM {pub: in};
    var V_cell: um3 {init: 20100.0};
    var V_i: um3;
    var V_rel: um3 {pub: out};
    var V_up: um3;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1.0};
    var i_B_Ca: pA {pub: in};
    var i_B_K: pA {pub: in};
    var i_B_Na: pA {pub: in};
    var i_CaP: pA {pub: in};
    var i_Ca_L: pA {pub: in};
    var i_K1: pA {pub: in};
    var i_Kr: pA {pub: in};
    var i_Ks: pA {pub: in};
    var i_Kur: pA {pub: in};
    var i_Na: pA {pub: in};
    var i_NaCa: pA {pub: in};
    var i_NaK: pA {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_to: pA {pub: in};
    var i_tr: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    var i_up_leak: mM_per_ms {pub: in};
    var time: ms {pub: in};
    B1 = (2.0{dimensionless}*i_NaCa-(i_CaP+i_Ca_L+i_B_Ca))/(2.0{dimensionless}*V_i*F)+(V_up*(i_up_leak-i_up)+i_rel*V_rel)/V_i;
    B2 = 1.0{dimensionless}+TRPN_max*Km_TRPN/sqr(Ca_i+Km_TRPN)+CMDN_max*Km_CMDN/sqr(Ca_i+Km_CMDN);
    ode(Ca_i, time) = B1/B2;
    ode(Ca_rel, time) = (i_tr-i_rel)*pow(1.0{dimensionless}+CSQN_max*Km_CSQN/sqr(Ca_rel+Km_CSQN), -1.0{dimensionless});
    ode(Ca_up, time) = i_up-(i_up_leak+i_tr*V_rel/V_up);
    ode(K_i, time) = conc_clamp*((2.0{dimensionless}*i_NaK-(i_K1+i_to+i_Kur+i_Kr+i_Ks+i_B_K))/(V_i*F));
    ode(Na_i, time) = conc_clamp*(-3.0{dimensionless}*i_NaK-(3.0{dimensionless}*i_NaCa+i_B_Na+i_Na))/(V_i*F);
    V_i = V_cell*0.68{dimensionless};
    V_rel = 0.0048{dimensionless}*V_cell;
    V_up = 0.0552{dimensionless}*V_cell;
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: pF {pub: out, init: 100.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mmol {pub: out, init: 96.4867};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: J_per_mol_per_K {pub: out, init: 8.3143};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {pub: out, init: 310.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -81.18};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: ms {init: 2.0};
    var i_B_Ca: pA {pub: in};
    var i_B_Na: pA {pub: in};
    var i_CaP: pA {pub: in};
    var i_Ca_L: pA {pub: in};
    var i_K1: pA {pub: in};
    var i_Kr: pA {pub: in};
    var i_Ks: pA {pub: in};
    var i_Kur: pA {pub: in};
    var i_Na: pA {pub: in};
    var i_NaCa: pA {pub: in};
    var i_NaK: pA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_st: pA;
    var i_to: pA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: ms {init: 100.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: ms {init: 1000.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: pA;
    var stim_end: ms {init: 50000.0};
    var time: ms {pub: in};
    ode(V, time) = -(i_Na+i_K1+i_to+i_Kur+i_Kr+i_Ks+i_B_Na+i_B_Ca+i_NaK+i_CaP+i_NaCa+i_Ca_L+i_st)/Cm;
    i_st = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*stim_amplitude;
    stim_amplitude = -2000.0{pA};
  enddef;

  def comp rapid_delayed_rectifier_K_current as
    var Cm: pF {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: mS_per_uF {init: 2.94117649999999994e-02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: pA {pub: out};
    var xr: dimensionless {pub: in};
    i_Kr = Cm*g_Kr*xr*(V-E_K)/(1.0{dimensionless}+exp((V+15.0{mV})/22.4{mV}));
  enddef;

  def comp rapid_delayed_rectifier_K_current_xr_gate as
    var V: mV {pub: in};
    var alpha_xr: mS_per_uF;
    var beta_xr: mS_per_uF;
    var tau_xr: ms;
    var time: ms {pub: in};
    var xr: dimensionless {pub: out, init: 3.296e-05};
    var xr_infinity: dimensionless;
    alpha_xr = sel
      case abs(V+14.1{mV}) < 1e-10{mV}:
        0.0015{mS_per_uF};
      otherwise:
        0.0003{per_mV_per_ms}*(V+14.1{mV})/(1.0{dimensionless}-exp((V+14.1{mV})/(-5.0{mV})));
    endsel;
    beta_xr = sel
      case abs(V-3.3328{mV}) < 1e-10{mV}:
        3.78361180000000004e-04{mS_per_uF};
      otherwise:
        7.38980000000000030e-05{per_mV_per_ms}*(V-3.3328{mV})/(exp((V-3.3328{mV})/5.1237{mV})-1.0{dimensionless});
    endsel;
    tau_xr = pow(alpha_xr+beta_xr, -1.0{dimensionless});
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
    xr_infinity = pow(1.0{dimensionless}+exp((V+14.1{mV})/(-6.5{mV})), -1.0{dimensionless});
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var Ca_i: mM {pub: in};
    var Cm: pF {pub: in};
    var i_CaP: pA {pub: out};
    var i_CaP_max: A_per_F {init: 0.275};
    i_CaP = Cm*i_CaP_max*Ca_i/(0.0005{mM}+Ca_i);
  enddef;

  def comp slow_delayed_rectifier_K_current as
    var Cm: pF {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: mS_per_uF {init: 1.29411759999999987e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: pA {pub: out};
    var xs: dimensionless {pub: in};
    i_Ks = Cm*g_Ks*sqr(xs)*(V-E_K);
  enddef;

  def comp slow_delayed_rectifier_K_current_xs_gate as
    var V: mV {pub: in};
    var alpha_xs: mS_per_uF;
    var beta_xs: mS_per_uF;
    var tau_xs: ms;
    var time: ms {pub: in};
    var xs: dimensionless {pub: out, init: 0.01869};
    var xs_infinity: dimensionless;
    alpha_xs = sel
      case abs(V-19.9{mV}) < 1e-10{mV}:
        0.00068{mS_per_uF};
      otherwise:
        4e-05{per_mV_per_ms}*(V-19.9{mV})/(1.0{dimensionless}-exp((V-19.9{mV})/(-17.0{mV})));
    endsel;
    beta_xs = sel
      case abs(V-19.9{mV}) < 1e-10{mV}:
        0.000315{mS_per_uF};
      otherwise:
        3.5e-05{per_mV_per_ms}*(V-19.9{mV})/(exp((V-19.9{mV})/9.0{mV})-1.0{dimensionless});
    endsel;
    tau_xs = 0.5{dimensionless}*pow(alpha_xs+beta_xs, -1.0{dimensionless});
    ode(xs, time) = (xs_infinity-xs)/tau_xs;
    xs_infinity = pow(1.0{dimensionless}+exp((V-19.9{mV})/(-12.7{mV})), -0.5{dimensionless});
  enddef;

  def comp sodium_potassium_pump as
    var Cm: pF {pub: in};
    var F: C_per_mmol {pub: in};
    var K_o: mM {pub: in};
    var Km_K_o: mM {init: 1.5};
    var Km_Na_i: mM {init: 10.0};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var f_NaK: dimensionless;
    var i_NaK: pA {pub: out};
    var i_NaK_max: A_per_F {init: 5.99338739999999981e-01};
    var sigma: dimensionless;
    f_NaK = pow(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*F*V/(R*T))+0.0365{dimensionless}*sigma*exp(-F*V/(R*T)), -1.0{dimensionless});
    i_NaK = Cm*i_NaK_max*f_NaK*1.0{dimensionless}/(1.0{dimensionless}+pow(Km_Na_i/Na_i, 1.5{dimensionless}))*K_o/(K_o+Km_K_o);
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Na_o/67.3{mM})-1.0{dimensionless});
  enddef;

  def comp standard_ionic_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {pub: out, init: 1.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {pub: out, init: 5.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {pub: out, init: 140.0};
  enddef;

  def comp time_independent_potassium_current as
    var Cm: pF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: mS_per_uF {init: 0.09};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: pA {pub: out};
    E_K = R*T/F*ln(K_o/K_i);
    i_K1 = Cm*g_K1*(V-E_K)/(1.0{dimensionless}+exp(0.07{per_mV}*(V+80.0{mV})));
  enddef;

  def comp transfer_current_from_NSR_to_JSR as
    var Ca_rel: mM {pub: in};
    var Ca_up: mM {pub: in};
    var i_tr: mM_per_ms {pub: out};
    var tau_tr: ms {init: 180.0};
    i_tr = (Ca_up-Ca_rel)/tau_tr;
  enddef;

  def comp transient_outward_K_current as
    var Cm: pF {pub: in};
    var E_K: mV {pub: in};
    var K_Q10: dimensionless {pub: out, init: 3.0};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: mS_per_uF {init: 0.1652};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: pA {pub: out};
    var oa: dimensionless {pub: in};
    var oi: dimensionless {pub: in};
    i_to = Cm*g_to*pow(oa, 3.0{dimensionless})*oi*(V-E_K);
  enddef;

  def comp transient_outward_K_current_oa_gate as
    var K_Q10: dimensionless {pub: in};
    var V: mV {pub: in};
    var alpha_oa: mS_per_uF;
    var beta_oa: mS_per_uF;
    var oa: dimensionless {pub: out, init: 0.03043};
    var oa_infinity: dimensionless;
    var tau_oa: ms;
    var time: ms {pub: in};
    alpha_oa = 0.65{mS_per_uF}*pow(exp((V-(-10.0{mV}))/(-8.5{mV}))+exp((V-(-10.0{mV})-40.0{mV})/(-59.0{mV})), -1.0{dimensionless});
    beta_oa = 0.65{mS_per_uF}*pow(2.5{dimensionless}+exp((V-(-10.0{mV})+72.0{mV})/17.0{mV}), -1.0{dimensionless});
    ode(oa, time) = (oa_infinity-oa)/tau_oa;
    oa_infinity = pow(1.0{dimensionless}+exp((V-(-10.0{mV})+10.47{mV})/(-17.54{mV})), -1.0{dimensionless});
    tau_oa = pow(alpha_oa+beta_oa, -1.0{dimensionless})/K_Q10;
  enddef;

  def comp transient_outward_K_current_oi_gate as
    var K_Q10: dimensionless {pub: in};
    var V: mV {pub: in};
    var alpha_oi: mS_per_uF;
    var beta_oi: mS_per_uF;
    var oi: dimensionless {pub: out, init: 0.9992};
    var oi_infinity: dimensionless;
    var tau_oi: ms;
    var time: ms {pub: in};
    alpha_oi = pow(18.53{ms}+1.0{ms}*exp((V-(-10.0{mV})+103.7{mV})/10.95{mV}), -1.0{dimensionless});
    beta_oi = pow(35.56{ms}+1.0{ms}*exp((V-(-10.0{mV})-8.74{mV})/(-7.44{mV})), -1.0{dimensionless});
    ode(oi, time) = (oi_infinity-oi)/tau_oi;
    oi_infinity = pow(1.0{dimensionless}+exp((V-(-10.0{mV})+33.1{mV})/5.3{mV}), -1.0{dimensionless});
    tau_oi = pow(alpha_oi+beta_oi, -1.0{dimensionless})/K_Q10;
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current as
    var Cm: pF {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var g_Kur: mS_per_uF;
    var i_Kur: pA {pub: out};
    var ua: dimensionless {pub: in};
    var ui: dimensionless {pub: in};
    g_Kur = 0.005{mS_per_uF}+0.05{mS_per_uF}/(1.0{dimensionless}+exp((V-15.0{mV})/(-13.0{mV})));
    i_Kur = Cm*g_Kur*pow(ua, 3.0{dimensionless})*ui*(V-E_K);
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ua_gate as
    var K_Q10: dimensionless {pub: in};
    var V: mV {pub: in};
    var alpha_ua: mS_per_uF;
    var beta_ua: mS_per_uF;
    var tau_ua: ms;
    var time: ms {pub: in};
    var ua: dimensionless {pub: out, init: 0.004966};
    var ua_infinity: dimensionless;
    alpha_ua = 0.65{mS_per_uF}*pow(exp((V-(-10.0{mV}))/(-8.5{mV}))+exp((V-(-10.0{mV})-40.0{mV})/(-59.0{mV})), -1.0{dimensionless});
    beta_ua = 0.65{mS_per_uF}*pow(2.5{dimensionless}+exp((V-(-10.0{mV})+72.0{mV})/17.0{mV}), -1.0{dimensionless});
    tau_ua = pow(alpha_ua+beta_ua, -1.0{dimensionless})/K_Q10;
    ode(ua, time) = (ua_infinity-ua)/tau_ua;
    ua_infinity = pow(1.0{dimensionless}+exp((V-(-10.0{mV})+20.3{mV})/(-9.6{mV})), -1.0{dimensionless});
  enddef;

  def comp ultrarapid_delayed_rectifier_K_current_ui_gate as
    var K_Q10: dimensionless {pub: in};
    var V: mV {pub: in};
    var alpha_ui: mS_per_uF;
    var beta_ui: mS_per_uF;
    var tau_ui: ms;
    var time: ms {pub: in};
    var ui: dimensionless {pub: out, init: 0.9986};
    var ui_infinity: dimensionless;
    alpha_ui = pow(21.0{ms}+1.0{ms}*exp((V-(-10.0{mV})-195.0{mV})/(-28.0{mV})), -1.0{dimensionless});
    beta_ui = 1.0{mS_per_uF}/exp((V-(-10.0{mV})-168.0{mV})/(-16.0{mV}));
    tau_ui = pow(alpha_ui+beta_ui, -1.0{dimensionless})/K_Q10;
    ode(ui, time) = (ui_infinity-ui)/tau_ui;
    ui_infinity = pow(1.0{dimensionless}+exp((V-(-10.0{mV})-109.45{mV})/27.48{mV}), -1.0{dimensionless});
  enddef;
  def map between Ca_buffers and intracellular_ion_concentrations for
    vars CMDN_max and CMDN_max;
    vars CSQN_max and CSQN_max;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
    vars Km_CMDN and Km_CMDN;
    vars Km_CSQN and Km_CSQN;
    vars Km_TRPN and Km_TRPN;
    vars TRPN_max and TRPN_max;
  enddef;
  def map between Ca_leak_current_by_the_NSR and Ca_uptake_current_by_the_NSR for
    vars I_up_max and I_up_max;
  enddef;
  def map between Ca_leak_current_by_the_NSR and intracellular_ion_concentrations for
    vars Ca_up and Ca_up;
    vars i_up_leak and i_up_leak;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_u_gate for
    vars Fn and Fn;
    vars u and u;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_v_gate for
    vars Fn and Fn;
    vars v and v;
  enddef;
  def map between Ca_release_current_from_JSR and Ca_release_current_from_JSR_w_gate for
    vars w and w;
  enddef;
  def map between Ca_release_current_from_JSR and L_type_Ca_channel for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between Ca_release_current_from_JSR and Na_Ca_exchanger_current for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Ca_release_current_from_JSR and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
    vars V_rel and V_rel;
    vars i_rel and i_rel;
  enddef;
  def map between Ca_release_current_from_JSR and membrane for
    vars F and F;
  enddef;
  def map between Ca_release_current_from_JSR_u_gate and environment for
    vars time and time;
  enddef;
  def map between Ca_release_current_from_JSR_v_gate and environment for
    vars time and time;
  enddef;
  def map between Ca_release_current_from_JSR_w_gate and environment for
    vars time and time;
  enddef;
  def map between Ca_release_current_from_JSR_w_gate and membrane for
    vars V and V;
  enddef;
  def map between Ca_uptake_current_by_the_NSR and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_up and i_up;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel and membrane for
    vars Cm and Cm;
    vars V and V;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel_d_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel_d_gate and membrane for
    vars V and V;
  enddef;
  def map between L_type_Ca_channel_f_Ca_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel_f_Ca_gate and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
  enddef;
  def map between L_type_Ca_channel_f_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel_f_gate and membrane for
    vars V and V;
  enddef;
  def map between Na_Ca_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger_current and membrane for
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between background_currents and fast_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_B_Ca and i_B_Ca;
    vars i_B_K and i_B_K;
    vars i_B_Na and i_B_Na;
  enddef;
  def map between background_currents and membrane for
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
  enddef;
  def map between background_currents and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between background_currents and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between environment and fast_sodium_current_h_gate for
    vars time and time;
  enddef;
  def map between environment and fast_sodium_current_j_gate for
    vars time and time;
  enddef;
  def map between environment and fast_sodium_current_m_gate for
    vars time and time;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and rapid_delayed_rectifier_K_current_xr_gate for
    vars time and time;
  enddef;
  def map between environment and slow_delayed_rectifier_K_current_xs_gate for
    vars time and time;
  enddef;
  def map between environment and transient_outward_K_current_oa_gate for
    vars time and time;
  enddef;
  def map between environment and transient_outward_K_current_oi_gate for
    vars time and time;
  enddef;
  def map between environment and ultrarapid_delayed_rectifier_K_current_ua_gate for
    vars time and time;
  enddef;
  def map between environment and ultrarapid_delayed_rectifier_K_current_ui_gate for
    vars time and time;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
  enddef;
  def map between fast_sodium_current and intracellular_ion_concentrations for
    vars Na_i and Na_i;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and membrane for
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and standard_ionic_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between fast_sodium_current_h_gate and membrane for
    vars V and V;
  enddef;
  def map between fast_sodium_current_j_gate and membrane for
    vars V and V;
  enddef;
  def map between fast_sodium_current_m_gate and membrane for
    vars V and V;
  enddef;
  def map between intracellular_ion_concentrations and membrane for
    vars F and F;
  enddef;
  def map between intracellular_ion_concentrations and rapid_delayed_rectifier_K_current for
    vars i_Kr and i_Kr;
  enddef;
  def map between intracellular_ion_concentrations and sarcolemmal_calcium_pump_current for
    vars Ca_i and Ca_i;
    vars i_CaP and i_CaP;
  enddef;
  def map between intracellular_ion_concentrations and slow_delayed_rectifier_K_current for
    vars i_Ks and i_Ks;
  enddef;
  def map between intracellular_ion_concentrations and sodium_potassium_pump for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between intracellular_ion_concentrations and time_independent_potassium_current for
    vars K_i and K_i;
    vars i_K1 and i_K1;
  enddef;
  def map between intracellular_ion_concentrations and transfer_current_from_NSR_to_JSR for
    vars Ca_rel and Ca_rel;
    vars Ca_up and Ca_up;
    vars i_tr and i_tr;
  enddef;
  def map between intracellular_ion_concentrations and transient_outward_K_current for
    vars i_to and i_to;
  enddef;
  def map between intracellular_ion_concentrations and ultrarapid_delayed_rectifier_K_current for
    vars i_Kur and i_Kur;
  enddef;
  def map between membrane and rapid_delayed_rectifier_K_current for
    vars Cm and Cm;
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and rapid_delayed_rectifier_K_current_xr_gate for
    vars V and V;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars Cm and Cm;
    vars i_CaP and i_CaP;
  enddef;
  def map between membrane and slow_delayed_rectifier_K_current for
    vars Cm and Cm;
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and slow_delayed_rectifier_K_current_xs_gate for
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and transient_outward_K_current for
    vars Cm and Cm;
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and transient_outward_K_current_oa_gate for
    vars V and V;
  enddef;
  def map between membrane and transient_outward_K_current_oi_gate for
    vars V and V;
  enddef;
  def map between membrane and ultrarapid_delayed_rectifier_K_current for
    vars Cm and Cm;
    vars V and V;
    vars i_Kur and i_Kur;
  enddef;
  def map between membrane and ultrarapid_delayed_rectifier_K_current_ua_gate for
    vars V and V;
  enddef;
  def map between membrane and ultrarapid_delayed_rectifier_K_current_ui_gate for
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_K_current and rapid_delayed_rectifier_K_current_xr_gate for
    vars xr and xr;
  enddef;
  def map between rapid_delayed_rectifier_K_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between slow_delayed_rectifier_K_current and slow_delayed_rectifier_K_current_xs_gate for
    vars xs and xs;
  enddef;
  def map between slow_delayed_rectifier_K_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between standard_ionic_concentrations and time_independent_potassium_current for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and transient_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and ultrarapid_delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oa_gate for
    vars K_Q10 and K_Q10;
    vars oa and oa;
  enddef;
  def map between transient_outward_K_current and transient_outward_K_current_oi_gate for
    vars K_Q10 and K_Q10;
    vars oi and oi;
  enddef;
  def map between transient_outward_K_current and ultrarapid_delayed_rectifier_K_current_ua_gate for
    vars K_Q10 and K_Q10;
  enddef;
  def map between transient_outward_K_current and ultrarapid_delayed_rectifier_K_current_ui_gate for
    vars K_Q10 and K_Q10;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ua_gate for
    vars ua and ua;
  enddef;
  def map between ultrarapid_delayed_rectifier_K_current and ultrarapid_delayed_rectifier_K_current_ui_gate for
    vars ui and ui;
  enddef;
enddef;
