def model decker_2009 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit L_per_F_per_ms as
    unit gram {mult: 1000};
    unit metre {expo: 5.0};
    unit second {expo: -5.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit cm as
    unit metre {mult: 0.01};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit dimensionless_times_1e_minus_3 as
    unit dimensionless {mult: 0.001};
  enddef;
  def unit g_mol4_per_m10_per_s4_per_A_times_1e3 as
    unit gram {mult: 1000};
    unit metre {expo: -10.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
    unit mole {expo: 4.0};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM_per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -5.0};
    unit second {expo: 2.0};
    unit ampere;
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol4_per_m12 as
    unit metre {expo: -12.0};
    unit mole {expo: 4.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit s3_A_mol_per_g_per_m5 as
    unit gram {expo: -1.0};
    unit metre {expo: -5.0};
    unit second {expo: 3.0};
    unit ampere;
    unit mole;
  enddef;
  def unit s_A_per_m3 as
    unit metre {expo: -3.0};
    unit second;
    unit ampere;
  enddef;
  def unit uF_mol_per_C as
    unit gram {expo: -1.0, mult: 1e-09};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
    unit mole;
  enddef;
  def unit uL as
    unit metre {expo: 3.0, mult: 1e-09};
  enddef;

  def comp CT_K_Cl as
    var CT_K_Cl: mM_per_ms {pub: out};
    var CT_K_Cl_max: mM_per_ms {init: 1.77e-05};
    var ECl: mV {pub: in};
    var EK: mV {pub: in};
    CT_K_Cl = CT_K_Cl_max*(EK-ECl)/(EK+87.8251{mV}-ECl);
  enddef;

  def comp CT_Na_Cl as
    var CT_Na_Cl: mM_per_ms {pub: out};
    var CT_Na_Cl_max: mM_per_ms {init: 2.46108000000000016e-05};
    var ECl: mV {pub: in};
    var ENa: mV {pub: in};
    CT_Na_Cl = CT_Na_Cl_max*pow(ENa-ECl, 4.0{dimensionless})/(pow(ENa-ECl, 4.0{dimensionless})+pow(87.8251{mV}, 4.0{dimensionless}));
  enddef;

  def comp Ca as
    var AF: uF_mol_per_C {pub: in};
    var BSLmax: mM {init: 1.124};
    var BSRmax: mM {init: 0.047};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_JSR: mM {pub: out, init: 9.93914988616979023e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Ca_NSR: mM {pub: out, init: 1.01475649943057000e+00};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {pub: out, init: 8.38749860095481967e-05};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_ss_CaL: mM {pub: out, init: 1.19239795531548000e-04};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#submembrane_space_calcium_concentration
    var Ca_ss_sr: mM {pub: out, init: 1.12967071024340005e-04};
    var ICaL_ICaL: A_per_F {pub: in};
    var ICab_ICab: A_per_F {pub: in};
    var INaCa_INaCa: A_per_F {pub: in};
    var INaCa_ss_sr: A_per_F {pub: in};
    var Idiff: mM_per_ms;
    var Idiff_ss: mM_per_ms;
    var Ileak_Ileak: mM_per_ms {pub: in};
    var IpCa_IpCa: A_per_F {pub: in};
    var Irel_Irel: mM_per_ms {pub: in};
    var Itr_Itr: mM_per_ms {pub: in};
    var Iup_Iup: mM_per_ms {pub: in};
    var KmBSL: mM {init: 0.0087};
    var KmBSR: mM {init: 0.00087};
    var Vjsr: uL {pub: in};
    var Vmyo: uL {pub: in};
    var Vnsr: uL {pub: in};
    var Vss_CaL: uL {pub: in};
    var Vss_sr: uL {pub: in};
    var bcsqn: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var bmyo: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_flux_scaling_from_intrinsic_buffers
    var bss_cal: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#submembrane_space_calcium_flux_scaling_from_intrinsic_buffers
    var bss_sr: dimensionless;
    var cmdn_bar: mM {init: 0.05};
    var csqnbar: mM {init: 10.0};
    var km_cmdn: mM {init: 0.00238};
    var km_trpn: mM {init: 0.0005};
    var kmcsqn: mM {init: 0.8};
    var tau_diff: ms {pub: out, init: 0.2};
    var tau_diff_ss: ms {init: 2.0};
    var time: ms {pub: in};
    var trpn_bar: mM {init: 0.07};
    ode(Ca_JSR, time) = bcsqn*(Itr_Itr-Irel_Irel);
    ode(Ca_NSR, time) = Iup_Iup-(Ileak_Ileak+Itr_Itr*Vjsr/Vnsr);
    ode(Ca_i, time) = bmyo*(-(ICab_ICab+IpCa_IpCa-2.0{dimensionless}*INaCa_INaCa)*AF/(Vmyo*2.0{dimensionless})+(Ileak_Ileak-Iup_Iup)*Vnsr/Vmyo+Idiff*Vss_sr/Vmyo);
    ode(Ca_ss_CaL, time) = -bss_cal*(ICaL_ICaL*AF/(2.0{dimensionless}*Vss_CaL)-Idiff_ss*Vss_sr/Vss_CaL);
    ode(Ca_ss_sr, time) = -bss_sr*(Idiff+Idiff_ss-(2.0{dimensionless}*INaCa_ss_sr*AF/(2.0{dimensionless}*Vss_sr)+Irel_Irel*Vjsr/Vss_sr));
    Idiff = (Ca_ss_sr-Ca_i)/tau_diff;
    Idiff_ss = (Ca_ss_sr-Ca_ss_CaL)/tau_diff_ss;
    bcsqn = 1.0{dimensionless}/(1.0{dimensionless}+kmcsqn*csqnbar/sqr(Ca_JSR+kmcsqn));
    bmyo = 1.0{dimensionless}/(1.0{dimensionless}+cmdn_bar*km_cmdn/sqr(Ca_i+km_cmdn)+km_trpn*trpn_bar/sqr(Ca_i+km_trpn));
    bss_cal = 1.0{dimensionless}/(1.0{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+Ca_ss_CaL)+BSLmax*KmBSL/sqr(KmBSL+Ca_ss_CaL));
    bss_sr = 1.0{dimensionless}/(1.0{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+Ca_ss_sr)+BSLmax*KmBSL/sqr(KmBSL+Ca_ss_sr));
  enddef;

  def comp CaMK_active as
    var CaMK_0: dimensionless {init: 0.05};
    var CaMK_active: dimensionless {pub: out};
    var CaMK_trap: dimensionless {init: 1.14911034744776992e-02};
    var Ca_ss_sr: mM {pub: in};
    var Km: mM {init: 0.0015};
    var alpha_CaMK: mS_per_uF {init: 0.05};
    var beta_CaMK: mS_per_uF {init: 0.00068};
    var time: ms {pub: in};
    CaMK_active = CaMK_0*(1.0{dimensionless}-CaMK_trap)/(1.0{dimensionless}+Km/Ca_ss_sr)+CaMK_trap;
    ode(CaMK_trap, time) = alpha_CaMK*CaMK_active*(CaMK_active-CaMK_trap)-beta_CaMK*CaMK_trap;
  enddef;

  def comp Cl as
    var AF: uF_mol_per_C {pub: in};
    var CT_K_Cl_CT_K_Cl: mM_per_ms {pub: in};
    var CT_Na_Cl_CT_Na_Cl: mM_per_ms {pub: in};
    var Cl_i: mM {pub: out, init: 2.06683603724431997e+01};
    var Cl_ss: mM {init: 2.06683605553302989e+01};
    var IClb_IClb: A_per_F {pub: in};
    var Idiff_Cl: mM_per_ms;
    var Ito2_Ito2: A_per_F {pub: in};
    var Vmyo: uL {pub: in};
    var Vss_sr: uL {pub: in};
    var tau_diff: ms {pub: in};
    var time: ms {pub: in};
    ode(Cl_i, time) = -(IClb_IClb*AF/(-1.0{dimensionless}*Vmyo)-(CT_Na_Cl_CT_Na_Cl+CT_K_Cl_CT_K_Cl+Idiff_Cl*Vss_sr/Vmyo));
    ode(Cl_ss, time) = -(Ito2_Ito2*AF/(-1.0{dimensionless}*Vss_sr)+Idiff_Cl);
    Idiff_Cl = (Cl_ss-Cl_i)/tau_diff;
  enddef;

  def comp ICaL as
    var ACT_infinity: dimensionless;
    var ACT_tau: ms;
    var C: dimensionless {init: 9.99969820932870013e-01};
    var CI: dimensionless {init: 5.89853003114132047e-11};
    var CI_star: dimensionless {init: 1.92370010170209980e-09};
    var C_star: dimensionless {init: 7.49117189549873021e-06};
    var Ca_o: mM {pub: in};
    var Ca_ss_CaL: mM {pub: in};
    var F: C_per_mol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var ICaL: A_per_F {pub: out};
    var ICaL_max: A_per_F;
    var IV_beta_infinity_star: dimensionless;
    var IV_beta_star: dimensionless;
    var IV_infinity: dimensionless;
    var IV_infinity_star: dimensionless;
    var IV_tau: ms;
    var IV_tau_star: ms;
    var O: dimensionless {init: 2.26882961412491001e-05};
    var OI: dimensionless {init: 8.01952813127322043e-17};
    var OI_star: dimensionless;
    var O_star: dimensionless {init: 1.23556404128517995e-10};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var Open_Prob: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var PCa: L_per_F_per_ms {init: 1.55520000000000002e-04};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vm: mV {pub: in};
    var alpha: mS_per_uF;
    var beta: mS_per_uF;
    var delta: mS_per_uF;
    var delta_I: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: s_A_per_m3;
    var gamma_Cai: dimensionless {init: 1.0};
    var gamma_Cao: dimensionless {init: 0.341};
    var theta: mS_per_uF {init: 1.0};
    var theta_I: mS_per_uF {init: 1e-06};
    var time: ms {pub: in};
    var x: mS_per_uF;
    var x_star: mS_per_uF;
    var y: mS_per_uF;
    var y_star: mS_per_uF;
    ACT_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(Vm-13.56{mV})/9.45{mV}));
    ACT_tau = 0.59{ms}+0.8{ms}*exp(0.052{per_mV}*(Vm+13.0{mV}))/(1.0{dimensionless}+exp(0.132{per_mV}*(Vm+13.0{mV})));
    ode(C, time) = -(alpha+delta+y)*C+beta*O+theta*C_star+x*CI;
    ode(CI, time) = -(alpha+delta_I+x)*CI+y*C+theta_I*CI_star+beta*OI;
    ode(CI_star, time) = -(alpha+theta_I+x_star)*CI_star+delta_I*CI+y_star*C_star+beta*OI_star;
    ode(C_star, time) = -(alpha+theta+y_star)*C_star+delta*C+beta*O_star+x_star*CI_star;
    ICaL = ICaL_max*Open_Prob;
    ICaL_max = PCa*driving_term_ghk;
    IV_beta_infinity_star = 25.0{dimensionless}-17.5{dimensionless}/(1.0{dimensionless}+pow(0.003{mM}/Ca_ss_CaL, 4.0{dimensionless}));
    IV_beta_star = 1.0{dimensionless}/(IV_beta_infinity_star*(1.0{dimensionless}+exp(-(Vm+0.213{mV})/10.807{mV})));
    IV_infinity = (1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+17.5{mV})/3.0{mV}))+0.25{dimensionless})/1.25{dimensionless};
    IV_infinity_star = (1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+17.5{mV})/3.0{mV}))+0.0001{dimensionless})/1.0001{dimensionless};
    IV_tau = 1.0{ms}/(1.0{dimensionless}/(24.828{dimensionless}*(1.0{dimensionless}+exp((Vm+49.1{mV})/10.349{mV})))+1.0{dimensionless}/(30.553{dimensionless}*(1.0{dimensionless}+exp(-(Vm+0.213{mV})/10.807{mV}))));
    IV_tau_star = 1.0{ms}/(1.0{dimensionless}/(24.828{dimensionless}*(1.0{dimensionless}+exp((Vm+49.1{mV})/10.349{mV})))+IV_beta_star);
    ode(O, time) = -(beta+delta+y)*O+alpha*C+theta*O_star+x*OI;
    ode(OI, time) = -(beta+delta_I+x)*OI+y*O+theta_I*OI_star+alpha*CI;
    OI_star = 1.0{dimensionless}-(C+O+C_star+O_star+CI+OI+CI_star);
    ode(O_star, time) = -(beta+theta+y_star)*O_star+delta*O+alpha*C_star+x_star*OI_star;
    Open_Prob = O+O_star;
    alpha = ACT_infinity/ACT_tau;
    beta = (1.0{dimensionless}-ACT_infinity)/ACT_tau;
    delta = 3.0{mS_per_uF}/(1.0{dimensionless}+pow(0.003{mM}/Ca_ss_CaL, 4.0{dimensionless}));
    delta_I = theta_I*x*y_star*delta/(y*x_star*theta);
    driving_term_ghk = 4.0{dimensionless}*Vm*sqr(F)/(R*T)*(gamma_Cai*Ca_ss_CaL*exp(2.0{dimensionless}*Vm*F/(R*T))-gamma_Cao*Ca_o)/(exp(2.0{dimensionless}*Vm*F/(R*T))-1.0{dimensionless});
    x = IV_infinity/IV_tau;
    x_star = IV_infinity_star/IV_tau_star;
    y = (1.0{dimensionless}-IV_infinity)/IV_tau;
    y_star = (1.0{dimensionless}-IV_infinity_star)/IV_tau_star;
  enddef;

  def comp ICab as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var F: C_per_mol {pub: in};
    var ICab: A_per_F {pub: out};
    var PCab: L_per_F_per_ms {init: 1.99507999999999989e-07};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vm: mV {pub: in};
    var gamma_Ca_i: dimensionless {init: 1.0};
    var gamma_Ca_o: dimensionless {init: 0.341};
    ICab = PCab*4.0{dimensionless}*Vm*sqr(F)/(R*T)*(gamma_Ca_i*Ca_i*exp(2.0{dimensionless}*Vm*F/(R*T))-gamma_Ca_o*Ca_o)/(exp(2.0{dimensionless}*Vm*F/(R*T))-1.0{dimensionless});
  enddef;

  def comp IClb as
    var ECl: mV {pub: in};
    var IClb: A_per_F {pub: out};
    var Vm: mV {pub: in};
    var gClb: mS_per_uF {init: 0.000225};
    IClb = gClb*(Vm-ECl);
  enddef;

  def comp IK1 as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var IK1: A_per_F {pub: out};
    var K1: dimensionless {pub: in};
    var K_o: mM {pub: in};
    var Vm: mV {pub: in};
    var gK1: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1_max: mS_per_uF {init: 0.5};
    IK1 = gK1*K1*(Vm-EK);
    gK1 = g_K1_max*sqrt(K_o/5.4{mM});
  enddef;

  def comp IK1_K1_gate as
    var EK: mV {pub: in};
    var K1: dimensionless {pub: out};
    var Vm: mV {pub: in};
    var alpha_k1: dimensionless;
    var beta_k1: dimensionless;
    K1 = alpha_k1/(alpha_k1+beta_k1);
    alpha_k1 = 1.02{dimensionless}/(1.0{dimensionless}+exp(0.2385{per_mV}*(Vm-EK-59.215{mV})));
    beta_k1 = (0.49124{dimensionless}*exp(0.08032{per_mV}*(Vm-EK+5.476{mV}))+exp(0.06175{per_mV}*(Vm-EK-594.31{mV})))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(Vm-EK+4.753{mV})));
  enddef;

  def comp IKp as
    var EK: mV {pub: in};
    var IKp: A_per_F {pub: out};
    var Kp: dimensionless;
    var Vm: mV {pub: in};
    var gKp: mS_per_uF {init: 0.00276};
    IKp = gKp*Kp*(Vm-EK);
    Kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{mV}-Vm)/5.98{mV}));
  enddef;

  def comp IKr as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var IKr: A_per_F {pub: out};
    var K_o: mM {pub: in};
    var Vm: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var gKr: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance_scaling_factor
    var gKr_max: mS_per_uF {init: 0.0138542};
    var r: dimensionless {pub: in};
    var xr: dimensionless {pub: in};
    IKr = gKr*xr*r*(Vm-EK);
    gKr = gKr_max*sqrt(K_o/5.4{mM});
  enddef;

  def comp IKr_r_gate as
    var Vm: mV {pub: in};
    var r: dimensionless {pub: out};
    r = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+10.0{mV})/15.4{mV}));
  enddef;

  def comp IKr_xr_gate as
    var Vm: mV {pub: in};
    var tau_xr: ms;
    var time: ms {pub: in};
    var xr: dimensionless {pub: out, init: 4.06959064407486026e-06};
    var xr_infinity: dimensionless;
    tau_xr = 1.0{ms}/(0.0006{per_mV}*(Vm-1.7384{mV})/(1.0{dimensionless}-exp(-0.136{per_mV}*(Vm-1.7384{mV})))+0.0003{per_mV}*(Vm+38.3608{mV})/(exp(0.1522{per_mV}*(Vm+38.3608{mV}))-1.0{dimensionless}));
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
    xr_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(Vm+10.085{mV})/4.25{mV}));
  enddef;

  def comp IKs as
    var C1: dimensionless {init: 4.76679784307081023e-01};
    var C10: dimensionless {init: 1.38769647384952999e-02};
    var C11: dimensionless {init: 3.71438476499171997e-03};
    var C12: dimensionless {init: 2.48553788631871006e-04};
    var C13: dimensionless {init: 6.44426171899078006e-04};
    var C14: dimensionless {init: 8.62495047666860979e-05};
    var C15: dimensionless {init: 1.12344645485892998e-05};
    var C2: dimensionless {init: 2.55181042718489015e-01};
    var C3: dimensionless {init: 5.12272866698557025e-02};
    var C4: dimensionless {init: 4.57058497361950006e-03};
    var C5: dimensionless {init: 1.52923243503507003e-04};
    var C6: dimensionless {init: 1.32814156809568013e-01};
    var C7: dimensionless {init: 5.33245721646180004e-02};
    var C8: dimensionless {init: 7.13656414955777998e-03};
    var C9: dimensionless {init: 3.18368292970148004e-04};
    var Ca_i: mM {pub: in};
    var EKs: mV {pub: in};
    var F: C_per_mol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var IKs: A_per_F {pub: out};
    var O1: dimensionless {init: 1.05292905767804992e-05};
    var O2: dimensionless;
    var OKs: dimensionless;
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vm: mV {pub: in};
    var alpha: mS_per_uF;
    var beta: mS_per_uF;
    var delta: mS_per_uF;
    var eta: mS_per_uF;
    var gKs: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var gKs_max: mS_per_uF {init: 0.0826};
    var gamma: mS_per_uF;
    var omega: mS_per_uF;
    var psi: mS_per_uF;
    var theta: mS_per_uF {init: 8.95383064110199939e-02};
    var time: ms {pub: in};
    ode(C1, time) = -4.0{dimensionless}*alpha*C1+beta*C2;
    ode(C10, time) = -(2.0{dimensionless}*alpha+2.0{dimensionless}*delta)*C10+beta*C11+gamma*C7;
    ode(C11, time) = -(alpha+beta+gamma+2.0{dimensionless}*delta)*C11+2.0{dimensionless}*alpha*C10+2.0{dimensionless}*beta*C12+2.0{dimensionless}*gamma*C8+3.0{dimensionless}*delta*C13;
    ode(C12, time) = -(2.0{dimensionless}*beta+2.0{dimensionless}*gamma+2.0{dimensionless}*delta)*C12+alpha*C11+3.0{dimensionless}*gamma*C9+3.0{dimensionless}*delta*C14;
    ode(C13, time) = -(alpha+3.0{dimensionless}*delta)*C13+beta*C14+gamma*C11;
    ode(C14, time) = -(beta+gamma+3.0{dimensionless}*delta)*C14+alpha*C13+2.0{dimensionless}*gamma*C12+4.0{dimensionless}*delta*C15;
    ode(C15, time) = -(4.0{dimensionless}*delta+theta)*C15+gamma*C14+eta*O1;
    ode(C2, time) = -(3.0{dimensionless}*alpha+beta+gamma)*C2+4.0{dimensionless}*alpha*C1+2.0{dimensionless}*beta*C3+delta*C6;
    ode(C3, time) = -(2.0{dimensionless}*alpha+2.0{dimensionless}*beta+2.0{dimensionless}*gamma)*C3+3.0{dimensionless}*alpha*C2+3.0{dimensionless}*beta*C4+delta*C7;
    ode(C4, time) = -(alpha+3.0{dimensionless}*beta+3.0{dimensionless}*gamma)*C4+2.0{dimensionless}*alpha*C3+4.0{dimensionless}*beta*C5+delta*C8;
    ode(C5, time) = -(4.0{dimensionless}*beta+4.0{dimensionless}*gamma)*C5+alpha*C4+delta*C9;
    ode(C6, time) = -(3.0{dimensionless}*alpha+delta)*C6+beta*C7+gamma*C2;
    ode(C7, time) = -(2.0{dimensionless}*alpha+beta+gamma+delta)*C7+3.0{dimensionless}*alpha*C6+2.0{dimensionless}*beta*C8+2.0{dimensionless}*gamma*C3+2.0{dimensionless}*delta*C10;
    ode(C8, time) = -(alpha+2.0{dimensionless}*beta+2.0{dimensionless}*gamma+delta)*C8+2.0{dimensionless}*alpha*C7+3.0{dimensionless}*beta*C9+3.0{dimensionless}*gamma*C4+2.0{dimensionless}*delta*C11;
    ode(C9, time) = -(3.0{dimensionless}*beta+3.0{dimensionless}*gamma+delta)*C9+alpha*C8+4.0{dimensionless}*gamma*C5+2.0{dimensionless}*delta*C12;
    IKs = gKs*OKs*(Vm-EKs);
    ode(O1, time) = -(eta+psi)*O1+omega*O2+theta*C15;
    O2 = 1.0{dimensionless}-(C1+C2+C3+C4+C5+C6+C7+C8+C9+C10+C11+C12+C13+C14+C15+O1);
    OKs = O1+O2;
    alpha = 1.48645979808599994e-02{mS_per_uF}*exp(2.98773012358800015e-02{dimensionless}*Vm*F/(R*T));
    beta = 8.39863121998299933e-02{mS_per_uF}*exp(-5.54610571266399982e-02{dimensionless}*Vm*F/(R*T));
    delta = 3.11732688739999996e-03{mS_per_uF}*exp(-4.26254519443760027e-01{dimensionless}*Vm*F/(R*T));
    eta = 7.73199009733099990e-02{mS_per_uF}*exp(-6.47261224887100001e-02{dimensionless}*Vm*F/(R*T));
    gKs = gKs_max*(1.0{dimensionless}+0.6{dimensionless}/(1.0{dimensionless}+pow(3.8e-05{mM}/Ca_i, 1.4{dimensionless})));
    gamma = 1.46006611831600002e-02{mS_per_uF}*exp(2.44649530996450010e-01{dimensionless}*Vm*F/(R*T));
    omega = 7.94054599586400012e-01{mS_per_uF}*exp(-8.01737819297699966e-02{dimensionless}*Vm*F/(R*T));
    psi = 5.86382286630140026e-01{mS_per_uF}*exp(2.82055543314960022e-01{dimensionless}*Vm*F/(R*T));
  enddef;

  def comp INa as
    var ENa: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var INa: A_per_F {pub: out};
    var Vm: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: mS_per_uF {init: 9.075};
    var h: dimensionless {pub: in};
    var j: dimensionless {pub: in};
    var m: dimensionless {pub: in};
    INa = g_Na*pow(m, 3.0{dimensionless})*h*j*(Vm-ENa);
  enddef;

  def comp INaCa as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_ss_sr: mM {pub: in};
    var F: C_per_mol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var INaCa: A_per_F {pub: out};
    var INaCa_cai: A_per_F;
    var INaCa_ss_sr: A_per_F {pub: out};
    var KmCa_act: mM {init: 0.000125};
    var KmCai: mM {init: 0.0036};
    var KmCao: mM {init: 1.3};
    var KmNai: mM {init: 12.3};
    var KmNao: mM {init: 87.5};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_ss_sr: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vm: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var Vmax: A_per_F {init: 4.5};
    var denom_1: dimensionless;
    var denom_2: dimensionless;
    var denom_3: mol4_per_m12;
    var denom_4: mol4_per_m12;
    var denom_ss_1: dimensionless;
    var denom_ss_2: dimensionless;
    var denom_ss_3: mol4_per_m12;
    var denom_ss_4: mol4_per_m12;
    var eta: dimensionless {init: 0.27};
    var ksat: dimensionless {init: 0.32};
    var num_ss: g_mol4_per_m10_per_s4_per_A_times_1e3;
    var numerator: g_mol4_per_m10_per_s4_per_A_times_1e3;
    INaCa = INaCa_cai+INaCa_ss_sr;
    INaCa_cai = numerator/(denom_1*denom_2*(denom_3+denom_4));
    INaCa_ss_sr = num_ss/(denom_ss_1*denom_ss_2*(denom_ss_3+denom_ss_4));
    denom_1 = 1.0{dimensionless}+sqr(KmCa_act/Ca_i);
    denom_2 = 1.0{dimensionless}+ksat*exp((eta-1.0{dimensionless})*Vm*F/(R*T));
    denom_3 = KmCao*pow(Na_i, 3.0{dimensionless})+pow(KmNao, 3.0{dimensionless})*Ca_i+pow(KmNai, 3.0{dimensionless})*Ca_o*(1.0{dimensionless}+Ca_i/KmCai);
    denom_4 = KmCai*pow(Na_o, 3.0{dimensionless})*(1.0{dimensionless}+pow(Na_i/KmNai, 3.0{dimensionless}))+pow(Na_i, 3.0{dimensionless})*Ca_o+pow(Na_o, 3.0{dimensionless})*Ca_i;
    denom_ss_1 = 1.0{dimensionless}+sqr(KmCa_act/Ca_ss_sr);
    denom_ss_2 = 1.0{dimensionless}+ksat*exp((eta-1.0{dimensionless})*Vm*F/(R*T));
    denom_ss_3 = KmCao*pow(Na_ss_sr, 3.0{dimensionless})+pow(KmNao, 3.0{dimensionless})*Ca_ss_sr+pow(KmNai, 3.0{dimensionless})*Ca_o*(1.0{dimensionless}+Ca_ss_sr/KmCai);
    denom_ss_4 = KmCai*pow(Na_o, 3.0{dimensionless})*(1.0{dimensionless}+pow(Na_ss_sr/KmNai, 3.0{dimensionless}))+pow(Na_ss_sr, 3.0{dimensionless})*Ca_o+pow(Na_o, 3.0{dimensionless})*Ca_ss_sr;
    num_ss = 0.2{dimensionless}*Vmax*(pow(Na_ss_sr, 3.0{dimensionless})*Ca_o*exp(eta*Vm*F/(R*T))-pow(Na_o, 3.0{dimensionless})*Ca_ss_sr*exp((eta-1.0{dimensionless})*Vm*F/(R*T)));
    numerator = 0.8{dimensionless}*Vmax*(pow(Na_i, 3.0{dimensionless})*Ca_o*exp(eta*Vm*F/(R*T))-pow(Na_o, 3.0{dimensionless})*Ca_i*exp((eta-1.0{dimensionless})*Vm*F/(R*T)));
  enddef;

  def comp INaK as
    var F: C_per_mol {pub: in};
    var INaK: A_per_F {pub: out};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var PK: dimensionless;
    var PNa: dimensionless;
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V_half: mV;
    var Vm: mV {pub: in};
    var fv: dimensionless;
    var ibarnak: A_per_F {init: 1.4};
    var kmko: mM {init: 1.5};
    var kmnai: mM {init: 2.6};
    var phi: dimensionless;
    var sigma: dimensionless {init: 1.0};
    INaK = ibarnak*fv*PK*PNa;
    PK = K_o/(K_o+kmko);
    PNa = pow(Na_i/(Na_i+kmnai), 3.0{dimensionless});
    V_half = -92.0{mV};
    fv = 1.0{dimensionless}/(1.0{dimensionless}+exp(-phi));
    phi = sigma*(Vm-V_half)*F/(R*T);
  enddef;

  def comp INaL as
    var ENa: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current
    var INaL: A_per_F {pub: out};
    var Vm: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current_conductance
    var gNaL: mS_per_uF {init: 0.0065};
    var hL: dimensionless {pub: in};
    var mL: dimensionless {pub: in};
    INaL = gNaL*pow(mL, 3.0{dimensionless})*hL*(Vm-ENa);
  enddef;

  def comp INaL_hL_gate as
    var Vm: mV {pub: in};
    var hL: dimensionless {pub: out, init: 3.19611809402137015e-01};
    var hL_infinity: dimensionless;
    var tau_hL: ms {init: 600.0};
    var time: ms {pub: in};
    ode(hL, time) = (hL_infinity-hL)/tau_hL;
    hL_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+91.0{mV})/6.1{mV}));
  enddef;

  def comp INaL_mL_gate as
    var Vm: mV {pub: in};
    var amL: mS_per_uF;
    var bmL: mS_per_uF;
    var mL: dimensionless {pub: out, init: 1.01841101248411996e-03};
    var time: ms {pub: in};
    amL = 0.32{per_mV_per_ms}*(Vm+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(Vm+47.13{mV})));
    bmL = 0.08{mS_per_uF}*exp(-Vm/11.0{mV});
    ode(mL, time) = amL*(1.0{dimensionless}-mL)-bmL*mL;
  enddef;

  def comp INa_h_gate as
    var Vm: mV {pub: in};
    var ah: mS_per_uF;
    var bh: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {pub: out, init: 9.91354143386886988e-01};
    var time: ms {pub: in};
    ah = sel
      case Vm >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        0.135{mS_per_uF}*exp((80.0{mV}+Vm)/(-6.8{mV}));
    endsel;
    bh = sel
      case Vm >= -40.0{mV}:
        1.0{mS_per_uF}/(0.13{dimensionless}*(1.0{dimensionless}+exp((Vm+10.66{mV})/(-11.1{mV}))));
      otherwise:
        3.56{mS_per_uF}*exp(0.079{per_mV}*Vm)+310000.0{mS_per_uF}*exp(0.35{per_mV}*Vm);
    endsel;
    ode(h, time) = ah*(1.0{dimensionless}-h)-bh*h;
  enddef;

  def comp INa_j_gate as
    var Vm: mV {pub: in};
    var aj: mS_per_uF;
    var bj: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {pub: out, init: 9.97090362512429995e-01};
    var time: ms {pub: in};
    aj = sel
      case Vm >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        (-127140.0{per_mV_per_ms}*exp(0.2444{per_mV}*Vm)-6.948e-05{per_mV_per_ms}*exp(-0.04391{per_mV}*Vm))*(Vm+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(Vm+79.23{mV})));
    endsel;
    bj = sel
      case Vm >= -40.0{mV}:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*Vm)/(1.0{dimensionless}+exp(-0.1{per_mV}*(Vm+32.0{mV})));
      otherwise:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*Vm)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(Vm+40.14{mV})));
    endsel;
    ode(j, time) = aj*(1.0{dimensionless}-j)-bj*j;
  enddef;

  def comp INa_m_gate as
    var Vm: mV {pub: in};
    var am: mS_per_uF;
    var bm: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {pub: out, init: 1.01841101248411996e-03};
    var time: ms {pub: in};
    am = 0.32{per_mV_per_ms}*(Vm+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(Vm+47.13{mV})));
    bm = 0.08{mS_per_uF}*exp(-Vm/11.0{mV});
    ode(m, time) = am*(1.0{dimensionless}-m)-bm*m;
  enddef;

  def comp INab as
    var F: C_per_mol {pub: in};
    var INab: A_per_F {pub: out};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var PNab: L_per_F_per_ms {init: 3.2e-09};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vm: mV {pub: in};
    var phi: dimensionless;
    INab = F*PNab*phi*(Na_i*exp(phi)-Na_o)/(exp(phi)-1.0{dimensionless});
    phi = F*Vm/(R*T);
  enddef;

  def comp Ileak as
    var Ca_NSR: mM {pub: in};
    var Ileak: mM_per_ms {pub: out};
    var nsrbar: mM {init: 15.0};
    Ileak = 0.004375{mM_per_ms}/nsrbar*Ca_NSR;
  enddef;

  def comp IpCa as
    var Ca_i: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var IpCa: A_per_F {pub: out};
    var KmpCa: mM {init: 0.0005};
    var gpCa: A_per_F {init: 0.0575};
    IpCa = gpCa*Ca_i/(KmpCa+Ca_i);
  enddef;

  def comp Irel as
    var CaMK_active_CaMK_active: dimensionless {pub: in};
    var Ca_JSR: mM {pub: in};
    var ICaL_ICaL: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var Irel: mM_per_ms {pub: out, init: 7.14227102027744981e-04};
    var K_beta: mM {init: 0.28};
    var Krel_infinity: mM {init: 1.0};
    var Krel_tau: mM {init: 0.0123};
    var alpha_rel: s3_A_mol_per_g_per_m5;
    var beta_0: ms {init: 4.75};
    var beta_tau: ms;
    var delta_beta_0: dimensionless {init: 1.0};
    var delta_beta_CaMK: dimensionless;
    var h_beta: dimensionless {init: 10.0};
    var h_rel: dimensionless {init: 8.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var kappa: mM_per_mV_per_ms {init: 0.1125};
    var rel_infinity: mM_per_ms;
    var tau_rel: ms;
    var time: ms {pub: in};
    ode(Irel, time) = -(rel_infinity+Irel)/tau_rel;
    alpha_rel = beta_tau*kappa;
    beta_tau = beta_0*(1.0{dimensionless}+delta_beta_CaMK);
    delta_beta_CaMK = delta_beta_0/(1.0{dimensionless}+pow(K_beta/(1.0{mM}*CaMK_active_CaMK_active), h_beta));
    rel_infinity = ICaL_ICaL*alpha_rel/(1.0{dimensionless}+pow(Krel_infinity/Ca_JSR, h_rel));
    tau_rel = beta_tau/(1.0{dimensionless}+Krel_tau/Ca_JSR);
  enddef;

  def comp Ito1 as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var Ito1: A_per_F {pub: out};
    var Ito1_a_gate_a: dimensionless {pub: in};
    var Vm: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var gto1: mS_per_uF {init: 0.497458};
    var i1f: dimensionless {pub: in};
    var i1s: dimensionless {pub: in};
    var rto1: dimensionless;
    Ito1 = gto1*pow(Ito1_a_gate_a, 3.0{dimensionless})*i1f*i1s*rto1*(Vm-EK);
    rto1 = exp(Vm/550.0{mV});
  enddef;

  def comp Ito1_a_gate as
    var Vm: mV {pub: in};
    var a: dimensionless {pub: out, init: 1.76776038804227995e-05};
    var a_infinity: dimensionless;
    var alpha_a: mS_per_uF;
    var beta_a: mS_per_uF;
    var tau_a: ms;
    var time: ms {pub: in};
    ode(a, time) = (a_infinity-a)/tau_a;
    a_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+9.437{mV})/(-7.133{mV})));
    alpha_a = 1.0{mS_per_uF}/(1.2089{dimensionless}*(1.0{dimensionless}+exp((Vm-18.4099{mV})/(-29.3814{mV}))));
    beta_a = 3.5{mS_per_uF}/(1.0{dimensionless}+exp((Vm+100.0{mV})/29.3814{mV}));
    tau_a = 1.0{dimensionless}/(alpha_a+beta_a);
  enddef;

  def comp Ito1_i1f_gate as
    var Vm: mV {pub: in};
    var alpha_i1f: mS_per_uF;
    var beta_i1f: mS_per_uF;
    var i1f: dimensionless {pub: out, init: 9.97976503910798951e-01};
    var time: ms {pub: in};
    alpha_i1f = 0.025{mS_per_uF}/(1.0{dimensionless}+exp((Vm+58.0{mV})/5.0{mV}));
    beta_i1f = 1.0{mS_per_uF}/(9.7953{dimensionless}*(1.0{dimensionless}+exp((Vm+19.0{mV})/(-9.0{mV}))));
    ode(i1f, time) = alpha_i1f*(1.0{dimensionless}-i1f)-beta_i1f*i1f;
  enddef;

  def comp Ito1_i1s_gate as
    var Vm: mV {pub: in};
    var alpha_i1s: mS_per_uF;
    var beta_i1s: mS_per_uF;
    var i1s: dimensionless {pub: out, init: 9.47581184798815035e-01};
    var time: ms {pub: in};
    alpha_i1s = 1.0{mS_per_uF}/(250.0{dimensionless}*(1.0{dimensionless}+exp((Vm+60.0{mV})/5.0{mV})));
    beta_i1s = 1.0{mS_per_uF}/(9.7953{dimensionless}*(1.0{dimensionless}+exp((Vm+19.0{mV})/(-9.0{mV}))));
    ode(i1s, time) = alpha_i1s*(1.0{dimensionless}-i1s)-beta_i1s*i1s;
  enddef;

  def comp Ito2 as
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var F: C_per_mol {pub: in};
    var Irel_Irel: mM_per_ms {pub: in};
    var Ito2: A_per_F {pub: out};
    var Ito2_max: A_per_F;
    var Ito2_max_scaling_factor: dimensionless {init: 1.0};
    var KCa_ito2: dimensionless;
    var PCl: L_per_F_per_ms {init: 9e-07};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vm: mV {pub: in};
    var i2f: dimensionless {pub: in};
    var kCa_ito2: mM_per_ms {init: 0.4};
    var zCl: dimensionless;
    Ito2 = Ito2_max*Ito2_max_scaling_factor*i2f*KCa_ito2;
    Ito2_max = PCl*sqr(zCl)*Vm*sqr(F)/(R*T)*(Cl_i-Cl_o*exp(Vm*F/(R*T)))/(1.0{dimensionless}-exp(Vm*F/(R*T)));
    KCa_ito2 = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+sqr(Irel_Irel/kCa_ito2));
    zCl = -1.0{dimensionless};
  enddef;

  def comp Ito2_i2f_gate as
    var Vm: mV {pub: in};
    var alpha_i2f: mS_per_uF;
    var beta_i2f: mS_per_uF;
    var i2f: dimensionless {pub: out, init: 9.96044894628275945e-01};
    var i2f_infinity: dimensionless;
    var tau_i2f: ms {init: 8.0};
    var time: ms {pub: in};
    alpha_i2f = 0.025{mS_per_uF}/(1.0{dimensionless}+exp((Vm+58.0{mV})/5.0{mV}));
    beta_i2f = 1.0{mS_per_uF}/(5.0{dimensionless}*(1.0{dimensionless}+exp((Vm+19.0{mV})/(-9.0{mV}))));
    ode(i2f, time) = (i2f_infinity-i2f)/tau_i2f;
    i2f_infinity = alpha_i2f/(alpha_i2f+beta_i2f);
  enddef;

  def comp Itr as
    var Ca_JSR: mM {pub: in};
    var Ca_NSR: mM {pub: in};
    var Itr: mM_per_ms {pub: out};
    var tautr: ms {init: 25.0};
    Itr = (Ca_NSR-Ca_JSR)/tautr;
  enddef;

  def comp Iup as
    var CaMK_active_CaMK_active: dimensionless {pub: in};
    var Ca_i: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var Iup: mM_per_ms {pub: out};
    var delta_iupCaMK: dimensionless;
    var delta_iupCaMK_bar: dimensionless {init: 0.75};
    var delta_kmPLB: mM;
    var delta_kmPLB_bar: mM {init: 0.00017};
    var iupbar: mM_per_ms {init: 0.004375};
    var kmCaMK: mM {init: 0.15};
    var kmup: mM {init: 0.00092};
    Iup = (delta_iupCaMK+1.0{dimensionless})*iupbar*Ca_i/(Ca_i+kmup-delta_kmPLB);
    delta_iupCaMK = delta_iupCaMK_bar*CaMK_active_CaMK_active*1.0{mM}/(kmCaMK+CaMK_active_CaMK_active*1.0{mM});
    delta_kmPLB = delta_kmPLB_bar*CaMK_active_CaMK_active*1.0{mM}/(kmCaMK+CaMK_active_CaMK_active*1.0{mM});
  enddef;

  def comp K as
    var AF: uF_mol_per_C {pub: in};
    var CT_K_Cl_CT_K_Cl: mM_per_ms {pub: in};
    var IK1_IK1: A_per_F {pub: in};
    var IKp_IKp: A_per_F {pub: in};
    var IKr_IKr: A_per_F {pub: in};
    var IKs_IKs: A_per_F {pub: in};
    var INaK_INaK: A_per_F {pub: in};
    var Ito1_Ito1: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {pub: out, init: 1.44907134343313999e+02};
    var Vmyo: uL {pub: in};
    var i_Stim: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(K_i, time) = -((IKs_IKs+IKr_IKr+IK1_IK1+Ito1_Ito1+IKp_IKp+i_Stim-2.0{dimensionless}*INaK_INaK)*AF/Vmyo-CT_K_Cl_CT_K_Cl);
  enddef;

  def comp Na as
    var AF: uF_mol_per_C {pub: in};
    var CT_Na_Cl_CT_Na_Cl: mM_per_ms {pub: in};
    var INaCa_INaCa: A_per_F {pub: in};
    var INaCa_ss_sr: A_per_F {pub: in};
    var INaK_INaK: A_per_F {pub: in};
    var INaL_INaL: A_per_F {pub: in};
    var INa_INa: A_per_F {pub: in};
    var INab_INab: A_per_F {pub: in};
    var Idiff_Na: mM_per_ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {pub: out, init: 8.01031392415196919e+00};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#submembrane_space_sodium_concentration
    var Na_ss_sr: mM {pub: out, init: 8.01033434859049009e+00};
    var Vmyo: uL {pub: in};
    var Vss_sr: uL {pub: in};
    var tau_diff: ms {pub: in};
    var time: ms {pub: in};
    Idiff_Na = (Na_ss_sr-Na_i)/tau_diff;
    ode(Na_i, time) = -((3.0{dimensionless}*INaCa_INaCa+3.0{dimensionless}*INaK_INaK+INa_INa+INaL_INaL+INab_INab)*AF/Vmyo-(CT_Na_Cl_CT_Na_Cl+Idiff_Na*Vss_sr/Vmyo));
    ode(Na_ss_sr, time) = -(3.0{dimensionless}*INaCa_ss_sr*AF/Vss_sr+Idiff_Na);
  enddef;

  def comp cell_geometry as
    var AF: uF_mol_per_C {pub: out};
    var Acap: cm2;
    var F: C_per_mol {pub: in};
    var Vjsr: uL {pub: out};
    var Vmyo: uL {pub: out};
    var Vnsr: uL {pub: out};
    var Vsr: uL;
    var Vss_CaL: uL {pub: out};
    var Vss_sr: uL {pub: out};
    var a: cm {init: 0.0011};
    var ageo: cm2;
    var l: cm {init: 0.01};
    var vcell: uL;
    AF = 1.0{uF_mol_per_C}*1.0{C_per_mol}*Acap/(F*1.0{cm2});
    Acap = ageo*2.0{dimensionless};
    Vjsr = vcell*0.0048{dimensionless};
    Vmyo = vcell*0.678{dimensionless};
    Vnsr = vcell*0.0552{dimensionless};
    Vsr = vcell*0.06{dimensionless};
    Vss_CaL = vcell*0.002{dimensionless};
    Vss_sr = vcell*0.02{dimensionless};
    ageo = 2.0{dimensionless}*3.14159265358979312e+00{dimensionless}*a*a+2.0{dimensionless}*3.14159265358979312e+00{dimensionless}*a*l;
    vcell = 1000.0{dimensionless_times_1e_minus_3}*3.14159265358979312e+00{dimensionless}*a*a*l;
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp membrane as
    var ICaL_ICaL: A_per_F {pub: in};
    var ICab_ICab: A_per_F {pub: in};
    var IClb_IClb: A_per_F {pub: in};
    var IK1_IK1: A_per_F {pub: in};
    var IKp_IKp: A_per_F {pub: in};
    var IKr_IKr: A_per_F {pub: in};
    var IKs_IKs: A_per_F {pub: in};
    var INaCa_INaCa: A_per_F {pub: in};
    var INaCa_ss_sr: A_per_F {pub: in};
    var INaK_INaK: A_per_F {pub: in};
    var INaL_INaL: A_per_F {pub: in};
    var INa_INa: A_per_F {pub: in};
    var INab_INab: A_per_F {pub: in};
    var IpCa_IpCa: A_per_F {pub: in};
    var Ito1_Ito1: A_per_F {pub: in};
    var Ito2_Ito2: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var Vm: mV {pub: out, init: -8.74947322902196021e+01};
    var caiont: A_per_F;
    var clont: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: A_per_F {pub: out};
    var kiont: A_per_F;
    var naiont: A_per_F;
    var pace: dimensionless {init: 0.0};
    var past: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {init: 1000.0};
    var time: ms {pub: in};
    ode(Vm, time) = -(naiont+kiont+caiont+clont);
    caiont = ICaL_ICaL+ICab_ICab+IpCa_IpCa-2.0{dimensionless}*(INaCa_INaCa+INaCa_ss_sr);
    clont = IClb_IClb+Ito2_Ito2;
    i_Stim = pace*stim_amplitude;
    kiont = IKr_IKr+IKs_IKs+IK1_IK1+IKp_IKp+(-2.0{dimensionless}*INaK_INaK)+Ito1_Ito1+i_Stim;
    naiont = INa_INa+3.0{dimensionless}*(INaCa_INaCa+INaCa_ss_sr)+3.0{dimensionless}*INaK_INaK+INaL_INaL+INab_INab;
    past = floor(time/stim_period)*stim_period;
    stim_amplitude = -80.0{A_per_F};
  enddef;

  def comp model_parameters as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {pub: out, init: 1.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_chloride_concentration
    var Cl_o: mM {pub: out, init: 100.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mol {pub: out, init: 96485.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {pub: out, init: 5.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {pub: out, init: 140.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: mJ_per_mol_per_K {pub: out, init: 8314.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {pub: out, init: 310.0};
  enddef;

  def comp reversal_potentials as
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#chloride_reversal_potential
    var ECl: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var EK: mV {pub: out};
    var EKs: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var ENa: mV {pub: out};
    var F: C_per_mol {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var prnak: dimensionless {init: 0.01833};
    ECl = -R*T/F*ln(Cl_o/Cl_i);
    EK = R*T/F*ln(K_o/K_i);
    EKs = R*T/F*ln((K_o+prnak*Na_o)/(K_i+prnak*Na_i));
    ENa = R*T/F*ln(Na_o/Na_i);
  enddef;
  def map between CT_K_Cl and Cl for
    vars CT_K_Cl and CT_K_Cl_CT_K_Cl;
  enddef;
  def map between CT_K_Cl and K for
    vars CT_K_Cl and CT_K_Cl_CT_K_Cl;
  enddef;
  def map between CT_K_Cl and reversal_potentials for
    vars ECl and ECl;
    vars EK and EK;
  enddef;
  def map between CT_Na_Cl and Cl for
    vars CT_Na_Cl and CT_Na_Cl_CT_Na_Cl;
  enddef;
  def map between CT_Na_Cl and Na for
    vars CT_Na_Cl and CT_Na_Cl_CT_Na_Cl;
  enddef;
  def map between CT_Na_Cl and reversal_potentials for
    vars ECl and ECl;
    vars ENa and ENa;
  enddef;
  def map between Ca and CaMK_active for
    vars Ca_ss_sr and Ca_ss_sr;
  enddef;
  def map between Ca and Cl for
    vars tau_diff and tau_diff;
  enddef;
  def map between Ca and ICaL for
    vars Ca_ss_CaL and Ca_ss_CaL;
    vars ICaL_ICaL and ICaL;
  enddef;
  def map between Ca and ICab for
    vars Ca_i and Ca_i;
    vars ICab_ICab and ICab;
  enddef;
  def map between Ca and IKs for
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca and INaCa for
    vars Ca_i and Ca_i;
    vars Ca_ss_sr and Ca_ss_sr;
    vars INaCa_INaCa and INaCa;
    vars INaCa_ss_sr and INaCa_ss_sr;
  enddef;
  def map between Ca and Ileak for
    vars Ca_NSR and Ca_NSR;
    vars Ileak_Ileak and Ileak;
  enddef;
  def map between Ca and IpCa for
    vars Ca_i and Ca_i;
    vars IpCa_IpCa and IpCa;
  enddef;
  def map between Ca and Irel for
    vars Ca_JSR and Ca_JSR;
    vars Irel_Irel and Irel;
  enddef;
  def map between Ca and Itr for
    vars Ca_JSR and Ca_JSR;
    vars Ca_NSR and Ca_NSR;
    vars Itr_Itr and Itr;
  enddef;
  def map between Ca and Iup for
    vars Ca_i and Ca_i;
    vars Iup_Iup and Iup;
  enddef;
  def map between Ca and Na for
    vars tau_diff and tau_diff;
  enddef;
  def map between Ca and cell_geometry for
    vars AF and AF;
    vars Vjsr and Vjsr;
    vars Vmyo and Vmyo;
    vars Vnsr and Vnsr;
    vars Vss_CaL and Vss_CaL;
    vars Vss_sr and Vss_sr;
  enddef;
  def map between Ca and environment for
    vars time and time;
  enddef;
  def map between CaMK_active and Irel for
    vars CaMK_active and CaMK_active_CaMK_active;
  enddef;
  def map between CaMK_active and Iup for
    vars CaMK_active and CaMK_active_CaMK_active;
  enddef;
  def map between CaMK_active and environment for
    vars time and time;
  enddef;
  def map between Cl and IClb for
    vars IClb_IClb and IClb;
  enddef;
  def map between Cl and Ito2 for
    vars Cl_i and Cl_i;
    vars Ito2_Ito2 and Ito2;
  enddef;
  def map between Cl and cell_geometry for
    vars AF and AF;
    vars Vmyo and Vmyo;
    vars Vss_sr and Vss_sr;
  enddef;
  def map between Cl and environment for
    vars time and time;
  enddef;
  def map between Cl and reversal_potentials for
    vars Cl_i and Cl_i;
  enddef;
  def map between ICaL and Irel for
    vars ICaL and ICaL_ICaL;
  enddef;
  def map between ICaL and environment for
    vars time and time;
  enddef;
  def map between ICaL and membrane for
    vars ICaL and ICaL_ICaL;
    vars Vm and Vm;
  enddef;
  def map between ICaL and model_parameters for
    vars Ca_o and Ca_o;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between ICab and membrane for
    vars ICab and ICab_ICab;
    vars Vm and Vm;
  enddef;
  def map between ICab and model_parameters for
    vars Ca_o and Ca_o;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between IClb and membrane for
    vars IClb and IClb_IClb;
    vars Vm and Vm;
  enddef;
  def map between IClb and reversal_potentials for
    vars ECl and ECl;
  enddef;
  def map between IK1 and IK1_K1_gate for
    vars K1 and K1;
  enddef;
  def map between IK1 and K for
    vars IK1 and IK1_IK1;
  enddef;
  def map between IK1 and membrane for
    vars IK1 and IK1_IK1;
    vars Vm and Vm;
  enddef;
  def map between IK1 and model_parameters for
    vars K_o and K_o;
  enddef;
  def map between IK1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IK1_K1_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between IK1_K1_gate and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKp and K for
    vars IKp and IKp_IKp;
  enddef;
  def map between IKp and membrane for
    vars IKp and IKp_IKp;
    vars Vm and Vm;
  enddef;
  def map between IKp and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKr and IKr_r_gate for
    vars r and r;
  enddef;
  def map between IKr and IKr_xr_gate for
    vars xr and xr;
  enddef;
  def map between IKr and K for
    vars IKr and IKr_IKr;
  enddef;
  def map between IKr and membrane for
    vars IKr and IKr_IKr;
    vars Vm and Vm;
  enddef;
  def map between IKr and model_parameters for
    vars K_o and K_o;
  enddef;
  def map between IKr and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKr_r_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between IKr_xr_gate and environment for
    vars time and time;
  enddef;
  def map between IKr_xr_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between IKs and K for
    vars IKs and IKs_IKs;
  enddef;
  def map between IKs and environment for
    vars time and time;
  enddef;
  def map between IKs and membrane for
    vars IKs and IKs_IKs;
    vars Vm and Vm;
  enddef;
  def map between IKs and model_parameters for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between IKs and reversal_potentials for
    vars EKs and EKs;
  enddef;
  def map between INa and INa_h_gate for
    vars h and h;
  enddef;
  def map between INa and INa_j_gate for
    vars j and j;
  enddef;
  def map between INa and INa_m_gate for
    vars m and m;
  enddef;
  def map between INa and Na for
    vars INa and INa_INa;
  enddef;
  def map between INa and membrane for
    vars INa and INa_INa;
    vars Vm and Vm;
  enddef;
  def map between INa and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between INaCa and Na for
    vars INaCa and INaCa_INaCa;
    vars INaCa_ss_sr and INaCa_ss_sr;
    vars Na_i and Na_i;
    vars Na_ss_sr and Na_ss_sr;
  enddef;
  def map between INaCa and membrane for
    vars INaCa and INaCa_INaCa;
    vars INaCa_ss_sr and INaCa_ss_sr;
    vars Vm and Vm;
  enddef;
  def map between INaCa and model_parameters for
    vars Ca_o and Ca_o;
    vars F and F;
    vars Na_o and Na_o;
    vars R and R;
    vars T and T;
  enddef;
  def map between INaK and K for
    vars INaK and INaK_INaK;
  enddef;
  def map between INaK and Na for
    vars INaK and INaK_INaK;
    vars Na_i and Na_i;
  enddef;
  def map between INaK and membrane for
    vars INaK and INaK_INaK;
    vars Vm and Vm;
  enddef;
  def map between INaK and model_parameters for
    vars F and F;
    vars K_o and K_o;
    vars R and R;
    vars T and T;
  enddef;
  def map between INaL and INaL_hL_gate for
    vars hL and hL;
  enddef;
  def map between INaL and INaL_mL_gate for
    vars mL and mL;
  enddef;
  def map between INaL and Na for
    vars INaL and INaL_INaL;
  enddef;
  def map between INaL and membrane for
    vars INaL and INaL_INaL;
    vars Vm and Vm;
  enddef;
  def map between INaL and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between INaL_hL_gate and environment for
    vars time and time;
  enddef;
  def map between INaL_hL_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between INaL_mL_gate and environment for
    vars time and time;
  enddef;
  def map between INaL_mL_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between INa_h_gate and environment for
    vars time and time;
  enddef;
  def map between INa_h_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between INa_j_gate and environment for
    vars time and time;
  enddef;
  def map between INa_j_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between INa_m_gate and environment for
    vars time and time;
  enddef;
  def map between INa_m_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between INab and Na for
    vars INab and INab_INab;
    vars Na_i and Na_i;
  enddef;
  def map between INab and membrane for
    vars INab and INab_INab;
    vars Vm and Vm;
  enddef;
  def map between INab and model_parameters for
    vars F and F;
    vars Na_o and Na_o;
    vars R and R;
    vars T and T;
  enddef;
  def map between IpCa and membrane for
    vars IpCa and IpCa_IpCa;
  enddef;
  def map between Irel and Ito2 for
    vars Irel and Irel_Irel;
  enddef;
  def map between Irel and environment for
    vars time and time;
  enddef;
  def map between Ito1 and Ito1_a_gate for
    vars Ito1_a_gate_a and a;
  enddef;
  def map between Ito1 and Ito1_i1f_gate for
    vars i1f and i1f;
  enddef;
  def map between Ito1 and Ito1_i1s_gate for
    vars i1s and i1s;
  enddef;
  def map between Ito1 and K for
    vars Ito1 and Ito1_Ito1;
  enddef;
  def map between Ito1 and membrane for
    vars Ito1 and Ito1_Ito1;
    vars Vm and Vm;
  enddef;
  def map between Ito1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between Ito1_a_gate and environment for
    vars time and time;
  enddef;
  def map between Ito1_a_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between Ito1_i1f_gate and environment for
    vars time and time;
  enddef;
  def map between Ito1_i1f_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between Ito1_i1s_gate and environment for
    vars time and time;
  enddef;
  def map between Ito1_i1s_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between Ito2 and Ito2_i2f_gate for
    vars i2f and i2f;
  enddef;
  def map between Ito2 and membrane for
    vars Ito2 and Ito2_Ito2;
    vars Vm and Vm;
  enddef;
  def map between Ito2 and model_parameters for
    vars Cl_o and Cl_o;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between Ito2_i2f_gate and environment for
    vars time and time;
  enddef;
  def map between Ito2_i2f_gate and membrane for
    vars Vm and Vm;
  enddef;
  def map between K and cell_geometry for
    vars AF and AF;
    vars Vmyo and Vmyo;
  enddef;
  def map between K and environment for
    vars time and time;
  enddef;
  def map between K and membrane for
    vars i_Stim and i_Stim;
  enddef;
  def map between K and reversal_potentials for
    vars K_i and K_i;
  enddef;
  def map between Na and cell_geometry for
    vars AF and AF;
    vars Vmyo and Vmyo;
    vars Vss_sr and Vss_sr;
  enddef;
  def map between Na and environment for
    vars time and time;
  enddef;
  def map between Na and reversal_potentials for
    vars Na_i and Na_i;
  enddef;
  def map between cell_geometry and model_parameters for
    vars F and F;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between model_parameters and reversal_potentials for
    vars Cl_o and Cl_o;
    vars F and F;
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars R and R;
    vars T and T;
  enddef;
enddef;
