def model generated_model as
  def unit uS as
    unit gram {expo: -1, mult: 1e-09};
    unit metre {expo: -2};
    unit second {expo: 3};
    unit ampere {expo: 2};
  enddef;
  def unit nA as
    unit ampere {expo: 1, mult: 1e-09};
  enddef;
  def unit mV as
    unit gram {expo: 1};
    unit metre {expo: 2};
    unit second {expo: -3};
    unit ampere {expo: -1};
  enddef;
  def unit per_mV as
    unit gram {expo: -1};
    unit metre {expo: -2};
    unit second {expo: 3};
    unit ampere {expo: 1};
  enddef;
  def unit m3_A_per_mol_times_1e_minus_9 as
    unit metre {expo: 3, mult: 1e-09};
    unit ampere {expo: 1};
    unit mole {expo: -1};
  enddef;
  def unit mM as
    unit metre {expo: -3};
    unit mole {expo: 1};
  enddef;
  def unit C_per_mol as
    unit second {expo: 1};
    unit ampere {expo: 1};
    unit mole {expo: -1};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram {expo: 1};
    unit metre {expo: 2};
    unit second {expo: -2};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit s2_A_per_g_per_m2 as
    unit gram {expo: -1};
    unit metre {expo: -2};
    unit second {expo: 2};
    unit ampere {expo: 1};
  enddef;
  def unit m3_per_s_per_mol as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit dimensionless_times_1e6 as
    unit dimensionless {expo: 1, mult: 1000000.0};
  enddef;
  def unit uL as
    unit metre {expo: 3, mult: 1e-09};
  enddef;
  def unit uF as
    unit gram {expo: -1, mult: 1e-09};
    unit metre {expo: -2};
    unit second {expo: 4};
    unit ampere {expo: 2};
  enddef;
  def unit dimensionless_times_1e9 as
    unit dimensionless {expo: 1, mult: 1000000000.0};
  enddef;

  def comp T_type_calcium_current as
    var g_CaT: uS {init: 0.085};
    var i_CaT: nA {pub: out};
    var dT: dimensionless {pub: in};
    var fT: dimensionless {pub: in};
    var E: mV {pub: in};
    var E_Ca: mV {pub: in};
    i_CaT = g_CaT*dT*fT*(E-E_Ca+75.0{mV});
  enddef;

  def comp T_type_calcium_current_d_gate as
    var dT: dimensionless {init: 0.001, pub: out};
    var dT_infinity: dimensionless;
    var tau_dT: second;
    var time: second {pub: in};
    var E: mV {pub: in};
    ode(dT, time) = (dT_infinity-dT)/tau_dT;
    dT_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+23.0{mV})/(-6.1{mV})));
    tau_dT = 0.0006{second}+0.0054{second}/(1.0{dimensionless}+exp(0.03{per_mV}*(E+100.0{mV})));
  enddef;

  def comp T_type_calcium_current_f_gate as
    var fT: dimensionless {init: 0.1328, pub: out};
    var fT_infinity: dimensionless;
    var tau_fT: second;
    var time: second {pub: in};
    var E: mV {pub: in};
    ode(fT, time) = (fT_infinity-fT)/tau_fT;
    fT_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+75.0{mV})/6.6{mV}));
    tau_fT = 0.001{second}+0.04{second}/(1.0{dimensionless}+exp(0.08{per_mV}*(E+65.0{mV})));
  enddef;

  def comp background_potassium_current as
    var KbK: m3_A_per_mol_times_1e_minus_9 {init: 7e-05};
    var i_bK: nA {pub: out};
    var F: C_per_mol {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var E: mV {pub: in};
    i_bK = KbK*pow(Ko/1.0{mM}, 0.41{dimensionless})*(Ki-Ko*exp(-E*F/(R*T)));
  enddef;

  def comp background_sodium_current as
    var g_Nab: uS {init: 0.00024};
    var i_bNa: nA {pub: out};
    var E: mV {pub: in};
    var E_Na: mV {pub: in};
    i_bNa = g_Nab*(E-E_Na);
  enddef;

  def comp constants as
    var F: C_per_mol {init: 9.64853414999999950e+04, pub: out};
    var R: mJ_per_mol_per_K {init: 8314.472, pub: out};
    var T: kelvin {init: 310.0, pub: out};
  enddef;

  def comp delayed_rectifying_potassium_current as
    var Kk: m3_A_per_mol_times_1e_minus_9 {init: 0.00026};
    var P_KNa: dimensionless {init: 0.035};
    var i_K: nA {pub: out};
    var i_KK: nA {pub: out};
    var i_KNa: nA {pub: out};
    var F: C_per_mol {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var x: dimensionless {pub: in};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var E: mV {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    i_K = i_KK+i_KNa;
    i_KK = x*Kk*pow(Ko/1.0{mM}, 0.59{dimensionless})*(Ki-Ko*exp(-E*F/(R*T)));
    i_KNa = x*Kk*P_KNa*pow(Ko/1.0{mM}, 0.59{dimensionless})*(Nai-Nao*exp(-E*F/(R*T)));
  enddef;

  def comp delayed_rectifying_potassium_current_x_gate as
    var tau_x: second;
    var x: dimensionless {init: 0.5682, pub: out};
    var x_infinity: dimensionless;
    var E: mV {pub: in};
    var time: second {pub: in};
    tau_x = 1.0{second}/(17.0{dimensionless}*exp(0.0398{per_mV}*E)+0.211{dimensionless}*exp(-0.051{per_mV}*E));
    ode(x, time) = (x_infinity-x)/tau_x;
    x_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+25.1{mV})/(-7.4{mV})));
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp fast_sodium_current as
    var g_Na: uS {init: 0.25};
    var i_Na: nA {pub: out};
    var h: dimensionless {pub: in};
    var m: dimensionless {pub: in};
    var E: mV {pub: in};
    var E_Na: mV {pub: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*(E-E_Na);
  enddef;

  def comp fast_sodium_current_h_gate as
    var alpha_h: becquerel;
    var beta_h: becquerel;
    var h: dimensionless {init: 0.0087, pub: out};
    var E: mV {pub: in};
    var time: second {pub: in};
    alpha_h = 32.4{becquerel}*exp(-0.14{per_mV}*(E+93.4{mV}));
    beta_h = 709.0{becquerel}/(1.0{dimensionless}+4.2{dimensionless}*exp(-0.06{per_mV}*(E+45.4{mV})));
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_m_gate as
    var alpha_m: becquerel;
    var beta_m: becquerel;
    var m: dimensionless {init: 0.0139, pub: out};
    var E: mV {pub: in};
    var time: second {pub: in};
    alpha_m = 200.0{s2_A_per_g_per_m2}*(E+34.3{mV})/(1.0{dimensionless}-exp(-0.09{per_mV}*(E+34.3{mV})));
    beta_m = 8000.0{becquerel}*exp(-0.15{per_mV}*(E+56.2{mV}));
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp hyperpolarising_activated_current as
    var Kmf: mM {init: 10.3};
    var g_fK: uS {init: 0.0135};
    var g_fNa: uS {init: 0.0081};
    var i_f: nA {pub: out};
    var i_fK: nA {pub: out};
    var i_fNa: nA {pub: out};
    var y: dimensionless {pub: in};
    var Ko: mM {pub: in};
    var E: mV {pub: in};
    var E_K: mV {pub: in};
    var E_Na: mV {pub: in};
    i_f = i_fK+i_fNa;
    i_fK = y*pow(Ko/(Ko+Kmf), 1.83{dimensionless})*g_fK*(E-E_K);
    i_fNa = y*pow(Ko/(Ko+Kmf), 1.83{dimensionless})*g_fNa*(E-E_Na);
  enddef;

  def comp hyperpolarising_activated_current_y_gate as
    var alpha_y: becquerel;
    var beta_y: becquerel;
    var y: dimensionless {init: 0.0287, pub: out};
    var E: mV {pub: in};
    var time: second {pub: in};
    alpha_y = 0.36{s2_A_per_g_per_m2}*(E+137.8{mV})/(exp(0.066{per_mV}*(E+137.8{mV}))-1.0{dimensionless});
    beta_y = 0.1{s2_A_per_g_per_m2}*(E+76.3{mV})/(1.0{dimensionless}-exp(-0.21{per_mV}*(E+76.3{mV})));
    ode(y, time) = alpha_y*(1.0{dimensionless}-y)-beta_y*y;
  enddef;

  def comp ical as
    var dL: dimensionless {init: 0.0001};
    var fL: dimensionless {init: 0.1505};
    var fL2: dimensionless {init: 0.219};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_CaL: uS {init: 0.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_CaL: nA {pub: out};
    var time: second {pub: in};
    var ical_dL_inf: dimensionless {pub: in};
    var ical_dL_tau: second {pub: in};
    var ical_fL_inf: dimensionless {pub: in};
    var ical_fL_tau: second {pub: in};
    var alpha: becquerel {pub: in};
    var beta: m3_per_s_per_mol {pub: in};
    var Cai: mM {pub: in};
    var E: mV {pub: in};
    var E_Ca: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var open_prob: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_ohmic_driving_term
    var driving_term_ohmic: mV;
    ode(dL, time) = (ical_dL_inf-dL)/ical_dL_tau;
    ode(fL, time) = (ical_fL_inf-fL)/ical_fL_tau;
    ode(fL2, time) = alpha*(1.0{dimensionless}-fL2)-beta*Cai*fL2;
    i_CaL = g_CaL*open_prob*driving_term_ohmic;
    open_prob = dL*fL*fL2;
    driving_term_ohmic = E-E_Ca+75{mV};
  enddef;

  def comp ical_dL as
    var ical_dL_inf: dimensionless {pub: out};
    var ical_dL_tau: second {init: 0.002, pub: out};
    var E: mV {pub: in};
    ical_dL_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+6.6{mV})/(-6.6{mV})));
  enddef;

  def comp ical_fL as
    var ical_fL_inf: dimensionless {pub: out};
    var ical_fL_tau: second {pub: out};
    var E: mV {pub: in};
    ical_fL_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+25.0{mV})/6.0{mV}));
    ical_fL_tau = 0.031{second}+1.0{second}/(1.0{dimensionless}+exp((E+37.6{mV})/8.1{mV}));
  enddef;

  def comp ical_fL2 as
    var alpha: becquerel {init: 3.0, pub: out};
    var beta: m3_per_s_per_mol {init: 40000.0, pub: out};
  enddef;

  def comp ion_concentrations as
    var Cab: mM {init: 2.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: mM {init: 3.4e-05, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: mM {init: 2.0004, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Carel: mM {init: 0.1101, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Caup: mM {init: 0.5832, pub: out};
    var Kb: mM {init: 5.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: mM {init: 140.0073, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: mM {init: 5.4243, pub: out};
    var Nab: mM {init: 140.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: mM {init: 7.4994, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: mM {init: 139.9929, pub: out};
    var V_e: uL;
    var V_i: uL {init: 2.5e-06, pub: out};
    var tau_b: second {init: 0.1};
    var i_CaT: nA {pub: in};
    var F: C_per_mol {pub: in};
    var time: second {pub: in};
    var i_CaL: nA {pub: in};
    var i_rel: nA {pub: in};
    var i_up: nA {pub: in};
    var i_NaCa: nA {pub: in};
    var V_rel: uL {pub: in};
    var i_tr: nA {pub: in};
    var V_up: uL {pub: in};
    var i_bK: nA {pub: in};
    var i_KK: nA {pub: in};
    var i_fK: nA {pub: in};
    var i_p: nA {pub: in};
    var i_bNa: nA {pub: in};
    var i_KNa: nA {pub: in};
    var i_Na: nA {pub: in};
    var i_fNa: nA {pub: in};
    ode(Cai, time) = -1.0{dimensionless_times_1e6}*(i_CaL+i_CaT-2.0{dimensionless}*i_NaCa+i_up+(-i_rel))/(2.0{dimensionless}*F*1.0{dimensionless_times_1e6}*V_i);
    ode(Cao, time) = 1.0{dimensionless_times_1e6}*(i_CaL+i_CaT-2.0{dimensionless}*i_NaCa)/(2.0{dimensionless}*F*1.0{dimensionless_times_1e6}*V_e)+(Cab-Cao)/tau_b;
    ode(Carel, time) = 1.0{dimensionless_times_1e6}*(i_tr-i_rel)/(2.0{dimensionless}*1.0{dimensionless_times_1e6}*V_rel*F);
    ode(Caup, time) = 1.0{dimensionless_times_1e6}*(i_up-i_tr)/(2.0{dimensionless}*1.0{dimensionless_times_1e6}*V_up*F);
    ode(Ki, time) = -1.0{dimensionless_times_1e6}*(i_KK+i_fK-2.0{dimensionless}*i_p+i_bK)/(F*1.0{dimensionless_times_1e6}*V_i);
    ode(Ko, time) = 1.0{dimensionless_times_1e6}*(i_KK+i_fK-2.0{dimensionless}*i_p+i_bK)/(F*1.0{dimensionless_times_1e6}*V_e)+(Kb-Ko)/tau_b;
    ode(Nai, time) = -1.0{dimensionless_times_1e6}*(i_bNa+i_fNa+i_Na+3.0{dimensionless}*i_p+3.0{dimensionless}*i_NaCa+i_KNa)/(F*1.0{dimensionless_times_1e6}*V_i);
    ode(Nao, time) = 1.0{dimensionless_times_1e6}*(i_bNa+i_fNa+i_Na+3.0{dimensionless}*i_p+3.0{dimensionless}*i_NaCa+i_KNa)/(F*1.0{dimensionless_times_1e6}*V_e)+(Nab-Nao)/tau_b;
    V_e = 0.2{dimensionless}*V_i;
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var C: uF {init: 3.2e-05};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var E: mV {init: -64.9, pub: out};
    var i_tot: nA;
    var time: second {pub: in};
    var i_CaT: nA {pub: in};
    var i_bK: nA {pub: in};
    var i_bNa: nA {pub: in};
    var i_K: nA {pub: in};
    var i_Na: nA {pub: in};
    var i_f: nA {pub: in};
    var i_CaL: nA {pub: in};
    var i_NaCa: nA {pub: in};
    var i_p: nA {pub: in};
    ode(E, time) = -i_tot/C;
    i_tot = i_CaL+i_CaT+i_Na+i_K+i_f+i_p+i_NaCa+i_bNa+i_bK;
  enddef;

  def comp reversal_potentials as
    var E_Ca: mV {pub: out};
    var E_K: mV {pub: out};
    var E_Na: mV {pub: out};
    var F: C_per_mol {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    E_K = R*T/F*ln(Ko/Ki);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp sarcoplasmic_reticulum_kinetics as
    var KmCarel: mM {init: 0.001};
    var KmCaup: mM {init: 0.0005};
    var V_rel: uL {pub: out};
    var V_up: uL {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: nA {pub: out};
    var i_tr: nA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var i_up: nA {pub: out};
    var i_up_max: nA {init: 0.0212};
    var tau_rel: second {init: 0.005};
    var tau_tr: second {init: 0.4};
    var V_i: uL {pub: in};
    var F: C_per_mol {pub: in};
    var Cai: mM {pub: in};
    var Carel: mM {pub: in};
    var Caup: mM {pub: in};
    V_rel = 0.006{dimensionless}*V_i;
    V_up = 0.014{dimensionless}*V_i;
    i_rel = 2.0{dimensionless}*1.0{dimensionless_times_1e9}*V_rel*F/(1.0{dimensionless_times_1e9}*tau_rel)*Carel*sqr(Cai)/(sqr(Cai)+sqr(KmCarel));
    i_tr = 2.0{dimensionless}*1.0{dimensionless_times_1e9}*V_rel*F/(1.0{dimensionless_times_1e9}*tau_tr)*Caup;
    i_up = i_up_max*sqr(Cai)/(sqr(Cai)+sqr(KmCaup));
  enddef;

  def comp sodium_calcium_exchange_current as
    var K1ni: mM {init: 395.3};
    var K1no: mM {init: 1628.0};
    var K2ni: mM {init: 2.289};
    var K2no: mM {init: 561.4};
    var K3ni: mM {init: 26.44};
    var K3no: mM {init: 4.663};
    var Kci: mM {init: 0.0207};
    var Kcni: mM {init: 26.44};
    var Kco: mM {init: 3.663};
    var Qci: dimensionless {init: 0.1369};
    var Qco: dimensionless {init: 0.0};
    var Qn: dimensionless {init: 0.4315};
    var di: dimensionless;
    var do: dimensionless;
    var i_NaCa: nA {pub: out};
    var k12: dimensionless;
    var k14: dimensionless;
    var k21: dimensionless;
    var k23: dimensionless;
    var k32: dimensionless;
    var k34: dimensionless;
    var k41: dimensionless;
    var k43: dimensionless;
    var kNaCa: nA {init: 4.0};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var F: C_per_mol {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Cai: mM {pub: in};
    var Nai: mM {pub: in};
    var E: mV {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    di = 1.0{dimensionless}+Cai/Kci+Cai/Kci*exp(-Qci*E*F/(R*T))+Cai*Nai/(Kci*Kcni)+Nai/K1ni+sqr(Nai)/(K1ni*K2ni)+pow(Nai, 3.0{dimensionless})/(K1ni*K2ni*K3ni);
    do = 1.0{dimensionless}+Cao/Kco+Cao/Kco*exp(Qco*E*F/(R*T))+Nao/K1no+sqr(Nao)/(K1no*K2no)+pow(Nao, 3.0{dimensionless})/(K1no*K2no*K3no);
    i_NaCa = kNaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    k12 = Cai/Kci*exp(-Qci*E*F/(R*T))/di;
    k14 = (sqr(Nai)/(K1ni*K2ni)+pow(Nai, 3.0{dimensionless})/(K1ni*K2ni*K3ni))*exp(Qn*E*F/(2.0{dimensionless}*R*T))/di;
    k21 = Cao/Kco*exp(-Qco*E*F/(R*T))/do;
    k23 = (sqr(Nao)/(K1no*K2no)+pow(Nao, 3.0{dimensionless})/(K1no*K2no*K3no))*exp(-Qn*E*F/(2.0{dimensionless}*R*T))/do;
    k32 = exp(Qn*E*F/(2.0{dimensionless}*R*T));
    k34 = Nao/(K3no+Nao);
    k41 = exp(-Qn*E*F/(2.0{dimensionless}*R*T));
    k43 = Nai/(K3ni+Nai);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
  enddef;

  def comp sodium_potassium_pump as
    var KmK: mM {init: 1.0};
    var KmNa: mM {init: 40.0};
    var i_p: nA {pub: out};
    var i_pmax: nA {init: 0.226};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var E: mV {pub: in};
    i_p = i_pmax*Nai/(Nai+KmNa)*Ko/(Ko+KmK)*(1.0{dimensionless}-sqr((E-40.0{mV})/211.0{mV}));
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_d_gate for
    vars dT and dT;
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_f_gate for
    vars fT and fT;
  enddef;
  def map between T_type_calcium_current and membrane for
    vars E and E;
    vars i_CaT and i_CaT;
  enddef;
  def map between T_type_calcium_current and reversal_potentials for
    vars E_Ca and E_Ca;
  enddef;
  def map between T_type_calcium_current_d_gate and environment for
    vars time and time;
  enddef;
  def map between T_type_calcium_current_d_gate and membrane for
    vars E and E;
  enddef;
  def map between T_type_calcium_current_f_gate and environment for
    vars time and time;
  enddef;
  def map between T_type_calcium_current_f_gate and membrane for
    vars E and E;
  enddef;
  def map between background_potassium_current and constants for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between background_potassium_current and ion_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_bK and i_bK;
  enddef;
  def map between background_potassium_current and membrane for
    vars E and E;
    vars i_bK and i_bK;
  enddef;
  def map between background_sodium_current and membrane for
    vars E and E;
    vars i_bNa and i_bNa;
  enddef;
  def map between background_sodium_current and reversal_potentials for
    vars E_Na and E_Na;
  enddef;
  def map between constants and delayed_rectifying_potassium_current for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between delayed_rectifying_potassium_current and delayed_rectifying_potassium_current_x_gate for
    vars x and x;
  enddef;
  def map between delayed_rectifying_potassium_current and ion_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_KK and i_KK;
    vars i_KNa and i_KNa;
  enddef;
  def map between delayed_rectifying_potassium_current and membrane for
    vars E and E;
    vars i_K and i_K;
  enddef;
  def map between delayed_rectifying_potassium_current_x_gate and membrane for
    vars E and E;
  enddef;
  def map between delayed_rectifying_potassium_current_x_gate and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
  enddef;
  def map between fast_sodium_current and membrane for
    vars E and E;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and reversal_potentials for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current_h_gate and membrane for
    vars E and E;
  enddef;
  def map between environment and fast_sodium_current_h_gate for
    vars time and time;
  enddef;
  def map between fast_sodium_current_m_gate and membrane for
    vars E and E;
  enddef;
  def map between environment and fast_sodium_current_m_gate for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and hyperpolarising_activated_current_y_gate for
    vars y and y;
  enddef;
  def map between hyperpolarising_activated_current and ion_concentrations for
    vars Ko and Ko;
    vars i_fK and i_fK;
    vars i_fNa and i_fNa;
  enddef;
  def map between hyperpolarising_activated_current and membrane for
    vars E and E;
    vars i_f and i_f;
  enddef;
  def map between hyperpolarising_activated_current and reversal_potentials for
    vars E_K and E_K;
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current_y_gate and membrane for
    vars E and E;
  enddef;
  def map between environment and hyperpolarising_activated_current_y_gate for
    vars time and time;
  enddef;
  def map between environment and ical for
    vars time and time;
  enddef;
  def map between ical and ical_dL for
    vars ical_dL_inf and ical_dL_inf;
    vars ical_dL_tau and ical_dL_tau;
  enddef;
  def map between ical_dL and membrane for
    vars E and E;
  enddef;
  def map between ical and ical_fL for
    vars ical_fL_inf and ical_fL_inf;
    vars ical_fL_tau and ical_fL_tau;
  enddef;
  def map between ical_fL and membrane for
    vars E and E;
  enddef;
  def map between ical and ical_fL2 for
    vars alpha and alpha;
    vars beta and beta;
  enddef;
  def map between ical and ion_concentrations for
    vars Cai and Cai;
    vars i_CaL and i_CaL;
  enddef;
  def map between ical and membrane for
    vars E and E;
    vars i_CaL and i_CaL;
  enddef;
  def map between ical and reversal_potentials for
    vars E_Ca and E_Ca;
  enddef;
  def map between T_type_calcium_current and ion_concentrations for
    vars i_CaT and i_CaT;
  enddef;
  def map between constants and ion_concentrations for
    vars F and F;
  enddef;
  def map between environment and ion_concentrations for
    vars time and time;
  enddef;
  def map between ion_concentrations and sarcoplasmic_reticulum_kinetics for
    vars i_rel and i_rel;
    vars i_up and i_up;
    vars V_rel and V_rel;
    vars i_tr and i_tr;
    vars V_up and V_up;
    vars V_i and V_i;
    vars Cai and Cai;
    vars Carel and Carel;
    vars Caup and Caup;
  enddef;
  def map between ion_concentrations and sodium_calcium_exchange_current for
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between ion_concentrations and sodium_potassium_pump for
    vars i_p and i_p;
    vars Ko and Ko;
    vars Nai and Nai;
  enddef;
  def map between background_sodium_current and ion_concentrations for
    vars i_bNa and i_bNa;
  enddef;
  def map between fast_sodium_current and ion_concentrations for
    vars i_Na and i_Na;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between membrane and sodium_calcium_exchange_current for
    vars i_NaCa and i_NaCa;
    vars E and E;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars i_p and i_p;
    vars E and E;
  enddef;
  def map between constants and reversal_potentials for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between ion_concentrations and reversal_potentials for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
  enddef;
  def map between constants and sarcoplasmic_reticulum_kinetics for
    vars F and F;
  enddef;
  def map between constants and sodium_calcium_exchange_current for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  // dokos_1996
enddef;
