<?xml version='1.0' encoding='UTF-8'?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" name="dokos_1996">
  <units name="C_per_mol">
    <unit units="second"/>
    <unit units="ampere"/>
    <unit units="mole" exponent="-1.0"/>
  </units>
  <units name="dimensionless_times_1e6">
    <unit units="dimensionless" multiplier="1000000"/>
  </units>
  <units name="dimensionless_times_1e9">
    <unit units="dimensionless" multiplier="1000000000"/>
  </units>
  <units name="m3_per_s_per_mol">
    <unit units="metre" exponent="3.0"/>
    <unit units="second" exponent="-1.0"/>
    <unit units="mole" exponent="-1.0"/>
  </units>
  <units name="mJ_per_mol_per_K">
    <unit units="gram"/>
    <unit units="metre" exponent="2.0"/>
    <unit units="second" exponent="-2.0"/>
    <unit units="kelvin" exponent="-1.0"/>
    <unit units="mole" exponent="-1.0"/>
  </units>
  <units name="mM">
    <unit units="metre" exponent="-3.0"/>
    <unit units="mole"/>
  </units>
  <units name="mV">
    <unit units="gram"/>
    <unit units="metre" exponent="2.0"/>
    <unit units="second" exponent="-3.0"/>
    <unit units="ampere" exponent="-1.0"/>
  </units>
  <units name="nF">
    <unit units="gram" exponent="-1.0" multiplier="1e-12"/>
    <unit units="metre" exponent="-2.0"/>
    <unit units="second" exponent="4.0"/>
    <unit units="ampere" exponent="2.0"/>
  </units>
  <units name="nS">
    <unit units="gram" exponent="-1.0" multiplier="1e-12"/>
    <unit units="metre" exponent="-2.0"/>
    <unit units="second" exponent="3.0"/>
    <unit units="ampere" exponent="2.0"/>
  </units>
  <units name="pA">
    <unit units="ampere" multiplier="1e-12"/>
  </units>
  <units name="uL">
    <unit units="metre" exponent="3.0" multiplier="1e-09"/>
  </units>
  <component name="L_type_calcium_current">
    <variable name="E" units="mV" public_interface="in"/>
    <variable name="E_Ca" units="mV" public_interface="in"/>
    <variable name="dL" units="dimensionless" public_interface="in"/>
    <variable name="driving_term_ohmic" units="mV" cmeta:id="driving_term_ohmic"/>
    <variable name="fL" units="dimensionless" public_interface="in"/>
    <variable name="fL2" units="dimensionless" public_interface="in"/>
    <variable name="g_CaL" units="nS" initial_value="0.4" cmeta:id="g_CaL"/>
    <variable name="i_CaL" units="pA" public_interface="out" cmeta:id="i_CaL"/>
    <variable name="open_prob" units="dimensionless" cmeta:id="open_prob"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>driving_term_ohmic</ci>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>E</ci>
            <ci>E_Ca</ci>
          </apply>
          <cn cellml:units="mV">75.0</cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>i_CaL</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <ci>g_CaL</ci>
            <ci>open_prob</ci>
          </apply>
          <ci>driving_term_ohmic</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>open_prob</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <ci>dL</ci>
            <ci>fL</ci>
          </apply>
          <ci>fL2</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="L_type_calcium_current_d_gate">
    <variable name="E" units="mV" public_interface="in"/>
    <variable name="dL" units="dimensionless" public_interface="out" initial_value="0.0001"/>
    <variable name="dL_infinity" units="dimensionless"/>
    <variable name="tau_dL" units="second" initial_value="0.002"/>
    <variable name="time" units="second" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>dL</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>dL_infinity</ci>
            <ci>dL</ci>
          </apply>
          <ci>tau_dL</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>dL_infinity</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci>E</ci>
                  <cn cellml:units="mV">6.6</cn>
                </apply>
                <apply>
                  <minus/>
                  <cn cellml:units="mV">6.6</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="L_type_calcium_current_f2_gate">
    <variable name="Cai" units="mM" public_interface="in"/>
    <variable name="alpha_fL2" units="hertz" initial_value="3.0"/>
    <variable name="beta_fL2" units="m3_per_s_per_mol" initial_value="40000.0"/>
    <variable name="fL2" units="dimensionless" public_interface="out" initial_value="0.219"/>
    <variable name="time" units="second" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>fL2</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_fL2</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <ci>fL2</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <apply>
              <times/>
              <ci>beta_fL2</ci>
              <ci>Cai</ci>
            </apply>
            <ci>fL2</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="L_type_calcium_current_f_gate">
    <variable name="E" units="mV" public_interface="in"/>
    <variable name="fL" units="dimensionless" public_interface="out" initial_value="0.1505"/>
    <variable name="fL_infinity" units="dimensionless"/>
    <variable name="tau_fL" units="second"/>
    <variable name="time" units="second" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>fL</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>fL_infinity</ci>
            <ci>fL</ci>
          </apply>
          <ci>tau_fL</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>fL_infinity</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci>E</ci>
                  <cn cellml:units="mV">25.0</cn>
                </apply>
                <cn cellml:units="mV">6.0</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>tau_fL</ci>
        <apply>
          <plus/>
          <cn cellml:units="second">0.031</cn>
          <apply>
            <divide/>
            <cn cellml:units="second">1.0</cn>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <apply>
                <exp/>
                <apply>
                  <divide/>
                  <apply>
                    <plus/>
                    <ci>E</ci>
                    <cn cellml:units="mV">37.6</cn>
                  </apply>
                  <cn cellml:units="mV">8.1</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="constants">
    <variable name="F" units="C_per_mol" public_interface="out" initial_value="9.64853414999999950e+04"/>
    <variable name="R" units="mJ_per_mol_per_K" public_interface="out" initial_value="8314.472"/>
    <variable name="T" units="kelvin" public_interface="out" initial_value="310.0"/>
  </component>
  <component name="environment">
    <variable name="time" units="second" public_interface="out"/>
  </component>
  <component name="ion_concentrations">
    <variable name="Cab" units="mM" initial_value="2.0" cmeta:id="Cab"/>
    <variable name="Cai" units="mM" public_interface="out" initial_value="3.4e-05" cmeta:id="Cai"/>
    <variable name="Cao" units="mM" public_interface="out" initial_value="2.0004" cmeta:id="Cao"/>
    <variable name="F" units="C_per_mol" public_interface="in"/>
    <variable name="Kb" units="mM" initial_value="5.4" cmeta:id="Kb"/>
    <variable name="Ki" units="mM" public_interface="out" initial_value="140.0" cmeta:id="Ki"/>
    <variable name="Ko" units="mM" public_interface="out" initial_value="5.0" cmeta:id="Ko"/>
    <variable name="Nab" units="mM" initial_value="140.0" cmeta:id="Nab"/>
    <variable name="Nai" units="mM" public_interface="out" initial_value="4.0" cmeta:id="Nai"/>
    <variable name="Nao" units="mM" public_interface="out" initial_value="140.0" cmeta:id="Nao"/>
    <variable name="V_e" units="uL"/>
    <variable name="V_i" units="uL" initial_value="2.5e-06"/>
    <variable name="i_CaL" units="pA" public_interface="in"/>
    <variable name="tau_b" units="second" initial_value="0.1"/>
    <variable name="time" units="second" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cai</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless_times_1e9">1.0</cn>
            </apply>
            <ci>i_CaL</ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <times/>
              <apply>
                <times/>
                <cn cellml:units="dimensionless">2.0</cn>
                <ci>F</ci>
              </apply>
              <cn cellml:units="dimensionless_times_1e6">1.0</cn>
            </apply>
            <ci>V_i</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cao</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless_times_1e9">1.0</cn>
              <ci>i_CaL</ci>
            </apply>
            <apply>
              <times/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <cn cellml:units="dimensionless">2.0</cn>
                  <ci>F</ci>
                </apply>
                <cn cellml:units="dimensionless_times_1e6">1.0</cn>
              </apply>
              <ci>V_e</ci>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <minus/>
              <ci>Cab</ci>
              <ci>Cao</ci>
            </apply>
            <ci>tau_b</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>V_e</ci>
        <apply>
          <times/>
          <cn cellml:units="dimensionless">0.2</cn>
          <ci>V_i</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="membrane">
    <variable name="C" units="nF" initial_value="3.2e-05" cmeta:id="C"/>
    <variable name="E" units="mV" public_interface="out" initial_value="-64.9" cmeta:id="E"/>
    <variable name="i_CaL" units="pA" public_interface="in"/>
    <variable name="i_tot" units="pA"/>
    <variable name="time" units="second" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>E</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>i_tot</ci>
          </apply>
          <ci>C</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>i_tot</ci>
        <ci>i_CaL</ci>
      </apply>
    </math>
  </component>
  <component name="reversal_potentials">
    <variable name="Cai" units="mM" public_interface="in"/>
    <variable name="Cao" units="mM" public_interface="in"/>
    <variable name="E_Ca" units="mV" public_interface="out"/>
    <variable name="E_K" units="mV"/>
    <variable name="E_Na" units="mV"/>
    <variable name="F" units="C_per_mol" public_interface="in"/>
    <variable name="Ki" units="mM" public_interface="in"/>
    <variable name="Ko" units="mM" public_interface="in"/>
    <variable name="Nai" units="mM" public_interface="in"/>
    <variable name="Nao" units="mM" public_interface="in"/>
    <variable name="R" units="mJ_per_mol_per_K" public_interface="in"/>
    <variable name="T" units="kelvin" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>E_Ca</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>R</ci>
              <ci>T</ci>
            </apply>
            <apply>
              <times/>
              <cn cellml:units="dimensionless">2.0</cn>
              <ci>F</ci>
            </apply>
          </apply>
          <apply>
            <ln/>
            <apply>
              <divide/>
              <ci>Cao</ci>
              <ci>Cai</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>E_K</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>R</ci>
              <ci>T</ci>
            </apply>
            <ci>F</ci>
          </apply>
          <apply>
            <ln/>
            <apply>
              <divide/>
              <ci>Ko</ci>
              <ci>Ki</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>E_Na</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>R</ci>
              <ci>T</ci>
            </apply>
            <ci>F</ci>
          </apply>
          <apply>
            <ln/>
            <apply>
              <divide/>
              <ci>Nao</ci>
              <ci>Nai</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="L_type_calcium_current" component_2="L_type_calcium_current_d_gate"/>
    <map_variables variable_1="dL" variable_2="dL"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current" component_2="L_type_calcium_current_f2_gate"/>
    <map_variables variable_1="fL2" variable_2="fL2"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current" component_2="L_type_calcium_current_f_gate"/>
    <map_variables variable_1="fL" variable_2="fL"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current" component_2="ion_concentrations"/>
    <map_variables variable_1="i_CaL" variable_2="i_CaL"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current" component_2="membrane"/>
    <map_variables variable_1="E" variable_2="E"/>
    <map_variables variable_1="i_CaL" variable_2="i_CaL"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current" component_2="reversal_potentials"/>
    <map_variables variable_1="E_Ca" variable_2="E_Ca"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current_d_gate" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current_d_gate" component_2="membrane"/>
    <map_variables variable_1="E" variable_2="E"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current_f2_gate" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current_f2_gate" component_2="ion_concentrations"/>
    <map_variables variable_1="Cai" variable_2="Cai"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current_f_gate" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="L_type_calcium_current_f_gate" component_2="membrane"/>
    <map_variables variable_1="E" variable_2="E"/>
  </connection>
  <connection>
    <map_components component_1="constants" component_2="ion_concentrations"/>
    <map_variables variable_1="F" variable_2="F"/>
  </connection>
  <connection>
    <map_components component_1="constants" component_2="reversal_potentials"/>
    <map_variables variable_1="F" variable_2="F"/>
    <map_variables variable_1="R" variable_2="R"/>
    <map_variables variable_1="T" variable_2="T"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="ion_concentrations"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="membrane"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="ion_concentrations" component_2="reversal_potentials"/>
    <map_variables variable_1="Cai" variable_2="Cai"/>
    <map_variables variable_1="Cao" variable_2="Cao"/>
    <map_variables variable_1="Ki" variable_2="Ki"/>
    <map_variables variable_1="Ko" variable_2="Ko"/>
    <map_variables variable_1="Nai" variable_2="Nai"/>
    <map_variables variable_1="Nao" variable_2="Nao"/>
  </connection>
  <rdf:RDF>
    <rdf:Description rdf:about="#C">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Cab">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_bath_calcium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Cai">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Cao">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_cleft_calcium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#E">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Kb">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_bath_potassium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Ki">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Ko">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_cleft_potassium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Nab">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_bath_sodium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Nai">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Nao">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_cleft_sodium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#driving_term_ohmic">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_ohmic_driving_term"/>
    </rdf:Description>
    <rdf:Description rdf:about="#g_CaL">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance"/>
    </rdf:Description>
    <rdf:Description rdf:about="#i_CaL">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current"/>
    </rdf:Description>
    <rdf:Description rdf:about="#open_prob">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability"/>
    </rdf:Description>
  </rdf:RDF>
</model>
