def model fink_noble_giles_model_2008 as
  def unit nanolitre as
    unit litre {pref: nano};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt2 as
    unit millivolt {expo: 2};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit milliS as
    unit siemens {pref: milli};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit nanoF as
    unit farad {pref: nano};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit microS_per_nanoF as
    unit microS;
    unit nanoF {expo: -1};
  enddef;
  def unit nanoA_per_nanoF as
    unit nanoA;
    unit nanoF {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit millimolar as
    unit molar {pref: milli};
  enddef;
  def unit millivolt_per_millimolar as
    unit millivolt;
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit per_millisecond;
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit per_millisecond;
  enddef;
  def unit per_millimolar2_per_millisecond as
    unit millimolar {expo: -2};
    unit per_millisecond;
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit coulomb_per_m3 as
    unit coulomb;
    unit metre {expo: -3};
  enddef;
  def unit litre_per_farad_millisecond as
    unit litre;
    unit farad {expo: -1};
    unit per_millisecond;
  enddef;

  def comp Environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: millijoule_per_mole_kelvin {init: 8314.472, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {init: 310, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: millimolar {init: 5.4, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: millimolar {init: 2, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: millimolar {init: 140, pub: out};
  enddef;

  def comp cell as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -86.45, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: nanoF {init: 0.115, pub: out};
    var Vol_c: nanolitre {init: 0.016404, pub: out};
    var time: millisecond {pub: in};
    var i_K1: nanoA_per_nanoF {pub: in};
    var i_to: nanoA_per_nanoF {pub: in};
    var i_Kr: nanoA_per_nanoF {pub: in};
    var i_Ks: nanoA_per_nanoF {pub: in};
    var i_CaL: nanoA_per_nanoF {pub: in};
    var i_NaK: nanoA_per_nanoF {pub: in};
    var i_Na: nanoA_per_nanoF {pub: in};
    var i_b_Na: nanoA_per_nanoF {pub: in};
    var i_NaCa: nanoA_per_nanoF {pub: in};
    var i_b_Ca: nanoA_per_nanoF {pub: in};
    var i_p_K: nanoA_per_nanoF {pub: in};
    var i_p_Ca: nanoA_per_nanoF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: nanoA_per_nanoF {pub: out};
    var i_tot: nanoA_per_nanoF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: millisecond {init: 100};
    var stim_end: millisecond {init: 100000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: millisecond {init: 3};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: nanoA_per_nanoF {init: -12};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA_per_nanoF};
    endsel;
    i_tot = i_K1+i_to+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_b_Na+i_NaCa+i_b_Ca+i_p_K+i_p_Ca+i_Stim;
    ode(V, time) = -i_tot;
  enddef;

  def comp reversal_potentials as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#calcium_reversal_potential
    var E_Ca: millivolt {pub: out};
    var P_kna: dimensionless {init: 0.03};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
  enddef;

  def comp IK1 as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: nanoA_per_nanoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1_0: microS_per_nanoF {init: 0.6821};
    var time: millisecond {priv: out, pub: in};
    var E_K: millivolt {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var T: kelvin {pub: in};
    var K_o: millimolar {pub: in};
    var xK1_inf: dimensionless {priv: in};
    i_K1 = g_K1_0*(T/35{kelvin}-55{kelvin}/7{kelvin})*sqrt(K_o/5.4{millimolar})*xK1_inf*(V-E_K);
  enddef;

  def comp iK1_rectification as
    var xK1_inf: dimensionless {pub: out};
    var Mg_Buf: millimolar {init: 0.0356};
    var SPM: millimolar {init: 1.4613e-3};
    var fac: dimensionless {init: 1.0648};
    var phi: dimensionless {init: 0.8838};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var temp: dimensionless;
    var rec1: dimensionless;
    var rec2: dimensionless;
    var KiMg: millimolar;
    var KbMg: millimolar;
    var Kd1SPM: millimolar;
    var Kd2SPM: millimolar;
    KiMg = 2.8{millimolar}*exp(-(V-fac*E_K)/180{millivolt});
    KbMg = 0.45{millimolar}*exp(-(V-fac*E_K)/20{millivolt});
    Kd1SPM = 0.7e-3{millimolar}*exp(-(V-fac*E_K+8{millivolt_per_millimolar}*Mg_Buf)/4.8{millivolt});
    Kd2SPM = 40e-3{millimolar}*exp(-(V-fac*E_K)/9.1{millivolt});
    temp = 1{dimensionless}+Mg_Buf/KbMg;
    rec1 = temp*temp/(SPM/Kd1SPM+Mg_Buf/KiMg+temp*temp*temp);
    rec2 = 1{dimensionless}/(1{dimensionless}+SPM/Kd2SPM);
    xK1_inf = phi*rec1+(1{dimensionless}-phi)*rec2;
  enddef;

  def comp IKr as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: nanoA_per_nanoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance_scaling_factor
    var g_Kr_0: microS_per_nanoF {init: 0.024};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr_calc: microS_per_nanoF;
    var time: millisecond {priv: out, pub: in};
    var T: kelvin {priv: out, pub: in};
    var K_o: millimolar {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var Or4: dimensionless {priv: in};
    g_Kr_calc = g_Kr_0*(T/35{kelvin}-55{dimensionless}/7{dimensionless})*sqrt(K_o/5.4{millimolar});
    i_Kr = g_Kr_calc*Or4*(V-E_K);
  enddef;

  def comp iKr_Markov as
    var Cr1: dimensionless {init: 0.9786};
    var Cr2: dimensionless {init: 0.0031};
    var Cr3: dimensionless {init: 0.0029};
    var Or4: dimensionless {init: 0.014, priv: out, pub: out};
    var Ir5: dimensionless {init: 0.0014};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var T: kelvin {pub: in};
    var T_Base: kelvin {init: 310};
    var alpha_xr1: per_millisecond {priv: out};
    var beta_xr1: per_millisecond {priv: out};
    var alpha_xr2: per_millisecond {priv: out};
    var beta_xr2: per_millisecond {priv: out};
    var alpha_xr3: per_millisecond {priv: out};
    var beta_xr3: per_millisecond {priv: out};
    var alpha_xr4: per_millisecond {priv: out};
    var beta_xr4: per_millisecond {priv: out};
    var OtoB: per_millisecond {priv: in};
    var BtoO: per_millisecond {priv: in};
    alpha_xr1 = 1{per_millisecond}*T/T_Base*exp(24.335{dimensionless}+T_Base/T*(0.0112{per_millivolt}*V-25.914{dimensionless}));
    beta_xr1 = 1{per_millisecond}*T/T_Base*exp(13.688{dimensionless}+T_Base/T*(-0.0603{per_millivolt}*V-15.707{dimensionless}));
    alpha_xr2 = 1{per_millisecond}*T/T_Base*exp(22.746{dimensionless}+T_Base/T*(0{per_millivolt}*V-25.914{dimensionless}));
    beta_xr2 = 1{per_millisecond}*T/T_Base*exp(13.193{dimensionless}+T_Base/T*(0{per_millivolt}*V-15.707{dimensionless}));
    alpha_xr3 = 1{per_millisecond}*T/T_Base*exp(22.098{dimensionless}+T_Base/T*(0.0365{per_millivolt}*V-25.914{dimensionless}));
    beta_xr3 = 1{per_millisecond}*T/T_Base*exp(7.313{dimensionless}+T_Base/T*(-0.0399{per_millivolt}*V-15.707{dimensionless}));
    alpha_xr4 = 1{per_millisecond}*T/T_Base*exp(30.016{dimensionless}+T_Base/T*(0.0223{per_millivolt}*V-30.888{dimensionless}))*pow(5.4{millimolar}/K_o, 0.4{dimensionless});
    beta_xr4 = 1{per_millisecond}*T/T_Base*exp(30.061{dimensionless}+T_Base/T*(-0.0312{per_millivolt}*V-33.243{dimensionless}));
    ode(Cr1, time) = beta_xr1*Cr2-alpha_xr1*Cr1;
    ode(Cr2, time) = alpha_xr1*Cr1+beta_xr2*Cr3-(alpha_xr2+beta_xr1)*Cr2;
    ode(Cr3, time) = alpha_xr2*Cr2+beta_xr3*Or4-(alpha_xr3+beta_xr2)*Cr3;
    ode(Or4, time) = alpha_xr3*Cr3+beta_xr4*Ir5-(alpha_xr4+beta_xr3)*Or4-OtoB+BtoO;
    ode(Ir5, time) = alpha_xr4*Or4-beta_xr4*Ir5;
  enddef;

  def comp iKr_Markov_Sotalol_block as
    var OtoB: per_millisecond {pub: out};
    var BtoO: per_millisecond {pub: out};
    var Sotalol_mM: millimolar {init: 0};
    var BCr1: dimensionless {init: 0};
    var BCr2: dimensionless {init: 0};
    var BCr3: dimensionless {init: 0};
    var BOr4: dimensionless {init: 0};
    var BIr5: dimensionless {init: 0};
    var kBinding: per_millimolar_per_millisecond {init: 5e-3};
    var kDiss: per_millisecond {init: 0.00125};
    var time: millisecond {pub: in};
    var alpha_xr1: per_millisecond {pub: in};
    var beta_xr1: per_millisecond {pub: in};
    var alpha_xr2: per_millisecond {pub: in};
    var beta_xr2: per_millisecond {pub: in};
    var alpha_xr3: per_millisecond {pub: in};
    var beta_xr3: per_millisecond {pub: in};
    var alpha_xr4: per_millisecond {pub: in};
    var beta_xr4: per_millisecond {pub: in};
    var O: dimensionless {pub: in};
    OtoB = O*Sotalol_mM*kBinding;
    BtoO = BOr4*kDiss;
    ode(BCr1, time) = beta_xr1*BCr2-alpha_xr1*BCr1;
    ode(BCr2, time) = alpha_xr1*BCr1+beta_xr2*BCr3-(alpha_xr2+beta_xr1)*BCr2;
    ode(BCr3, time) = alpha_xr2*BCr2+beta_xr3*BOr4-(alpha_xr3+beta_xr2)*BCr3;
    ode(BOr4, time) = alpha_xr3*BCr3+beta_xr4*BIr5-(alpha_xr4+beta_xr3)*BOr4+OtoB-BtoO;
    ode(BIr5, time) = alpha_xr4*BOr4-beta_xr4*BIr5;
  enddef;

  def comp IKs as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: nanoA_per_nanoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: microS_per_nanoF {init: 0.0392};
    var E_Ks: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Xs: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp iKs_Xs_gate as
    var Xs: dimensionless {init: 0.00303, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xs_inf: dimensionless;
    var alpha_xs: dimensionless;
    var beta_xs: dimensionless;
    var tau_xs: millisecond;
    xs_inf = 1{dimensionless}/(1{dimensionless}+exp((-5{millivolt}-V)/14{millivolt}));
    alpha_xs = 1400{dimensionless}/sqrt(1{dimensionless}+exp((5{millivolt}-V)/6{millivolt}));
    beta_xs = 1{dimensionless}/(1{dimensionless}+exp((V-35{millivolt})/15{millivolt}));
    tau_xs = 1{millisecond}*alpha_xs*beta_xs+80{millisecond};
    ode(Xs, time) = (xs_inf-Xs)/tau_xs;
  enddef;

  def comp Ito as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: nanoA_per_nanoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: microS_per_nanoF {init: 0.2};
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: millisecond {priv: out, pub: in};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*r*s*(V-E_K);
  enddef;

  def comp ito_s_gate as
    var s: dimensionless {init: 1, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var s_inf: dimensionless;
    var tau_s: millisecond;
    s_inf = 1{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/5{millivolt}));
    tau_s = 85{millisecond}*exp(-sqr(V+45{millivolt})/320{millivolt2})+5{millisecond}/(1{dimensionless}+exp((V-20{millivolt})/5{millivolt}))+3{millisecond};
    ode(s, time) = (s_inf-s)/tau_s;
  enddef;

  def comp ito_r_gate as
    var r: dimensionless {init: 2.11e-8, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var r_inf: dimensionless;
    var tau_r: millisecond;
    r_inf = 1{dimensionless}/(1{dimensionless}+exp((20{millivolt}-V)/6{millivolt}));
    tau_r = 9.5{millisecond}*exp(-sqr(V+40{millivolt})/1800{millivolt2})+0.8{millisecond};
    ode(r, time) = (r_inf-r)/tau_r;
  enddef;

  def comp INa as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: nanoA_per_nanoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: microS_per_nanoF {init: 11};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: millivolt {init: 0, priv: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0, priv: out};
    var E_Na: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp iNa_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 0.00132, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var m_inf: dimensionless;
    var alpha_m: dimensionless;
    var beta_m: dimensionless;
    var tau_m: millisecond;
    m_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((-56.86{millivolt}-V)/9.03{millivolt}));
    alpha_m = 1{dimensionless}/(1{dimensionless}+exp((-60{millivolt}-V)/5{millivolt}));
    beta_m = 0.1{dimensionless}/(1{dimensionless}+exp((V+35{millivolt})/5{millivolt}))+0.1{dimensionless}/(1{dimensionless}+exp((V-50{millivolt})/200{millivolt}));
    tau_m = 1{millisecond}*alpha_m*beta_m;
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp iNa_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {init: 0.7768, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var h_inf: dimensionless;
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: millisecond;
    h_inf = 1{dimensionless}*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/sqr(1{dimensionless}+exp((V+71.55{millivolt}-shift_INa_inact)/7.43{millivolt}))+perc_reduced_inact_for_IpNa/100{dimensionless};
    alpha_h = sel
      case V < -40{millivolt}+shift_INa_inact:
        0.057{per_millisecond}*exp(-(V+80{millivolt}-shift_INa_inact)/6.8{millivolt});
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}+shift_INa_inact:
        2.7{per_millisecond}*exp(0.079{per_millivolt}*(V-shift_INa_inact))+310000{per_millisecond}*exp(0.3485{per_millivolt}*(V-shift_INa_inact));
      otherwise:
        0.77{per_millisecond}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{millivolt}-shift_INa_inact)/(-11.1{millivolt}))));
    endsel;
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp iNa_j_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {init: 0.7766, pub: out};
    var shift_INa_inact: millivolt {pub: in};
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var j_inf: dimensionless;
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: millisecond;
    j_inf = 1{dimensionless}*(1{dimensionless}-perc_reduced_inact_for_IpNa/100{dimensionless})/sqr(1{dimensionless}+exp((V+71.55{millivolt}-shift_INa_inact)/7.43{millivolt}))+perc_reduced_inact_for_IpNa/100{dimensionless};
    alpha_j = sel
      case V < -40{millivolt}+shift_INa_inact:
        (-25428{per_millisecond}*exp(0.2444{per_millivolt}*(V-shift_INa_inact))-6.948e-6{per_millisecond}*exp(-0.04391{per_millivolt}*(V-shift_INa_inact)))*(V+37.78{millivolt})/1{millivolt}/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}-shift_INa_inact)));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}+shift_INa_inact:
        0.02424{per_millisecond}*exp(-0.01052{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt}-shift_INa_inact)));
      otherwise:
        0.6{per_millisecond}*exp(0.057{per_millivolt}*(V-shift_INa_inact))/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt}-shift_INa_inact)));
    endsel;
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp INab as
    var i_b_Na: nanoA_per_nanoF {pub: out};
    var g_bna: microS_per_nanoF {init: 0.00029};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp ICaL as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_CaL: nanoA_per_nanoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_CaL: litre_per_farad_millisecond {init: 2e-5};
    var Ca_o: millimolar {pub: in};
    var Ca_ss: millimolar {priv: out, pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d: dimensionless {priv: in, pub: out};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var fCass: dimensionless {priv: in};
    var z: dimensionless {init: 2};
    var open_prob: dimensionless;
    var driving_term_ghk: coulomb_per_m3;
    open_prob = d*f*f2*fCass;
    driving_term_ghk = sqr(z)*(V-15{millivolt})*sqr(F)/(R*T)*(0.25{dimensionless}*Ca_ss*exp(2{dimensionless}*(V-15{millivolt})*F/(R*T))-Ca_o)/(exp(2{dimensionless}*(V-15{millivolt})*F/(R*T))-1{dimensionless});
    i_CaL = g_CaL*open_prob*driving_term_ghk;
  enddef;

  def comp iCaL_d_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 5.06e-6, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var d_inf: dimensionless;
    var alpha_d: dimensionless;
    var beta_d: dimensionless;
    var gamma_d: millisecond;
    var tau_d: millisecond;
    var d_inf_shift: millivolt {init: 5};
    d_inf = 1{dimensionless}/(1{dimensionless}+exp((d_inf_shift-V)/7.5{millivolt}));
    alpha_d = 1.4{dimensionless}/(1{dimensionless}+exp((-35{millivolt}-V)/13{millivolt}))+0.25{dimensionless};
    beta_d = 1.4{dimensionless}/(1{dimensionless}+exp((V+5{millivolt})/5{millivolt}));
    gamma_d = 1{millisecond}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_d = 1{millisecond}*alpha_d*beta_d+gamma_d;
    ode(d, time) = (d_inf-d)/tau_d;
  enddef;

  def comp iCaL_f_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 0.9999, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: millisecond;
    f_inf = 1{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/7{millivolt}));
    tau_f = (1102.5{millisecond}*exp(-sqr(V+27{millivolt})/225{millivolt2})+200{millisecond}/(1{dimensionless}+exp((13{millivolt}-V)/10{millivolt}))+180{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt}))+20{millisecond})/4{dimensionless};
    ode(f, time) = (f_inf-f)/tau_f;
  enddef;

  def comp iCaL_f2_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate
    var f2: dimensionless {init: 0.9995, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f2_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate_tau
    var tau_f2: millisecond;
    f2_inf = 0.75{dimensionless}/(1{dimensionless}+exp((V+35{millivolt})/7{millivolt}))+0.25{dimensionless};
    tau_f2 = (562{millisecond}*exp(-sqr(V+27{millivolt})/240{millivolt2})+31{millisecond}/(1{dimensionless}+exp((25{millivolt}-V)/10{millivolt}))+80{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt})))/2{dimensionless};
    ode(f2, time) = (f2_inf-f2)/tau_f2;
  enddef;

  def comp iCaL_fCass_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var fCass: dimensionless {init: 1, pub: out};
    var Ca_ss: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var fCass_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate_tau
    var tau_fCass: millisecond;
    fCass_inf = 0.4{dimensionless}/(1{dimensionless}+sqr(Ca_ss/0.05{millimolar}))+0.6{dimensionless};
    tau_fCass = 80{millisecond}/(1{dimensionless}+sqr(Ca_ss/0.05{millimolar}))+2{millisecond};
    ode(fCass, time) = (fCass_inf-fCass)/tau_fCass;
  enddef;

  def comp ICab as
    var i_b_Ca: nanoA_per_nanoF {pub: out};
    var g_bca: microS_per_nanoF {init: 0.0004736};
    var E_Ca: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp IpCa as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var i_p_Ca: nanoA_per_nanoF {pub: out};
    var g_pCa: nanoA_per_nanoF {init: 0.0619};
    var K_pCa: millimolar {init: 0.0005};
    var Ca_i: millimolar {pub: in};
    i_p_Ca = g_pCa*Ca_i/(Ca_i+K_pCa);
  enddef;

  def comp IpK as
    var i_p_K: nanoA_per_nanoF {pub: out};
    var g_pK: microS_per_nanoF {init: 0.00973};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_p_K = g_pK*(V-E_K)/(1{dimensionless}+exp((25{millivolt}-V)/5.98{millivolt}));
  enddef;

  def comp INaK as
    var i_NaK: nanoA_per_nanoF {pub: out};
    var P_NaK: nanoA_per_nanoF {init: 1.297};
    var K_mk: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: millisecond {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {priv: out, pub: in};
    i_NaK = P_NaK*K_o/(K_o+K_mk)*Na_i/(Na_i+K_mNa)/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T)));
  enddef;

  def comp INaCa as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: nanoA_per_nanoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var K_NaCa: nanoA_per_nanoF {init: 200};
    var K_sat: dimensionless {init: 0.1};
    var alpha: dimensionless {init: 2.5};
    var gamma: dimensionless {init: 0.35};
    var Km_Ca: millimolar {init: 1.38};
    var Km_Nai: millimolar {init: 87.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaCa = K_NaCa*(exp(gamma*V*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i*alpha)/((pow(Km_Nai, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(Km_Ca+Ca_o)*(1{dimensionless}+K_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp Ca as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: millimolar {init: 1.092e-4, priv: out, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_SR: millimolar {init: 2.7656, priv: out, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_ss: millimolar {init: 1.893e-4, priv: out, pub: out};
    var Ca_i_bufc: dimensionless {priv: in};
    var Ca_sr_bufsr: dimensionless {priv: in};
    var Ca_ss_bufss: dimensionless {priv: in};
    var V_sr: nanolitre {init: 0.001094};
    var V_ss: nanolitre {init: 0.00005468};
    var V: millivolt {pub: in};
    var Vol_c: nanolitre {pub: in};
    var time: millisecond {priv: out, pub: in};
    var d: dimensionless {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: nanoF {pub: in};
    var i_CaL: nanoA_per_nanoF {pub: in};
    var i_NaCa: nanoA_per_nanoF {pub: in};
    var i_p_Ca: nanoA_per_nanoF {pub: in};
    var i_b_Ca: nanoA_per_nanoF {pub: in};
    var i_rel: millimolar_per_millisecond {priv: in};
    var i_up: millimolar_per_millisecond {priv: in};
    var i_leak: millimolar_per_millisecond {priv: in};
    var i_xfer: millimolar_per_millisecond {priv: in};
    ode(Ca_i, time) = Ca_i_bufc*((i_leak-i_up)*V_sr/Vol_c+i_xfer-(i_b_Ca+i_p_Ca-2{dimensionless}*i_NaCa)*Cm/(2{dimensionless}*Vol_c*F));
    ode(Ca_SR, time) = Ca_sr_bufsr*(i_up-(i_rel+i_leak));
    ode(Ca_ss, time) = Ca_ss_bufss*(-i_CaL*Cm/(2{dimensionless}*V_ss*F)+i_rel*V_sr/V_ss-i_xfer*Vol_c/V_ss);
  enddef;

  def comp Ileak_Iup_Ixfer as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var i_up: millimolar_per_millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var i_leak: millimolar_per_millisecond {pub: out};
    var i_xfer: millimolar_per_millisecond {pub: out};
    var Vol_xfer: per_millisecond {init: 0.0038};
    var K_up: millimolar {init: 0.00025};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var Vol_leak: per_millisecond {init: 0.00036};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var Vmax_up: millimolar_per_millisecond {init: 0.006375};
    var Ca_i: millimolar {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    i_up = Vmax_up/(1{dimensionless}+sqr(K_up)/sqr(Ca_i));
    i_leak = Vol_leak*(Ca_SR-Ca_i);
    i_xfer = Vol_xfer*(Ca_ss-Ca_i);
  enddef;

  def comp Irel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: millimolar_per_millisecond {pub: out};
    var R_prime: dimensionless {init: 0.9864};
    var k1_prime: per_millimolar2_per_millisecond {init: 0.15};
    var k2_prime: per_millimolar_per_millisecond {init: 0.045};
    var EC: millimolar {init: 1.5};
    var max_sr: dimensionless {init: 2.5};
    var min_sr: dimensionless {init: 1};
    var k3: per_millisecond {init: 0.06};
    var k4: per_millisecond {init: 0.005};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var Vol_rel: per_millisecond {init: 0.306};
    var Ca_ss: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    var time: millisecond {pub: in};
    var O: dimensionless;
    var kcasr: dimensionless;
    var k1: per_millimolar2_per_millisecond;
    var k2: per_millimolar_per_millisecond;
    kcasr = max_sr-(max_sr-min_sr)/(1{dimensionless}+sqr(EC/Ca_SR));
    k1 = k1_prime/kcasr;
    k2 = k2_prime*kcasr;
    O = k1*sqr(Ca_ss)*R_prime/(k3+k1*sqr(Ca_ss));
    i_rel = Vol_rel*O*(Ca_SR-Ca_ss);
    ode(R_prime, time) = -k2*Ca_ss*R_prime+k4*(1{dimensionless}-R_prime);
  enddef;

  def comp Ca_buffer as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var Ca_i_bufc: dimensionless {pub: out};
    var Ca_sr_bufsr: dimensionless {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_flux_scaling_from_intrinsic_buffers
    var Ca_ss_bufss: dimensionless {pub: out};
    var Ca_i: millimolar {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    var Buf_c: millimolar {init: 0.2};
    var K_buf_c: millimolar {init: 0.001};
    var Buf_sr: millimolar {init: 10};
    var K_buf_sr: millimolar {init: 0.3};
    var Buf_ss: millimolar {init: 0.4};
    var K_buf_ss: millimolar {init: 0.00025};
    Ca_i_bufc = 1{dimensionless}/(1{dimensionless}+Buf_c*K_buf_c/sqr(Ca_i+K_buf_c));
    Ca_sr_bufsr = 1{dimensionless}/(1{dimensionless}+Buf_sr*K_buf_sr/sqr(Ca_SR+K_buf_sr));
    Ca_ss_bufss = 1{dimensionless}/(1{dimensionless}+Buf_ss*K_buf_ss/sqr(Ca_ss+K_buf_ss));
  enddef;

  def comp Na as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: millimolar {init: 7.940167, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: nanoF {pub: in};
    var Vol_c: nanolitre {pub: in};
    var i_Na: nanoA_per_nanoF {pub: in};
    var i_NaCa: nanoA_per_nanoF {pub: in};
    var i_NaK: nanoA_per_nanoF {pub: in};
    var i_b_Na: nanoA_per_nanoF {pub: in};
    ode(Na_i, time) = -conc_clamp*(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)*Cm/(Vol_c*F);
  enddef;

  def comp K as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: millimolar {init: 141.0167, pub: out};
    var conc_clamp: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: nanoF {pub: in};
    var Vol_c: nanolitre {pub: in};
    var i_K1: nanoA_per_nanoF {pub: in};
    var i_to: nanoA_per_nanoF {pub: in};
    var i_NaK: nanoA_per_nanoF {pub: in};
    var i_Kr: nanoA_per_nanoF {pub: in};
    var i_Ks: nanoA_per_nanoF {pub: in};
    var i_p_K: nanoA_per_nanoF {pub: in};
    var i_Stim: nanoA_per_nanoF {pub: in};
    ode(K_i, time) = -conc_clamp*(i_K1+i_to+i_Kr+i_Ks+i_p_K+i_Stim-2{dimensionless}*i_NaK)/(Vol_c*F)*Cm;
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def group as containment for
    comp cell incl
      comp transmembrane_currents incl
        comp INa incl
          comp iNa_h_gate;
          comp iNa_j_gate;
          comp iNa_m_gate;
        endcomp;
        comp ICaL incl
          comp iCaL_d_gate;
          comp iCaL_f_gate;
          comp iCaL_f2_gate;
          comp iCaL_fCass_gate;
        endcomp;
        comp IK1 incl
          comp iK1_rectification;
        endcomp;
        comp IKr incl
          comp iKr_Markov;
          comp iKr_Markov_Sotalol_block;
        endcomp;
        comp IKs incl
          comp iKs_Xs_gate;
        endcomp;
        comp Ito incl
          comp ito_s_gate;
          comp ito_r_gate;
        endcomp;
        comp INaK;
        comp INaCa;
        comp INab;
        comp ICab;
        comp IpCa;
        comp IpK;
      endcomp;
      comp intracellular_currents incl
        comp Irel;
        comp Ileak_Iup_Ixfer;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp Ca incl
          comp Ca_buffer;
        endcomp;
        comp Na;
        comp K;
        comp reversal_potentials;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp INa incl
      comp iNa_m_gate;
      comp iNa_h_gate;
      comp iNa_j_gate;
    endcomp;
    comp ICaL incl
      comp iCaL_d_gate;
      comp iCaL_f_gate;
      comp iCaL_f2_gate;
      comp iCaL_fCass_gate;
    endcomp;
    comp IK1 incl
      comp iK1_rectification;
    endcomp;
    comp IKr incl
      comp iKr_Markov incl
        comp iKr_Markov_Sotalol_block;
      endcomp;
    endcomp;
    comp IKs incl
      comp iKs_Xs_gate;
    endcomp;
    comp Ito incl
      comp ito_s_gate;
      comp ito_r_gate;
    endcomp;
    comp Ca incl
      comp Irel;
      comp Ca_buffer;
      comp Ileak_Iup_Ixfer;
    endcomp;
  enddef;
  def map between cell and Environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and Environment for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_o and K_o;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between INa and Environment for
    vars time and time;
  enddef;
  def map between ICaL and Environment for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_o and Ca_o;
  enddef;
  def map between IKr and Environment for
    vars time and time;
    vars T and T;
    vars K_o and K_o;
  enddef;
  def map between IKs and Environment for
    vars time and time;
  enddef;
  def map between IK1 and Environment for
    vars time and time;
    vars T and T;
    vars K_o and K_o;
  enddef;
  def map between INab and Environment for
    vars time and time;
  enddef;
  def map between ICab and Environment for
    vars time and time;
  enddef;
  def map between Ito and Environment for
    vars time and time;
  enddef;
  def map between INaK and Environment for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_o and K_o;
  enddef;
  def map between INaCa and Environment for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between Ca and Environment for
    vars time and time;
    vars F and F;
  enddef;
  def map between Na and Environment for
    vars time and time;
    vars F and F;
  enddef;
  def map between K and Environment for
    vars time and time;
    vars F and F;
  enddef;
  def map between cell and INa for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between cell and ICaL for
    vars V and V;
    vars i_CaL and i_CaL;
  enddef;
  def map between cell and IKr for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between cell and IKs for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between cell and Ito for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between cell and IK1 for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between cell and INab for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between cell and ICab for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between cell and INaK for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between cell and INaCa for
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between cell and IpCa for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between cell and IpK for
    vars V and V;
    vars i_p_K and i_p_K;
  enddef;
  def map between cell and Ca for
    vars V and V;
    vars Vol_c and Vol_c;
    vars Cm and Cm;
  enddef;
  def map between cell and Na for
    vars Vol_c and Vol_c;
    vars Cm and Cm;
  enddef;
  def map between cell and K for
    vars Vol_c and Vol_c;
    vars Cm and Cm;
    vars i_Stim and i_Stim;
  enddef;
  def map between reversal_potentials and INab for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and IK1 for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and IKr for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and Ito for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and IpK for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and IKs for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and ICab for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and INa for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between reversal_potentials and K for
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and Na for
    vars Na_i and Na_i;
  enddef;
  def map between IK1 and iK1_rectification for
    vars xK1_inf and xK1_inf;
    vars E_K and E_K;
    vars V and V;
  enddef;
  def map between IK1 and K for
    vars i_K1 and i_K1;
  enddef;
  def map between IKr and K for
    vars i_Kr and i_Kr;
  enddef;
  def map between IKs and K for
    vars i_Ks and i_Ks;
  enddef;
  def map between INa and Na for
    vars i_Na and i_Na;
  enddef;
  def map between INab and Na for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between ICaL and Ca for
    vars Ca_ss and Ca_ss;
    vars d and d;
    vars i_CaL and i_CaL;
  enddef;
  def map between IpCa and Ca for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between ICab and Ca for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between INaK and K for
    vars i_NaK and i_NaK;
  enddef;
  def map between INaK and Na for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between INaCa and Ca for
    vars i_NaCa and i_NaCa;
    vars Ca_i and Ca_i;
  enddef;
  def map between INaCa and Na for
    vars i_NaCa and i_NaCa;
    vars Na_i and Na_i;
  enddef;
  def map between IKr and iKr_Markov for
    vars Or4 and Or4;
    vars time and time;
    vars V and V;
    vars T and T;
    vars K_o and K_o;
  enddef;
  def map between iKr_Markov and iKr_Markov_Sotalol_block for
    vars time and time;
    vars alpha_xr1 and alpha_xr1;
    vars beta_xr1 and beta_xr1;
    vars alpha_xr2 and alpha_xr2;
    vars beta_xr2 and beta_xr2;
    vars alpha_xr3 and alpha_xr3;
    vars beta_xr3 and beta_xr3;
    vars alpha_xr4 and alpha_xr4;
    vars beta_xr4 and beta_xr4;
    vars Or4 and O;
    vars OtoB and OtoB;
    vars BtoO and BtoO;
  enddef;
  def map between IKs and iKs_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between INa and iNa_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between INa and iNa_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between INa and iNa_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
    vars shift_INa_inact and shift_INa_inact;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
  enddef;
  def map between ICaL and iCaL_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICaL and iCaL_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICaL and iCaL_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICaL and iCaL_fCass_gate for
    vars fCass and fCass;
    vars time and time;
    vars Ca_ss and Ca_ss;
    vars V and V;
  enddef;
  def map between Ito and ito_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ito and ito_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ito and K for
    vars i_to and i_to;
  enddef;
  def map between IpK and K for
    vars i_p_K and i_p_K;
  enddef;
  def map between Ca and Irel for
    vars i_rel and i_rel;
    vars Ca_ss and Ca_ss;
    vars Ca_SR and Ca_SR;
    vars time and time;
  enddef;
  def map between Ca and Ileak_Iup_Ixfer for
    vars i_up and i_up;
    vars i_leak and i_leak;
    vars i_xfer and i_xfer;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
    vars Ca_SR and Ca_SR;
  enddef;
  def map between Ca and Ca_buffer for
    vars Ca_i_bufc and Ca_i_bufc;
    vars Ca_sr_bufsr and Ca_sr_bufsr;
    vars Ca_ss_bufss and Ca_ss_bufss;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
    vars Ca_SR and Ca_SR;
  enddef;
  def map between Na and K for
    vars conc_clamp and conc_clamp;
  enddef;
enddef;
