def model fox_2002 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit cm_per_ms as
    unit metre {mult: 10};
    unit second {expo: -1.0};
  enddef;
  def unit dimensionless_times_1e_minus_3 as
    unit dimensionless {mult: 0.001};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol_per_m3_per_s as
    unit metre {expo: -3.0};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit s_A_per_m3 as
    unit metre {expo: -3.0};
    unit second;
    unit ampere;
  enddef;
  def unit uF_per_cm2 as
    unit gram {expo: -1.0, mult: 1e-05};
    unit metre {expo: -4.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit uL as
    unit metre {expo: 3.0, mult: 1e-09};
  enddef;
  def unit uM as
    unit metre {expo: -3.0, mult: 0.001};
    unit mole;
  enddef;

  def comp L_type_Ca_current as
    var C_sc: uF_per_cm2 {pub: out, init: 1.0};
    var Ca_i: uM {pub: in};
    var Ca_o: uM {pub: in};
    var F: C_per_mmol {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var Open_prob: dimensionless;
    var P_Ca: cm_per_ms {init: 2.26e-05};
    var P_CaK: cm_per_ms {init: 5.79e-07};
    var P_Kprime: cm_per_ms;
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var d: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: s_A_per_m3;
    var driving_term_ghk_Ca: s_A_per_m3;
    var driving_term_ghk_K: s_A_per_m3;
    var f: dimensionless {pub: in};
    var f_Ca: dimensionless {pub: in};
    var i_Ca: A_per_F {pub: out};
    var i_CaK: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca_L_total: A_per_F;
    var i_Ca_half: A_per_F;
    var i_Ca_max: A_per_F;
    Open_prob = f*d*f_Ca;
    P_Kprime = P_CaK/(1.0{dimensionless}+i_Ca_max/i_Ca_half);
    driving_term_ghk = driving_term_ghk_Ca+P_Kprime*driving_term_ghk_K/P_Ca;
    driving_term_ghk_Ca = 4.0{dimensionless}*V*sqr(F)/(R*T)*(Ca_i*exp(2.0{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Ca_o)/(exp(2.0{dimensionless}*V*F/(R*T))-1.0{dimensionless});
    driving_term_ghk_K = 1000.0{dimensionless_times_1e_minus_3}*V*sqr(F)/(R*T)*(K_i*exp(V*F/(R*T))-K_o)/(exp(V*F/(R*T))-1.0{dimensionless});
    i_Ca = i_Ca_max*Open_prob;
    i_CaK = P_Kprime/C_sc*Open_prob*driving_term_ghk_K*1000.0{dimensionless_times_1e_minus_3};
    i_Ca_L_total = P_Ca*Open_prob*driving_term_ghk*1000.0{dimensionless_times_1e_minus_3}/C_sc;
    i_Ca_half = -0.265{A_per_F};
    i_Ca_max = P_Ca/C_sc*driving_term_ghk_Ca*1000.0{dimensionless_times_1e_minus_3};
  enddef;

  def comp L_type_Ca_current_d_gate as
    var E0_m: mV;
    var V: mV {pub: in};
    var d: dimensionless {pub: out, init: 0.0001};
    var d_infinity: dimensionless;
    var tau_d: ms;
    var time: ms {pub: in};
    E0_m = V+40.0{mV};
    ode(d, time) = (d_infinity-d)/tau_d;
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+10.0{mV})/(-6.24{mV})));
    tau_d = 1.0{ms}/(0.25{dimensionless}*exp(-0.01{per_mV}*V)/(1.0{dimensionless}+exp(-0.07{per_mV}*V))+0.07{dimensionless}*exp(-0.05{per_mV}*E0_m)/(1.0{dimensionless}+exp(0.05{per_mV}*E0_m)));
  enddef;

  def comp L_type_Ca_current_f_Ca_gate as
    var Ca_i: uM {pub: in};
    var K_mfCa: uM {init: 0.18};
    var f_Ca: dimensionless {pub: out, init: 0.942};
    var f_Ca_infinity: dimensionless;
    var tau_f_Ca: ms {init: 30.0};
    var time: ms {pub: in};
    ode(f_Ca, time) = (f_Ca_infinity-f_Ca)/tau_f_Ca;
    f_Ca_infinity = 1.0{dimensionless}/(1.0{dimensionless}+pow(Ca_i/K_mfCa, 3.0{dimensionless}));
  enddef;

  def comp L_type_Ca_current_f_gate as
    var V: mV {pub: in};
    var f: dimensionless {pub: out, init: 0.983};
    var f_infinity: dimensionless;
    var tau_f: ms;
    var time: ms {pub: in};
    ode(f, time) = (f_infinity-f)/tau_f;
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+12.5{mV})/5.0{mV}));
    tau_f = 30.0{ms}+200.0{ms}/(1.0{dimensionless}+exp((V+20.0{mV})/9.5{mV}));
  enddef;

  def comp Na_Ca_exchanger as
    var Ca_i: uM {pub: in};
    var Ca_o: uM {pub: in};
    var F: C_per_mmol {pub: in};
    var K_NaCa: A_per_F {init: 1500.0};
    var K_mCa: uM {init: 1380.0};
    var K_mNa: mM {init: 87.5};
    var K_sat: dimensionless {init: 0.2};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var eta: dimensionless {init: 0.35};
    var i_NaCa: A_per_F {pub: out};
    i_NaCa = K_NaCa/((pow(K_mNa, 3.0{dimensionless})+pow(Na_o, 3.0{dimensionless}))*(K_mCa+Ca_o)*(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V*F/(R*T))))*(exp(eta*V*F/(R*T))*pow(Na_i, 3.0{dimensionless})*Ca_o-exp((eta-1.0{dimensionless})*V*F/(R*T))*pow(Na_o, 3.0{dimensionless})*Ca_i);
  enddef;

  def comp calcium_background_current as
    var Ca_i: uM {pub: in};
    var Ca_o: uM {pub: in};
    var E_Ca: mV;
    var F: C_per_mmol {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_Cab: mS_per_uF {init: 0.0003842};
    var i_Ca_b: A_per_F {pub: out};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_o/Ca_i);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp calcium_dynamics as
    var A_Cap: cm2 {init: 0.0001534};
    var CMDN_tot: uM {init: 10.0};
    var CSQN_tot: uM {init: 10000.0};
    var C_sc: uF_per_cm2 {pub: in};
    var Ca_SR: uM {init: 320.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: uM {pub: out, init: 0.0472};
    var F: C_per_mmol {pub: in};
    var J_leak: mol_per_m3_per_s;
    var J_rel: mol_per_m3_per_s;
    var J_up: mol_per_m3_per_s;
    var K_mCMDN: uM {init: 2.0};
    var K_mCSQN: uM {init: 600.0};
    var K_mup: uM {init: 0.32};
    var P_leak: mS_per_uF {init: 1e-06};
    var P_rel: mS_per_uF {init: 6.0};
    var V: mV {pub: in};
    var V_SR: uL {init: 2e-06};
    var V_myo: uL {init: 2.584e-05};
    var V_up: mol_per_m3_per_s {init: 0.1};
    var beta_SR: dimensionless;
    var beta_i: dimensionless;
    var d: dimensionless {pub: in};
    var f: dimensionless {pub: in};
    var f_Ca: dimensionless {pub: in};
    var gamma: dimensionless;
    var i_Ca: A_per_F {pub: in};
    var i_Ca_b: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_p_Ca: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(Ca_SR, time) = beta_SR*(J_up-J_leak-J_rel)*V_myo/V_SR;
    ode(Ca_i, time) = beta_i*(J_rel+J_leak-J_up-A_Cap*C_sc/(2.0{dimensionless}*F*V_myo)*(i_Ca+i_Ca_b+i_p_Ca-2.0{dimensionless}*i_NaCa));
    J_leak = P_leak*(Ca_SR-Ca_i);
    J_rel = P_rel*f*d*f_Ca*(gamma*Ca_SR-Ca_i)/(1.0{dimensionless}+1.65{dimensionless}*exp(V/20.0{mV}));
    J_up = V_up/(1.0{dimensionless}+sqr(K_mup/Ca_i));
    beta_SR = 1.0{dimensionless}/(1.0{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_SR));
    beta_i = 1.0{dimensionless}/(1.0{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_i));
    gamma = 1.0{dimensionless}/(1.0{dimensionless}+pow(2000.0{uM}/Ca_SR, 3.0{dimensionless}));
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp fast_sodium_current as
    var E_Na: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_Na: mS_per_uF {init: 12.8};
    var h: dimensionless {pub: in};
    var i_Na: A_per_F {pub: out};
    var j: dimensionless {pub: in};
    var m: dimensionless {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_h_gate as
    var V: mV {pub: in};
    var alpha_h: mS_per_uF;
    var beta_h: mS_per_uF;
    var h: dimensionless {pub: out, init: 0.99869};
    var shift_h: mV {init: 0.0};
    var time: ms {pub: in};
    alpha_h = 0.135{mS_per_uF}*exp((V+80.0{mV}-shift_h)/(-6.8{mV}));
    beta_h = 7.5{mS_per_uF}/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+11.0{mV}-shift_h)));
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var V: mV {pub: in};
    var alpha_j: mS_per_uF;
    var beta_j: mS_per_uF;
    var j: dimensionless {pub: out, init: 0.99887};
    var shift_j: mV {init: 0.0};
    var time: ms {pub: in};
    alpha_j = 0.175{mS_per_uF}*exp((V+100.0{mV}-shift_j)/(-23.0{mV}))/(1.0{dimensionless}+exp(0.15{per_mV}*(V+79.0{mV}-shift_j)));
    beta_j = 0.3{mS_per_uF}/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV}-shift_j)));
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  def comp fast_sodium_current_m_gate as
    var E0_m: mV;
    var V: mV {pub: in};
    var alpha_m: mS_per_uF;
    var beta_m: mS_per_uF;
    var m: dimensionless {pub: out, init: 2.46760000000000002e-04};
    var time: ms {pub: in};
    E0_m = V+47.13{mV};
    alpha_m = 0.32{per_mV_per_ms}*E0_m/(1.0{dimensionless}-exp(-0.1{per_mV}*E0_m));
    beta_m = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp membrane as
    var F: C_per_mmol {pub: out, init: 96.5};
    var R: J_per_mol_per_K {pub: out, init: 8.314};
    var T: kelvin {pub: out, init: 310.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -94.7};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: ms {init: 1.0};
    var i_Ca: A_per_F {pub: in};
    var i_CaK: A_per_F {pub: in};
    var i_Ca_b: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kp: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Na_b: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: A_per_F;
    var i_p_Ca: A_per_F {pub: in};
    var i_to: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: ms {init: 50.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: ms {init: 1000.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: A_per_F;
    var stim_end: ms {init: 9000.0};
    var time: ms {pub: in};
    ode(V, time) = -(i_Na+i_Ca+i_CaK+i_Kr+i_Ks+i_to+i_K1+i_Kp+i_NaCa+i_NaK+i_p_Ca+i_Na_b+i_Ca_b+i_Stim);
    i_Stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*stim_amplitude;
    stim_amplitude = -80.0{A_per_F};
  enddef;

  def comp plateau_potassium_current as
    var E_K: mV {pub: in};
    var Kp_V: dimensionless {pub: in};
    var V: mV {pub: in};
    var g_Kp: mS_per_uF {init: 0.002216};
    var i_Kp: A_per_F {pub: out};
    i_Kp = g_Kp*Kp_V*(V-E_K);
  enddef;

  def comp plateau_potassium_current_Kp_gate as
    var Kp_V: dimensionless {pub: out};
    var V: mV {pub: in};
    Kp_V = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current as
    var E_K: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var R_V: dimensionless;
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var X_kr: dimensionless {pub: in};
    var g_Kr: mS_per_uF {init: 0.0136};
    var i_Kr: A_per_F {pub: out};
    E_K = R*T/F*ln(K_o/K_i);
    R_V = 1.0{dimensionless}/(1.0{dimensionless}+2.5{dimensionless}*exp(0.1{per_mV}*(V+28.0{mV})));
    i_Kr = g_Kr*R_V*X_kr*sqrt(K_o/4.0{mM})*(V-E_K);
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate as
    var V: mV {pub: in};
    var X_kr: dimensionless {pub: out, init: 0.229};
    var X_kr_inf: dimensionless;
    var tau_X_kr: ms;
    var time: ms {pub: in};
    ode(X_kr, time) = (X_kr_inf-X_kr)/tau_X_kr;
    X_kr_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-2.182{dimensionless}-0.1819{per_mV}*V));
    tau_X_kr = 43.0{ms}+1.0{ms}/(exp(-5.495{dimensionless}+0.1691{per_mV}*V)+exp(-7.677{dimensionless}-0.0128{per_mV}*V));
  enddef;

  def comp sarcolemmal_calcium_pump as
    var Ca_i: uM {pub: in};
    var K_mpCa: uM {init: 0.05};
    var i_pCa_max: A_per_F {init: 0.05};
    var i_p_Ca: A_per_F {pub: out};
    i_p_Ca = i_pCa_max*Ca_i/(K_mpCa+Ca_i);
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current as
    var E_Ks: mV;
    var F: C_per_mmol {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var X_ks: dimensionless {pub: in};
    var g_Ks: mS_per_uF {init: 0.0245};
    var i_Ks: A_per_F {pub: out};
    E_Ks = R*T/F*ln((K_o+0.01833{dimensionless}*Na_o)/(K_i+0.01833{dimensionless}*Na_i));
    i_Ks = g_Ks*sqr(X_ks)*(V-E_Ks);
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate as
    var V: mV {pub: in};
    var X_ks: dimensionless {pub: out, init: 0.0001};
    var X_ks_infinity: dimensionless;
    var tau_X_ks: ms;
    var time: ms {pub: in};
    ode(X_ks, time) = (X_ks_infinity-X_ks)/tau_X_ks;
    X_ks_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-16.0{mV})/(-13.6{mV})));
    tau_X_ks = 1.0{ms}/(7.19e-05{per_mV}*(V-10.0{mV})/(1.0{dimensionless}-exp(-0.148{per_mV}*(V-10.0{mV})))+0.000131{per_mV}*(V-10.0{mV})/(exp(0.0687{per_mV}*(V-10.0{mV}))-1.0{dimensionless}));
  enddef;

  def comp sodium_background_current as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    var g_Nab: mS_per_uF {init: 0.0031};
    var i_Na_b: A_per_F {pub: out};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  def comp sodium_potassium_pump as
    var F: C_per_mmol {pub: in};
    var K_mKo: mM {init: 1.5};
    var K_mNai: mM {init: 10.0};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var f_NaK: dimensionless;
    var i_NaK: A_per_F {pub: out};
    var i_NaK_max: A_per_F {init: 0.693};
    var sigma: dimensionless;
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK = i_NaK_max*f_NaK/(1.0{dimensionless}+pow(K_mNai/Na_i, 1.5{dimensionless}))*K_o/(K_o+K_mKo);
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Na_o/67.3{mM})-1.0{dimensionless});
  enddef;

  def comp standard_ionic_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: uM {pub: out, init: 2000.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {pub: out, init: 149.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {pub: out, init: 4.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {pub: out, init: 10.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {pub: out, init: 138.0};
  enddef;

  def comp time_independent_potassium_current as
    var E_K: mV {pub: in};
    var K1_infinity: dimensionless {pub: in};
    var K_mK1: mM {init: 13.0};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var g_K1: mS_per_uF {init: 2.8};
    var i_K1: A_per_F {pub: out};
    i_K1 = g_K1*K1_infinity*K_o/(K_o+K_mK1)*(V-E_K);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var E_K: mV {pub: in};
    var F: C_per_mmol {pub: in};
    var K1_infinity: dimensionless {pub: out};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    K1_infinity = 1.0{dimensionless}/(2.0{dimensionless}+exp(1.62{dimensionless}*F/(R*T)*(V-E_K)));
  enddef;

  def comp transient_outward_potassium_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var X_to: dimensionless {pub: in};
    var Y_to: dimensionless {pub: in};
    var g_to: mS_per_uF {init: 0.23815};
    var i_to: A_per_F {pub: out};
    i_to = g_to*X_to*Y_to*(V-E_K);
  enddef;

  def comp transient_outward_potassium_current_X_to_gate as
    var V: mV {pub: in};
    var X_to: dimensionless {pub: out, init: 3.742e-05};
    var alpha_X_to: mS_per_uF;
    var beta_X_to: mS_per_uF;
    var time: ms {pub: in};
    ode(X_to, time) = alpha_X_to*(1.0{dimensionless}-X_to)-beta_X_to*X_to;
    alpha_X_to = 0.04516{mS_per_uF}*exp(0.03577{per_mV}*V);
    beta_X_to = 0.0989{mS_per_uF}*exp(-0.06237{per_mV}*V);
  enddef;

  def comp transient_outward_potassium_current_Y_to_gate as
    var V: mV {pub: in};
    var Y_to: dimensionless {pub: out, init: 1.0};
    var alpha_Y_to: mS_per_uF;
    var beta_Y_to: mS_per_uF;
    var time: ms {pub: in};
    ode(Y_to, time) = alpha_Y_to*(1.0{dimensionless}-Y_to)-beta_Y_to*Y_to;
    alpha_Y_to = 0.005415{mS_per_uF}*exp((V+33.5{mV})/(-5.0{mV}))/(1.0{dimensionless}+0.051335{dimensionless}*exp((V+33.5{mV})/(-5.0{mV})));
    beta_Y_to = 0.005415{mS_per_uF}*exp((V+33.5{mV})/5.0{mV})/(1.0{dimensionless}+0.051335{dimensionless}*exp((V+33.5{mV})/5.0{mV}));
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_d_gate for
    vars d and d;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f_Ca_gate for
    vars f_Ca and f_Ca;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f_gate for
    vars f and f;
  enddef;
  def map between L_type_Ca_current and calcium_dynamics for
    vars C_sc and C_sc;
    vars Ca_i and Ca_i;
    vars i_Ca and i_Ca;
  enddef;
  def map between L_type_Ca_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Ca and i_Ca;
    vars i_CaK and i_CaK;
  enddef;
  def map between L_type_Ca_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between L_type_Ca_current_d_gate and calcium_dynamics for
    vars d and d;
  enddef;
  def map between L_type_Ca_current_d_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current_d_gate and membrane for
    vars V and V;
  enddef;
  def map between L_type_Ca_current_f_Ca_gate and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars f_Ca and f_Ca;
  enddef;
  def map between L_type_Ca_current_f_Ca_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current_f_gate and calcium_dynamics for
    vars f and f;
  enddef;
  def map between L_type_Ca_current_f_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current_f_gate and membrane for
    vars V and V;
  enddef;
  def map between Na_Ca_exchanger and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between calcium_background_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between calcium_background_current and standard_ionic_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and membrane for
    vars F and F;
    vars V and V;
  enddef;
  def map between calcium_dynamics and sarcolemmal_calcium_pump for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between environment and fast_sodium_current_h_gate for
    vars time and time;
  enddef;
  def map between environment and fast_sodium_current_j_gate for
    vars time and time;
  enddef;
  def map between environment and fast_sodium_current_m_gate for
    vars time and time;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars time and time;
  enddef;
  def map between environment and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars time and time;
  enddef;
  def map between environment and transient_outward_potassium_current_X_to_gate for
    vars time and time;
  enddef;
  def map between environment and transient_outward_potassium_current_Y_to_gate for
    vars time and time;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
  enddef;
  def map between fast_sodium_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and standard_ionic_concentrations for
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between fast_sodium_current_h_gate and membrane for
    vars V and V;
  enddef;
  def map between fast_sodium_current_j_gate and membrane for
    vars V and V;
  enddef;
  def map between fast_sodium_current_m_gate and membrane for
    vars V and V;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and plateau_potassium_current_Kp_gate for
    vars V and V;
  enddef;
  def map between membrane and rapid_activating_delayed_rectifiyer_K_current for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars V and V;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and slow_activating_delayed_rectifiyer_K_current for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars V and V;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and time_independent_potassium_current_K1_gate for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
  enddef;
  def map between membrane and transient_outward_potassium_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and transient_outward_potassium_current_X_to_gate for
    vars V and V;
  enddef;
  def map between membrane and transient_outward_potassium_current_Y_to_gate for
    vars V and V;
  enddef;
  def map between plateau_potassium_current and plateau_potassium_current_Kp_gate for
    vars Kp_V and Kp_V;
  enddef;
  def map between plateau_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars X_kr and X_kr;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and standard_ionic_concentrations for
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and time_independent_potassium_current_K1_gate for
    vars E_K and E_K;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and transient_outward_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars X_ks and X_ks;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and standard_ionic_concentrations for
    vars K_i and K_i;
    vars K_o and K_o;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars K_o and K_o;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between standard_ionic_concentrations and time_independent_potassium_current for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_X_to_gate for
    vars X_to and X_to;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_Y_to_gate for
    vars Y_to and Y_to;
  enddef;
enddef;
