// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; This version was created by Penny Noble of Oxford University and is known to run in both COR and PCEnv. The integration problems experienced with Version 03 are fixed in this version. A predefined operator diff error produced by PCEnv in the component intracellular_calcium_concentration of Penny Noble's version was fixed by James Lawson on 19/04/07. Due to the small stimulus duration, for this model to produce a train of action potentials, the max step size must be set at 0.001 or below and the number of points per graph must be over 10k.
// created: W3CDTF 2006-08-08T00:00:00+00:00
// creator: Orgname Oxford University; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// modification: W3CDTF 2008-01-10T13:06:42+13:00; added cmeta:id's to some variables to facilitate creation of PCEnv session file; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-06-20T15:15:35+12:00; Added stimulus protocol to allow simulation of trains of action potentials.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-09-20T12:40:08+12:00; Made 2 new variables - dCaCalmoddt and dCaTropdt in component "intracellular_calcium_concentration," equated these variables to d(CaCalmod)/d(time) and d(CaTrop)/d(time), respectively. This was done to allow PCEnv 0.2 to run the model.; Given James; Family Lawson; Other Richard
// simulation: endingValue 5; nonstandard-pointDensity 200000; maximumStepSize 0.001
// title: unknown
// comment: FN James Lawson; This is a CellML representation of Hilgeman et al.'s 1987 model of the basic cellular mechanisms of excitation-contraction coupling and Ca++ handling in the rabbit atrial myocyte.
// reference: Pubmed_id 2884668; Given D; Family Hilgemann; Other W; Given D; Family Noble; title Excitation-contraction coupling and extracellular calcium transients in rabbit atrium: reconstruction of basic cellular mechanisms; volume 230 1259; first_page 163; title Proceedings of the Royal Society of London - Series B; W3CDTF 1987-03-23; last_page 205
// reference: subject_type keyword; _1 calcium dynamics; _2 electrophysiology; _3 mouse; _4 atrial myocyte; _5 excitation-contraction coupling
def model hilgemann_noble_1987 as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit nanoA_per_millimolar as
    unit nanoA;
    unit millimolar {expo: -1};
  enddef;
  def unit coulomb_per_m3 as
    unit coulomb;
    unit metre {expo: -3};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -88, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var RTONF: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var C_m: microF {init: 0.006};
    var time: second {pub: in};
    var i_K1: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var i_b_K: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_si: nanoA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: nanoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: second {init: 0.1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_end
    var stim_end: second {init: 10000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: second {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: second {init: 0.002};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: nanoA {init: -200};
    RTONF = R*T/F;
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
    ode(V, time) = -(i_Stim+i_K1+i_b_Na+i_b_Ca+i_b_K+i_NaK+i_NaCa+i_Na+i_si)/C_m;
  enddef;

  def comp fast_sodium_current as
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 50};
    var E_mh: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var K_c: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_mh = RTONF*ln((Na_o+0.12{dimensionless}*K_c)/(Na_i+0.12{dimensionless}*K_i));
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.076, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.015, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(1{dimensionless}+320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt})));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: nanoA {pub: out};
    var i_NaK_max: nanoA {init: 14};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var K_c: millimolar {pub: in};
    i_NaK = i_NaK_max*K_c/(K_mK+K_c)*Na_i/(K_mNa+Na_i);
  enddef;

  def comp sodium_background_current as
    var E_Na: millivolt {pub: out};
    var i_b_Na: nanoA {pub: out};
    var g_b_Na: microS {init: 0.012};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    E_Na = RTONF*ln(Na_o/Na_i);
    i_b_Na = g_b_Na*(V-E_Na);
  enddef;

  def comp calcium_background_current as
    var E_Ca: millivolt {pub: out};
    var i_b_Ca: nanoA {pub: out};
    var g_b_Ca: microS {init: 0.005};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    E_Ca = 0.5{dimensionless}*RTONF*ln(Ca_o/Ca_i);
    i_b_Ca = g_b_Ca*(V-E_Ca);
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: nanoA {pub: out};
    var k_NaCa: nanoA {init: 0.01};
    var n_NaCa: dimensionless {init: 3};
    var d_NaCa: dimensionless {init: 0.0001};
    var gamma: dimensionless {init: 0.5};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    i_NaCa = k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V/RTONF)*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V/RTONF)*pow(Na_o, n_NaCa)*Ca_i)/((1{millimolar4}+d_NaCa*(Ca_i*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_i/0.0069{millimolar}));
  enddef;

  def comp potassium_background_current as
    var E_K: millivolt {pub: in};
    var i_b_K: nanoA {pub: out};
    var g_b_K: microS {init: 0.17};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_K = g_b_K*(V-E_K);
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: nanoA {pub: out};
    var E_K: millivolt {pub: out};
    var g_K1: microS {init: 1.7};
    var K_m_K1: millimolar {init: 10};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var K_c: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    E_K = RTONF*ln(K_c/K_i);
    i_K1 = g_K1*K_c/(K_c+K_m_K1)*(V-E_K)/(1{dimensionless}+exp((V-E_K-10{millivolt})*2{dimensionless}/RTONF));
  enddef;

  def comp second_inward_calcium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_si: nanoA {pub: out};
    var i_siCa: nanoA {pub: out};
    var i_siK: nanoA {pub: out};
    var i_siNa: nanoA {pub: out};
    var P_si: nanoA_per_millimolar {init: 5};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ca_i: millimolar {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_c: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    var CaChon: dimensionless {priv: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var Open_prob: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: millimolar;
    var driving_term_ghk_Ca: millimolar;
    var driving_term_ghk_K: millimolar;
    var driving_term_ghk_Na: millimolar;
    i_si = P_si*Open_prob*driving_term_ghk;
    Open_prob = d*CaChon;
    driving_term_ghk_Ca = 4{dimensionless}*(V-50{millivolt})/RTONF/(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})*2{dimensionless}/RTONF))*(Ca_i*exp(100{millivolt}/RTONF)-Ca_o*exp(-2{dimensionless}*(V-50{millivolt})/RTONF));
    driving_term_ghk_K = (V-50{millivolt})/RTONF/(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})/RTONF))*(K_i*exp(50{millivolt}/RTONF)-K_c*exp(-1{dimensionless}*(V-50{millivolt})/RTONF));
    driving_term_ghk_Na = (V-50{millivolt})/RTONF/(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})/RTONF))*(Na_i*exp(50{millivolt}/RTONF)-Na_o*exp(-1{dimensionless}*(V-50{millivolt})/RTONF));
    driving_term_ghk = driving_term_ghk_Ca+0.002{dimensionless}*driving_term_ghk_K+0.001{dimensionless}*driving_term_ghk_Na;
    i_siCa = P_si*Open_prob*driving_term_ghk_Ca;
    i_siK = 0.002{dimensionless}*P_si*Open_prob*driving_term_ghk_K;
    i_siNa = 0.01{dimensionless}*P_si*Open_prob*driving_term_ghk_Na;
  enddef;

  def comp second_inward_calcium_current_d_gate as
    var d: dimensionless {init: 0.0011, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_d: millivolt {init: 0.0001};
    var E0_d: millivolt;
    E0_d = V+24{millivolt}-5{millivolt};
    alpha_d = sel
      case abs(E0_d) < delta_d:
        120{per_second};
      otherwise:
        30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-1{dimensionless}*E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < delta_d:
        120{per_second};
      otherwise:
        12{per_millivolt_second}*E0_d/(exp(E0_d/10{millivolt})-1{dimensionless});
    endsel;
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp second_inward_calcium_current_f_Ca_gate as
    var f_Ca: dimensionless {init: 0.785, pub: out};
    var alpha_f_Ca: per_second;
    var beta_f_Ca: per_second;
    var CaChoff: dimensionless;
    var CaChon: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var delta_f: millivolt {init: 0.0001};
    var E0_f: millivolt;
    E0_f = V+34{millivolt};
    alpha_f_Ca = sel
      case abs(E0_f) < delta_f:
        25{per_second};
      otherwise:
        6.25{per_millivolt_second}*E0_f/(exp(E0_f/4{millivolt})-1{dimensionless});
    endsel;
    beta_f_Ca = 12{per_second}/(1{dimensionless}+exp(-E0_f/4{millivolt}));
    ode(f_Ca, time) = (120{dimensionless}*(1{dimensionless}-f_Ca)*CaChoff+(1{dimensionless}-f_Ca)*(1{dimensionless}-CaChoff))*beta_f_Ca-alpha_f_Ca*f_Ca;
    CaChoff = Ca_i/(0.001{millimolar}+Ca_i);
    CaChon = (1{dimensionless}-f_Ca)*(1{dimensionless}-CaChoff);
  enddef;

  def comp sarcoplasmic_reticulum_calcium_pump as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var i_up: millimolar_per_second {pub: out};
    var K_1: dimensionless;
    var K_2: millimolar;
    var K_cyca: millimolar {init: 0.0003};
    var K_xcs: dimensionless {init: 0.4};
    var K_srca: millimolar {init: 0.5};
    var alpha_up: millimolar_per_second {init: 3};
    var beta_up: millimolar_per_second {init: 0.23};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    K_1 = K_cyca*K_xcs/K_srca;
    K_2 = Ca_i+Ca_up*K_1+K_cyca*K_xcs+K_cyca;
    i_up = Ca_i/K_2*alpha_up-Ca_up*K_1/K_2*beta_up;
  enddef;

  def comp calcium_release as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: millimolar_per_second {pub: out};
    var VoltDep: dimensionless;
    var RegBindSite: dimensionless;
    var ActRate: per_second;
    var InactRate: per_second;
    var K_leak_rate: per_second {init: 0};
    var K_m_rel: per_second {init: 250};
    var PrecFrac: dimensionless;
    var ActFrac: dimensionless {init: 0};
    var ProdFrac: dimensionless {init: 0};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    PrecFrac = 1{dimensionless}-ActFrac-ProdFrac;
    VoltDep = exp(0.08{per_millivolt}*(V-40{millivolt}));
    RegBindSite = sqr(Ca_i/(Ca_i+0.0005{millimolar}));
    ActRate = 600{per_second}*VoltDep+500{per_second}*RegBindSite;
    InactRate = 60{per_second}+500{per_second}*RegBindSite;
    ode(ActFrac, time) = PrecFrac*ActRate-ActFrac*InactRate;
    ode(ProdFrac, time) = ActFrac*InactRate-0.6{per_second}*ProdFrac;
    i_rel = (sqr(ActFrac/(ActFrac+0.25{dimensionless}))*K_m_rel+K_leak_rate)*Ca_rel;
  enddef;

  def comp calcium_translocation as
    var i_trans: millimolar_per_second {pub: out};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var alpha_tr: per_second {init: 50};
    var time: second {pub: in};
    i_trans = (Ca_up-Ca_rel)*alpha_tr;
  enddef;

  def comp extracellular_sodium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: millimolar {init: 140, pub: out};
  enddef;

  def comp intracellular_sodium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: millimolar {init: 6.5, pub: out};
    var V_i: micrometre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_siNa: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    ode(Na_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_Na+i_b_Na+i_NaK*3{dimensionless}+i_NaCa*3{dimensionless}+i_siNa);
  enddef;

  def comp extracellular_calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: millimolar {init: 2, pub: out};
    var i_NaCa: nanoA {pub: in};
    var Cab: millimolar {init: 2};
    var K_diff: per_second {init: 0.0005};
    var Ve: micrometre3 {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    var i_siCa: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    ode(Ca_o, time) = (Cab-Ca_o)*K_diff-1{mA_nA}*(i_siCa+i_NaCa+i_b_Ca)/(2{dimensionless}*1{litre_micrometre3}*Ve*F);
  enddef;

  def comp extracellular_potassium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_c: millimolar {init: 4, pub: out};
  enddef;

  def comp intracellular_potassium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: millimolar {init: 140, pub: out};
    var V_i: micrometre3 {pub: in};
    var i_K1: nanoA {pub: in};
    var i_siK: nanoA {pub: in};
    var i_b_K: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(K_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_K1+i_siK+i_b_K-2{dimensionless}*i_NaK);
  enddef;

  def comp intracellular_calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: millimolar {init: 1e-5, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Ca_up: millimolar {init: 0.3, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_rel: millimolar {init: 0.3, pub: out};
    var Ca_Calmod: millimolar {init: 0.0005};
    var Ca_Trop: millimolar {init: 0.0015};
    var Calmod: millimolar {init: 0.02};
    var Trop: millimolar {init: 0.15};
    var alpha_Calmod: per_millimolar_second {init: 100000};
    var beta_Calmod: per_second {init: 50};
    var alpha_Trop: per_millimolar_second {init: 100000};
    var beta_Trop: per_second {init: 200};
    var radius: micrometre {init: 0.08};
    var length: micrometre {init: 0.08};
    var V_i: micrometre3 {pub: out};
    var Ve: micrometre3 {pub: out};
    var V_Cell: micrometre3;
    var V_i_ratio: dimensionless;
    var V_rel_ratio: dimensionless {init: 0.1};
    var V_e_ratio: dimensionless {init: 0.4};
    var V_up_ratio: dimensionless {init: 0.01};
    var i_up: millimolar_per_second {pub: in};
    var i_trans: millimolar_per_second {pub: in};
    var i_rel: millimolar_per_second {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_siCa: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    V_Cell = 3.141592654{dimensionless}*sqr(radius)*length;
    V_i_ratio = 1{dimensionless}-V_e_ratio-V_up_ratio-V_rel_ratio;
    V_i = V_Cell*V_i_ratio;
    Ve = V_Cell*V_e_ratio;
    ode(Ca_i, time) = -1{mA_nA}/(2{dimensionless}*1{litre_micrometre3}*V_i*F)*(i_siCa+i_b_Ca-2{dimensionless}*i_NaCa)+i_rel*V_rel_ratio/V_i_ratio-dCaCalmoddt-dCaTropdt-i_up;
    ode(Ca_up, time) = V_i_ratio/V_up_ratio*i_up-i_trans;
    ode(Ca_rel, time) = V_up_ratio/V_rel_ratio*i_trans-i_rel;
    ode(Ca_Calmod, time) = alpha_Calmod*Ca_i*(Calmod-Ca_Calmod)-beta_Calmod*Ca_Calmod;
    ode(Ca_Trop, time) = alpha_Trop*Ca_i*(Trop-Ca_Trop)-beta_Trop*Ca_Trop;
    dCaCalmoddt = alpha_Calmod*Ca_i*(Calmod-Ca_Calmod)-beta_Calmod*Ca_Calmod;
    dCaTropdt = alpha_Trop*Ca_i*(Trop-Ca_Trop)-beta_Trop*Ca_Trop;
    var dCaCalmoddt: millimolar_per_second;
    var dCaTropdt: millimolar_per_second;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp potassium_background_current;
      comp Na_Ca_exchanger;
      comp time_independent_potassium_current;
      comp second_inward_calcium_current incl
        comp second_inward_calcium_current_d_gate;
        comp second_inward_calcium_current_f_Ca_gate;
      endcomp;
      comp sarcoplasmic_reticulum_calcium_pump;
      comp intracellular_calcium_concentration;
      comp calcium_release;
      comp calcium_translocation;
      comp extracellular_calcium_concentration;
      comp intracellular_sodium_concentration;
      comp extracellular_sodium_concentration;
      comp intracellular_potassium_concentration;
      comp extracellular_potassium_concentration;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp second_inward_calcium_current incl
      comp second_inward_calcium_current_d_gate;
      comp second_inward_calcium_current_f_Ca_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between potassium_background_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between second_inward_calcium_current and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_release and environment for
    vars time and time;
  enddef;
  def map between calcium_translocation and environment for
    vars time and time;
  enddef;
  def map between extracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and membrane for
    vars i_Na and i_Na;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars i_NaK and i_NaK;
    vars V and V;
  enddef;
  def map between sodium_background_current and membrane for
    vars i_b_Na and i_b_Na;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between calcium_background_current and membrane for
    vars i_b_Ca and i_b_Ca;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between potassium_background_current and membrane for
    vars i_b_K and i_b_K;
    vars V and V;
  enddef;
  def map between Na_Ca_exchanger and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars RTONF and RTONF;
  enddef;
  def map between time_independent_potassium_current and membrane for
    vars i_K1 and i_K1;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between second_inward_calcium_current and membrane for
    vars i_si and i_si;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between calcium_release and membrane for
    vars V and V;
  enddef;
  def map between intracellular_calcium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_sodium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between extracellular_calcium_concentration and membrane for
    vars F and F;
  enddef;
  def map between fast_sodium_current and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and extracellular_potassium_concentration for
    vars K_c and K_c;
  enddef;
  def map between fast_sodium_current and intracellular_potassium_concentration for
    vars K_i and K_i;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars K_c and K_c;
  enddef;
  def map between sodium_potassium_pump and intracellular_potassium_concentration for
    vars i_NaK and i_NaK;
  enddef;
  def map between extracellular_calcium_concentration and Na_Ca_exchanger for
    vars Ca_o and Ca_o;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between intracellular_calcium_concentration and Na_Ca_exchanger for
    vars Ca_i and Ca_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between extracellular_sodium_concentration and Na_Ca_exchanger for
    vars Na_o and Na_o;
  enddef;
  def map between sodium_background_current and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between potassium_background_current and intracellular_potassium_concentration for
    vars i_b_K and i_b_K;
  enddef;
  def map between calcium_background_current and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars K_c and K_c;
  enddef;
  def map between time_independent_potassium_current and intracellular_potassium_concentration for
    vars K_i and K_i;
    vars i_K1 and i_K1;
  enddef;
  def map between time_independent_potassium_current and potassium_background_current for
    vars E_K and E_K;
  enddef;
  def map between second_inward_calcium_current and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
    vars i_siCa and i_siCa;
  enddef;
  def map between second_inward_calcium_current and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between second_inward_calcium_current and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
    vars i_siCa and i_siCa;
  enddef;
  def map between second_inward_calcium_current and extracellular_potassium_concentration for
    vars K_c and K_c;
  enddef;
  def map between second_inward_calcium_current and intracellular_potassium_concentration for
    vars K_i and K_i;
    vars i_siK and i_siK;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and intracellular_calcium_concentration for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_release and intracellular_calcium_concentration for
    vars i_rel and i_rel;
    vars Ca_i and Ca_i;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between calcium_translocation and intracellular_calcium_concentration for
    vars Ca_up and Ca_up;
    vars Ca_rel and Ca_rel;
    vars i_trans and i_trans;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between intracellular_potassium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_calcium_current and second_inward_calcium_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_calcium_current and second_inward_calcium_current_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars V and V;
    vars Ca_i and Ca_i;
    vars CaChon and CaChon;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between second_inward_calcium_current and intracellular_sodium_concentration for
    vars Na_i and Na_i;
    vars i_siNa and i_siNa;
  enddef;
  def map between intracellular_sodium_concentration and Na_Ca_exchanger for
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between extracellular_calcium_concentration and intracellular_calcium_concentration for
    vars Ve and Ve;
  enddef;
  // Hilemann-Noble Atrial Cell Model 1987
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model is known to run in OpenCell and COR and reproduce the published results.
  //
  // Model Structure
  //
  // ABSTRACT: Interactions of electrogenic sodium-calcium exchange, calcium channel and sarcoplasmic reticulum in the mammalian heart have been explored by simulation of extracellular calcium transients measured with tetramethylmurexide in rabbit atrium. The approach has been to use the simplest possible formulations of these mechanisms, which together with a minimum number of additional mechanisms allow reconstruction of action potentials, intracellular calcium transients and extracellular calcium transients. A 3:1 sodium-calcium exchange stoichiometry is assumed. Calcium-channel inactivation is assumed to take place by a voltage-dependent mechanism, which is accelerated by a rise in intracellular calcium; intracellular calcium release becomes a major physiological regulator of calcium influx via calcium channels. A calcium release mechanism is assumed, which is both calcium- and voltage-sensitive, and which undergoes prolonged inactivation. 200 microM cytosolic calcium buffer is assumed. For most simulations only instantaneous potassium conductances are simulated so as to study the other mechanisms independently of time- and calcium-dependent outward current. Thus, the model reconstructs extracellular calcium transients and typical action-potential configuration changes during steady-state and non-steady-state stimulation from the mechanisms directly involved in trans-sarcolemmal calcium movements. The model predicts relatively small trans-sarcolemmal calcium movements during regular stimulation (ca. 2 mumol kg-1 fresh mass per excitation); calcium current is fully activated within 2 ms of excitation, inactivation is substantially complete within 30 ms, and sodium-calcium exchange significantly resists repolarization from approximately -30 mV. Net calcium movements many times larger are possible during non-steady-state stimulation. Long action potentials at premature excitations or after inhibition of calcium release can be supported almost exclusively by calcium current (net calcium influx 5-30 mumol kg-1 fresh mass); action potentials during potentiated post-stimulatory contractions can be supported almost exclusively by sodium-calcium exchange (net calcium efflux 4-20 mumol kg-1 fresh mass). Large calcium movements between the extracellular space and the sarcoplasmic reticulum can take place through the cytosol with virtually no contractile activation. The simulations provide integrated explanations of electrical activity, contractile function and trans-sarcolemmal calcium movements, which were outside the explanatory range of previous models.
  //
  // The original paper reference is cited below:
  //
  // Excitation-contraction coupling and extracellular calcium transients in rabbit atrium: reconstruction of the basic cellular mechanisms, Hilemann, D.W. and Noble, D. 1987,Proc. R. Soc. Lond., B230, 163-205. PubMed ID: 2884668 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=2884668&dopt=Abstract)
  //
  // cell diagram of the Hilemann-Noble model showing ionic currents across the sarcolemma
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the Hilemann-Noble model.
enddef;
