def model generated_model as
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1};
  enddef;
  def unit dimensionless_times_1e3 as
    unit dimensionless {mult: 1000};
  enddef;
  def unit kat_times_1e_minus_15 as
    unit second {expo: -1, mult: 1e-15};
    unit mole;
  enddef;
  def unit m3_per_s_times_1e_minus_15 as
    unit metre {expo: 3, mult: 1e-15};
    unit second {expo: -1};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram;
    unit metre {expo: 2};
    unit second {expo: -2};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit mM as
    unit metre {expo: -3};
    unit mole;
  enddef;
  def unit mM_per_mV_per_ms as
    unit gram {expo: -1, mult: 1000};
    unit metre {expo: -5};
    unit second {expo: 2};
    unit ampere;
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3, mult: 1000};
    unit second {expo: -1};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2};
    unit second {expo: -3};
    unit ampere {expo: -1};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit pA as
    unit ampere {mult: 1e-12};
  enddef;
  def unit per_mM_per_ms as
    unit metre {expo: 3, mult: 1000};
    unit second {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit per_s3_times_1e9 as
    unit second {expo: -3, mult: 1000000000};
  enddef;
  def unit uF_per_mm2_times_1e9 as
    unit gram {expo: -1, mult: 1000000000};
    unit metre {expo: -4};
    unit second {expo: 4};
    unit ampere {expo: 2};
  enddef;
  def unit um2 as
    unit metre {expo: 2, mult: 1e-12};
  enddef;
  def unit um3 as
    unit metre {expo: 3, mult: 1e-18};
  enddef;

  def comp Background_Ca_current as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var E_Ca: mV;
    var F: C_per_mol {pub: in};
    var I_CaB: mM_per_ms {pub: out};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_CaB: mM_per_mV_per_ms {init:  2.68750000000000008e-08};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_o/Ca_i);
    I_CaB = g_CaB*(E_Ca-V);
  enddef;

  def comp CaRU as
    var J_L: m3_per_s_times_1e_minus_15 {pub: out, init: 0.000913};
    var J_R: m3_per_s_times_1e_minus_15 {pub: out, init: 0.02};
    var N: dimensionless {pub: out, init: 50000.0};
    var g_D: m3_per_s_times_1e_minus_15 {pub: out, init: 0.065};
  enddef;

  def comp CaRU_Transitions as
    var C_co: mM {pub: in};
    var C_oc: mM {pub: in};
    var Ca_i: mM {pub: in};
    var K_L: mM {init: 0.00022};
    var K_RyR: mM {init: 0.041};
    var V: mV {pub: in};
    var V_L: mV;
    var a: dimensionless {init: 0.0625};
    var alpha_m: mS_per_uF {pub: out};
    var alpha_p: mS_per_uF {pub: out};
    var b: dimensionless {init: 14.0};
    var beta_m: mS_per_uF {pub: out};
    var beta_pcc: mS_per_uF {pub: out};
    var beta_poc: mS_per_uF {pub: out};
    var c: dimensionless {init: 0.01};
    var d: dimensionless {init: 100.0};
    var del_VL: mV {init: 7.0};
    var epsilon_m: mS_per_uF {pub: out};
    var epsilon_pcc: mS_per_uF {pub: out};
    var epsilon_pco: mS_per_uF {pub: out};
    var expVL: dimensionless;
    var mu_mcc: mS_per_uF {pub: out};
    var mu_moc: mS_per_uF {pub: out};
    var mu_pcc: mS_per_uF {pub: out};
    var mu_poc: mS_per_uF {pub: out};
    var phi_L: dimensionless {init: 2.35};
    var phi_R: dimensionless {init: 0.05};
    var t_L: ms {init: 1.0};
    var t_R: ms;
    var tau_L: ms {init: 650.0};
    var tau_R: ms {init: 2.43};
    var theta_R: dimensionless {init: 0.012};
    V_L = -2.0{mV};
    alpha_m = phi_L/t_L;
    alpha_p = expVL/(t_L*(expVL+1.0{dimensionless}));
    beta_m = phi_R/t_R;
    beta_pcc = sqr(Ca_i)/(t_R*(sqr(Ca_i)+sqr(K_RyR)));
    beta_poc = sqr(C_oc)/(t_R*(sqr(C_oc)+sqr(K_RyR)));
    epsilon_m = b*(expVL+a)/(tau_L*(b*expVL+a));
    epsilon_pcc = Ca_i*(expVL+a)/(tau_L*K_L*(expVL+1.0{dimensionless}));
    epsilon_pco = C_co*(expVL+a)/(tau_L*K_L*(expVL+1.0{dimensionless}));
    expVL = exp((V-V_L)/del_VL);
    mu_mcc = theta_R*d*(sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(d*sqr(Ca_i)+c*sqr(K_RyR)));
    mu_moc = theta_R*d*(sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(d*sqr(C_oc)+c*sqr(K_RyR)));
    mu_pcc = (sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(sqr(Ca_i)+sqr(K_RyR)));
    mu_poc = (sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(sqr(C_oc)+sqr(K_RyR)));
    t_R = 1.17{dimensionless}*t_L;
  enddef;

  def comp CaRU_reduced_states as
    var alpha_m: mS_per_uF {pub: in};
    var alpha_p: mS_per_uF {pub: in};
    var beta_m: mS_per_uF {pub: in};
    var beta_pcc: mS_per_uF {pub: in};
    var epsilon_m: mS_per_uF {pub: in};
    var epsilon_pcc: mS_per_uF {pub: in};
    var epsilon_pco: mS_per_uF {pub: in};
    var mu_mcc: mS_per_uF {pub: in};
    var mu_moc: mS_per_uF {pub: in};
    var mu_pcc: mS_per_uF {pub: in};
    var mu_poc: mS_per_uF {pub: in};
    var r_1: mS_per_uF;
    var r_2: mS_per_uF;
    var r_3: mS_per_uF;
    var r_4: mS_per_uF;
    var r_5: mS_per_uF;
    var r_6: mS_per_uF;
    var r_7: mS_per_uF;
    var r_8: mS_per_uF;
    var time: ms {pub: in};
    var y_cc: dimensionless {pub: in};
    var y_co: dimensionless {pub: in};
    var y_oc: dimensionless {pub: in};
    var z_1: dimensionless {pub: out, init: 0.98859};
    var z_2: dimensionless {pub: out, init: 0.0087302};
    var z_3: dimensionless {init: 0.0026566};
    var z_4: dimensionless;
    r_1 = y_oc*mu_poc+y_cc*mu_pcc;
    r_2 = (alpha_p*mu_moc+alpha_m*mu_mcc)/(alpha_p+alpha_m);
    r_3 = beta_m*mu_pcc/(beta_m+beta_pcc);
    r_4 = mu_mcc;
    r_5 = y_co*epsilon_pco+y_cc*epsilon_pcc;
    r_6 = epsilon_m;
    r_7 = alpha_m*epsilon_pcc/(alpha_p+alpha_m);
    r_8 = epsilon_m;
    ode(z_1, time) = -(r_1+r_5)*z_1+r_2*z_2+r_6*z_3;
    ode(z_2, time) = r_1*z_1-(r_2+r_7)*z_2+r_8*z_4;
    ode(z_3, time) = r_5*z_1-(r_6+r_3)*z_3+r_4*z_4;
    z_4 = 1.0{dimensionless}-z_1-z_2-z_3;
  enddef;

  def comp CaRU_states as
    var alpha_m: mS_per_uF {pub: in};
    var alpha_p: mS_per_uF {pub: in};
    var beta_m: mS_per_uF {pub: in};
    var beta_pcc: mS_per_uF {pub: in};
    var beta_poc: mS_per_uF {pub: in};
    var denom: per_s3_times_1e9;
    var y_cc: dimensionless {pub: out};
    var y_co: dimensionless {pub: out};
    var y_oc: dimensionless {pub: out};
    var y_oo: dimensionless {pub: out};
    denom = (alpha_p+alpha_m)*((alpha_m+beta_m+beta_poc)*(beta_m+beta_pcc)+alpha_p*(beta_m+beta_poc));
    y_cc = alpha_m*beta_m*(alpha_m+alpha_p+beta_m+beta_poc)/denom;
    y_co = alpha_m*(beta_pcc*(alpha_m+beta_m+beta_poc)+beta_poc*alpha_p)/denom;
    y_oc = alpha_p*beta_m*(alpha_p+alpha_m+beta_m+beta_pcc)/denom;
    y_oo = alpha_p*(beta_poc*(alpha_p+beta_m+beta_pcc)+beta_pcc*alpha_m)/denom;
  enddef;

  def comp DS_Calcium_Concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var C_co: mM {pub: out};
    var C_oc: mM {pub: out};
    var Ca_SR: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FVRT_Ca: dimensionless {pub: in};
    var J_L: m3_per_s_times_1e_minus_15 {pub: in};
    var J_R: m3_per_s_times_1e_minus_15 {pub: in};
    var g_D: m3_per_s_times_1e_minus_15 {pub: in};
    C_co = (Ca_i+J_R/g_D*Ca_SR)/(1.0{dimensionless}+J_R/g_D);
    C_oc = sel
      case abs(FVRT_Ca) > 1e-09{dimensionless}:
        (Ca_i+J_L/g_D*Ca_o*FVRT_Ca*exp(-FVRT_Ca)/(1.0{dimensionless}-exp(-FVRT_Ca)))/(1.0{dimensionless}+J_L/g_D*FVRT_Ca/(1.0{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        (Ca_i+J_L/g_D*Ca_o)/(1.0{dimensionless}+J_L/g_D);
    endsel;
  enddef;

  def comp LCC_and_RyR_fluxes as
    var Ca_SR: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FVRT_Ca: dimensionless {pub: in};
    var J_L: m3_per_s_times_1e_minus_15 {pub: in};
    var J_Loc: kat_times_1e_minus_15 {pub: out};
    var J_Loo: kat_times_1e_minus_15 {pub: out};
    var J_R: m3_per_s_times_1e_minus_15 {pub: in};
    var g_D: m3_per_s_times_1e_minus_15 {pub: in};
    J_Loc = sel
      case abs(FVRT_Ca) > 1e-05{dimensionless}:
        J_L*FVRT_Ca/(1.0{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i)/(1.0{dimensionless}+J_L/g_D*FVRT_Ca/(1.0{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_L*1e-05{dimensionless}/(1.0{dimensionless}-exp(-1e-05{dimensionless}))*(Ca_o*exp(-1e-05{dimensionless})-Ca_i)/(1.0{dimensionless}+J_L/g_D*1e-05{dimensionless}/(1.0{dimensionless}-exp(-1e-05{dimensionless})));
    endsel;
    J_Loo = sel
      case abs(FVRT_Ca) > 1e-05{dimensionless}:
        J_L*FVRT_Ca/(1.0{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i+J_R/g_D*(Ca_o*exp(-FVRT_Ca)-Ca_SR))/(1.0{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1.0{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_L*1e-05{dimensionless}/(1.0{dimensionless}-exp(-1e-05{dimensionless}))*(Ca_o*exp(-1e-05{dimensionless})-Ca_i+J_R/g_D*(Ca_o*exp(-1e-05{dimensionless})-Ca_SR))/(1.0{dimensionless}+J_R/g_D+J_L/g_D*1e-05{dimensionless}/(1.0{dimensionless}-exp(-1e-05{dimensionless})));
    endsel;
  enddef;

  def comp LCC_current as
    var F: C_per_mol {pub: in};
    var I_LCC: mM_per_ms {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var I_LCC_webLab: pA;
    var J_L1: kat_times_1e_minus_15;
    var J_L2: kat_times_1e_minus_15;
    var J_Loc: kat_times_1e_minus_15 {pub: in};
    var J_Loo: kat_times_1e_minus_15 {pub: in};
    var N: dimensionless {pub: in};
    var V_myo: um3 {pub: in};
    var alpha_m: mS_per_uF {pub: in};
    var alpha_p: mS_per_uF {pub: in};
    var y_oc: dimensionless {pub: in};
    var y_oo: dimensionless {pub: in};
    var z_1: dimensionless {pub: in};
    var z_2: dimensionless {pub: in};
    I_LCC = (z_1*J_L1+z_2*J_L2)*N/V_myo;
    I_LCC_webLab = -2.0{dimensionless}*F*I_LCC*V_myo*0.001{dimensionless_times_1e3};
    J_L1 = J_Loo*y_oo+J_Loc*y_oc;
    J_L2 = J_Loc*alpha_p/(alpha_p+alpha_m);
  enddef;

  def comp Na_Ca_Exchanger as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FVRT: dimensionless {pub: in};
    var I_NaCa: mM_per_ms {pub: out};
    var K_mCa: mM {init: 1.38};
    var K_mNa: mM {init: 87.5};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var eta: dimensionless {init: 0.35};
    var g_NCX: mM_per_ms {init: 0.0385};
    var k_sat: dimensionless {init: 0.1};
    I_NaCa = g_NCX*(exp(eta*FVRT)*pow(Na_i, 3.0{dimensionless})*Ca_o-exp((eta-1.0{dimensionless})*FVRT)*pow(Na_o, 3.0{dimensionless})*Ca_i)/((pow(Na_o, 3.0{dimensionless})+pow(K_mNa, 3.0{dimensionless}))*(Ca_o+K_mCa)*(1.0{dimensionless}+k_sat*exp((eta-1.0{dimensionless})*FVRT)));
  enddef;

  def comp SR_Ca_leak_current as
    var Ca_SR: mM {pub: in};
    var Ca_i: mM {pub: in};
    var I_SR: mM_per_ms {pub: out};
    var g_SRl: mS_per_uF {init:  1.89509999999999986e-05};
    I_SR = g_SRl*(Ca_SR-Ca_i);
  enddef;

  def comp Sarcolemmal_Ca_pump as
    var Ca_i: mM {pub: in};
    var I_pCa: mM_per_ms {pub: out};
    var K_mpCa: mM {init: 0.0005};
    var g_pCa: mM_per_ms {init: 3.5e-06};
    I_pCa = g_pCa*Ca_i/(K_mpCa+Ca_i);
  enddef;

  def comp calmodulin_Ca_buffer as
    var B_CMDN: mM {init: 0.05};
    var Ca_i: mM {pub: in};
    var beta_CMDN: dimensionless {pub: out};
    var k_CMDN: mM {init: 0.002382};
    beta_CMDN = pow(1.0{dimensionless}+k_CMDN*B_CMDN/sqr(k_CMDN+Ca_i), -1.0{dimensionless});
  enddef;

  def comp cell_geometry as
    var A_cap: um2 {pub: out, init: 15340.0};
    var V_SR: um3 {pub: out, init: 2098.0};
    var V_myo: um3 {pub: out, init: 25840.0};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp extracellular_ion_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {pub: out, init: 2.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {pub: out, init: 140.0};
  enddef;

  def comp intracellular_ion_concentrations as
    var Ca_SR: mM {pub: out, init: 0.7};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {pub: out, init: 0.0001};
    var I_CaB: mM_per_ms {pub: in};
    var I_LCC: mM_per_ms {pub: in};
    var I_NaCa: mM_per_ms {pub: in};
    var I_SR: mM_per_ms {pub: in};
    var I_TRPN: mM_per_ms {pub: in};
    var I_pCa: mM_per_ms {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {pub: out, init: 10.0};
    var TRPN: mM {pub: out, init: 0.0636364};
    var V_SR: um3 {pub: in};
    var V_myo: um3 {pub: in};
    var beta_CMDN: dimensionless {pub: in};
    var time: ms {pub: in};
    ode(Ca_SR, time) = V_myo/V_SR*(-I_SR);
    ode(Ca_i, time) = beta_CMDN*(I_LCC+I_SR+I_NaCa-I_pCa+I_CaB+I_TRPN);
    ode(TRPN, time) = I_TRPN;
  enddef;

  def comp membrane as
    var A_cap: um2 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var C: farad;
    var F: C_per_mol {pub: out, init: 96487.0};
    var FVRT: dimensionless {pub: out};
    var FVRT_Ca: dimensionless {pub: out};
    var R: mJ_per_mol_per_K {pub: out, init: 8314.5};
    var T: kelvin {pub: out, init: 295.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out};
    var time: ms {pub: in};
    C = 1.0{uF_per_mm2_times_1e9}*A_cap*pow(10.0{dimensionless}, -14.0{dimensionless});
    FVRT = F*V/(R*T);
    FVRT_Ca = 2.0{dimensionless}*FVRT;
    V = sel
      case (time >= 0.0{ms}) and (time <= 200.0{ms}):
        0.0{mV};
      otherwise:
        -80.0{mV};
    endsel;
  enddef;

  def comp troponin_Ca_buffer as
    var B_TRPN: mM {init: 0.07};
    var Ca_i: mM {pub: in};
    var I_TRPN: mM_per_ms {pub: out};
    var TRPN: mM {pub: in};
    var k_m_TRPN: mS_per_uF {init: 0.04};
    var k_p_TRPN: per_mM_per_ms {init: 40.0};
    I_TRPN = k_m_TRPN*(B_TRPN-TRPN)-k_p_TRPN*TRPN*Ca_i;
  enddef;
  def map between Background_Ca_current and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between Background_Ca_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars I_CaB and I_CaB;
  enddef;
  def map between Background_Ca_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
  enddef;
  def map between CaRU and DS_Calcium_Concentrations for
    vars J_L and J_L;
    vars J_R and J_R;
    vars g_D and g_D;
  enddef;
  def map between CaRU and LCC_and_RyR_fluxes for
    vars J_L and J_L;
    vars J_R and J_R;
    vars g_D and g_D;
  enddef;
  def map between CaRU and LCC_current for
    vars N and N;
  enddef;
  def map between CaRU_Transitions and CaRU_reduced_states for
    vars alpha_m and alpha_m;
    vars alpha_p and alpha_p;
    vars beta_m and beta_m;
    vars beta_pcc and beta_pcc;
    vars epsilon_m and epsilon_m;
    vars epsilon_pcc and epsilon_pcc;
    vars epsilon_pco and epsilon_pco;
    vars mu_mcc and mu_mcc;
    vars mu_moc and mu_moc;
    vars mu_pcc and mu_pcc;
    vars mu_poc and mu_poc;
  enddef;
  def map between CaRU_Transitions and CaRU_states for
    vars alpha_m and alpha_m;
    vars alpha_p and alpha_p;
    vars beta_m and beta_m;
    vars beta_pcc and beta_pcc;
    vars beta_poc and beta_poc;
  enddef;
  def map between CaRU_Transitions and DS_Calcium_Concentrations for
    vars C_co and C_co;
    vars C_oc and C_oc;
  enddef;
  def map between CaRU_Transitions and LCC_current for
    vars alpha_m and alpha_m;
    vars alpha_p and alpha_p;
  enddef;
  def map between CaRU_Transitions and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
  enddef;
  def map between CaRU_Transitions and membrane for
    vars V and V;
  enddef;
  def map between CaRU_reduced_states and CaRU_states for
    vars y_cc and y_cc;
    vars y_co and y_co;
    vars y_oc and y_oc;
  enddef;
  def map between CaRU_reduced_states and LCC_current for
    vars z_1 and z_1;
    vars z_2 and z_2;
  enddef;
  def map between CaRU_reduced_states and environment for
    vars time and time;
  enddef;
  def map between CaRU_states and LCC_current for
    vars y_oc and y_oc;
    vars y_oo and y_oo;
  enddef;
  def map between DS_Calcium_Concentrations and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between DS_Calcium_Concentrations and intracellular_ion_concentrations for
    vars Ca_SR and Ca_SR;
    vars Ca_i and Ca_i;
  enddef;
  def map between DS_Calcium_Concentrations and membrane for
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between LCC_and_RyR_fluxes and LCC_current for
    vars J_Loc and J_Loc;
    vars J_Loo and J_Loo;
  enddef;
  def map between LCC_and_RyR_fluxes and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between LCC_and_RyR_fluxes and intracellular_ion_concentrations for
    vars Ca_SR and Ca_SR;
    vars Ca_i and Ca_i;
  enddef;
  def map between LCC_and_RyR_fluxes and membrane for
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between LCC_current and cell_geometry for
    vars V_myo and V_myo;
  enddef;
  def map between LCC_current and intracellular_ion_concentrations for
    vars I_LCC and I_LCC;
  enddef;
  def map between LCC_current and membrane for
    vars F and F;
  enddef;
  def map between Na_Ca_Exchanger and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between Na_Ca_Exchanger and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars I_NaCa and I_NaCa;
    vars Na_i and Na_i;
  enddef;
  def map between Na_Ca_Exchanger and membrane for
    vars FVRT and FVRT;
  enddef;
  def map between SR_Ca_leak_current and intracellular_ion_concentrations for
    vars Ca_SR and Ca_SR;
    vars Ca_i and Ca_i;
    vars I_SR and I_SR;
  enddef;
  def map between Sarcolemmal_Ca_pump and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars I_pCa and I_pCa;
  enddef;
  def map between calmodulin_Ca_buffer and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars beta_CMDN and beta_CMDN;
  enddef;
  def map between cell_geometry and intracellular_ion_concentrations for
    vars V_SR and V_SR;
    vars V_myo and V_myo;
  enddef;
  def map between cell_geometry and membrane for
    vars A_cap and A_cap;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and troponin_Ca_buffer for
    vars Ca_i and Ca_i;
    vars I_TRPN and I_TRPN;
    vars TRPN and TRPN;
  enddef;
enddef;
