def model HundRudy2004_units as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit L_per_F_per_ms as
    unit gram {mult: 1000};
    unit metre {expo: 5.0};
    unit second {expo: -5.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit cm as
    unit metre {mult: 0.01};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit dimensionless_times_1e_minus_3 as
    unit dimensionless {mult: 0.001};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol4_per_m12 as
    unit metre {expo: -12.0};
    unit mole {expo: 4.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit s_A_per_m3 as
    unit metre {expo: -3.0};
    unit second;
    unit ampere;
  enddef;
  def unit uF as
    unit gram {expo: -1.0, mult: 1e-09};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit uF_mol_per_C as
    unit gram {expo: -1.0, mult: 1e-09};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
    unit mole;
  enddef;
  def unit uF_per_cm2 as
    unit gram {expo: -1.0, mult: 1e-05};
    unit metre {expo: -4.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit uL as
    unit metre {expo: 3.0, mult: 1e-09};
  enddef;

  def comp Ca as
    var AF: uF_mol_per_C {pub: in};
    var BSLmax: mM {init: 1.124};
    var BSRmax: mM {init: 0.047};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {pub: out, init: 1.21316659999999994e-04};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_jsr: mM {pub: out, init: 1.73758099407100008e+00};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Ca_nsr: mM {pub: out, init: 1.83282233516799997e+00};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_ss: mM {pub: out, init: 1.22712650000000005e-04};
    var ICaL_ICaL: A_per_F {pub: in};
    var ICab_ICab: A_per_F {pub: in};
    var INaCa_INaCa: A_per_F {pub: in};
    var IpCa_IpCa: A_per_F {pub: in};
    var KmBSL: mM {init: 0.0087};
    var KmBSR: mM {init: 0.00087};
    var bcsqn: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var bmyo: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_flux_scaling_from_intrinsic_buffers
    var bss: dimensionless;
    var cbar: mM {init: 0.05};
    var csqnbar: mM {init: 10.0};
    var idiff: mM_per_ms {pub: in};
    var ileak: mM_per_ms {pub: in};
    var irelcicr: mM_per_ms {pub: in};
    var itr: mM_per_ms {pub: in};
    var iup: mM_per_ms {pub: in};
    var kmc: mM {init: 0.00238};
    var kmcsqn: mM {init: 0.8};
    var kmt: mM {init: 0.0005};
    var tbar: mM {init: 0.07};
    var time: ms {pub: in};
    var vjsr: uL {pub: in};
    var vmyo: uL {pub: in};
    var vnsr: uL {pub: in};
    var vss: uL {pub: in};
    ode(Ca_i, time) = bmyo*(-(ICab_ICab+IpCa_IpCa-2.0{dimensionless}*INaCa_INaCa)*AF/(vmyo*2.0{dimensionless})+(ileak-iup)*vnsr/vmyo+idiff*vss/vmyo);
    ode(Ca_jsr, time) = bcsqn*(itr-irelcicr);
    ode(Ca_nsr, time) = iup-itr*vjsr/vnsr-ileak;
    ode(Ca_ss, time) = bss*(-ICaL_ICaL*AF/(vss*2.0{dimensionless})+irelcicr*vjsr/vss-idiff);
    bcsqn = 1.0{dimensionless}/(1.0{dimensionless}+kmcsqn*csqnbar/sqr(Ca_jsr+kmcsqn));
    bmyo = 1.0{dimensionless}/(1.0{dimensionless}+cbar*kmc/sqr(Ca_i+kmc)+kmt*tbar/sqr(Ca_i+kmt));
    bss = 1.0{dimensionless}/(1.0{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+Ca_ss)+BSLmax*KmBSL/sqr(KmBSL+Ca_ss));
  enddef;

  def comp Cl as
    var AF: uF_mol_per_C {pub: in};
    var CTKCl: mM_per_ms {pub: in};
    var CTNaCl: mM_per_ms {pub: in};
    var Cl_i: mM {pub: out, init: 1.55920715717800000e+01};
    var clont: A_per_F {pub: in};
    var conc_clamp: dimensionless {pub: in};
    var time: ms {pub: in};
    var vmyo: uL {pub: in};
    ode(Cl_i, time) = conc_clamp*(clont*AF/vmyo+CTNaCl+CTKCl);
  enddef;

  def comp Environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {pub: out, init: 1.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_chloride_concentration
    var Cl_o: mM {pub: out, init: 100.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mol {pub: out, init: 96485.0};
    var FonRT: per_mV {pub: out, init: 3.74358835077999996e-02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {pub: out, init: 5.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {pub: out, init: 140.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
    var tissue: dimensionless {pub: out, init: 0.0};
  enddef;

  def comp ICaL as
    var CaMKactive: dimensionless {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var F: C_per_mol {pub: in};
    var FonRT: per_mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var ICaL: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var Open_prob: dimensionless;
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 1.64012999999999996e-06};
    var dp: dimensionless {init: 8.98230672627999915e+00};
    var dpss: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: s_A_per_m3;
    var dss: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 9.99961508634000018e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate
    var f2: dimensionless {init: 9.92234519147999983e-01};
    var f2ss: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var fca: dimensionless {init: 9.78366249230000040e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa2_gate
    var fca2: dimensionless {init: 8.93052931248999982e-01};
    var fca2ss: dimensionless;
    var fcass: dimensionless;
    var fss: dimensionless;
    var gacai: dimensionless {init: 1.0};
    var gacao: dimensionless {init: 0.341};
    var ibarca: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var pca: L_per_F_per_ms {init: 0.000243};
    var taud: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tauf: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate_tau
    var tauf2: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate_tau
    var taufca: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa2_gate_tau
    var taufca2: ms;
    var time: ms {pub: in};
    var tissue: dimensionless {pub: in};
    ICaL = sel
      case tissue == 0.0{dimensionless}:
        Open_prob*ibarca;
      otherwise:
        d*f*f2*fca*fca2*ibarca;
    endsel;
    Open_prob = pow(d, dp)*f*f2*fca*fca2;
    ode(d, time) = (dss-d)/taud;
    ode(dp, time) = (dpss-dp)/10.0{ms};
    dpss = 9.0{dimensionless}-8.0{dimensionless}/(1.0{dimensionless}+exp(-(V+65.0{mV})/3.4{mV}));
    driving_term_ghk = 4.0{dimensionless}*(V-15.0{mV})*F*FonRT*(gacai*Ca_ss*exp(2.0{dimensionless}*(V-15.0{mV})*FonRT)-gacao*Ca_o)/(exp(2.0{dimensionless}*(V-15.0{mV})*FonRT)-1.0{dimensionless});
    dss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-4.0{mV})/6.74{mV}));
    ode(f, time) = (fss-f)/tauf;
    ode(f2, time) = (f2ss-f2)/tauf2;
    f2ss = 0.77{dimensionless}/(1.0{dimensionless}+exp((V+17.12{mV})/7.0{mV}))+0.23{dimensionless};
    ode(fca, time) = (fcass-fca)/taufca;
    ode(fca2, time) = (fca2ss-fca2)/taufca2;
    fca2ss = 1.0{dimensionless}/(1.0{dimensionless}-ICaL/0.01{A_per_F});
    fcass = 0.3{dimensionless}/(1.0{dimensionless}-ICaL/0.05{A_per_F})+0.55{dimensionless}/(1.0{dimensionless}+Ca_ss/0.003{mM})+0.15{dimensionless};
    fss = 0.7{dimensionless}/(1.0{dimensionless}+exp((V+17.12{mV})/7.0{mV}))+0.3{dimensionless};
    ibarca = pca*driving_term_ghk;
    taud = 0.59{ms}+0.8{ms}*exp(0.052{per_mV}*(V+13.0{mV}))/(1.0{dimensionless}+exp(0.132{per_mV}*(V+13.0{mV})));
    tauf = 1.0{ms}/(0.2411{dimensionless}*exp(-sqr(0.045{per_mV}*(V-9.6914{mV})))+0.0529{dimensionless});
    tauf2 = 1.0{ms}/(0.0423{dimensionless}*exp(-sqr(0.059{per_mV}*(V-18.5726{mV})))+0.0054{dimensionless});
    taufca = 10.0{ms}*CaMKactive/(0.15{dimensionless}+CaMKactive)+1.0{ms}/(1.0{dimensionless}+Ca_ss/0.003{mM})+0.5{ms};
    taufca2 = 300.0{ms}/(1.0{dimensionless}+exp((-ICaL-0.175{A_per_F})/0.04{A_per_F}))+125.0{ms};
  enddef;

  def comp ICab as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var F: C_per_mol {pub: in};
    var FonRT: per_mV {pub: in};
    var ICab: A_per_F {pub: out};
    var V: mV {pub: in};
    ICab = 1.99508400000000011e-07{L_per_F_per_ms}*4.0{dimensionless}*V*F*FonRT*(Ca_i*exp(2.0{dimensionless}*V*FonRT)-0.341{dimensionless}*Ca_o)/(exp(2.0{dimensionless}*V*FonRT)-1.0{dimensionless});
  enddef;

  def comp IClb as
    var ECl: mV {pub: in};
    var GClb: mS_per_uF {init: 0.000225};
    var IClb: A_per_F {pub: out};
    var V: mV {pub: in};
    IClb = GClb*(V-ECl);
  enddef;

  def comp IK1 as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var IK1: A_per_F {pub: out};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var ak1: mS_per_uF;
    var bk1: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: mS_per_uF {init: 0.5};
    IK1 = g_K1*sqrt(K_o/5.4{mM})*ak1/(ak1+bk1)*(V-EK);
    ak1 = 1.02{mS_per_uF}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V-EK-59.215{mV})));
    bk1 = (0.49124{mS_per_uF}*exp(0.08032{per_mV}*(V-EK+5.476{mV}))+1.0{mS_per_uF}*exp(0.06175{per_mV}*(V-EK-594.31{mV})))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V-EK+4.753{mV})));
  enddef;

  def comp IKp as
    var EK: mV {pub: in};
    var IKp: A_per_F {pub: out};
    var V: mV {pub: in};
    IKp = 0.00276{mS_per_uF}*(V-EK)/(1.0{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
  enddef;

  def comp IKr as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var IKr: A_per_F {pub: out};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var gkr: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var gkr_max: mS_per_uF {init: 0.0138542};
    var r: dimensionless;
    var tauxr: ms;
    var time: ms {pub: in};
    var xr: dimensionless {init: 7.24074000000000024e-06};
    var xrss: dimensionless;
    IKr = gkr*xr*r*(V-EK);
    gkr = gkr_max*sqrt(K_o/5.4{mM});
    r = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+10.0{mV})/15.4{mV}));
    tauxr = 1.0{ms}/(0.0006{per_mV}*(V-1.7384{mV})/(1.0{dimensionless}-exp(-0.136{per_mV}*(V-1.7384{mV})))+0.0003{per_mV}*(V+38.3608{mV})/(exp(0.1522{per_mV}*(V+38.3608{mV}))-1.0{dimensionless}));
    ode(xr, time) = (xrss-xr)/tauxr;
    xrss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+10.085{mV})/4.25{mV}));
  enddef;

  def comp IKs as
    var Ca_i: mM {pub: in};
    var EKs: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var IKs: A_per_F {pub: out};
    var V: mV {pub: in};
    var gks: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var gks_max: mS_per_uF {init: 0.0248975};
    var tauxs: ms;
    var time: ms {pub: in};
    var xs1: dimensionless {init: 1.98831381609999996e-02};
    var xs2: dimensionless {init: 1.98906505540000014e-02};
    var xss: dimensionless;
    IKs = gks*xs1*xs2*(V-EKs);
    gks = gks_max*(1.0{dimensionless}+0.6{dimensionless}/(1.0{dimensionless}+pow(3.8e-05{mM}/Ca_i, 1.4{dimensionless})));
    tauxs = 1.0{ms}/(7.61e-05{per_mV}*(V+44.6{mV})/(1.0{dimensionless}-exp(-9.97{per_mV}*(V+44.6{mV})))+0.00036{per_mV}*(V-0.55{mV})/(exp(0.128{per_mV}*(V-0.55{mV}))-1.0{dimensionless}));
    ode(xs1, time) = (xss-xs1)/tauxs;
    ode(xs2, time) = (xss-xs2)/tauxs/2.0{dimensionless};
    xss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-10.5{mV})/24.7{mV}));
  enddef;

  def comp INa as
    var ENa: mV {pub: in};
    var GNa: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var GNa_max: mS_per_uF {init: 8.25};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var H: dimensionless {init: 9.87317750542999972e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var INa: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var J: dimensionless {init: 9.91924983075999966e-01};
    var V: mV {pub: in};
    var ah: mS_per_uF;
    var aj: mS_per_uF;
    var am: mS_per_uF;
    var bh: mS_per_uF;
    var bj: mS_per_uF;
    var bm: mS_per_uF;
    var gNa: mS_per_uF;
    var h_inf: dimensionless;
    var j_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {init: 1.35653815900000003e-03};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: mV {init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: ms;
    var time: ms {pub: in};
    var tissue: dimensionless {pub: in};
    GNa = sel
      case tissue == 0.0{dimensionless}:
        GNa_max;
      otherwise:
        4.0{dimensionless}*GNa_max;
    endsel;
    ode(H, time) = (h_inf-H)/tau_h;
    INa = gNa*(V-ENa);
    ode(J, time) = (j_inf-J)/tau_j;
    ah = sel
      case V >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        0.135{mS_per_uF}*exp((80.0{mV}+V-shift_INa_inact)/(-6.8{mV}));
    endsel;
    aj = sel
      case V >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        (-127140.0{mS_per_uF}*exp(0.2444{per_mV}*(V-shift_INa_inact))-3.474e-05{mS_per_uF}*exp(-0.04391{per_mV}*(V-shift_INa_inact)))*1.0{per_mV}*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}-shift_INa_inact)));
    endsel;
    am = 0.32{mS_per_uF}*1.0{per_mV}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    bh = sel
      case V >= -40.0{mV}:
        1.0{mS_per_uF}/(0.13{dimensionless}*(1.0{dimensionless}+exp((V+10.66{mV}-shift_INa_inact)/(-11.1{mV}))));
      otherwise:
        3.56{mS_per_uF}*exp(0.079{per_mV}*(V-shift_INa_inact))+310000.0{mS_per_uF}*exp(0.35{per_mV}*(V-shift_INa_inact));
    endsel;
    bj = sel
      case V >= -40.0{mV}:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV}-shift_INa_inact)));
      otherwise:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}-shift_INa_inact)));
    endsel;
    bm = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    gNa = GNa*m*m*m*H*J;
    h_inf = ah*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(ah+bh)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    j_inf = aj*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(aj+bj)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    ode(m, time) = am*(1.0{dimensionless}-m)-bm*m;
    tau_h = 1.0{dimensionless}/(ah+bh);
    tau_j = 1.0{dimensionless}/(aj+bj);
  enddef;

  def comp INaCa as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FonRT: per_mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var INaCa: A_per_F {pub: out};
    var KmCa: mM {init: 0.000125};
    var KmCai: mM {init: 0.0036};
    var KmCao: mM {init: 1.3};
    var KmNai: mM {init: 12.3};
    var KmNao: mM {init: 87.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var NCXmax: A_per_F {init: 4.5};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var V: mV {pub: in};
    var allo: dimensionless;
    var ca_i_NaCa: mM;
    var denom1: dimensionless;
    var denom2: mol4_per_m12;
    var denom3: mol4_per_m12;
    var eta: dimensionless {init: 0.35};
    var ksat: dimensionless {init: 0.27};
    var num: mol4_per_m12;
    INaCa = NCXmax*allo*num/(denom1*(denom2+denom3));
    allo = 1.0{dimensionless}/(1.0{dimensionless}+sqr(KmCa/ca_i_NaCa));
    ca_i_NaCa = 1.5{dimensionless}*Ca_i;
    denom1 = 1.0{dimensionless}+ksat*exp((eta-1.0{dimensionless})*V*FonRT);
    denom2 = KmCao*pow(Na_i, 3.0{dimensionless})+pow(KmNao, 3.0{dimensionless})*ca_i_NaCa+pow(KmNai, 3.0{dimensionless})*Ca_o*(1.0{dimensionless}+ca_i_NaCa/KmCai);
    denom3 = KmCai*pow(Na_o, 3.0{dimensionless})*(1.0{dimensionless}+pow(Na_i/KmNai, 3.0{dimensionless}))+pow(Na_i, 3.0{dimensionless})*Ca_o+pow(Na_o, 3.0{dimensionless})*ca_i_NaCa;
    num = pow(Na_i, 3.0{dimensionless})*Ca_o*exp(eta*V*FonRT)-pow(Na_o, 3.0{dimensionless})*ca_i_NaCa*exp((eta-1.0{dimensionless})*V*FonRT);
  enddef;

  def comp INaK as
    var FonRT: per_mV {pub: in};
    var INaK: A_per_F {pub: out};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var V: mV {pub: in};
    var fnak: dimensionless;
    var ibarnak: A_per_F {init: 0.61875};
    var kmko: mM {init: 1.5};
    var kmnai: mM {init: 10.0};
    var sigma: dimensionless;
    INaK = ibarnak*fnak*1.0{dimensionless}/(1.0{dimensionless}+sqr(kmnai/Na_i))*K_o/(K_o+kmko);
    fnak = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FonRT)+0.0365{dimensionless}*sigma*exp(-V*FonRT));
    sigma = (exp(Na_o/67.3{mM})-1.0{dimensionless})/7.0{dimensionless};
  enddef;

  def comp INal as
    var ENa: mV {pub: in};
    var GNaL: mS_per_uF {init: 0.0065};
    var INal: A_per_F {pub: out};
    var V: mV {pub: in};
    var amL: mS_per_uF;
    var bmL: mS_per_uF;
    var hL: dimensionless {init: 2.61307117590000026e-01};
    var hLss: dimensionless;
    var mL: dimensionless {init: 1.35653815900000003e-03};
    var time: ms {pub: in};
    INal = GNaL*pow(mL, 3.0{dimensionless})*hL*(V-ENa);
    amL = 0.32{mS_per_uF}*1.0{per_mV}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    bmL = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    ode(hL, time) = (hLss-hL)/600.0{ms};
    hLss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+91.0{mV})/6.1{mV}));
    ode(mL, time) = amL*(1.0{dimensionless}-mL)-bmL*mL;
  enddef;

  def comp Idiff_Itr as
    var Ca_i: mM {pub: in};
    var Ca_jsr: mM {pub: in};
    var Ca_nsr: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var idiff: mM_per_ms {pub: out};
    var itr: mM_per_ms {pub: out};
    idiff = (Ca_ss-Ca_i)/0.2{ms};
    itr = (Ca_nsr-Ca_jsr)/120.0{ms};
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def comp IpCa as
    var Ca_i: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var IpCa: A_per_F {pub: out};
    var ibarpca: A_per_F {init: 0.0575};
    var kmpca: mM {init: 0.0005};
    IpCa = ibarpca*Ca_i/(kmpca+Ca_i);
  enddef;

  def comp Irel as
    var CaMK0: dimensionless {init: 0.05};
    var CaMKactive: dimensionless {pub: out};
    var CaMKbound: dimensionless;
    var CaMKtrap: dimensionless {init: 2.11237047739999996e-02};
    var Ca_jsr: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var Grel: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var Grel_max: mS_per_uF {init: 3000.0};
    var ICaL_ICaL: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_kmcads
    var K_m_Ca: mM {init: 0.0028};
    var Km: mM {init: 0.0015};
    var KmCaMK: dimensionless {pub: out, init: 0.15};
    var cafac: dimensionless;
    var dro_inf: dimensionless;
    var dtau_rel: ms;
    var dtau_rel_max: ms {init: 10.0};
    var ibarca: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var irelcicr: mM_per_ms {pub: out};
    var ri: dimensionless {init: 8.62666650318000050e-01};
    var riss: dimensionless;
    var ro: dimensionless {init: 0.0};
    var ross: dimensionless;
    var tauri: ms;
    var time: ms {pub: in};
    var tissue: dimensionless {pub: in};
    var vg: dimensionless;
    CaMKactive = CaMKbound+CaMKtrap;
    CaMKbound = CaMK0*(1.0{dimensionless}-CaMKtrap)/(1.0{dimensionless}+Km/Ca_ss);
    ode(CaMKtrap, time) = 0.05{mS_per_uF}*CaMKactive*(CaMKactive-CaMKtrap)-0.00068{mS_per_uF}*CaMKtrap;
    Grel = Grel_max*vg;
    cafac = 1.0{dimensionless}/(1.0{dimensionless}+exp((ICaL_ICaL+0.05{A_per_F})/0.015{A_per_F}));
    dro_inf = pow(Ca_jsr, 1.9{dimensionless})/(pow(Ca_jsr, 1.9{dimensionless})+pow(49.28{mM}*Ca_ss/(Ca_ss+K_m_Ca), 1.9{dimensionless}));
    dtau_rel = dtau_rel_max*CaMKactive/(KmCaMK+CaMKactive);
    irelcicr = Grel*ro*ri*(Ca_jsr-Ca_ss);
    ode(ri, time) = (riss-ri)/tauri;
    riss = 1.0{dimensionless}/(1.0{dimensionless}+exp((Ca_ss-0.0004{mM}+0.002{mM}*cafac)/2.5e-05{mM}));
    ode(ro, time) = (ross-ro)/3.0{ms};
    ross = dro_inf/(sqr(1.0{A_per_F}/ICaL_ICaL)+1.0{dimensionless});
    tauri = 3.0{ms}+dtau_rel+(350.0{ms}-dtau_rel)/(1.0{dimensionless}+exp((Ca_ss-0.003{mM}+0.003{mM}*cafac)/0.0002{mM}));
    vg = sel
      case tissue == 0.0{dimensionless}:
        1.0{dimensionless}/(1.0{dimensionless}+exp((ibarca+13.0{A_per_F})/5.0{A_per_F}));
      otherwise:
        1.0{dimensionless};
    endsel;
  enddef;

  def comp Ito as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var Ito: A_per_F {pub: out};
    var V: mV {pub: in};
    var ay: mS_per_uF;
    var ay2: mS_per_uF;
    var ay3: mS_per_uF;
    var by: mS_per_uF;
    var by2: mS_per_uF;
    var by3: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var gitodv: mS_per_uF {init: 0.19};
    var rv: dimensionless;
    var time: ms {pub: in};
    var ydv: dimensionless {init: 1.39707867029999992e-02};
    var ydv2: dimensionless {init: 9.99964727519999985e-01};
    var zdv: dimensionless {init: 8.29206149767000023e-01};
    Ito = gitodv*pow(ydv, 3.0{dimensionless})*ydv2*zdv*rv*(V-EK);
    ay = 25.0{mS_per_uF}*exp((V-40.0{mV})/25.0{mV})/(1.0{dimensionless}+exp((V-40.0{mV})/25.0{mV}));
    ay2 = 0.03{mS_per_uF}/(1.0{dimensionless}+exp((V+60.0{mV})/5.0{mV}));
    ay3 = 0.00225{mS_per_uF}/(1.0{dimensionless}+exp((V+60.0{mV})/5.0{mV}));
    by = 25.0{mS_per_uF}*exp(-(V+90.0{mV})/25.0{mV})/(1.0{dimensionless}+exp(-(V+90.0{mV})/25.0{mV}));
    by2 = 0.2{mS_per_uF}*exp((V+25.0{mV})/5.0{mV})/(1.0{dimensionless}+exp((V+25.0{mV})/5.0{mV}));
    by3 = 0.1{mS_per_uF}*exp((V+25.0{mV})/5.0{mV})/(1.0{dimensionless}+exp((V+25.0{mV})/5.0{mV}));
    rv = exp(V/300.0{mV});
    ode(ydv, time) = ay*(1.0{dimensionless}-ydv)-by*ydv;
    ode(ydv2, time) = ay2*(1.0{dimensionless}-ydv2)-by2*ydv2;
    ode(zdv, time) = ay3*(1.0{dimensionless}-zdv)-by3*zdv;
  enddef;

  def comp Ito2 as
    var AA: dimensionless {init: 8.16605172000000050e-04};
    var AAss: dimensionless;
    var Ca_ss: mM {pub: in};
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var F: C_per_mol {pub: in};
    var FonRT: per_mV {pub: in};
    var Ito2: A_per_F {pub: out};
    var Ito2_max: A_per_F;
    var Kmto2: mM {init: 0.1502};
    var PCl: L_per_F_per_ms {init: 4e-07};
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(AA, time) = (AAss-AA)/1.0{ms};
    AAss = 1.0{dimensionless}/(1.0{dimensionless}+Kmto2/Ca_ss);
    Ito2 = Ito2_max*AA;
    Ito2_max = PCl*V*F*FonRT*(Cl_i-Cl_o*exp(V*FonRT))/(1.0{dimensionless}-exp(V*FonRT));
  enddef;

  def comp Iup_Ileak as
    var CaMKactive: dimensionless {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_nsr: mM {pub: in};
    var KmCaMK: dimensionless {pub: in};
    var Kmup: mM {init: 0.00092};
    var dJup: dimensionless;
    var dJupmax: dimensionless {init: 0.75};
    var dKmPLB: mM;
    var dKmPLBmax: mM {init: 0.00017};
    var ileak: mM_per_ms {pub: out};
    var iup: mM_per_ms {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var iupmax: mM_per_ms {init: 0.004375};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var leak_factor: dimensionless {init: 1.0};
    var nsrmax: mM {init: 15.0};
    dJup = dJupmax*CaMKactive/(KmCaMK+CaMKactive);
    dKmPLB = dKmPLBmax*CaMKactive/(KmCaMK+CaMKactive);
    ileak = leak_factor*iupmax*Ca_nsr/nsrmax;
    iup = (dJup+1.0{dimensionless})*iupmax*Ca_i/(Ca_i+Kmup-dKmPLB);
  enddef;

  def comp K as
    var AF: uF_mol_per_C {pub: in};
    var CTKCl: mM_per_ms {pub: out};
    var CTKClmax: mM_per_ms {init: 7.07559999999999965e-06};
    var ECl: mV {pub: in};
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {pub: out, init: 1.35469546216758005e+02};
    var conc_clamp: dimensionless {pub: in};
    var kiont: A_per_F {pub: in};
    var time: ms {pub: in};
    var vmyo: uL {pub: in};
    CTKCl = CTKClmax*(EK-ECl)/(EK-ECl+87.8251{mV});
    ode(K_i, time) = conc_clamp*(-kiont*AF/vmyo+CTKCl);
  enddef;

  def comp Na as
    var AF: uF_mol_per_C {pub: in};
    var CTNaCl: mM_per_ms {pub: out};
    var CTNaClmax: mM_per_ms {init: 9.84429999999999992e-06};
    var ECl: mV {pub: in};
    var ENa: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {pub: out, init: 1.29724333872689996e+01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {pub: out, init: 1.0};
    var naiont: A_per_F {pub: in};
    var time: ms {pub: in};
    var vmyo: uL {pub: in};
    CTNaCl = CTNaClmax*pow(ENa-ECl, 4.0{dimensionless})/(pow(ENa-ECl, 4.0{dimensionless})+pow(87.8251{mV}, 4.0{dimensionless}));
    ode(Na_i, time) = conc_clamp*(-naiont*AF/vmyo+CTNaCl);
  enddef;

  def comp cell as
    var AF: uF_mol_per_C {pub: out};
    var Acap: uF;
    var F: C_per_mol {pub: in};
    var ICaL_ICaL: A_per_F {pub: in};
    var ICab_ICab: A_per_F {pub: in};
    var IClb_IClb: A_per_F {pub: in};
    var IK1_IK1: A_per_F {pub: in};
    var IKp_IKp: A_per_F {pub: in};
    var IKr_IKr: A_per_F {pub: in};
    var IKs_IKs: A_per_F {pub: in};
    var INaCa_INaCa: A_per_F {pub: in};
    var INaK_INaK: A_per_F {pub: in};
    var INa_INa: A_per_F {pub: in};
    var INal_INal: A_per_F {pub: in};
    var IpCa_IpCa: A_per_F {pub: in};
    var Ito2_Ito2: A_per_F {pub: in};
    var Ito_Ito: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -8.57818441071169957e+01};
    var a: cm {init: 0.0011};
    var ageo: cm2;
    var caiont: A_per_F;
    var clont: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: A_per_F;
    var kiont: A_per_F {pub: out};
    var l: cm {init: 0.01};
    var naiont: A_per_F {pub: out};
    var pace: dimensionless {init: 0.0};
    var past: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {init: 1000.0};
    var time: ms {pub: in};
    var vcell: uL;
    var vjsr: uL {pub: out};
    var vmito: uL;
    var vmyo: uL {pub: out};
    var vnsr: uL {pub: out};
    var vsr: uL;
    var vss: uL {pub: out};
    AF = Acap/F;
    Acap = ageo*2.0{uF_per_cm2};
    ode(V, time) = -(naiont+kiont+caiont+clont);
    ageo = 2.0{dimensionless}*3.14159265358979312e+00{dimensionless}*a*a+2.0{dimensionless}*3.14159265358979312e+00{dimensionless}*a*l;
    caiont = ICaL_ICaL+ICab_ICab+IpCa_IpCa-2.0{dimensionless}*INaCa_INaCa;
    clont = IClb_IClb+Ito2_Ito2+0.5{dimensionless}*i_Stim;
    i_Stim = pace*stim_amplitude;
    kiont = IKr_IKr+IKs_IKs+IK1_IK1+IKp_IKp-2.0{dimensionless}*INaK_INaK+Ito_Ito+0.5{dimensionless}*i_Stim;
    naiont = INa_INa+3.0{dimensionless}*INaCa_INaCa+3.0{dimensionless}*INaK_INaK+INal_INal;
    past = floor(time/stim_period)*stim_period;
    stim_amplitude = -15.0{A_per_F};
    vcell = 1000.0{dimensionless_times_1e_minus_3}*3.14159265358979312e+00{dimensionless}*a*a*l;
    vjsr = vcell*0.0048{dimensionless};
    vmito = vcell*0.26{dimensionless};
    vmyo = vcell*0.68{dimensionless};
    vnsr = vcell*0.0552{dimensionless};
    vsr = vcell*0.06{dimensionless};
    vss = vcell*0.02{dimensionless};
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp reversal_potentials as
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#chloride_reversal_potential
    var ECl: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var EK: mV {pub: out};
    var EKs: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var ENa: mV {pub: out};
    var FonRT: per_mV {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var prnak: dimensionless {init: 0.01833};
    ECl = -ln(Cl_o/Cl_i)/FonRT;
    EK = ln(K_o/K_i)/FonRT;
    EKs = ln((K_o+prnak*Na_o)/(K_i+prnak*Na_i))/FonRT;
    ENa = ln(Na_o/Na_i)/FonRT;
  enddef;

  def comp transmembrane_currents as
  enddef;
  def map between Ca and Environment for
    vars time and time;
  enddef;
  def map between Ca and ICaL for
    vars Ca_ss and Ca_ss;
    vars ICaL_ICaL and ICaL;
  enddef;
  def map between Ca and ICab for
    vars Ca_i and Ca_i;
    vars ICab_ICab and ICab;
  enddef;
  def map between Ca and IKs for
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca and INaCa for
    vars Ca_i and Ca_i;
    vars INaCa_INaCa and INaCa;
  enddef;
  def map between Ca and Idiff_Itr for
    vars Ca_i and Ca_i;
    vars Ca_jsr and Ca_jsr;
    vars Ca_nsr and Ca_nsr;
    vars Ca_ss and Ca_ss;
    vars idiff and idiff;
    vars itr and itr;
  enddef;
  def map between Ca and IpCa for
    vars Ca_i and Ca_i;
    vars IpCa_IpCa and IpCa;
  enddef;
  def map between Ca and Irel for
    vars Ca_jsr and Ca_jsr;
    vars Ca_ss and Ca_ss;
    vars irelcicr and irelcicr;
  enddef;
  def map between Ca and Ito2 for
    vars Ca_ss and Ca_ss;
  enddef;
  def map between Ca and Iup_Ileak for
    vars Ca_i and Ca_i;
    vars Ca_nsr and Ca_nsr;
    vars ileak and ileak;
    vars iup and iup;
  enddef;
  def map between Ca and cell for
    vars AF and AF;
    vars vjsr and vjsr;
    vars vmyo and vmyo;
    vars vnsr and vnsr;
    vars vss and vss;
  enddef;
  def map between Cl and Environment for
    vars time and time;
  enddef;
  def map between Cl and Ito2 for
    vars Cl_i and Cl_i;
  enddef;
  def map between Cl and K for
    vars CTKCl and CTKCl;
  enddef;
  def map between Cl and Na for
    vars CTNaCl and CTNaCl;
    vars conc_clamp and conc_clamp;
  enddef;
  def map between Cl and cell for
    vars AF and AF;
    vars clont and clont;
    vars vmyo and vmyo;
  enddef;
  def map between Cl and reversal_potentials for
    vars Cl_i and Cl_i;
  enddef;
  def map between Environment and ICaL for
    vars Ca_o and Ca_o;
    vars F and F;
    vars FonRT and FonRT;
    vars time and time;
    vars tissue and tissue;
  enddef;
  def map between Environment and ICab for
    vars Ca_o and Ca_o;
    vars F and F;
    vars FonRT and FonRT;
  enddef;
  def map between Environment and IK1 for
    vars K_o and K_o;
  enddef;
  def map between Environment and IKr for
    vars K_o and K_o;
    vars time and time;
  enddef;
  def map between Environment and IKs for
    vars time and time;
  enddef;
  def map between Environment and INa for
    vars time and time;
    vars tissue and tissue;
  enddef;
  def map between Environment and INaCa for
    vars Ca_o and Ca_o;
    vars FonRT and FonRT;
    vars Na_o and Na_o;
  enddef;
  def map between Environment and INaK for
    vars FonRT and FonRT;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between Environment and INal for
    vars time and time;
  enddef;
  def map between Environment and Irel for
    vars time and time;
    vars tissue and tissue;
  enddef;
  def map between Environment and Ito for
    vars time and time;
  enddef;
  def map between Environment and Ito2 for
    vars Cl_o and Cl_o;
    vars F and F;
    vars FonRT and FonRT;
    vars time and time;
  enddef;
  def map between Environment and K for
    vars time and time;
  enddef;
  def map between Environment and Na for
    vars time and time;
  enddef;
  def map between Environment and cell for
    vars F and F;
    vars time and time;
  enddef;
  def map between Environment and reversal_potentials for
    vars Cl_o and Cl_o;
    vars FonRT and FonRT;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between ICaL and Irel for
    vars CaMKactive and CaMKactive;
    vars ICaL and ICaL_ICaL;
    vars ibarca and ibarca;
  enddef;
  def map between ICaL and cell for
    vars ICaL and ICaL_ICaL;
    vars V and V;
  enddef;
  def map between ICab and cell for
    vars ICab and ICab_ICab;
    vars V and V;
  enddef;
  def map between IClb and cell for
    vars IClb and IClb_IClb;
    vars V and V;
  enddef;
  def map between IClb and reversal_potentials for
    vars ECl and ECl;
  enddef;
  def map between IK1 and cell for
    vars IK1 and IK1_IK1;
    vars V and V;
  enddef;
  def map between IK1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKp and cell for
    vars IKp and IKp_IKp;
    vars V and V;
  enddef;
  def map between IKp and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKr and cell for
    vars IKr and IKr_IKr;
    vars V and V;
  enddef;
  def map between IKr and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKs and cell for
    vars IKs and IKs_IKs;
    vars V and V;
  enddef;
  def map between IKs and reversal_potentials for
    vars EKs and EKs;
  enddef;
  def map between INa and cell for
    vars INa and INa_INa;
    vars V and V;
  enddef;
  def map between INa and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between INaCa and Na for
    vars Na_i and Na_i;
  enddef;
  def map between INaCa and cell for
    vars INaCa and INaCa_INaCa;
    vars V and V;
  enddef;
  def map between INaK and Na for
    vars Na_i and Na_i;
  enddef;
  def map between INaK and cell for
    vars INaK and INaK_INaK;
    vars V and V;
  enddef;
  def map between INal and cell for
    vars INal and INal_INal;
    vars V and V;
  enddef;
  def map between INal and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between IpCa and cell for
    vars IpCa and IpCa_IpCa;
  enddef;
  def map between Irel and Iup_Ileak for
    vars CaMKactive and CaMKactive;
    vars KmCaMK and KmCaMK;
  enddef;
  def map between Ito and cell for
    vars Ito and Ito_Ito;
    vars V and V;
  enddef;
  def map between Ito and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between Ito2 and cell for
    vars Ito2 and Ito2_Ito2;
    vars V and V;
  enddef;
  def map between K and Na for
    vars conc_clamp and conc_clamp;
  enddef;
  def map between K and cell for
    vars AF and AF;
    vars kiont and kiont;
    vars vmyo and vmyo;
  enddef;
  def map between K and reversal_potentials for
    vars ECl and ECl;
    vars EK and EK;
    vars K_i and K_i;
  enddef;
  def map between Na and cell for
    vars AF and AF;
    vars naiont and naiont;
    vars vmyo and vmyo;
  enddef;
  def map between Na and reversal_potentials for
    vars ECl and ECl;
    vars ENa and ENa;
    vars Na_i and Na_i;
  enddef;
enddef;
