// created: W3CDTF 2009-10-26
// title: One-dimensional mathematical model of the atrioventricular node including atrio-nodal, nodal, and nodal-his cells (Atrio-Nodal Cell)
// creator: Orgname The University of Oxford; Given Penny; Family Noble; penny.noble@dpag.ox.ac.uk
// species: rabbit
// title: The Inada et al. 2009 one-dimensional mathematical model of the atrioventricular node including atrio-nodal, nodal, and nodal-his cells
// reference: W3CDTF 2009; title One-dimensional mathematical model of the atrioventricular node including atrio-nodal, nodal, and nodal-his cells; Given S; Family Inada; Other C; Given J; Family Hancox; Given H; Family Zhang; Other R; Given M; Family Boyett; title Biophysical Journal; volume 97; first_page 2117; last_page 2127; Pubmed_id 19843444
// reference: _1 electrophysiology; _2 cardiac; _3 atrioventricular node; _4 atrial fibrillation; subject_type keyword
// comment: FN Catherine Lloyd; This is the CellML description of Inada et al.'s one-dimensional mathematical model of the atrioventricular node including atrio-nodal, nodal, and nodal-his cells
// bio_entity: atrioventricular node
// simulation: maximumStepSize 0.001; endingValue 5
def model inada_AN_model_2009 as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt2 as
    unit millivolt {expo: 2};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_per_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit microlitre_micrometre3 as
    unit litre {pref: micro};
    unit micrometre3 {expo: -1};
  enddef;
  def unit microlitre_per_second as
    unit litre {pref: micro};
    unit second {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -71.5535452525735, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var C: microF {init: 4e-5};
    var RTONF: millivolt {pub: out};
    var time: second {pub: in};
    var i_Na: nanoA {pub: in};
    var i_CaL: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_Kr: nanoA {pub: in};
    var i_f: nanoA {pub: in};
    var i_st: nanoA {pub: in};
    var i_K1: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_p: nanoA {pub: in};
    var i_b: nanoA {pub: in};
    var i_ACh: nanoA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: nanoA;
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 99999};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: second {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: second {init: 0.001};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: nanoA {init: -2};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
    RTONF = R*T/F;
    ode(V, time) = -(i_Na+i_CaL+i_to+i_Kr+i_f+i_st+i_K1+i_NaCa+i_p+i_b+i_ACh+i_Stim)/C;
  enddef;

  def comp hyperpolarising_activated_current as
    var i_f: nanoA {pub: out};
    var g_f: microS {init: 0};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var ACh: millimolar {priv: out, pub: in};
    var y: dimensionless {priv: in};
    i_f = y*g_f*(V-(-30{millivolt}));
  enddef;

  def comp hyperpolarising_activated_current_y_gate as
    var y: dimensionless {init: 0.231892950445813, pub: out};
    var y_inf: dimensionless;
    var tau_y: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var ACh: millimolar {pub: in};
    y_inf = 1{dimensionless}/(1{dimensionless}+exp((V+83.19{millivolt}-(-7.2{millivolt}*pow(ACh, 0.69{dimensionless})/(pow(1.26e-5{millimolar}, 0.69{dimensionless})+pow(ACh, 0.69{dimensionless}))))/13.56{millivolt}));
    tau_y = 0.25{second}+2{second}*exp(-sqr(V+70{millivolt})/500{millivolt2});
    ode(y, time) = (y_inf-y)/tau_y;
  enddef;

  def comp rapid_delayed_rectifier_potassium_current as
    var i_Kr: nanoA {pub: out};
    var g_Kr: microS {init: 0.0015};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: out};
    var RTONF: millivolt {pub: in};
    var Ki: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var paf: dimensionless {priv: in};
    var pas: dimensionless {priv: in};
    var pik: dimensionless {priv: in};
    E_K = RTONF*ln(Kc/Ki);
    i_Kr = g_Kr*(0.9{dimensionless}*paf+0.1{dimensionless}*pas)*pik*(V-E_K);
  enddef;

  def comp rapid_delayed_rectifier_potassium_current_paf_gate as
    var paf: dimensionless {init: 0.000907827363439979, pub: out};
    var paf_infinity: dimensionless;
    var tau_paf: second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    paf_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+10.22{millivolt})/(-8.5{millivolt})));
    tau_paf = 1{dimensionless}/(17{per_second}*exp(0.0398{per_millivolt}*V)+0.211{per_second}*exp(-0.051{per_millivolt}*V));
    ode(paf, time) = (paf_infinity-paf)/tau_paf;
  enddef;

  def comp rapid_delayed_rectifier_potassium_current_pas_gate as
    var pas: dimensionless {init: 0.00289901267127429, pub: out};
    var pas_infinity: dimensionless;
    var tau_pas: second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    pas_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+10.22{millivolt})/(-8.5{millivolt})));
    tau_pas = 0.33581{second}+0.90673{second}*exp(-sqr(V+10{millivolt})/988.05{millivolt2});
    ode(pas, time) = (pas_infinity-pas)/tau_pas;
  enddef;

  def comp rapid_delayed_rectifier_potassium_current_pik_gate as
    var pik: dimensionless {init: 0.987889953123897, pub: out};
    var pik_infinity: dimensionless;
    var alpha_pik: per_second;
    var beta_pik: per_second;
    var tau_pik: second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    pik_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+4.9{millivolt})/15.14{millivolt}))*(1{dimensionless}-0.3{dimensionless}*exp(-sqr(V)/500{millivolt2}));
    alpha_pik = 92.01{per_second}*exp(-0.0183{per_millivolt}*V);
    beta_pik = 603.6{per_second}*exp(0.00942{per_millivolt}*V);
    tau_pik = 1{dimensionless}/(alpha_pik+beta_pik);
    ode(pik, time) = (pik_infinity-pik)/tau_pik;
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: nanoA {pub: out};
    var g_K1: microS {init: 0.0125};
    var g_K1_prime: microS;
    var V: millivolt {pub: in};
    var Kc: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    g_K1_prime = g_K1*(0.5{dimensionless}+0.5{dimensionless}/(1{dimensionless}+exp((V+30{millivolt})/5{millivolt})));
    i_K1 = g_K1_prime*pow(Kc/(Kc+0.59{millimolar}), 3{dimensionless})*(V+81.9{millivolt})/(1{dimensionless}+exp(1.393{dimensionless}*(V+81.9{millivolt}+3.6{millivolt})/RTONF));
  enddef;

  def comp background_current as
    var i_b: nanoA {pub: out};
    var g_b: microS {init: 0.0018};
    var V: millivolt {pub: in};
    var E_b: millivolt {init: -52.5};
    i_b = g_b*(V-E_b);
  enddef;

  def comp sodium_potassium_pump as
    var i_p: nanoA {pub: out};
    var I_p: nanoA {init: 0.0246};
    var V: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    i_p = I_p*pow(Nai/(5.64{millimolar}+Nai), 3{dimensionless})*sqr(Kc/(0.621{millimolar}+Kc))*1.6{dimensionless}/(1.5{dimensionless}+exp(-(V+60{millivolt})/40{millivolt}));
  enddef;

  def comp sodium_calcium_exchange_current as
    var i_NaCa: nanoA {pub: out};
    var kNaCa: nanoA {init: 5.916};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 0.1369};
    var Qn: dimensionless {init: 0.4315};
    var Qco: dimensionless {init: 0};
    var Kci: millimolar {init: 0.0207};
    var K1ni: millimolar {init: 395.3};
    var K2ni: millimolar {init: 2.289};
    var K3ni: millimolar {init: 26.44};
    var Kcni: millimolar {init: 26.44};
    var K3no: millimolar {init: 4.663};
    var K1no: millimolar {init: 1628};
    var K2no: millimolar {init: 561.4};
    var Kco: millimolar {init: 3.663};
    var do: dimensionless;
    var di: dimensionless;
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Casub: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    var V: millivolt {pub: in};
    do = 1{dimensionless}+Cao/Kco*(1{dimensionless}+exp(Qco*V/RTONF))+Nao/K1no+sqr(Nao)/(K1no*K2no)+pow(Nao, 3{dimensionless})/(K1no*K2no*K3no);
    k32 = exp(Qn*V/(2{dimensionless}*RTONF));
    k23 = (sqr(Nao)/(K1no*K2no)+pow(Nao, 3{dimensionless})/(K1no*K2no*K3no))*exp(-Qn*V/(2{dimensionless}*RTONF))/do;
    k21 = Cao/Kco*exp(-Qco*V/RTONF)/do;
    k34 = Nao/(K3no+Nao);
    di = 1{dimensionless}+Casub/Kci*(1{dimensionless}+exp(-Qci*V/RTONF)+Nai/Kcni)+Nai/K1ni+sqr(Nai)/(K1ni*K2ni)+pow(Nai, 3{dimensionless})/(K1ni*K2ni*K3ni);
    k41 = exp(-Qn*V/(2{dimensionless}*RTONF));
    k14 = (sqr(Nai)/(K1ni*K2ni)+pow(Nai, 3{dimensionless})/(K1ni*K2ni*K3ni))*exp(Qn*V/(2{dimensionless}*RTONF))/di;
    k12 = Casub/Kci*exp(-Qci*V/RTONF)/di;
    k43 = Nai/(K3ni+Nai);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    i_NaCa = kNaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
  enddef;

  def comp fast_sodium_current as
    var i_Na: nanoA {pub: out};
    var g_Na: microlitre_per_second {init: 5e-7};
    var E_Na: millivolt {pub: out};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h1: dimensionless {priv: in};
    var h2: dimensionless {priv: in};
    E_Na = RTONF*ln(Nao/Nai);
    i_Na = g_Na*pow(m, 3{dimensionless})*(0.635{dimensionless}*h1+0.365{dimensionless}*h2)*Nao*V*F/RTONF*(exp((V-E_Na)/RTONF)-1{dimensionless})/(exp(V/RTONF)-1{dimensionless});
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0104794040295793, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+44.4{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        -460{per_second}*(-12.673{dimensionless})/exp(E0_m/(-12.673{millivolt}));
      otherwise:
        -460{per_millivolt_second}*E0_m/(exp(E0_m/(-12.673{millivolt}))-1{dimensionless});
    endsel;
    beta_m = 18400{per_second}*exp(E0_m/(-12.673{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h1_gate as
    var h1: dimensionless {init: 0.792210965943567, pub: out};
    var alpha_h1: per_second;
    var beta_h1: per_second;
    var h1_inf: dimensionless;
    var tau_h1: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h1 = 44.9{per_second}*exp((V+66.9{millivolt})/(-5.57{millivolt}));
    beta_h1 = 1491{per_second}/(1{dimensionless}+323.3{dimensionless}*exp((V+94.6{millivolt})/(-12.9{millivolt})));
    h1_inf = alpha_h1/(alpha_h1+beta_h1);
    tau_h1 = 0.03{second}/(1{dimensionless}+exp((V+40{millivolt})/6{millivolt}))+0.00035{second};
    ode(h1, time) = (h1_inf-h1)/tau_h1;
  enddef;

  def comp fast_sodium_current_h2_gate as
    var h2: dimensionless {init: 0.78834840378483, pub: out};
    var alpha_h2: per_second;
    var beta_h2: per_second;
    var h2_inf: dimensionless;
    var tau_h2: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h2 = 44.9{per_second}*exp((V+66.9{millivolt})/(-5.57{millivolt}));
    beta_h2 = 1491{per_second}/(1{dimensionless}+323.3{dimensionless}*exp((V+94.6{millivolt})/(-12.9{millivolt})));
    h2_inf = alpha_h2/(alpha_h2+beta_h2);
    tau_h2 = 0.12{second}/(1{dimensionless}+exp((V+60{millivolt})/2{millivolt}))+0.00295{second};
    ode(h2, time) = (h2_inf-h2)/tau_h2;
  enddef;

  def comp L_type_calcium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_CaL: nanoA {pub: out};
    var g_CaL: microS {init: 0.0185};
    var E_CaL: millivolt {init: 62.5};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var open_prob: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_ohmic_driving_term
    var driving_term_ohmic: millivolt;
    open_prob = d*(0.675{dimensionless}*f+0.325{dimensionless}*f2);
    driving_term_ohmic = V-E_CaL;
    i_CaL = g_CaL*open_prob*driving_term_ohmic;
  enddef;

  def comp L_type_calcium_current_d_gate as
    var d: dimensionless {init: 3.2286733432613e-5, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var d_inf: dimensionless;
    var tau_d: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var act_shift: millivolt {init: 0};
    var slope_factor_act: millivolt {init: -6.61};
    alpha_d = -26.12{per_millivolt_second}*(V+35{millivolt})/(exp((V+35{millivolt})/(-2.5{millivolt}))-1{dimensionless})+(-78.11{per_millivolt_second}*V/(exp(-0.208{per_millivolt}*V)-1{dimensionless}));
    beta_d = 10.52{per_millivolt_second}*(V-5{millivolt})/(exp(0.4{per_millivolt}*(V-5{millivolt}))-1{dimensionless});
    d_inf = 1{dimensionless}/(1{dimensionless}+exp((V-(-3.2{millivolt}+act_shift))/slope_factor_act));
    tau_d = 1{dimensionless}/(alpha_d+beta_d);
    ode(d, time) = (d_inf-d)/tau_d;
  enddef;

  def comp L_type_calcium_current_f_gate as
    var f: dimensionless {init: 0.998822085003546, pub: out};
    var f_inf: dimensionless;
    var tau_f: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var inact_shift: millivolt {init: -5};
    f_inf = 1{dimensionless}/(1{dimensionless}+exp((V-(-24{millivolt}+inact_shift))/6.31{millivolt}));
    tau_f = 0.01{second}+0.1539{second}*exp(-sqr(V+40{millivolt})/185.67{millivolt2});
    ode(f, time) = (f_inf-f)/tau_f;
  enddef;

  def comp L_type_calcium_current_f2_gate as
    var f2: dimensionless {init: 0.998815467202695, pub: out};
    var f2_inf: dimensionless;
    var tau_f2: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var inact_shift: millivolt {init: -5};
    f2_inf = 1{dimensionless}/(1{dimensionless}+exp((V-(-24{millivolt}+inact_shift))/6.31{millivolt}));
    tau_f2 = 0.06{second}+0.48076{second}*2.25{dimensionless}*exp(-sqr(V-(-40{millivolt}))/138.04{millivolt2});
    ode(f2, time) = (f2_inf-f2)/tau_f2;
  enddef;

  def comp transient_outward_potassium_current as
    var i_to: nanoA {pub: out};
    var E_K: millivolt {pub: out};
    var g_to: microS {init: 0.02};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var r: dimensionless {priv: in};
    var q_fast: dimensionless {priv: in};
    var q_slow: dimensionless {priv: in};
    i_to = g_to*r*(0.45{dimensionless}*q_fast+0.55{dimensionless}*q_slow)*(V-E_K);
    E_K = RTONF*ln(Kc/Ki);
  enddef;

  def comp transient_outward_potassium_current_r_gate as
    var r: dimensionless {init: 0.00802880907824072, pub: out};
    var tau_r: second;
    var r_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = (r_infinity-r)/tau_r;
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-7.44{millivolt})/(-16.4{millivolt})));
    tau_r = 0.596e-3{second}+3.118e-3{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.396{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt})));
  enddef;

  def comp transient_outward_potassium_current_qfast_gate as
    var q_fast: dimensionless {init: 0.995494395556732, pub: out};
    var tau_qfast: second;
    var qfast_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(q_fast, time) = (qfast_infinity-q_fast)/tau_qfast;
    qfast_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+33.8{millivolt})/6.12{millivolt}));
    tau_qfast = 12.66e-3{second}+4.72716{second}/(1{dimensionless}+exp((V+154.5{millivolt})/23.96{millivolt}));
  enddef;

  def comp transient_outward_potassium_current_qslow_gate as
    var q_slow: dimensionless {init: 0.547966933708077, pub: out};
    var tau_qslow: second;
    var qslow_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(q_slow, time) = (qslow_infinity-q_slow)/tau_qslow;
    qslow_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+33.8{millivolt})/6.12{millivolt}));
    tau_qslow = 0.1{second}+4{second}*exp(-sqr(V+65{millivolt})/500{millivolt2});
  enddef;

  def comp sustained_outward_potassium_current as
    var i_st: nanoA {pub: out};
    var E_st: millivolt {init: -37.4};
    var g_st: microS {init: 0};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var qa: dimensionless {priv: in};
    var qi: dimensionless {priv: in};
    i_st = g_st*qa*qi*(V-E_st);
  enddef;

  def comp sustained_outward_potassium_current_qa_gate as
    var qa: dimensionless {init: 0.0758461021803425, pub: out};
    var tau_qa: second;
    var qa_infinity: dimensionless;
    var alpha_qa: per_second;
    var beta_qa: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(qa, time) = (qa_infinity-qa)/tau_qa;
    qa_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-(-49.1{millivolt}))/(-8.98{millivolt})));
    alpha_qa = 1{dimensionless}/(0.15{second}*exp(-V/11{millivolt})+0.2{second}*exp(-V/700{millivolt}));
    beta_qa = 1{dimensionless}/(16{second}*exp(V/8{millivolt})+15{second}*exp(V/50{millivolt}));
    tau_qa = 0.001{dimensionless}/(alpha_qa+beta_qa);
  enddef;

  def comp sustained_outward_potassium_current_qi_gate as
    var qi: dimensionless {init: 0.943345608766177, pub: out};
    var tau_qi: second;
    var alpha_qi: per_second;
    var beta_qi: per_second;
    var qi_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(qi, time) = (qi_infinity-qi)/tau_qi;
    alpha_qi = 0.1504{dimensionless}/(3100{second}*exp(V/13{millivolt})+700{second}*exp(V/70{millivolt}));
    beta_qi = 0.1504{dimensionless}/(95{second}*exp(-V/10{millivolt})+50{second}*exp(-V/700{millivolt}))+0.000229{per_second}/(1{dimensionless}+exp(-V/5{millivolt}));
    qi_infinity = alpha_qi/(alpha_qi+beta_qi);
    tau_qi = 0.001{dimensionless}/(alpha_qi+beta_qi);
  enddef;

  def comp acetylcholine_sensitive_current as
    var i_ACh: nanoA {pub: out};
    var g_ACh: microS;
    var g_ACh_max: microS {init: 0.0198};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var ACh: millimolar {init: 0, pub: out};
    var K_ACh: millimolar {init: 0.00035};
    var Kc: millimolar {pub: in};
    var achf: dimensionless {priv: in};
    var achs: dimensionless {priv: in};
    g_ACh = g_ACh_max*achf*achs*pow(ACh, 1.5{dimensionless})/(pow(K_ACh, 1.5{dimensionless})+pow(ACh, 1.5{dimensionless}));
    i_ACh = g_ACh*Kc/(10{millimolar}+Kc)*(V-E_K)/(1{dimensionless}+exp((V-E_K-140{millivolt})/(2.5{dimensionless}*RTONF)));
  enddef;

  def comp acetylcholine_sensitive_current_achf_gate as
    var achf: dimensionless {init: 0.760265641624297, pub: out};
    var alpha_achf: per_second {init: 73.1};
    var beta_achf: per_second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    beta_achf = 120{per_second}/(1{dimensionless}+exp(-(V+50{millivolt})/15{millivolt}));
    ode(achf, time) = alpha_achf*(1{dimensionless}-achf)-beta_achf*achf;
  enddef;

  def comp acetylcholine_sensitive_current_achs_gate as
    var achs: dimensionless {init: 0.764664867332735, pub: out};
    var alpha_achs: per_second {init: 3.7};
    var beta_achs: per_second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    beta_achs = 5.82{per_second}/(1{dimensionless}+exp(-(V+50{millivolt})/15{millivolt}));
    ode(achs, time) = alpha_achs*(1{dimensionless}-achs)-beta_achs*achs;
  enddef;

  def comp extracellular_sodium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: millimolar {init: 140, pub: out};
  enddef;

  def comp intracellular_sodium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: millimolar {init: 8, pub: out};
  enddef;

  def comp extracellular_calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: millimolar {init: 2, pub: out};
  enddef;

  def comp intracellular_calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: millimolar {init: 3.10430405261017e-5, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#submembrane_space_calcium_concentration
    var Casub: millimolar {init: 2.86962804165375e-5, pub: out};
    var V_up: micrometre3;
    var V_rel: micrometre3;
    var V_sub: micrometre3;
    var Vi: micrometre3;
    var V_cell: micrometre3 {init: 4.39823e-6};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var i_up: millimolar_per_second;
    var i_tr: millimolar_per_second;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: millimolar_per_second;
    var i_diff: millimolar_per_second;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Ca_up: millimolar {init: 0.667220893111124};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_rel: millimolar {init: 0.557458998353581};
    var P_rel: per_second {init: 1805.6};
    var K_up: millimolar {init: 0.0006};
    var tau_tr: second {init: 0.06};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_CaL: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var f_TC: dimensionless {init: 0.0061557815047835};
    var f_TMC: dimensionless {init: 0.112200926320798};
    var f_TMM: dimensionless {init: 0.784309464255762};
    var f_CMi: dimensionless {init: 0.012895686161953};
    var f_CMs: dimensionless {init: 0.0119201823967662};
    var f_CQ: dimensionless {init: 0.400684024879925};
    var f_CSL: dimensionless {init: 8.91124266400812e-6};
    var diff_f_TC: per_second;
    var diff_f_TMC: per_second;
    var diff_f_TMM: per_second;
    var diff_f_CMi: per_second;
    var diff_f_CMs: per_second;
    var diff_f_CQ: per_second;
    var diff_f_CSL: per_second;
    i_diff = (Casub-Cai)/0.04e-3{second};
    i_up = 5{millimolar_per_second}/(1{dimensionless}+K_up/Cai);
    i_tr = (Ca_up-Ca_rel)/tau_tr;
    i_rel = P_rel*(Ca_rel-Casub)/(1{dimensionless}+sqr(0.0012{millimolar}/Casub));
    ode(Ca_up, time) = i_up-i_tr*V_rel/V_up;
    V_up = 0.0116{dimensionless}*V_cell;
    ode(Ca_rel, time) = i_tr-i_rel-10{millimolar}*diff_f_CQ;
    V_rel = 0.0012{dimensionless}*V_cell;
    ode(Cai, time) = (i_diff*V_sub-i_up*V_up)/Vi-(0.045{millimolar}*diff_f_CMi+0.031{millimolar}*diff_f_TC+0.062{millimolar}*diff_f_TMC);
    ode(Casub, time) = (-(i_CaL-2{dimensionless}*i_NaCa)/(2{microlitre_micrometre3}*F)+i_rel*V_rel)/V_sub-i_diff-0.045{millimolar}*diff_f_CMs-0.031{millimolar}/1.2{dimensionless}*diff_f_CSL;
    Vi = 0.46{dimensionless}*V_cell-V_sub;
    V_sub = 0.01{dimensionless}*V_cell;
    diff_f_TC = 88.8e3{per_millimolar_per_second}*Cai*(1{dimensionless}-f_TC)-0.446e3{per_second}*f_TC;
    ode(f_TC, time) = diff_f_TC;
    diff_f_TMC = 227.7e3{per_millimolar_per_second}*Cai*(1{dimensionless}-f_TMC-f_TMM)-0.00751e3{per_second}*f_TMC;
    ode(f_TMC, time) = diff_f_TMC;
    diff_f_TMM = 2.277e3{per_millimolar_per_second}*2.5{millimolar}*(1{dimensionless}-f_TMC-f_TMM)-0.751e3{per_second}*f_TMM;
    ode(f_TMM, time) = diff_f_TMM;
    diff_f_CMi = 227.7e3{per_millimolar_per_second}*Cai*(1{dimensionless}-f_CMi)-0.542e3{per_second}*f_CMi;
    ode(f_CMi, time) = diff_f_CMi;
    diff_f_CMs = 227.7e3{per_millimolar_per_second}*Casub*(1{dimensionless}-f_CMs)-0.542e3{per_second}*f_CMs;
    ode(f_CMs, time) = diff_f_CMs;
    diff_f_CQ = 0.534e3{per_millimolar_per_second}*Ca_rel*(1{dimensionless}-f_CQ)-0.445e3{per_second}*f_CQ;
    ode(f_CQ, time) = diff_f_CQ;
    diff_f_CSL = 0.001{dimensionless}*(115{per_millimolar_per_second}*Casub*(1{dimensionless}-f_CSL)-1000{per_second}*f_CSL);
    ode(f_CSL, time) = diff_f_CSL;
  enddef;

  def comp extracellular_potassium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Kc: millimolar {init: 5.4, pub: out};
  enddef;

  def comp intracellular_potassium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: millimolar {init: 140, pub: out};
  enddef;

  def group as encapsulation for
    comp hyperpolarising_activated_current incl
      comp hyperpolarising_activated_current_y_gate;
    endcomp;
    comp rapid_delayed_rectifier_potassium_current incl
      comp rapid_delayed_rectifier_potassium_current_paf_gate;
      comp rapid_delayed_rectifier_potassium_current_pas_gate;
      comp rapid_delayed_rectifier_potassium_current_pik_gate;
    endcomp;
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h1_gate;
      comp fast_sodium_current_h2_gate;
    endcomp;
    comp L_type_calcium_current incl
      comp L_type_calcium_current_d_gate;
      comp L_type_calcium_current_f_gate;
      comp L_type_calcium_current_f2_gate;
    endcomp;
    comp transient_outward_potassium_current incl
      comp transient_outward_potassium_current_r_gate;
      comp transient_outward_potassium_current_qfast_gate;
      comp transient_outward_potassium_current_qslow_gate;
    endcomp;
    comp sustained_outward_potassium_current incl
      comp sustained_outward_potassium_current_qa_gate;
      comp sustained_outward_potassium_current_qi_gate;
    endcomp;
    comp acetylcholine_sensitive_current incl
      comp acetylcholine_sensitive_current_achf_gate;
      comp acetylcholine_sensitive_current_achs_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between acetylcholine_sensitive_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sustained_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and membrane for
    vars V and V;
    vars i_f and i_f;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and membrane for
    vars V and V;
    vars i_Kr and i_Kr;
    vars RTONF and RTONF;
  enddef;
  def map between time_independent_potassium_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars V and V;
    vars i_p and i_p;
  enddef;
  def map between sodium_calcium_exchange_current and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars RTONF and RTONF;
  enddef;
  def map between fast_sodium_current and membrane for
    vars V and V;
    vars i_Na and i_Na;
    vars RTONF and RTONF;
    vars F and F;
  enddef;
  def map between L_type_calcium_current and membrane for
    vars V and V;
    vars i_CaL and i_CaL;
  enddef;
  def map between transient_outward_potassium_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_to and i_to;
  enddef;
  def map between sustained_outward_potassium_current and membrane for
    vars V and V;
    vars i_st and i_st;
  enddef;
  def map between background_current and membrane for
    vars V and V;
    vars i_b and i_b;
  enddef;
  def map between acetylcholine_sensitive_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_ACh and i_ACh;
  enddef;
  def map between intracellular_calcium_concentration and membrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between transient_outward_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between transient_outward_potassium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars Nai and Nai;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between sodium_calcium_exchange_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between sodium_calcium_exchange_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between sodium_calcium_exchange_current and intracellular_sodium_concentration for
    vars Nai and Nai;
  enddef;
  def map between sodium_calcium_exchange_current and intracellular_calcium_concentration for
    vars i_NaCa and i_NaCa;
    vars Casub and Casub;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between fast_sodium_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between L_type_calcium_current and intracellular_calcium_concentration for
    vars i_CaL and i_CaL;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and acetylcholine_sensitive_current for
    vars E_K and E_K;
  enddef;
  def map between acetylcholine_sensitive_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between hyperpolarising_activated_current and acetylcholine_sensitive_current for
    vars ACh and ACh;
  enddef;
  def map between hyperpolarising_activated_current and hyperpolarising_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
    vars ACh and ACh;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_paf_gate for
    vars paf and paf;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_pas_gate for
    vars pas and pas;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_pik_gate for
    vars pik and pik;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h1_gate for
    vars h1 and h1;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h2_gate for
    vars h2 and h2;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_qfast_gate for
    vars q_fast and q_fast;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_qslow_gate for
    vars q_slow and q_slow;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_outward_potassium_current and sustained_outward_potassium_current_qa_gate for
    vars qa and qa;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_outward_potassium_current and sustained_outward_potassium_current_qi_gate for
    vars qi and qi;
    vars time and time;
    vars V and V;
  enddef;
  def map between acetylcholine_sensitive_current and acetylcholine_sensitive_current_achf_gate for
    vars achf and achf;
    vars time and time;
    vars V and V;
  enddef;
  def map between acetylcholine_sensitive_current and acetylcholine_sensitive_current_achs_gate for
    vars achs and achs;
    vars time and time;
    vars V and V;
  enddef;
  // One-dimensional mathematical model of the atrioventricular node including atrio-nodal, nodal, and nodal-his cells
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and PCEnv to reproduce the published results. The units have been checked and they balance. This version of the CellML model represents the atrio-nodal (AN) cell. The CellML model has been based on both the published paper and the original C++ code.
  //
  // Model Structure
  //
  // ABSTRACT: Mathematical models are a repository of knowledge as well as research and teaching tools. Although action potential models have been developed for most regions of the heart, there is no model for the atrioventricular node (AVN). We have developed action potential models for single atrio-nodal, nodal, and nodal-His cells. The models have the same action potential shapes and refractoriness as observed in experiments. Using these models, together with models for the sinoatrial node (SAN) and atrial muscle, we have developed a one-dimensional (1D) multicellular model including the SAN and AVN. The multicellular model has slow and fast pathways into the AVN and using it we have analyzed the rich behavior of the AVN. Under normal conditions, action potentials were initiated in the SAN center and then propagated through the atrium and AVN. The relationship between the AVN conduction time and the timing of a premature stimulus (conduction curve) is consistent with experimental data. After premature stimulation, atrioventricular nodal reentry could occur. After slow pathway ablation or block of the L-type Ca(2+) current, atrioventricular nodal reentry was abolished. During atrial fibrillation, the AVN limited the number of action potentials transmitted to the ventricle. In the absence of SAN pacemaking, the inferior nodal extension acted as the pacemaker. In conclusion, we have developed what we believe is the first detailed mathematical model of the AVN and it shows the typical physiological and pathophysiological characteristics of the tissue. The model can be used as a tool to analyze the complex structure and behavior of the AVN.
  //
  // model diagram
  //
  // Schematic diagram of the Inada et al. 2009 cell model.
  //
  // The original paper reference is cited below:
  //
  // One-dimensional mathematical model of the atrioventricular node including atrio-nodal, nodal, and nodal-his cells, S. Inada, J.C. Hancox, H. Zhang and M.R. Boyett, 2009, Biophysical Journal, 97, 2117-2127. PubMed ID: 19843444 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=19843444&query_hl=1&itool=pubmed_docsum)
enddef;
