def model koivumaki_2011 as
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit dimensionless_times_1e6 as
    unit dimensionless {mult: 1000000};
  enddef;
  def unit kat_times_1e_minus_12 as
    unit second {expo: -1.0, mult: 1e-12};
    unit mole;
  enddef;
  def unit m12_A_per_mol4_times_1e_minus_12 as
    unit metre {expo: 12.0, mult: 1e-12};
    unit ampere;
    unit mole {expo: -4.0};
  enddef;
  def unit m12_per_mol4 as
    unit metre {expo: 12.0};
    unit mole {expo: -4.0};
  enddef;
  def unit m2_per_s_times_1e_minus_12 as
    unit metre {expo: 2.0, mult: 1e-12};
    unit second {expo: -1.0};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m3_per_s_times_1e_minus_12 as
    unit metre {expo: 3.0, mult: 1e-12};
    unit second {expo: -1.0};
  enddef;
  def unit m6_per_s_per_mol2 as
    unit metre {expo: 6.0};
    unit second {expo: -1.0};
    unit mole {expo: -2.0};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit nF as
    unit gram {expo: -1.0, mult: 1e-12};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit nL as
    unit metre {expo: 3.0, mult: 1e-12};
  enddef;
  def unit nS as
    unit gram {expo: -1.0, mult: 1e-12};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit pA as
    unit ampere {mult: 1e-12};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit um as
    unit metre {mult: 1e-06};
  enddef;
  def unit um2 as
    unit metre {expo: 2.0, mult: 1e-12};
  enddef;

  def comp calcium as
    var Aj_nj: um2 {pub: in};
    var BCa: mM {init: 0.024};
    var CSQN: mM {init: 6.7};
    var CaSR1: mM {pub: out, init: 0.6189225};
    var CaSR2: mM {pub: out, init: 0.6076289};
    var CaSR3: mM {pub: out, init: 0.5905266};
    var CaSR4: mM {pub: out, init: 0.5738108};
    var Cai1: mM {pub: out, init: 1.35496500000000013e-04};
    var Cai2: mM {pub: out, init: 1.38142100000000014e-04};
    var Cai3: mM {pub: out, init: 1.44208699999999994e-04};
    var Cai4: mM {init: 1.56184399999999995e-04};
    var Cass: mM {pub: out, init: 1.61937700000000013e-04};
    var DCa: m2_per_s_times_1e_minus_12 {init: 780.0};
    var DCaBm: m2_per_s_times_1e_minus_12 {init: 25.0};
    var DCaSR: m2_per_s_times_1e_minus_12 {init: 44.0};
    var F: C_per_mol {pub: in};
    var ICaL: pA {pub: in};
    var ICaP: pA {pub: in};
    var ICab: pA {pub: in};
    var INaCa: pA {pub: in};
    var JCa1: kat_times_1e_minus_12;
    var JCa2: kat_times_1e_minus_12;
    var JCa3: kat_times_1e_minus_12;
    var JCa4: kat_times_1e_minus_12;
    var JCass: kat_times_1e_minus_12;
    var JSRCa1: kat_times_1e_minus_12;
    var JSRCa2: kat_times_1e_minus_12;
    var JSRCa3: kat_times_1e_minus_12;
    var JSRCa4: kat_times_1e_minus_12;
    var JSRCaleak1: kat_times_1e_minus_12;
    var JSRCaleak2: kat_times_1e_minus_12;
    var JSRCaleak3: kat_times_1e_minus_12;
    var JSRCaleakss: kat_times_1e_minus_12;
    var J_SERCASR1: kat_times_1e_minus_12 {pub: in};
    var J_SERCASR2: kat_times_1e_minus_12 {pub: in};
    var J_SERCASR3: kat_times_1e_minus_12 {pub: in};
    var J_SERCASRss: kat_times_1e_minus_12 {pub: in};
    var J_bulkSERCA1: kat_times_1e_minus_12 {pub: in};
    var J_bulkSERCA2: kat_times_1e_minus_12 {pub: in};
    var J_bulkSERCA3: kat_times_1e_minus_12 {pub: in};
    var J_bulkSERCAss: kat_times_1e_minus_12 {pub: in};
    var Jj_nj: kat_times_1e_minus_12;
    var Jrel1: kat_times_1e_minus_12 {pub: in};
    var Jrel2: kat_times_1e_minus_12 {pub: in};
    var Jrel3: kat_times_1e_minus_12 {pub: in};
    var Jrelss: kat_times_1e_minus_12 {pub: in};
    var KdBCa: mM {init: 0.00238};
    var KdCSQN: mM {init: 0.8};
    var KdSLhigh: mM {init: 0.013};
    var KdSLlow: mM {init: 1.1};
    var SLhigh: mM {init: 13.0};
    var SLlow: mM {init: 165.0};
    var VSR1: nL {pub: in};
    var VSR2: nL {pub: in};
    var VSR3: nL {pub: in};
    var VSR4: nL {pub: in};
    var Vnonjunct1: nL {pub: in};
    var Vnonjunct2: nL {pub: in};
    var Vnonjunct3: nL {pub: in};
    var Vnonjunct4: nL {pub: in};
    var Vss: nL {pub: in};
    var calcium_CaSR1_beta: dimensionless;
    var calcium_CaSR2_beta: dimensionless;
    var calcium_CaSR3_beta: dimensionless;
    var calcium_CaSR4_beta: dimensionless;
    var calcium_Cai1_beta: dimensionless;
    var calcium_Cai1_gamma: dimensionless;
    var calcium_Cai2_beta: dimensionless;
    var calcium_Cai2_gamma: dimensionless;
    var calcium_Cai3_beta: dimensionless;
    var calcium_Cai3_gamma: dimensionless;
    var calcium_Cai4_beta: dimensionless;
    var calcium_Cai4_gamma: dimensionless;
    var calcium_Cass_beta: dimensionless;
    var calcium_Cass_i_tot: pA;
    var dx: um {pub: in};
    var kSRleak: hertz {init: 0.006};
    var time: second {pub: in};
    var xj_nj: um {pub: in};
    ode(CaSR1, time) = calcium_CaSR1_beta*DCaSR*((CaSR2-2.0{dimensionless}*CaSR1+CaSR1)/sqr(dx)+(CaSR2-CaSR1)/(2.0{dimensionless}*1.0{dimensionless}*sqr(dx)))+JSRCa1/VSR1*calcium_CaSR1_beta;
    ode(CaSR2, time) = calcium_CaSR2_beta*DCaSR*((CaSR3-2.0{dimensionless}*CaSR2+CaSR1)/sqr(dx)+(CaSR3-CaSR1)/(2.0{dimensionless}*2.0{dimensionless}*sqr(dx)))+JSRCa2/VSR2*calcium_CaSR2_beta;
    ode(CaSR3, time) = calcium_CaSR3_beta*DCaSR*((CaSR4-2.0{dimensionless}*CaSR3+CaSR2)/sqr(dx)+(CaSR4-CaSR2)/(2.0{dimensionless}*3.0{dimensionless}*sqr(dx)))+JSRCa3/VSR3*calcium_CaSR3_beta;
    ode(CaSR4, time) = calcium_CaSR4_beta*DCaSR*((CaSR4-2.0{dimensionless}*CaSR4+CaSR3)/sqr(dx)+(CaSR4-CaSR3)/(2.0{dimensionless}*4.0{dimensionless}*sqr(dx)))+JSRCa4/VSR4*calcium_CaSR4_beta;
    ode(Cai1, time) = calcium_Cai1_beta*(DCa+calcium_Cai1_gamma*DCaBm)*((Cai2-2.0{dimensionless}*Cai1+Cai1)/sqr(dx)+(Cai2-Cai1)/(2.0{dimensionless}*1.0{dimensionless}*sqr(dx)))-2.0{dimensionless}*calcium_Cai1_beta*calcium_Cai1_gamma*DCaBm/(KdBCa+Cai1)*sqr((Cai2-Cai1)/(2.0{dimensionless}*dx))+JCa1/Vnonjunct1*calcium_Cai1_beta;
    ode(Cai2, time) = calcium_Cai2_beta*(DCa+calcium_Cai2_gamma*DCaBm)*((Cai3-2.0{dimensionless}*Cai2+Cai1)/sqr(dx)+(Cai3-Cai1)/(2.0{dimensionless}*2.0{dimensionless}*sqr(dx)))-2.0{dimensionless}*calcium_Cai2_beta*calcium_Cai2_gamma*DCaBm/(KdBCa+Cai2)*sqr((Cai3-Cai1)/(2.0{dimensionless}*dx))+JCa2/Vnonjunct2*calcium_Cai2_beta;
    ode(Cai3, time) = calcium_Cai3_beta*(DCa+calcium_Cai3_gamma*DCaBm)*((Cai4-2.0{dimensionless}*Cai3+Cai2)/sqr(dx)+(Cai4-Cai2)/(2.0{dimensionless}*3.0{dimensionless}*sqr(dx)))-2.0{dimensionless}*calcium_Cai3_beta*calcium_Cai3_gamma*DCaBm/(KdBCa+Cai3)*sqr((Cai4-Cai2)/(2.0{dimensionless}*dx))+JCa3/Vnonjunct3*calcium_Cai3_beta;
    ode(Cai4, time) = calcium_Cai4_beta*(DCa+calcium_Cai4_gamma*DCaBm)*((Cai4-2.0{dimensionless}*Cai4+Cai3)/sqr(dx)+(Cai4-Cai3)/(2.0{dimensionless}*4.0{dimensionless}*sqr(dx)))-2.0{dimensionless}*calcium_Cai4_beta*calcium_Cai4_gamma*DCaBm/(KdBCa+Cai4)*sqr((Cai4-Cai3)/(2.0{dimensionless}*dx))+JCa4/Vnonjunct4*calcium_Cai4_beta;
    ode(Cass, time) = calcium_Cass_beta*(JCass/Vss+calcium_Cass_i_tot/(2.0{dimensionless}*Vss*F));
    JCa1 = -J_bulkSERCA1+JSRCaleak1+Jrel1;
    JCa2 = -J_bulkSERCA2+JSRCaleak2+Jrel2;
    JCa3 = -J_bulkSERCA3+JSRCaleak3+Jrel3;
    JCa4 = Jj_nj;
    JCass = -Jj_nj+JSRCaleakss-J_bulkSERCAss+Jrelss;
    JSRCa1 = J_SERCASR1-JSRCaleak1-Jrel1;
    JSRCa2 = J_SERCASR2-JSRCaleak2-Jrel2;
    JSRCa3 = J_SERCASR3-JSRCaleak3-Jrel3;
    JSRCa4 = J_SERCASRss-JSRCaleakss-Jrelss;
    JSRCaleak1 = kSRleak*(CaSR1-Cai1)*Vnonjunct1;
    JSRCaleak2 = kSRleak*(CaSR2-Cai2)*Vnonjunct2;
    JSRCaleak3 = kSRleak*(CaSR3-Cai3)*Vnonjunct3;
    JSRCaleakss = kSRleak*(CaSR4-Cass)*Vss;
    Jj_nj = DCa*Aj_nj/xj_nj*(Cass-Cai4)*1e-06{dimensionless_times_1e6};
    calcium_CaSR1_beta = 1.0{dimensionless}/(1.0{dimensionless}+CSQN*KdCSQN/sqr(CaSR1+KdCSQN));
    calcium_CaSR2_beta = 1.0{dimensionless}/(1.0{dimensionless}+CSQN*KdCSQN/sqr(CaSR2+KdCSQN));
    calcium_CaSR3_beta = 1.0{dimensionless}/(1.0{dimensionless}+CSQN*KdCSQN/sqr(CaSR3+KdCSQN));
    calcium_CaSR4_beta = 1.0{dimensionless}/(1.0{dimensionless}+CSQN*KdCSQN/sqr(CaSR4+KdCSQN));
    calcium_Cai1_beta = 1.0{dimensionless}/(1.0{dimensionless}+calcium_Cai1_gamma);
    calcium_Cai1_gamma = BCa*KdBCa/sqr(Cai1+KdBCa);
    calcium_Cai2_beta = 1.0{dimensionless}/(1.0{dimensionless}+calcium_Cai2_gamma);
    calcium_Cai2_gamma = BCa*KdBCa/sqr(Cai2+KdBCa);
    calcium_Cai3_beta = 1.0{dimensionless}/(1.0{dimensionless}+calcium_Cai3_gamma);
    calcium_Cai3_gamma = BCa*KdBCa/sqr(Cai3+KdBCa);
    calcium_Cai4_beta = 1.0{dimensionless}/(1.0{dimensionless}+calcium_Cai4_gamma);
    calcium_Cai4_gamma = BCa*KdBCa/sqr(Cai4+KdBCa);
    calcium_Cass_beta = 1.0{dimensionless}/(1.0{dimensionless}+SLlow*KdSLlow/sqr(Cass+KdSLlow)+SLhigh*KdSLhigh/sqr(Cass+KdSLhigh)+BCa*KdBCa/sqr(Cass+KdBCa));
    calcium_Cass_i_tot = -ICaL-ICab-ICaP+2.0{dimensionless}*INaCa;
  enddef;

  def comp cell as
    var Aj_nj: um2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: nF {pub: out, init: 0.05};
    var VSR1: nL {pub: out};
    var VSR2: nL {pub: out};
    var VSR3: nL {pub: out};
    var VSR4: nL {pub: out};
    var Vcytosol: nL {pub: out};
    var Vnonjunct1: nL {pub: out};
    var Vnonjunct2: nL {pub: out};
    var Vnonjunct3: nL {pub: out};
    var Vnonjunct4: nL {pub: out};
    var Vnonjunct_Nai: nL {pub: out};
    var Vss: nL {pub: out, init: 4.99231999999999966e-05};
    var dx: um {pub: out, init: 1.625};
    var lcell: um {init: 122.051};
    var pi: dimensionless {init: 3.14159265358979312e+00};
    var rjunct: um {init: 6.5};
    var xj_nj: um {pub: out};
    var xj_nj_Nai: um {pub: out};
    Aj_nj = pi*rjunct*2.0{dimensionless}*lcell*0.5{dimensionless};
    VSR1 = 0.05{dimensionless}*Vnonjunct1/2.0{dimensionless}*0.9{dimensionless};
    VSR2 = 0.05{dimensionless}*Vnonjunct2/2.0{dimensionless}*0.9{dimensionless};
    VSR3 = 0.05{dimensionless}*Vnonjunct3/2.0{dimensionless}*0.9{dimensionless};
    VSR4 = 0.05{dimensionless}*Vnonjunct4/2.0{dimensionless}*0.9{dimensionless};
    Vcytosol = Vnonjunct_Nai+Vss;
    Vnonjunct1 = (sqr(1.0{dimensionless}*dx)-sqr(0.0{dimensionless}*dx))*pi*lcell*0.5{dimensionless}*1e-06{dimensionless_times_1e6};
    Vnonjunct2 = (sqr(2.0{dimensionless}*dx)-sqr(1.0{dimensionless}*dx))*pi*lcell*0.5{dimensionless}*1e-06{dimensionless_times_1e6};
    Vnonjunct3 = (sqr(3.0{dimensionless}*dx)-sqr(2.0{dimensionless}*dx))*pi*lcell*0.5{dimensionless}*1e-06{dimensionless_times_1e6};
    Vnonjunct4 = (sqr(4.0{dimensionless}*dx)-sqr(3.0{dimensionless}*dx))*pi*lcell*0.5{dimensionless}*1e-06{dimensionless_times_1e6};
    Vnonjunct_Nai = Vnonjunct1+Vnonjunct2+Vnonjunct3+Vnonjunct4;
    xj_nj = 0.02{um}/2.0{dimensionless}+dx/2.0{dimensionless};
    xj_nj_Nai = 0.02{um}/2.0{dimensionless}+2.0{dimensionless}*dx;
  enddef;

  def comp engine as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp extra as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: mM {pub: out, init: 1.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: mM {pub: out, init: 5.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: mM {pub: out, init: 130.0};
  enddef;

  def comp icab as
    var ECa: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current
    var ICab: pA {pub: out};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current_conductance
    var gCab: nS {init: 0.0952};
    ICab = gCab*(V-ECa);
  enddef;

  def comp ical as
    var Cass: mM {pub: in};
    var ECa_app: mV {init: 60.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var ICaL: pA {pub: out};
    var V: mV {pub: in};
    var d: dimensionless {init: 1.06091699999999996e-05};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_ohmic_driving_term
    var driving_term_ohmic: mV;
    var f1: dimensionless {init: 0.9988566};
    var f2: dimensionless {init: 0.9988624};
    var f_inf: dimensionless;
    var fca: dimensionless {init: 0.9744374};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var gCaL: nS {init: 25.3125};
    var ical_d_inf: dimensionless;
    var ical_d_tau: second;
    var ical_f1_tau: second;
    var ical_f2_tau: second;
    var ical_fca_inf: dimensionless;
    var ical_fca_tau: second {init: 0.002};
    var kCa: mM {init: 0.001};
    var kCan: dimensionless {init: 2.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var open_prob: dimensionless;
    var time: second {pub: in};
    ICaL = gCaL*open_prob*driving_term_ohmic;
    ode(d, time) = (ical_d_inf-d)/ical_d_tau;
    driving_term_ohmic = V-ECa_app;
    ode(f1, time) = (f_inf-f1)/ical_f1_tau;
    ode(f2, time) = (f_inf-f2)/ical_f2_tau;
    f_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+27.4{mV})/7.1{mV}));
    ode(fca, time) = (ical_fca_inf-fca)/ical_fca_tau;
    ical_d_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+9.0{mV})/(-5.8{mV})));
    ical_d_tau = 0.0027{second}*exp(-sqr((V+35.0{mV})/30.0{mV}))+0.002{second};
    ical_f1_tau = 0.98698{second}*exp(-sqr((V+30.16047{mV})/7.09396{mV}))+0.04275{second}/(1.0{dimensionless}+exp((V-51.61555{mV})/(-80.61331{mV})))+0.03576{second}/(1.0{dimensionless}+exp((V+29.57272{mV})/13.21758{mV}))-0.00821{second};
    ical_f2_tau = 1.3323{second}*exp(-sqr((V+40.0{mV})/14.2{mV}))+0.0626{second};
    ical_fca_inf = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+pow(kCa/Cass, kCan));
    open_prob = d*fca*f1*f2;
  enddef;

  def comp icap as
    var Cass: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var ICaP: pA {pub: out};
    var ICaPmax: pA {init: 2.0};
    var kCaP: mM {init: 0.0005};
    ICaP = ICaPmax*Cass/(kCaP+Cass);
  enddef;

  def comp if as
    var EK: mV {pub: in};
    var ENa: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_hyperpolarisation_activated_funny_current
    var If: pA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_hyperpolarisation_activated_funny_current_potassium_component
    var IfK: pA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_hyperpolarisation_activated_funny_current_sodium_component
    var IfNa: pA {pub: out};
    var V: mV {pub: in};
    var gIf: nS {init: 2.5};
    var if_y_inf: dimensionless;
    var if_y_tau: second;
    var time: second {pub: in};
    var y: dimensionless {init: 5.62066499999999969e-02};
    If = IfK+IfNa;
    IfK = gIf*y*((1.0{dimensionless}-0.2677{dimensionless})*(V-EK));
    IfNa = gIf*y*(0.2677{dimensionless}*(V-ENa));
    if_y_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+84.94{mV})/10.1{mV}));
    if_y_tau = 1.0{second}/(1.27830000000000001e-04{dimensionless}*exp(-V/9.2424{mV})+121.6092{dimensionless}*exp(V/9.2424{mV}));
    ode(y, time) = (if_y_inf-y)/if_y_tau;
  enddef;

  def comp ik1 as
    var EK: mV {pub: in};
    var FRT: per_mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var IK1: pA {pub: out};
    var Ko: mM {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var gK1: nS;
    IK1 = gK1*pow(Ko*1.0{m3_per_mol}, 0.4457{dimensionless})*(V-EK)/(1.0{dimensionless}+exp(1.5{dimensionless}*(V-EK+3.6{mV})*FRT));
    gK1 = 3.825{nS}*0.9{dimensionless};
  enddef;

  def comp ikr as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var IKr: pA {pub: out};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var gKr: nS {init: 0.5};
    var ikr_pa_inf: dimensionless;
    var ikr_pa_tau: second;
    var pa: dimensionless {init: 4.18941700000000008e-05};
    var pi: dimensionless;
    var time: second {pub: in};
    IKr = gKr*pa*pi*(V-EK);
    ikr_pa_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+15.0{mV})/(-6.0{mV})));
    ikr_pa_tau = 0.21718{second}*exp(-sqr((V+20.1376{mV})/22.1996{mV}))+0.03118{second};
    ode(pa, time) = (ikr_pa_inf-pa)/ikr_pa_tau;
    pi = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+55.0{mV})/24.0{mV}));
  enddef;

  def comp iks as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var IKs: pA {pub: out};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var gKs: nS {init: 1.0};
    var iks_n_inf: dimensionless;
    var iks_n_tau: second;
    var n: dimensionless {init: 4.10975100000000003e-03};
    var time: second {pub: in};
    IKs = gKs*n*(V-EK);
    iks_n_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-19.9{mV})/(-12.7{mV})));
    iks_n_tau = 0.4{second}*exp(-sqr((V-20.0{mV})/20.0{mV}))+0.7{second};
    ode(n, time) = (iks_n_inf-n)/iks_n_tau;
  enddef;

  def comp ikur as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_ultrarapid_delayed_rectifier_potassium_current
    var IKur: pA {pub: out};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_ultrarapid_delayed_rectifier_potassium_current_conductance
    var gKur: nS;
    var ikur_r_inf: dimensionless;
    var ikur_r_tau: second;
    var ikur_s_inf: dimensionless;
    var ikur_s_tau: second;
    var r: dimensionless {init: 3.11170299999999984e-04};
    var s: dimensionless {init: 0.9751094};
    var time: second {pub: in};
    IKur = gKur*r*s*(V-EK);
    gKur = 0.89{dimensionless}*2.75{nS};
    ikur_r_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+6.0{mV})/(-8.6{mV})));
    ikur_r_tau = 0.009{second}/(1.0{dimensionless}+exp((V+5.0{mV})/12.0{mV}))+0.0005{second};
    ikur_s_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+7.5{mV})/10.0{mV}));
    ikur_s_tau = 0.59{second}/(1.0{dimensionless}+exp((V+60.0{mV})/10.0{mV}))+3.05{second};
    ode(r, time) = (ikur_r_inf-r)/ikur_r_tau;
    ode(s, time) = (ikur_s_inf-s)/ikur_s_tau;
  enddef;

  def comp ina as
    var ENa: mV {pub: in};
    var F: C_per_mol {pub: in};
    var FRT: per_mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var INa: pA {pub: out};
    var Nao: mM {pub: in};
    var PNa: m3_per_s_times_1e_minus_12 {init: 0.0018};
    var V: mV {pub: in};
    var h1: dimensionless {init: 0.90391};
    var h2: dimensionless {init: 0.9039673};
    var h_inf: dimensionless;
    var ina_h1_tau: second;
    var ina_h2_tau: second;
    var ina_m_inf: dimensionless;
    var ina_m_tau: second;
    var m: dimensionless {init: 2.77581199999999990e-03};
    var time: second {pub: in};
    INa = PNa*pow(m, 3.0{dimensionless})*(0.9{dimensionless}*h1+0.1{dimensionless}*h2)*Nao*V*F*FRT*(exp((V-ENa)*FRT)-1.0{dimensionless})/(exp(V*FRT)-1.0{dimensionless});
    ode(h1, time) = (h_inf-h1)/ina_h1_tau;
    ode(h2, time) = (h_inf-h2)/ina_h2_tau;
    h_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+63.6{mV})/5.3{mV}));
    ina_h1_tau = 0.03{second}/(1.0{dimensionless}+exp((V+35.1{mV})/3.2{mV}))+0.0003{second};
    ina_h2_tau = 0.12{second}/(1.0{dimensionless}+exp((V+35.1{mV})/3.2{mV}))+0.003{second};
    ina_m_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+27.12{mV})/(-8.21{mV})));
    ina_m_tau = 4.2e-05{second}*exp(-sqr((V+25.57{mV})/28.8{mV}))+2.4e-05{second};
    ode(m, time) = (ina_m_inf-m)/ina_m_tau;
  enddef;

  def comp inab as
    var ENa: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current
    var INab: pA {pub: out};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current_conductance
    var gNab: nS {init: 0.060599};
    INab = gNab*(V-ENa);
  enddef;

  def comp inaca as
    var Cao: mM {pub: in};
    var Cass: mM {pub: in};
    var FRT: per_mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var INaCa: pA {pub: out};
    var Nao: mM {pub: in};
    var Nass: mM {pub: in};
    var V: mV {pub: in};
    var dNaCa: m12_per_mol4 {init: 0.0003};
    var fCaNCX: dimensionless {init: 1.0};
    var gam: dimensionless {init: 0.45};
    var kNaCa: m12_A_per_mol4_times_1e_minus_12 {init: 0.0084};
    INaCa = kNaCa*(exp(gam*V*FRT)*pow(Nass, 3.0{dimensionless})*Cao-exp((gam-1.0{dimensionless})*V*FRT)*pow(Nao, 3.0{dimensionless})*Cass*fCaNCX)/(1.0{dimensionless}+dNaCa*(pow(Nao, 3.0{dimensionless})*Cass*fCaNCX+pow(Nass, 3.0{dimensionless})*Cao));
  enddef;

  def comp inak as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
    var INaK: pA {pub: out};
    var INaKmax: pA {init: 70.8253};
    var Ko: mM {pub: in};
    var Nass: mM {pub: in};
    var Nass15: dimensionless;
    var V: mV {pub: in};
    var kNaKK: mM {init: 1.0};
    var kNaKNa: dimensionless {init: 11.0};
    INaK = INaKmax*Ko/(Ko+kNaKK)*Nass15/(Nass15+pow(kNaKNa, 1.5{dimensionless}))*(V+150.0{mV})/(V+200.0{mV});
    Nass15 = pow(Nass*1.0{m3_per_mol}, 1.5{dimensionless});
  enddef;

  def comp it as
    var EK: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var It: pA {pub: out};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var gt: nS;
    var it_r_inf: dimensionless;
    var it_r_tau: second;
    var it_s_inf: dimensionless;
    var it_s_tau: second;
    var r: dimensionless {init: 9.59425800000000026e-04};
    var s: dimensionless {init: 0.954338};
    var time: second {pub: in};
    It = gt*r*s*(V-EK);
    gt = 1.09{dimensionless}*7.5{nS};
    it_r_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-1.0{mV})/(-11.0{mV})));
    it_r_tau = 0.0035{second}*exp(-sqr((V+0.0{mV})/30.0{mV}))+0.0015{second};
    it_s_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+40.5{mV})/11.5{mV}));
    it_s_tau = 0.025635{second}*exp(-sqr((V+52.45{mV})/15.8827{mV}))+0.01414{second};
    ode(r, time) = (it_r_inf-r)/it_r_tau;
    ode(s, time) = (it_s_inf-s)/it_s_tau;
  enddef;

  def comp membrane as
    var Cm: nF {pub: in};
    var ICaL: pA {pub: in};
    var ICaP: pA {pub: in};
    var ICab: pA {pub: in};
    var IK1: pA {pub: in};
    var IKr: pA {pub: in};
    var IKs: pA {pub: in};
    var IKur: pA {pub: in};
    var INa: pA {pub: in};
    var INaCa: pA {pub: in};
    var INaK: pA {pub: in};
    var INab: pA {pub: in};
    var If: pA {pub: in};
    var It: pA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -75.42786};
    var i_ion: pA;
    var i_stim: pA {pub: in};
    var time: second {pub: in};
    ode(V, time) = -(i_ion+i_stim)/Cm;
    i_ion = +INa+ICaL+It+IKur+IK1+IKr+IKs+INab+ICab+INaK+ICaP+INaCa+If;
  enddef;

  def comp nernst as
    var Cao: mM {pub: in};
    var Cass: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#calcium_reversal_potential
    var ECa: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var EK: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var ENa: mV {pub: out};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var Nao: mM {pub: in};
    var Nass: mM {pub: in};
    var RTF: mV {pub: in};
    ECa = RTF*ln(Cao/Cass)/2.0{dimensionless};
    EK = RTF*ln(Ko/Ki);
    ENa = RTF*ln(Nao/Nass);
  enddef;

  def comp phys as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mol {pub: out, init: 96487.0};
    var FRT: per_mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: mJ_per_mol_per_K {init: 8314.0};
    var RTF: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {init: 306.15};
    FRT = 1.0{dimensionless}/RTF;
    RTF = R*T/F;
  enddef;

  def comp potassium as
    var F: C_per_mol {pub: in};
    var IK1: pA {pub: in};
    var IKr: pA {pub: in};
    var IKs: pA {pub: in};
    var IKur: pA {pub: in};
    var INaK: pA {pub: in};
    var IfK: pA {pub: in};
    var It: pA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: mM {pub: out, init: 134.6313};
    var Vcytosol: nL {pub: in};
    var i_stim: pA {pub: in};
    var i_tot: pA;
    var time: second {pub: in};
    ode(Ki, time) = -i_tot/(Vcytosol*F);
    i_tot = +It+IKur+IK1+IKr+IKs-2.0{dimensionless}*INaK+IfK+i_stim;
  enddef;

  def comp ryr as
    var CaSR1: mM {pub: in};
    var CaSR2: mM {pub: in};
    var CaSR3: mM {pub: in};
    var CaSR4: mM {pub: in};
    var Cai1: mM {pub: in};
    var Cai2: mM {pub: in};
    var Cai3: mM {pub: in};
    var Cass: mM {pub: in};
    var Jrel1: kat_times_1e_minus_12 {pub: out};
    var Jrel2: kat_times_1e_minus_12 {pub: out};
    var Jrel3: kat_times_1e_minus_12 {pub: out};
    var Jrelss: kat_times_1e_minus_12 {pub: out};
    var SRCa1: dimensionless;
    var SRCa2: dimensionless;
    var SRCa3: dimensionless;
    var SRCass: dimensionless;
    var Vnonjunct1: nL {pub: in};
    var Vnonjunct2: nL {pub: in};
    var Vnonjunct3: nL {pub: in};
    var Vss: nL {pub: in};
    var a1: dimensionless {init: 0.1925362};
    var a2: dimensionless {init: 0.2010345};
    var a3: dimensionless {init: 0.2163122};
    var ainf1: dimensionless;
    var ainf2: dimensionless;
    var ainf3: dimensionless;
    var ainfss: dimensionless;
    var ass: dimensionless {init: 0.2455297};
    var c1: dimensionless {init: 0.9993722};
    var c2: dimensionless {init: 0.9995086};
    var c3: dimensionless {init: 0.9995604};
    var cinf1: dimensionless;
    var cinf2: dimensionless;
    var cinf3: dimensionless;
    var cinfss: dimensionless;
    var css: dimensionless {init: 0.9999717};
    var nu1: m3_per_s_times_1e_minus_12;
    var nu2: m3_per_s_times_1e_minus_12;
    var nu3: m3_per_s_times_1e_minus_12;
    var nuss: m3_per_s_times_1e_minus_12;
    var o1: dimensionless {init: 9.47851400000000044e-05};
    var o2: dimensionless {init: 7.76550300000000031e-05};
    var o3: dimensionless {init: 5.67494700000000006e-05};
    var oinf1: dimensionless;
    var oinf2: dimensionless;
    var oinf3: dimensionless;
    var oinfss: dimensionless;
    var oss: dimensionless {init: 3.97509699999999973e-05};
    var tau_act: second {init: 0.01875};
    var tau_actss: second {init: 0.005};
    var tau_adapt: second {init: 1.0};
    var tau_inact: second {init: 0.0875};
    var tau_inactss: second {init: 0.015};
    var time: second {pub: in};
    Jrel1 = nu1*o1*c1*SRCa1*(CaSR1-Cai1);
    Jrel2 = nu2*o2*c2*SRCa2*(CaSR2-Cai2);
    Jrel3 = nu3*o3*c3*SRCa3*(CaSR3-Cai3);
    Jrelss = nuss*oss*css*SRCass*(CaSR4-Cass);
    SRCa1 = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((CaSR1-0.3{mM})/0.1{mM}));
    SRCa2 = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((CaSR2-0.3{mM})/0.1{mM}));
    SRCa3 = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((CaSR3-0.3{mM})/0.1{mM}));
    SRCass = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((CaSR4-0.3{mM})/0.1{mM}));
    ode(a1, time) = (ainf1-a1)/tau_adapt;
    ode(a2, time) = (ainf2-a2)/tau_adapt;
    ode(a3, time) = (ainf3-a3)/tau_adapt;
    ainf1 = 0.505{dimensionless}-0.427{dimensionless}/(1.0{dimensionless}+exp((Cai1*1000.0{m3_per_mol}-0.29{dimensionless})/0.082{dimensionless}));
    ainf2 = 0.505{dimensionless}-0.427{dimensionless}/(1.0{dimensionless}+exp((Cai2*1000.0{m3_per_mol}-0.29{dimensionless})/0.082{dimensionless}));
    ainf3 = 0.505{dimensionless}-0.427{dimensionless}/(1.0{dimensionless}+exp((Cai3*1000.0{m3_per_mol}-0.29{dimensionless})/0.082{dimensionless}));
    ainfss = 0.505{dimensionless}-0.427{dimensionless}/(1.0{dimensionless}+exp((Cass*1000.0{m3_per_mol}-0.29{dimensionless})/0.082{dimensionless}));
    ode(ass, time) = (ainfss-ass)/tau_adapt;
    ode(c1, time) = (cinf1-c1)/tau_inact;
    ode(c2, time) = (cinf2-c2)/tau_inact;
    ode(c3, time) = (cinf3-c3)/tau_inact;
    cinf1 = 1.0{dimensionless}/(1.0{dimensionless}+exp((Cai1*1000.0{m3_per_mol}-(a1+0.02{dimensionless}))/0.01{dimensionless}));
    cinf2 = 1.0{dimensionless}/(1.0{dimensionless}+exp((Cai2*1000.0{m3_per_mol}-(a2+0.02{dimensionless}))/0.01{dimensionless}));
    cinf3 = 1.0{dimensionless}/(1.0{dimensionless}+exp((Cai3*1000.0{m3_per_mol}-(a3+0.02{dimensionless}))/0.01{dimensionless}));
    cinfss = 1.0{dimensionless}/(1.0{dimensionless}+exp((Cass*1000.0{m3_per_mol}-(ass+0.02{dimensionless}))/0.01{dimensionless}));
    ode(css, time) = (cinfss-css)/tau_inactss;
    nu1 = 1.0{hertz}*Vnonjunct1;
    nu2 = 1.0{hertz}*Vnonjunct2;
    nu3 = 1.0{hertz}*Vnonjunct3;
    nuss = 625.0{hertz}*Vss;
    ode(o1, time) = (oinf1-o1)/tau_act;
    ode(o2, time) = (oinf2-o2)/tau_act;
    ode(o3, time) = (oinf3-o3)/tau_act;
    oinf1 = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((Cai1*1000.0{m3_per_mol}-(a1+0.22{dimensionless}))/0.03{dimensionless}));
    oinf2 = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((Cai2*1000.0{m3_per_mol}-(a2+0.22{dimensionless}))/0.03{dimensionless}));
    oinf3 = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((Cai3*1000.0{m3_per_mol}-(a3+0.22{dimensionless}))/0.03{dimensionless}));
    oinfss = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((Cass*1000.0{m3_per_mol}-(ass+0.22{dimensionless}))/0.03{dimensionless}));
    ode(oss, time) = (oinfss-oss)/tau_actss;
  enddef;

  def comp serca as
    var CaSR1: mM {pub: in};
    var CaSR2: mM {pub: in};
    var CaSR3: mM {pub: in};
    var CaSR4: mM {pub: in};
    var Cai1: mM {pub: in};
    var Cai2: mM {pub: in};
    var Cai3: mM {pub: in};
    var Cass: mM {pub: in};
    var J_SERCASR1: kat_times_1e_minus_12 {pub: out};
    var J_SERCASR2: kat_times_1e_minus_12 {pub: out};
    var J_SERCASR3: kat_times_1e_minus_12 {pub: out};
    var J_SERCASRss: kat_times_1e_minus_12 {pub: out};
    var J_bulkSERCA1: kat_times_1e_minus_12 {pub: out};
    var J_bulkSERCA2: kat_times_1e_minus_12 {pub: out};
    var J_bulkSERCA3: kat_times_1e_minus_12 {pub: out};
    var J_bulkSERCAss: kat_times_1e_minus_12 {pub: out};
    var SERCAKmf: mM {init: 0.00025};
    var SERCAKmr: mM {init: 1.8};
    var Vnonjunct1: nL {pub: in};
    var Vnonjunct2: nL {pub: in};
    var Vnonjunct3: nL {pub: in};
    var Vss: nL {pub: in};
    var a1: mM {init: 4.63856499999999988e-03};
    var a2: mM {init: 4.51207800000000010e-03};
    var a3: mM {init: 4.32640899999999981e-03};
    var ass: mM {init: 4.25044500000000026e-03};
    var cpumps: mM {init: 0.04};
    var k1: m6_per_s_per_mol2;
    var k2: hertz;
    var k3: m6_per_s_per_mol2;
    var k4: hertz {init: 7.5};
    var time: second {pub: in};
    J_SERCASR1 = (-k3*sqr(CaSR1)*(cpumps-a1)+k4*a1)*Vnonjunct1*2.0{dimensionless};
    J_SERCASR2 = (-k3*sqr(CaSR2)*(cpumps-a2)+k4*a2)*Vnonjunct2*2.0{dimensionless};
    J_SERCASR3 = (-k3*sqr(CaSR3)*(cpumps-a3)+k4*a3)*Vnonjunct3*2.0{dimensionless};
    J_SERCASRss = (-k3*sqr(CaSR4)*(cpumps-ass)+k4*ass)*Vss*2.0{dimensionless};
    J_bulkSERCA1 = (k1*sqr(Cai1)*(cpumps-a1)-k2*a1)*Vnonjunct1*2.0{dimensionless};
    J_bulkSERCA2 = (k1*sqr(Cai2)*(cpumps-a2)-k2*a2)*Vnonjunct2*2.0{dimensionless};
    J_bulkSERCA3 = (k1*sqr(Cai3)*(cpumps-a3)-k2*a3)*Vnonjunct3*2.0{dimensionless};
    J_bulkSERCAss = (k1*sqr(Cass)*(cpumps-ass)-k2*ass)*Vss*2.0{dimensionless};
    ode(a1, time) = 0.5{dimensionless}*(-J_SERCASR1+J_bulkSERCA1)/Vnonjunct1;
    ode(a2, time) = 0.5{dimensionless}*(-J_SERCASR2+J_bulkSERCA2)/Vnonjunct2;
    ode(a3, time) = 0.5{dimensionless}*(-J_SERCASR3+J_bulkSERCA3)/Vnonjunct3;
    ode(ass, time) = 0.5{dimensionless}*(-J_SERCASRss+J_bulkSERCAss)/Vss;
    k1 = sqr(1000.0{m3_per_mol})*k4;
    k2 = k1*sqr(SERCAKmf);
    k3 = k4/sqr(SERCAKmr);
  enddef;

  def comp sodium as
    var Aj_nj: um2 {pub: in};
    var BNa: mM;
    var DNa: m2_per_s_times_1e_minus_12 {init: 0.12};
    var F: C_per_mol {pub: in};
    var INa: pA {pub: in};
    var INaCa: pA {pub: in};
    var INaK: pA {pub: in};
    var INab: pA {pub: in};
    var IfNa: pA {pub: in};
    var JNa: kat_times_1e_minus_12;
    var KdBNa: mM {init: 10.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: mM {init: 9.28686};
    var Nass: mM {pub: out, init: 8.691504};
    var Vnonjunct_Nai: nL {pub: in};
    var Vss: nL {pub: in};
    var betaNass: dimensionless;
    var i_ss: pA;
    var time: second {pub: in};
    var xj_nj_Nai: um {pub: in};
    BNa = 0.49{dimensionless}*2.31{mM};
    JNa = DNa*Aj_nj/xj_nj_Nai*(Nass-Nai)*1e-06{dimensionless_times_1e6};
    ode(Nai, time) = JNa/Vnonjunct_Nai;
    ode(Nass, time) = betaNass*(-JNa/Vss-i_ss/(Vss*F));
    betaNass = 1.0{dimensionless}/(1.0{dimensionless}+BNa*KdBNa/sqr(Nass+KdBNa));
    i_ss = +INa+INab+3.0{dimensionless}*INaK+3.0{dimensionless}*INaCa+IfNa;
  enddef;

  def comp stimulus as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var amplitude: pA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: second {init: 0.001};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_stim: pA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: second {init: 0.01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: second {init: 1.0};
    var time: second {pub: in};
    amplitude = -2500.0{pA};
    i_stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*amplitude;
  enddef;
  def map between calcium and cell for
    vars Aj_nj and Aj_nj;
    vars VSR1 and VSR1;
    vars VSR2 and VSR2;
    vars VSR3 and VSR3;
    vars VSR4 and VSR4;
    vars Vnonjunct1 and Vnonjunct1;
    vars Vnonjunct2 and Vnonjunct2;
    vars Vnonjunct3 and Vnonjunct3;
    vars Vnonjunct4 and Vnonjunct4;
    vars Vss and Vss;
    vars dx and dx;
    vars xj_nj and xj_nj;
  enddef;
  def map between calcium and engine for
    vars time and time;
  enddef;
  def map between calcium and icab for
    vars ICab and ICab;
  enddef;
  def map between calcium and ical for
    vars Cass and Cass;
    vars ICaL and ICaL;
  enddef;
  def map between calcium and icap for
    vars Cass and Cass;
    vars ICaP and ICaP;
  enddef;
  def map between calcium and inaca for
    vars Cass and Cass;
    vars INaCa and INaCa;
  enddef;
  def map between calcium and nernst for
    vars Cass and Cass;
  enddef;
  def map between calcium and phys for
    vars F and F;
  enddef;
  def map between calcium and ryr for
    vars CaSR1 and CaSR1;
    vars CaSR2 and CaSR2;
    vars CaSR3 and CaSR3;
    vars CaSR4 and CaSR4;
    vars Cai1 and Cai1;
    vars Cai2 and Cai2;
    vars Cai3 and Cai3;
    vars Cass and Cass;
    vars Jrel1 and Jrel1;
    vars Jrel2 and Jrel2;
    vars Jrel3 and Jrel3;
    vars Jrelss and Jrelss;
  enddef;
  def map between calcium and serca for
    vars CaSR1 and CaSR1;
    vars CaSR2 and CaSR2;
    vars CaSR3 and CaSR3;
    vars CaSR4 and CaSR4;
    vars Cai1 and Cai1;
    vars Cai2 and Cai2;
    vars Cai3 and Cai3;
    vars Cass and Cass;
    vars J_SERCASR1 and J_SERCASR1;
    vars J_SERCASR2 and J_SERCASR2;
    vars J_SERCASR3 and J_SERCASR3;
    vars J_SERCASRss and J_SERCASRss;
    vars J_bulkSERCA1 and J_bulkSERCA1;
    vars J_bulkSERCA2 and J_bulkSERCA2;
    vars J_bulkSERCA3 and J_bulkSERCA3;
    vars J_bulkSERCAss and J_bulkSERCAss;
  enddef;
  def map between cell and membrane for
    vars Cm and Cm;
  enddef;
  def map between cell and potassium for
    vars Vcytosol and Vcytosol;
  enddef;
  def map between cell and ryr for
    vars Vnonjunct1 and Vnonjunct1;
    vars Vnonjunct2 and Vnonjunct2;
    vars Vnonjunct3 and Vnonjunct3;
    vars Vss and Vss;
  enddef;
  def map between cell and serca for
    vars Vnonjunct1 and Vnonjunct1;
    vars Vnonjunct2 and Vnonjunct2;
    vars Vnonjunct3 and Vnonjunct3;
    vars Vss and Vss;
  enddef;
  def map between cell and sodium for
    vars Aj_nj and Aj_nj;
    vars Vnonjunct_Nai and Vnonjunct_Nai;
    vars Vss and Vss;
    vars xj_nj_Nai and xj_nj_Nai;
  enddef;
  def map between engine and ical for
    vars time and time;
  enddef;
  def map between engine and if for
    vars time and time;
  enddef;
  def map between engine and ikr for
    vars time and time;
  enddef;
  def map between engine and iks for
    vars time and time;
  enddef;
  def map between engine and ikur for
    vars time and time;
  enddef;
  def map between engine and ina for
    vars time and time;
  enddef;
  def map between engine and it for
    vars time and time;
  enddef;
  def map between engine and membrane for
    vars time and time;
  enddef;
  def map between engine and potassium for
    vars time and time;
  enddef;
  def map between engine and ryr for
    vars time and time;
  enddef;
  def map between engine and serca for
    vars time and time;
  enddef;
  def map between engine and sodium for
    vars time and time;
  enddef;
  def map between engine and stimulus for
    vars time and time;
  enddef;
  def map between extra and ik1 for
    vars Ko and Ko;
  enddef;
  def map between extra and ina for
    vars Nao and Nao;
  enddef;
  def map between extra and inaca for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between extra and inak for
    vars Ko and Ko;
  enddef;
  def map between extra and nernst for
    vars Cao and Cao;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between icab and membrane for
    vars ICab and ICab;
    vars V and V;
  enddef;
  def map between icab and nernst for
    vars ECa and ECa;
  enddef;
  def map between ical and membrane for
    vars ICaL and ICaL;
    vars V and V;
  enddef;
  def map between icap and membrane for
    vars ICaP and ICaP;
  enddef;
  def map between if and membrane for
    vars If and If;
    vars V and V;
  enddef;
  def map between if and nernst for
    vars EK and EK;
    vars ENa and ENa;
  enddef;
  def map between if and potassium for
    vars IfK and IfK;
  enddef;
  def map between if and sodium for
    vars IfNa and IfNa;
  enddef;
  def map between ik1 and membrane for
    vars IK1 and IK1;
    vars V and V;
  enddef;
  def map between ik1 and nernst for
    vars EK and EK;
  enddef;
  def map between ik1 and phys for
    vars FRT and FRT;
  enddef;
  def map between ik1 and potassium for
    vars IK1 and IK1;
  enddef;
  def map between ikr and membrane for
    vars IKr and IKr;
    vars V and V;
  enddef;
  def map between ikr and nernst for
    vars EK and EK;
  enddef;
  def map between ikr and potassium for
    vars IKr and IKr;
  enddef;
  def map between iks and membrane for
    vars IKs and IKs;
    vars V and V;
  enddef;
  def map between iks and nernst for
    vars EK and EK;
  enddef;
  def map between iks and potassium for
    vars IKs and IKs;
  enddef;
  def map between ikur and membrane for
    vars IKur and IKur;
    vars V and V;
  enddef;
  def map between ikur and nernst for
    vars EK and EK;
  enddef;
  def map between ikur and potassium for
    vars IKur and IKur;
  enddef;
  def map between ina and membrane for
    vars INa and INa;
    vars V and V;
  enddef;
  def map between ina and nernst for
    vars ENa and ENa;
  enddef;
  def map between ina and phys for
    vars F and F;
    vars FRT and FRT;
  enddef;
  def map between ina and sodium for
    vars INa and INa;
  enddef;
  def map between inab and membrane for
    vars INab and INab;
    vars V and V;
  enddef;
  def map between inab and nernst for
    vars ENa and ENa;
  enddef;
  def map between inab and sodium for
    vars INab and INab;
  enddef;
  def map between inaca and membrane for
    vars INaCa and INaCa;
    vars V and V;
  enddef;
  def map between inaca and phys for
    vars FRT and FRT;
  enddef;
  def map between inaca and sodium for
    vars INaCa and INaCa;
    vars Nass and Nass;
  enddef;
  def map between inak and membrane for
    vars INaK and INaK;
    vars V and V;
  enddef;
  def map between inak and potassium for
    vars INaK and INaK;
  enddef;
  def map between inak and sodium for
    vars INaK and INaK;
    vars Nass and Nass;
  enddef;
  def map between it and membrane for
    vars It and It;
    vars V and V;
  enddef;
  def map between it and nernst for
    vars EK and EK;
  enddef;
  def map between it and potassium for
    vars It and It;
  enddef;
  def map between membrane and stimulus for
    vars i_stim and i_stim;
  enddef;
  def map between nernst and phys for
    vars RTF and RTF;
  enddef;
  def map between nernst and potassium for
    vars Ki and Ki;
  enddef;
  def map between nernst and sodium for
    vars Nass and Nass;
  enddef;
  def map between phys and potassium for
    vars F and F;
  enddef;
  def map between phys and sodium for
    vars F and F;
  enddef;
  def map between potassium and stimulus for
    vars i_stim and i_stim;
  enddef;
enddef;
