def model Li_Mouse_2010 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit micromolar_per_millisecond as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_micromolar_millisecond as
    unit micromolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar3_per_millisecond as
    unit micromolar {expo: -3};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar4_per_millisecond as
    unit micromolar {expo: -4};
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit millivolt2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit per_picoF as
    unit picoF {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_m3 as
    unit coulomb;
    unit metre {expo: -3};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit cm as
    unit metre {expo: 1, pref: centi};
  enddef;
  def unit cm_per_millisecond as
    unit second {expo: -1, pref: milli};
    unit metre {expo: 1, pref: centi};
  enddef;
  def unit mm as
    unit metre {expo: 1, pref: milli};
  enddef;
  def unit um as
    unit metre {expo: 1, pref: micro};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
  enddef;

  def comp cell as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -78.9452115785979, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: microF_per_cm2 {init: 1, pub: out};
    var Vmyo: microlitre {init: 2.2e-5, pub: out};
    var VJSR: microlitre {init: 7.7e-8, pub: out};
    var VNSR: microlitre {init: 2.31e-7, pub: out};
    var Vss: microlitre {init: 2.2e-8, pub: out};
    var Acap: cm2 {init: 0.00013866, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: micromolar {init: 5400, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: micromolar {init: 134000, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: micromolar {init: 1400, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: joule_per_mole_kelvin {init: 8.314, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {init: 308, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: coulomb_per_millimole {init: 96.5, pub: out};
    var time: millisecond {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_pCa: picoA_per_picoF {pub: in};
    var i_NCX: picoA_per_picoF {pub: in};
    var i_Cab: picoA_per_picoF {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_Nab: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Kto_f: picoA_per_picoF {pub: in};
    var i_Kto_s: picoA_per_picoF {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_Kur: picoA_per_picoF {pub: in};
    var i_Kss: picoA_per_picoF {pub: in};
    var i_ClCa: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_offset: millisecond {init: 0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: millisecond {init: 333.333, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: millisecond {init: 3};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: picoA_per_picoF {init: -15};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: picoA_per_picoF {pub: out};
    var past: millisecond;
    var prepulses_number: dimensionless {init: 1e10, pub: out};
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration) and (time < stim_period*prepulses_number):
        stim_amplitude;
      otherwise:
        0{picoA_per_picoF};
    endsel;
    ode(V, time) = -(i_CaL+i_pCa+i_NCX+i_Cab+i_Na+i_Nab+i_NaK+i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kur+i_Kss+i_Kr+i_ClCa+i_Stim);
  enddef;

  def comp calcium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: micromolar {init: 0.0949915068139801, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Cass: micromolar {init: 0.0954184301907784, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var CaJSR: micromolar {init: 171.167969039613, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var CaNSR: micromolar {init: 404.825013216286, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var Bi: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_flux_scaling_from_intrinsic_buffers
    var Bss: dimensionless;
    var BJSR: dimensionless;
    var Bmax: micromolar {init: 109};
    var CSQN_tot: micromolar {init: 50000};
    var Kd: micromolar {init: 0.6};
    var Km_CSQN: micromolar {init: 630};
    var Acap: cm2 {pub: in};
    var Vmyo: microlitre {pub: in};
    var VJSR: microlitre {pub: in};
    var Vss: microlitre {pub: in};
    var VNSR: microlitre {pub: in};
    var V: millivolt {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_Cab: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_NCX: picoA_per_picoF {pub: in};
    var i_pCa: picoA_per_picoF {pub: in};
    var J_leak: micromolar_per_millisecond {pub: in};
    var J_rel: micromolar_per_millisecond {pub: in};
    var J_serca: micromolar_per_millisecond {pub: in};
    var J_tr: micromolar_per_millisecond {pub: in};
    var J_xfer: micromolar_per_millisecond {pub: in};
    var J_total: micromolar_per_millisecond;
    var CaSR: micromolar;
    J_total = -(i_Cab+i_pCa-2{dimensionless}*i_NCX)*Acap*Cm/(2{dimensionless}*Vmyo*F);
    ode(Cai, time) = Bi*(J_leak+J_xfer-(i_Cab+i_pCa-2{dimensionless}*i_NCX)*Acap*Cm/(2{dimensionless}*Vmyo*F)-J_serca);
    ode(Cass, time) = Bss*(J_rel*VJSR/Vss-(J_xfer*Vmyo/Vss+i_CaL*Acap*Cm/(2{dimensionless}*Vss*F)));
    ode(CaJSR, time) = BJSR*(J_tr-J_rel);
    ode(CaNSR, time) = (J_serca-J_leak)*Vmyo/VNSR-J_tr*VJSR/VNSR;
    Bi = pow(1{dimensionless}+Bmax*Kd/sqr(Kd+Cai), -1{dimensionless});
    Bss = pow(1{dimensionless}+Bmax*Kd/sqr(Kd+Cass), -1{dimensionless});
    BJSR = pow(1{dimensionless}+CSQN_tot*Km_CSQN/sqr(Km_CSQN+CaJSR), -1{dimensionless});
    CaSR = CaJSR*CSQN_tot/(CaJSR+Km_CSQN)*VJSR/Vmyo+CaNSR*VNSR/Vmyo;
  enddef;

  def comp calcium_fluxes as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var J_leak: micromolar_per_millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var J_rel: micromolar_per_millisecond {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var J_serca: micromolar_per_millisecond {pub: out};
    var J_tr: micromolar_per_millisecond {pub: out};
    var J_xfer: micromolar_per_millisecond {pub: out};
    var P_RyR: dimensionless {init: 0.000280539508743811};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var v1: per_millisecond {init: 4.5};
    var tau_tr: millisecond {init: 20};
    var v2: per_millisecond {init: 3e-5};
    var tau_xfer: millisecond {init: 8};
    var CaMKb: dimensionless;
    var CaMKt: dimensionless {init: 0.729027738385079};
    var CaMKa: dimensionless;
    var on_rate: per_millisecond {init: 0.05};
    var off_rate: per_millisecond {init: 0.0002};
    var vmup: micromolar_per_millisecond;
    var Km_up: micromolar {init: 0.412};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var i_CaL_max: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var Cai: micromolar {pub: in};
    var Cass: micromolar {pub: in};
    var CaJSR: micromolar {pub: in};
    var CaNSR: micromolar {pub: in};
    var P_O1: dimensionless {pub: in};
    var P_O2: dimensionless {pub: in};
    var vmup_init: micromolar_per_millisecond {init: 0.5059};
    var P_ryr_const1: per_millisecond {init: -0.01};
    var P_ryr_const2: per_millisecond {init: -2};
    var v1_caff: per_millisecond {init: 10};
    var v2_caff: per_millisecond {init: 0.1};
    var prepulses_number: dimensionless {pub: in};
    var stim_period: millisecond {pub: in};
    J_rel = sel
      case time < stim_period*prepulses_number:
        v1*(P_O1+P_O2)*(CaJSR-Cass)*P_RyR;
      otherwise:
        v1_caff*(CaJSR-Cass);
    endsel;
    J_leak = sel
      case time < stim_period*prepulses_number:
        v2*(CaNSR-Cai);
      otherwise:
        v2_caff*(CaNSR-Cai);
    endsel;
    J_tr = (CaNSR-CaJSR)/tau_tr;
    J_xfer = (Cass-Cai)/tau_xfer;
    CaMKb = 0.05{dimensionless}*(1{dimensionless}-CaMKt)*1{dimensionless}/(1{dimensionless}+0.7{micromolar}/Cass);
    ode(CaMKt, time) = on_rate*CaMKb*(CaMKb+CaMKt)-off_rate*CaMKt;
    CaMKa = CaMKb+CaMKt;
    vmup = (2.9982{dimensionless}*pow(CaMKa, 2.583{dimensionless})/(pow(1.2444{dimensionless}, 2.583{dimensionless})+pow(CaMKa, 2.583{dimensionless}))+1{dimensionless})*vmup_init;
    J_serca = vmup*sqr(Cai)/(sqr(Km_up)+sqr(Cai));
    ode(P_RyR, time) = P_ryr_const1*P_RyR+P_ryr_const2*i_CaL/i_CaL_max*exp(-sqr(V-5{millivolt})/648{millivolt2});
  enddef;

  def comp ryanodine_receptors as
    var P_O1: dimensionless {init: 0.00571393383393735, pub: out};
    var P_O2: dimensionless {init: 2.09864618235341e-8, pub: out};
    var P_C1: dimensionless {pub: out};
    var P_C2: dimensionless {init: 0.565182571165673, pub: out};
    var k_plus_a: micromolar4_per_millisecond {init: 0.006075};
    var k_minus_a: per_millisecond {init: 0.07125};
    var k_plus_b: micromolar3_per_millisecond {init: 0.00405};
    var k_minus_b: per_millisecond {init: 0.965};
    var k_plus_c: per_millisecond {init: 0.009};
    var k_minus_c: per_millisecond {init: 0.0008};
    var m: dimensionless {init: 3};
    var n: dimensionless {init: 4};
    var time: millisecond {pub: in};
    var Cass: micromolar {pub: in};
    ode(P_O1, time) = k_plus_a*pow(Cass, n)*P_C1+k_minus_b*P_O2+k_minus_c*P_C2-(k_minus_a*P_O1+k_plus_b*pow(Cass, m)*P_O1+k_plus_c*P_O1);
    P_C1 = 1{dimensionless}-(P_C2+P_O1+P_O2);
    ode(P_O2, time) = k_plus_b*pow(Cass, m)*P_O1-k_minus_b*P_O2;
    ode(P_C2, time) = k_plus_c*P_O1-k_minus_c*P_C2;
  enddef;

  def comp L_type_calcium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_CaL: picoA_per_picoF {pub: out};
    var i_CaL_max: picoA_per_picoF {init: 7, pub: out};
    var P_CaL: per_millisecond {init: 2.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var P_CaL_eff: cm_per_millisecond;
    var O: dimensionless {init: 1.23713515513533e-6};
    var C: dimensionless;
    var I: dimensionless {init: 0.427651445872853};
    var y_gate: dimensionless {init: 0.845044436980163};
    var y_gate_inf: dimensionless;
    var y_gate_tau: millisecond;
    var Cass: micromolar {pub: in};
    var alpha_p: per_millisecond;
    var alpha_m: per_millisecond;
    var epsilon_p: per_micromolar_millisecond;
    var epsilon_m: per_millisecond;
    var V_L: millivolt {init: 0};
    var delta_V_L: millivolt {init: 6.4489};
    var t_L: millisecond {init: 1.5};
    var phi_L: dimensionless {init: 1.798};
    var a: dimensionless {init: 0.0625};
    var b: dimensionless {init: 0.4};
    var tau_L: millisecond {init: 1150};
    var K_L: micromolar {init: 0.3};
    var expVL: dimensionless;
    var FVRT: dimensionless;
    var FVRT_Ca: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Cao: micromolar {pub: in};
    var T: kelvin {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var Acap: cm2 {pub: in};
    var Vss: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var const5: millivolt {init: 8.2};
    var y_gate_tau_const1: millisecond {init: 8};
    var y_gate_tau_const2: millisecond {init: 315};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var open_prob: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: coulomb_per_m3;
    FVRT = F*V/(R*T);
    FVRT_Ca = 2{dimensionless}*FVRT;
    expVL = exp((V-V_L)/delta_V_L);
    alpha_p = expVL/(t_L*(expVL+1{dimensionless}));
    alpha_m = phi_L/t_L;
    epsilon_p = (expVL+a)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_m = b*(expVL+a)/(tau_L*(b*expVL+a));
    y_gate_inf = 1{dimensionless}/(1{dimensionless}+exp((V+33{millivolt})/const5))+0.1{dimensionless}/(1{dimensionless}+exp((-V+40{millivolt})/6{millivolt}));
    y_gate_tau = y_gate_tau_const1+y_gate_tau_const2/(1{dimensionless}+exp((V+30{millivolt})/4{millivolt}));
    C = 1{dimensionless}-O-I;
    ode(O, time) = alpha_p*C-alpha_m*O;
    ode(I, time) = epsilon_p*Cass*C-epsilon_m*I;
    ode(y_gate, time) = (y_gate_inf-y_gate)/y_gate_tau;
    P_CaL_eff = P_CaL*Vss*F/(Acap*Cm);
    open_prob = O*y_gate;
    driving_term_ghk = -2{dimensionless}*F*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Cao*exp(-FVRT_Ca)-Cass);
    i_CaL = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        P_CaL*Vss/(Acap*Cm)*open_prob*driving_term_ghk;
      otherwise:
        -P_CaL*2{dimensionless}*Vss*F/(Acap*Cm)*open_prob*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Cao*exp(-0.00001{dimensionless})-Cass);
    endsel;
  enddef;

  def comp calcium_pump_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var i_pCa: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current_conductance
    var i_pCa_max: picoA_per_picoF {init: 0.0955};
    var Km_pCa: micromolar {init: 0.2885};
    var Cai: micromolar {pub: in};
    var J_pCa: micromolar_per_millisecond {pub: out};
    var Vmyo: microlitre {pub: in};
    var Acap: cm2 {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var F: coulomb_per_millimole {pub: in};
    i_pCa = i_pCa_max*sqr(Cai)/(sqr(Km_pCa)+sqr(Cai));
    J_pCa = -i_pCa*Acap*Cm/(2{dimensionless}*Vmyo*F);
  enddef;

  def comp sodium_calcium_exchange_current as
    var J_ncx: micromolar_per_millisecond;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NCX: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var V_max_NCX: picoA_per_picoF {init: 3.939};
    var K_mCao: micromolar {init: 1400};
    var K_mNai: micromolar {init: 12000};
    var K_mCai: micromolar {init: 3.6};
    var K_mNao: micromolar {init: 88000};
    var eta: dimensionless {init: 0.35};
    var K_mAllo: micromolar {init: 0};
    var k_sat: dimensionless {init: 0.27};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    var Vmyo: microlitre {pub: in};
    var Acap: cm2 {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    i_NCX = V_max_NCX/(1{dimensionless}+sqr(K_mAllo/Cai))*(pow(Nai, 3{dimensionless})*Cao*exp(eta*V*F/(R*T))-pow(Nao, 3{dimensionless})*Cai*exp((eta-1{dimensionless})*V*F/(R*T)))/((K_mCao*pow(Nai, 3{dimensionless})+pow(K_mNao, 3{dimensionless})*Cai+pow(K_mNai, 3{dimensionless})*Cao*(1{dimensionless}+Cai/K_mCai)+K_mCai*pow(Nao, 3{dimensionless})*(1{dimensionless}+pow(Nai/K_mNai, 3{dimensionless}))+pow(Nai, 3{dimensionless})*Cao+pow(Nao, 3{dimensionless})*Cai)*(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*V*F/(R*T))));
    J_ncx = i_NCX*Acap*Cm/(Vmyo*F);
  enddef;

  def comp calcium_background_current as
    var i_Cab: picoA_per_picoF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.0007};
    var E_CaN: millivolt;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    var J_Cab: micromolar_per_millisecond;
    var Vmyo: microlitre {pub: in};
    var Acap: cm2 {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    i_Cab = g_Cab*(V-E_CaN);
    E_CaN = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    J_Cab = -i_Cab*Acap*Cm/(2{dimensionless}*Vmyo*F);
  enddef;

  def comp sodium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: micromolar {init: 12364.7482121793, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vmyo: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var Acap: cm2 {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_NCX: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Nab: picoA_per_picoF {pub: in};
    ode(Nai, time) = -(i_Na+i_Nab+3{dimensionless}*i_NaK+3{dimensionless}*i_NCX)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp fast_sodium_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: milliS_per_microF {init: 16};
    var O_Na: dimensionless {init: 1.46826771436314e-6};
    var C_Na1: dimensionless {init: 0.000420472760277688};
    var C_Na2: dimensionless {init: 0.0240114508843199};
    var C_Na3: dimensionless;
    var I1_Na: dimensionless {init: 0.000517471697712382};
    var I2_Na: dimensionless {init: 2.45406116958509e-5};
    var IF_Na: dimensionless {init: 0.000306123648969581};
    var IC_Na2: dimensionless {init: 0.0174528857380179};
    var IC_Na3: dimensionless {init: 0.402980726914811};
    var alpha_Na11: per_millisecond;
    var beta_Na11: per_millisecond;
    var alpha_Na12: per_millisecond;
    var beta_Na12: per_millisecond;
    var alpha_Na13: per_millisecond;
    var beta_Na13: per_millisecond;
    var alpha_Na3: per_millisecond;
    var beta_Na3: per_millisecond;
    var alpha_Na2: per_millisecond;
    var beta_Na2: per_millisecond;
    var alpha_Na4: per_millisecond;
    var beta_Na4: per_millisecond;
    var alpha_Na5: per_millisecond;
    var beta_Na5: per_millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nao: micromolar {pub: in};
    var Nai: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var Ki: micromolar {pub: in};
    i_Na = g_Na*O_Na*(V-E_Na);
    E_Na = R*T/F*ln((0.9{dimensionless}*Nao+0.1{dimensionless}*Ko)/(0.9{dimensionless}*Nai+0.1{dimensionless}*Ki));
    C_Na3 = 1{dimensionless}-(O_Na+C_Na1+C_Na2+IF_Na+I1_Na+I2_Na+IC_Na2+IC_Na3);
    ode(C_Na2, time) = alpha_Na11*C_Na3+beta_Na12*C_Na1+alpha_Na3*IC_Na2-(beta_Na11*C_Na2+alpha_Na12*C_Na2+beta_Na3*C_Na2);
    ode(C_Na1, time) = alpha_Na12*C_Na2+beta_Na13*O_Na+alpha_Na3*IF_Na-(beta_Na12*C_Na1+alpha_Na13*C_Na1+beta_Na3*C_Na1);
    ode(O_Na, time) = alpha_Na13*C_Na1+beta_Na2*IF_Na-(beta_Na13*O_Na+alpha_Na2*O_Na);
    ode(IF_Na, time) = alpha_Na2*O_Na+beta_Na3*C_Na1+beta_Na4*I1_Na+alpha_Na12*IC_Na2-(beta_Na2*IF_Na+alpha_Na3*IF_Na+alpha_Na4*IF_Na+beta_Na12*IF_Na);
    ode(I1_Na, time) = alpha_Na4*IF_Na+beta_Na5*I2_Na-(beta_Na4*I1_Na+alpha_Na5*I1_Na);
    ode(I2_Na, time) = alpha_Na5*I1_Na-beta_Na5*I2_Na;
    ode(IC_Na2, time) = alpha_Na11*IC_Na3+beta_Na12*IF_Na+beta_Na3*C_Na2-(beta_Na11*IC_Na2+alpha_Na12*IC_Na2+alpha_Na3*IC_Na2);
    ode(IC_Na3, time) = beta_Na11*IC_Na2+beta_Na3*C_Na3-(alpha_Na11*IC_Na3+alpha_Na3*IC_Na3);
    alpha_Na11 = 3.802{per_millisecond}/(0.1027{dimensionless}*exp(-(V+2.5{millivolt})/17{millivolt})+0.2{dimensionless}*exp(-(V+2.5{millivolt})/150{millivolt}));
    alpha_Na12 = 3.802{per_millisecond}/(0.1027{dimensionless}*exp(-(V+2.5{millivolt})/15{millivolt})+0.23{dimensionless}*exp(-(V+2.5{millivolt})/150{millivolt}));
    alpha_Na13 = 3.802{per_millisecond}/(0.1027{dimensionless}*exp(-(V+2.5{millivolt})/12{millivolt})+0.25{dimensionless}*exp(-(V+2.5{millivolt})/150{millivolt}));
    beta_Na11 = 0.1917{per_millisecond}*exp(-(V+2.5{millivolt})/20.3{millivolt});
    beta_Na12 = 0.2{per_millisecond}*exp(-(V-2.5{millivolt})/20.3{millivolt});
    beta_Na13 = 0.22{per_millisecond}*exp(-(V-7.5{millivolt})/20.3{millivolt});
    alpha_Na3 = 7e-7{per_millisecond}*exp(-(V+7{millivolt})/7.7{millivolt});
    beta_Na3 = 0.0084{per_millisecond}+0.00002{per_millivolt_millisecond}*(V+7{millivolt});
    alpha_Na2 = 1{per_millisecond}/(0.188495{dimensionless}*exp(-(V+7{millivolt})/16.6{millivolt})+0.393956{dimensionless});
    beta_Na2 = alpha_Na13*alpha_Na2*alpha_Na3/(beta_Na13*beta_Na3);
    alpha_Na4 = alpha_Na2/1000{dimensionless};
    beta_Na4 = alpha_Na3;
    alpha_Na5 = alpha_Na2/95000{dimensionless};
    beta_Na5 = alpha_Na3/50{dimensionless};
  enddef;

  def comp sodium_background_current as
    var i_Nab: picoA_per_picoF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.0026};
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_Nab = g_Nab*(V-E_Na);
  enddef;

  def comp potassium_concentration as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: micromolar {init: 115599.50642567, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vmyo: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var Acap: cm2 {pub: in};
    var i_Kto_f: picoA_per_picoF {pub: in};
    var i_Kto_s: picoA_per_picoF {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_Kss: picoA_per_picoF {pub: in};
    var i_Kur: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Stim: picoA_per_picoF {pub: in};
    ode(Ki, time) = -(i_Stim+i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kss+i_Kur+i_Kr-2{dimensionless}*i_NaK)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp ultra_rapidly_activating_delayed_rectifier_K_I as
    var i_Kur: picoA_per_picoF {pub: out};
    var g_Kur: milliS_per_microF {init: 0.25};
    var aur: dimensionless {init: 0.00346258606821817};
    var iur: dimensionless {init: 0.955684946168062};
    var tau_aur: millisecond;
    var tau_iur: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var ass: dimensionless {pub: out};
    var iss: dimensionless {pub: out};
    var tau_i_const: millisecond {init: 643};
    ass = 1{dimensionless}/(1{dimensionless}+exp(-(V+6.19{millivolt})/9.6{millivolt}));
    iss = 1{dimensionless}/(1{dimensionless}+exp((V+42.1{millivolt})/5.4{millivolt}));
    i_Kur = g_Kur*aur*iur*(V-E_K);
    ode(aur, time) = (ass-aur)/tau_aur;
    ode(iur, time) = (iss-iur)/tau_iur;
    tau_aur = 0.493{millisecond}*exp(-0.0629{per_millivolt}*V)+2.058{millisecond};
    tau_iur = tau_i_const+1000{millisecond}/(1{dimensionless}+exp((V+42.1{millivolt})/5.4{millivolt}));
  enddef;

  def comp non_inactivating_steady_state_K_I as
    var i_Kss: picoA_per_picoF {pub: out};
    var g_Kss: milliS_per_microF {init: 0.0595};
    var aKss: dimensionless {init: 0.287585636847048};
    var iKss: dimensionless {init: 1};
    var tau_Kss: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var ass: dimensionless {pub: in};
    i_Kss = g_Kss*aKss*iKss*(V-E_K);
    ode(aKss, time) = (ass-aKss)/tau_Kss;
    ode(iKss, time) = 0{per_millisecond};
    tau_Kss = 39.3{millisecond}*exp(-0.05{per_millivolt}*V)+13.17{millisecond};
  enddef;

  def comp rapid_delayed_rectifier_K_I as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: milliS_per_microF {init: 0.0165};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#rapid_delayed_rectifier_potassium_reversal_potential
    var E_Kr: millivolt;
    var O_K: dimensionless {init: 0.0131742086125972};
    var C_K1: dimensionless {init: 0.0011733433957123};
    var C_K2: dimensionless {init: 0.00105586824723736};
    var C_K0: dimensionless;
    var I_K: dimensionless {init: 0.00140618453684944};
    var alpha_a0: per_millisecond;
    var beta_a0: per_millisecond;
    var kb: per_millisecond {init: 0.036778};
    var kf: per_millisecond {init: 0.023761};
    var alpha_a1: per_millisecond;
    var beta_a1: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nao: micromolar {pub: in};
    var Nai: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var Ki: micromolar {pub: in};
    E_Kr = R*T/F*ln((0.98{dimensionless}*Ko+0.02{dimensionless}*Nao)/(0.98{dimensionless}*Ki+0.02{dimensionless}*Nai));
    i_Kr = g_Kr*O_K*(V-E_Kr);
    C_K0 = 1{dimensionless}-(C_K1+C_K2+O_K+I_K);
    ode(C_K2, time) = kf*C_K1+beta_a1*O_K-(kb*C_K2+alpha_a1*C_K2);
    ode(C_K1, time) = alpha_a0*C_K0+kb*C_K2-(beta_a0*C_K1+kf*C_K1);
    ode(O_K, time) = alpha_a1*C_K2+beta_i*I_K-(beta_a1*O_K+alpha_i*O_K);
    ode(I_K, time) = alpha_i*O_K-beta_i*I_K;
    alpha_a0 = 0.022348{per_millisecond}*exp(0.01176{per_millivolt}*V);
    beta_a0 = 0.047002{per_millisecond}*exp(-0.0631{per_millivolt}*V);
    alpha_a1 = 0.0335{per_millisecond}*exp(0.0109{per_millivolt}*V);
    beta_a1 = 0.0000689{per_millisecond}*exp(-0.04178{per_millivolt}*V);
    alpha_i = 0.0703{per_millisecond}*exp(0.0287{per_millivolt}*(V+5{millivolt}));
    beta_i = 0.006497{per_millisecond}*exp(-0.03268{per_millivolt}*(V+5{millivolt}));
  enddef;

  def comp slow_delayed_rectifier_K_I as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: milliS_per_microF {init: 0.00575};
    var nKs: dimensionless {init: 0.00336735013094628};
    var alpha_n: per_millisecond;
    var beta_n: per_millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_Ks = g_Ks*sqr(nKs)*(V-E_K);
    ode(nKs, time) = alpha_n*(1{dimensionless}-nKs)-beta_n*nKs;
    alpha_n = 0.00000481333{per_millivolt_millisecond}*(V+26.5{millivolt})/(1{dimensionless}-exp(-0.128{per_millivolt}*(V+26.5{millivolt})));
    beta_n = 0.0000953333{per_millisecond}*exp(-0.038{per_millivolt}*(V+26.5{millivolt}));
  enddef;

  def comp fast_transient_outward_K_I as
    var i_Kto_f: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: millivolt {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_transient_outward_current_conductance
    var g_Kto_f: milliS_per_microF {init: 0.5347};
    var ato_f: dimensionless {init: 0.0142335908879204};
    var ito_f: dimensionless {init: 0.996989882138174};
    var alpha_a: per_millisecond;
    var beta_a: per_millisecond;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Ki: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var time: millisecond {pub: in};
    var itof_iss: dimensionless;
    var tau_ito_f: millisecond;
    i_Kto_f = g_Kto_f*pow(ato_f, 3{dimensionless})*ito_f*(V-E_K);
    E_K = R*T/F*ln(Ko/Ki);
    itof_iss = 1{dimensionless}/(1{dimensionless}+exp((V+51.4{millivolt})/5{millivolt}));
    tau_ito_f = 9.6645{millisecond}+10.9362{millisecond}/(1{dimensionless}+exp((V+51.4{millivolt})/5{millivolt}));
    ode(ato_f, time) = alpha_a*(1{dimensionless}-ato_f)-beta_a*ato_f;
    ode(ito_f, time) = (itof_iss-ito_f)/tau_ito_f;
    alpha_a = 0.18064{per_millisecond}*exp(0.03577{per_millivolt}*(V+45{millivolt}));
    beta_a = 0.3956{per_millisecond}*exp(-0.06237{per_millivolt}*(V+45{millivolt}));
  enddef;

  def comp time_independent_K_I as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: picoA_per_picoF {pub: out};
    var Ko: micromolar {pub: in};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: milliS_per_microF {init: 0.35};
    i_K1 = g_K1*Ko/(Ko+210{micromolar})*(V-E_K)/(1{dimensionless}+exp(0.0896{per_millivolt}*(V-E_K)));
  enddef;

  def comp slow_transient_outward_K_I as
    var i_Kto_s: picoA_per_picoF {pub: out};
    var ass: dimensionless {pub: in};
    var iss: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_transient_outward_current_conductance
    var g_Kto_s: milliS_per_microF {init: 0};
    var ato_s: dimensionless {init: 0.0443263407760382};
    var ito_s: dimensionless {init: 0.887568880831388};
    var tau_ta_s: millisecond;
    var tau_ti_s: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_Kto_s = g_Kto_s*ato_s*ito_s*(V-E_K);
    ode(ato_s, time) = (ass-ato_s)/tau_ta_s;
    ode(ito_s, time) = (iss-ito_s)/tau_ti_s;
    tau_ta_s = 0.493{millisecond}*exp(-0.0629{per_millivolt}*V)+2.058{millisecond};
    tau_ti_s = 270{millisecond}+1050{millisecond}/(1{dimensionless}+exp((V+45.2{millivolt})/5.7{millivolt}));
  enddef;

  def comp sodium_potassium_pump_current as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
    var i_NaK: picoA_per_picoF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current_permeability
    var i_NaK_max: picoA_per_picoF {init: 2.486};
    var Km_Nai: micromolar {init: 16600};
    var Km_Ko: micromolar {init: 1500};
    var f_NaK: dimensionless;
    var sigma: dimensionless;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    i_NaK = i_NaK_max*f_NaK*1{dimensionless}/(1{dimensionless}+pow(Km_Nai/Nai, 2.4{dimensionless}))*Ko/(Ko+Km_Ko);
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67300{micromolar})-1{dimensionless});
  enddef;

  def comp calcium_activated_chloride_current as
    var i_ClCa: picoA_per_picoF {pub: out};
    var g_ClCa: milliS_per_microF {init: 10};
    var O_ClCa: dimensionless;
    var E_Cl: millivolt {init: -40};
    var Km_Cl: micromolar {init: 10};
    var V: millivolt {pub: in};
    var Cai: micromolar {pub: in};
    i_ClCa = g_ClCa*O_ClCa*Cai/(Cai+Km_Cl)*(V-E_Cl);
    O_ClCa = 0.2{dimensionless}/(1{dimensionless}+exp(-(V-46.7{millivolt})/7.8{millivolt}));
  enddef;

  def comp transcell_currents as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def group as containment for
    comp cell incl
      comp transcell_currents incl
        comp L_type_calcium_current;
        comp calcium_pump_current;
        comp sodium_calcium_exchange_current;
        comp calcium_background_current;
        comp fast_sodium_current;
        comp sodium_background_current;
        comp fast_transient_outward_K_I;
        comp slow_transient_outward_K_I;
        comp time_independent_K_I;
        comp slow_delayed_rectifier_K_I;
        comp ultra_rapidly_activating_delayed_rectifier_K_I;
        comp non_inactivating_steady_state_K_I;
        comp rapid_delayed_rectifier_K_I;
        comp sodium_potassium_pump_current;
        comp calcium_activated_chloride_current;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp calcium_concentration;
        comp sodium_concentration;
        comp potassium_concentration;
      endcomp;
      comp intracellular_currents incl
        comp ryanodine_receptors;
        comp calcium_fluxes;
      endcomp;
    endcomp;
  enddef;
  def map between cell and environment for
    vars time and time;
  enddef;
  def map between calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes and environment for
    vars time and time;
  enddef;
  def map between ryanodine_receptors and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between fast_transient_outward_K_I and environment for
    vars time and time;
  enddef;
  def map between slow_transient_outward_K_I and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_K_I and environment for
    vars time and time;
  enddef;
  def map between time_independent_K_I and environment for
    vars time and time;
  enddef;
  def map between ultra_rapidly_activating_delayed_rectifier_K_I and environment for
    vars time and time;
  enddef;
  def map between non_inactivating_steady_state_K_I and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_K_I and environment for
    vars time and time;
  enddef;
  def map between cell and L_type_calcium_current for
    vars i_CaL and i_CaL;
    vars V and V;
    vars F and F;
    vars T and T;
    vars Vss and Vss;
    vars Acap and Acap;
    vars R and R;
    vars Cm and Cm;
    vars Cao and Cao;
  enddef;
  def map between cell and calcium_pump_current for
    vars i_pCa and i_pCa;
    vars F and F;
    vars Vmyo and Vmyo;
    vars Acap and Acap;
    vars Cm and Cm;
  enddef;
  def map between cell and sodium_calcium_exchange_current for
    vars i_NCX and i_NCX;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Vmyo and Vmyo;
    vars Acap and Acap;
    vars Cm and Cm;
  enddef;
  def map between cell and calcium_background_current for
    vars i_Cab and i_Cab;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
    vars Vmyo and Vmyo;
    vars Acap and Acap;
    vars Cm and Cm;
  enddef;
  def map between cell and fast_sodium_current for
    vars i_Na and i_Na;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between cell and sodium_background_current for
    vars i_Nab and i_Nab;
    vars V and V;
  enddef;
  def map between cell and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between cell and fast_transient_outward_K_I for
    vars i_Kto_f and i_Kto_f;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
  enddef;
  def map between cell and slow_transient_outward_K_I for
    vars i_Kto_s and i_Kto_s;
    vars V and V;
  enddef;
  def map between cell and time_independent_K_I for
    vars i_K1 and i_K1;
    vars V and V;
    vars Ko and Ko;
  enddef;
  def map between cell and slow_delayed_rectifier_K_I for
    vars i_Ks and i_Ks;
    vars V and V;
  enddef;
  def map between cell and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars i_Kur and i_Kur;
    vars V and V;
  enddef;
  def map between cell and non_inactivating_steady_state_K_I for
    vars i_Kss and i_Kss;
    vars V and V;
  enddef;
  def map between cell and rapid_delayed_rectifier_K_I for
    vars i_Kr and i_Kr;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between cell and calcium_activated_chloride_current for
    vars i_ClCa and i_ClCa;
    vars V and V;
  enddef;
  def map between cell and calcium_concentration for
    vars Cm and Cm;
    vars V and V;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars VNSR and VNSR;
    vars VJSR and VJSR;
    vars Vss and Vss;
    vars F and F;
  enddef;
  def map between cell and calcium_fluxes for
    vars V and V;
    vars stim_period and stim_period;
    vars prepulses_number and prepulses_number;
  enddef;
  def map between cell and sodium_concentration for
    vars Cm and Cm;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars F and F;
  enddef;
  def map between cell and potassium_concentration for
    vars Cm and Cm;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars F and F;
    vars i_Stim and i_Stim;
  enddef;
  def map between calcium_concentration and calcium_fluxes for
    vars Cass and Cass;
    vars CaJSR and CaJSR;
    vars Cai and Cai;
    vars CaNSR and CaNSR;
    vars J_rel and J_rel;
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
    vars J_leak and J_leak;
    vars J_serca and J_serca;
  enddef;
  def map between calcium_concentration and ryanodine_receptors for
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and L_type_calcium_current for
    vars i_CaL and i_CaL;
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and calcium_pump_current for
    vars i_pCa and i_pCa;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and sodium_calcium_exchange_current for
    vars i_NCX and i_NCX;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and calcium_background_current for
    vars i_Cab and i_Cab;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and calcium_activated_chloride_current for
    vars Cai and Cai;
  enddef;
  def map between calcium_fluxes and L_type_calcium_current for
    vars i_CaL_max and i_CaL_max;
    vars i_CaL and i_CaL;
  enddef;
  def map between calcium_fluxes and ryanodine_receptors for
    vars P_O1 and P_O1;
    vars P_O2 and P_O2;
  enddef;
  def map between sodium_concentration and fast_sodium_current for
    vars Nai and Nai;
    vars i_Na and i_Na;
  enddef;
  def map between sodium_concentration and sodium_background_current for
    vars i_Nab and i_Nab;
  enddef;
  def map between sodium_concentration and sodium_calcium_exchange_current for
    vars Nai and Nai;
    vars i_NCX and i_NCX;
  enddef;
  def map between sodium_concentration and sodium_potassium_pump_current for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between potassium_concentration and fast_transient_outward_K_I for
    vars Ki and Ki;
    vars i_Kto_f and i_Kto_f;
  enddef;
  def map between potassium_concentration and slow_transient_outward_K_I for
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between potassium_concentration and time_independent_K_I for
    vars i_K1 and i_K1;
  enddef;
  def map between potassium_concentration and slow_delayed_rectifier_K_I for
    vars i_Ks and i_Ks;
  enddef;
  def map between potassium_concentration and rapid_delayed_rectifier_K_I for
    vars i_Kr and i_Kr;
    vars Ki and Ki;
  enddef;
  def map between sodium_concentration and rapid_delayed_rectifier_K_I for
    vars Nai and Nai;
  enddef;
  def map between potassium_concentration and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars i_Kur and i_Kur;
  enddef;
  def map between potassium_concentration and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
  enddef;
  def map between potassium_concentration and non_inactivating_steady_state_K_I for
    vars i_Kss and i_Kss;
  enddef;
  def map between fast_transient_outward_K_I and slow_transient_outward_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and time_independent_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and slow_delayed_rectifier_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and non_inactivating_steady_state_K_I for
    vars E_K and E_K;
  enddef;
  def map between slow_transient_outward_K_I and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars ass and ass;
    vars iss and iss;
  enddef;
  def map between ultra_rapidly_activating_delayed_rectifier_K_I and non_inactivating_steady_state_K_I for
    vars ass and ass;
  enddef;
enddef;
