<?xml version='1.0'?>
<model name="yanagihara_model_1980" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="mV">
        <unit units="gram"/>
        <unit exponent="2.0" units="metre"/>
        <unit exponent="-3.0" units="second"/>
        <unit exponent="-1.0" units="ampere"/>
    </units>
    <units name="s2_A_per_g_per_m2">
        <unit exponent="-1.0" units="gram"/>
        <unit exponent="-2.0" units="metre"/>
        <unit exponent="2.0" units="second"/>
        <unit units="ampere"/>
    </units>
    <units name="s_A_per_m3_times_1e3">
        <unit exponent="-3.0" multiplier="1000" units="metre"/>
        <unit units="second"/>
        <unit units="ampere"/>
    </units>
    <units name="uA_per_cm2">
        <unit exponent="-2.0" multiplier="0.01" units="metre"/>
        <unit units="ampere"/>
    </units>
    <units name="uF_per_cm2">
        <unit exponent="-1.0" multiplier="1e-05" units="gram"/>
        <unit exponent="-4.0" units="metre"/>
        <unit exponent="4.0" units="second"/>
        <unit exponent="2.0" units="ampere"/>
    </units>
    <component name="calcium_channel">
        <variable name="V" public_interface="in" units="mV"/>
        <variable name="d" public_interface="in" units="dimensionless"/>
        <variable name="f" public_interface="in" units="dimensionless"/>
        <variable cmeta:id="i_s" name="i_s" units="uA_per_cm2"/>
        <variable cmeta:id="calcium_channel_open_prob" name="open_prob" units="dimensionless"/>
        <variable cmeta:id="calcium_channel_driving_term" name="driving_term" units="s_A_per_m3_times_1e3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>i_s</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="uA_per_cm2">12.5</cn>
                        <ci>open_prob</ci>
                        <ci>driving_term</ci>
                    </apply>
                    <cn cellml:units="s_A_per_m3_times_1e3">1</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>driving_term</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <cn cellml:units="s_A_per_m3_times_1e3">1000</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci>V</ci>
                                    <cn cellml:units="mV">30.0</cn>
                                </apply>
                                <cn cellml:units="mV">15.0</cn>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="s_A_per_m3_times_1e3">1000.0</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>open_prob</ci>
                <apply>
                    <times/>
                    <ci>d</ci>
                    <ci>f</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="calcium_channel_d_gate">
        <variable name="V" public_interface="in" units="mV"/>
        <variable name="alpha_d" units="hertz"/>
        <variable name="beta_d" units="hertz"/>
        <variable initial_value="3.2e-05" name="d" public_interface="out" units="dimensionless"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>alpha_d</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <cn cellml:units="s2_A_per_g_per_m2">10.45</cn>
                            <apply>
                                <plus/>
                                <ci>V</ci>
                                <cn cellml:units="mV">35.0</cn>
                            </apply>
                        </apply>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <plus/>
                                            <ci>V</ci>
                                            <cn cellml:units="mV">35.0</cn>
                                        </apply>
                                    </apply>
                                    <cn cellml:units="mV">2.5</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <cn cellml:units="s2_A_per_g_per_m2">31.25</cn>
                            <ci>V</ci>
                        </apply>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <ci>V</ci>
                                    </apply>
                                    <cn cellml:units="mV">4.8</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta_d</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <cn cellml:units="s2_A_per_g_per_m2">4.21</cn>
                        </apply>
                        <apply>
                            <minus/>
                            <ci>V</ci>
                            <cn cellml:units="mV">5.0</cn>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <ci>V</ci>
                                        <cn cellml:units="mV">5.0</cn>
                                    </apply>
                                    <cn cellml:units="mV">2.5</cn>
                                </apply>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1.0</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>d</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_d</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <ci>d</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_d</ci>
                        <ci>d</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="calcium_channel_f_gate">
        <variable name="V" public_interface="in" units="mV"/>
        <variable name="alpha_f" units="hertz"/>
        <variable name="beta_f" units="hertz"/>
        <variable initial_value="1.0" name="f" public_interface="out" units="dimensionless"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>alpha_f</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <cn cellml:units="s2_A_per_g_per_m2">0.355</cn>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>V</ci>
                            <cn cellml:units="mV">20.0</cn>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="mV">20.0</cn>
                                    </apply>
                                    <cn cellml:units="mV">5.633</cn>
                                </apply>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1.0</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta_f</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="s2_A_per_g_per_m2">0.944</cn>
                        <apply>
                            <plus/>
                            <ci>V</ci>
                            <cn cellml:units="mV">60.0</cn>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="mV">29.5</cn>
                                    </apply>
                                </apply>
                                <cn cellml:units="mV">4.16</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>f</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_f</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <ci>f</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_f</ci>
                        <ci>f</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="environment">
        <variable cmeta:id="time" name="time" public_interface="out" units="second"/>
    </component>
    <component name="membrane">
        <variable cmeta:id="Cm" initial_value="1.0" name="Cm" units="uF_per_cm2"/>
        <variable cmeta:id="V" name="V" public_interface="out" units="mV"/>
        <variable initial_value="0.5" name="duration" units="second"/>
        <variable initial_value="100.0" name="offset" units="second"/>
        <variable initial_value="1000.0" name="period" units="second"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>V</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="mV">1.0</cn>
                        <apply>
                            <lt/>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <ci>time</ci>
                                    <ci>offset</ci>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>period</ci>
                                    <apply>
                                        <floor/>
                                        <apply>
                                            <divide/>
                                            <apply>
                                                <minus/>
                                                <ci>time</ci>
                                                <ci>offset</ci>
                                            </apply>
                                            <ci>period</ci>
                                        </apply>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>duration</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="mV">0.0</cn>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="calcium_channel" component_2="calcium_channel_d_gate"/>
        <map_variables variable_1="d" variable_2="d"/>
    </connection>
    <connection>
        <map_components component_1="calcium_channel" component_2="calcium_channel_f_gate"/>
        <map_variables variable_1="f" variable_2="f"/>
    </connection>
    <connection>
        <map_components component_1="calcium_channel" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
    </connection>
    <connection>
        <map_components component_1="calcium_channel_d_gate" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="calcium_channel_d_gate" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
    </connection>
    <connection>
        <map_components component_1="calcium_channel_f_gate" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="calcium_channel_f_gate" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="membrane"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#Cm">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#V">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#i_s">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#time">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#dyadic_buffer" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#K_on" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#cyto_buffer" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#cyto_buffer_flux" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#submembrane_buffer" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#delta_max" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#submembrane_buffer_flux" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#dyadic_buffer_flux" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#K_d" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_time" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_voltage" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_calcium_cass" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_calcium_cad" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_calcium_cai" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#conductance_scale_factor" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#holding" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v1" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v7" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c4" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c5" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c0" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#tx2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#tx1" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t3" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t0" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t1" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c3" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#vmax" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c8" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v4" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v6" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v8" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c6" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t5" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t8" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v3" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t6" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c7" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t4" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c1" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#vmin" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v0" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t7" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v5" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:temp-names#membrane_total_sodium_current" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#calcium_channel_open_prob">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#calcium_channel_driving_term">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
    </rdf:RDF>
</model>
