<?xml version='1.0'?>
<model name="generated_model" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="A_per_F">
        <unit multiplier="1000" units="gram"/>
        <unit exponent="2" units="metre"/>
        <unit exponent="-4" units="second"/>
        <unit exponent="-1" units="ampere"/>
    </units>
    <units name="C_per_mol">
        <unit units="second"/>
        <unit units="ampere"/>
        <unit exponent="-1" units="mole"/>
    </units>
    <units name="L_per_F_per_ms">
        <unit multiplier="1000" units="gram"/>
        <unit exponent="5" units="metre"/>
        <unit exponent="-5" units="second"/>
        <unit exponent="-2" units="ampere"/>
    </units>
    <units name="mM">
        <unit exponent="-3" units="metre"/>
        <unit units="mole"/>
    </units>
    <units name="mS_per_uF">
        <unit exponent="-1" multiplier="1000" units="second"/>
    </units>
    <units name="mV">
        <unit units="gram"/>
        <unit exponent="2" units="metre"/>
        <unit exponent="-3" units="second"/>
        <unit exponent="-1" units="ampere"/>
    </units>
    <units name="ms">
        <unit multiplier="0.001" units="second"/>
    </units>
    <units name="per_mV">
        <unit exponent="-1" units="gram"/>
        <unit exponent="-2" units="metre"/>
        <unit exponent="3" units="second"/>
        <unit units="ampere"/>
    </units>
    <units name="s_A_per_m3">
        <unit exponent="-3" units="metre"/>
        <unit units="second"/>
        <unit units="ampere"/>
    </units>
    <component name="L_type_Ca_current">
        <variable name="CaMKactive" public_interface="in" units="dimensionless"/>
        <variable name="Ca_o" public_interface="in" units="mM"/>
        <variable name="Ca_ss" public_interface="in" units="mM"/>
        <variable name="F" public_interface="in" units="C_per_mol"/>
        <variable name="FonRT" public_interface="in" units="per_mV"/>
        <variable name="KmCaMK" public_interface="in" units="dimensionless"/>
        <variable name="V" public_interface="in" units="mV"/>
        <variable initial_value="1.64012999999999996e-06" name="d" units="dimensionless"/>
        <variable initial_value="8.98230672627999915e+00" name="dp" units="dimensionless"/>
        <variable name="dpss" units="dimensionless"/>
        <variable cmeta:id="driving_term_ghk" name="driving_term_ghk" units="s_A_per_m3"/>
        <variable name="dss" units="dimensionless"/>
        <variable initial_value="9.99961508634000018e-01" name="f" units="dimensionless"/>
        <variable initial_value="9.92234519147999983e-01" name="f2" units="dimensionless"/>
        <variable name="f2ss" units="dimensionless"/>
        <variable initial_value="9.78366249230000040e-01" name="fca" units="dimensionless"/>
        <variable initial_value="8.93052931248999982e-01" name="fca2" units="dimensionless"/>
        <variable name="fca2ss" units="dimensionless"/>
        <variable name="fcass" units="dimensionless"/>
        <variable name="fss" units="dimensionless"/>
        <variable initial_value="0.341" name="gacai" units="dimensionless"/>
        <variable initial_value="0.341" name="gacao" units="dimensionless"/>
        <variable cmeta:id="i_CaL" name="i_CaL" units="A_per_F"/>
        <variable name="ibarca" units="A_per_F"/>
        <variable cmeta:id="open_prob" name="open_prob" units="dimensionless"/>
        <variable initial_value="0.000243" name="pca" units="L_per_F_per_ms"/>
        <variable name="taud" units="ms"/>
        <variable name="tauf" units="ms"/>
        <variable name="tauf2" units="ms"/>
        <variable name="taufca" units="ms"/>
        <variable name="taufca2" units="ms"/>
        <variable name="time" public_interface="in" units="ms"/>
        <variable name="tissue" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>d</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>dss</ci>
                        <ci>d</ci>
                    </apply>
                    <ci>taud</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>dp</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>dpss</ci>
                        <ci>dp</ci>
                    </apply>
                    <cn cellml:units="ms">10.0</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>dpss</ci>
                <apply>
                    <minus/>
                    <cn cellml:units="dimensionless">9.0</cn>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">8.0</cn>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <plus/>
                                            <ci>V</ci>
                                            <cn cellml:units="mV">65.0</cn>
                                        </apply>
                                    </apply>
                                    <cn cellml:units="mV">3.4</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>driving_term_ghk</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">4.0</cn>
                        <apply>
                            <minus/>
                            <ci>V</ci>
                            <cn cellml:units="mV">15.0</cn>
                        </apply>
                        <ci>F</ci>
                        <ci>FonRT</ci>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>gacai</ci>
                                <ci>Ca_ss</ci>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <times/>
                                        <cn cellml:units="dimensionless">2.0</cn>
                                        <apply>
                                            <minus/>
                                            <ci>V</ci>
                                            <cn cellml:units="mV">15.0</cn>
                                        </apply>
                                        <ci>FonRT</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>gacao</ci>
                                <ci>Ca_o</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">2.0</cn>
                                <apply>
                                    <minus/>
                                    <ci>V</ci>
                                    <cn cellml:units="mV">15.0</cn>
                                </apply>
                                <ci>FonRT</ci>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1.0</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>dss</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <minus/>
                                            <ci>V</ci>
                                            <cn cellml:units="mV">4.0</cn>
                                        </apply>
                                    </apply>
                                    <cn cellml:units="mV">6.74</cn>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <plus/>
                                            <ci>V</ci>
                                            <cn cellml:units="mV">60.0</cn>
                                        </apply>
                                    </apply>
                                    <cn cellml:units="mV">2.0</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>f</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>fss</ci>
                        <ci>f</ci>
                    </apply>
                    <ci>tauf</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>f2</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>f2ss</ci>
                        <ci>f2</ci>
                    </apply>
                    <ci>tauf2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>f2ss</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">0.77</cn>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="mV">17.12</cn>
                                    </apply>
                                    <cn cellml:units="mV">7.0</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="dimensionless">0.23</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>fca</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>fcass</ci>
                        <ci>fca</ci>
                    </apply>
                    <ci>taufca</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>fca2</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>fca2ss</ci>
                        <ci>fca2</ci>
                    </apply>
                    <ci>taufca2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>fca2ss</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <divide/>
                            <ci>i_CaL</ci>
                            <cn cellml:units="A_per_F">0.01</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>fcass</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">0.3</cn>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <divide/>
                                <ci>i_CaL</ci>
                                <cn cellml:units="A_per_F">0.05</cn>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">0.55</cn>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <divide/>
                                <ci>Ca_ss</ci>
                                <cn cellml:units="mM">0.002</cn>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="dimensionless">0.15</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>fss</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">0.7</cn>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="mV">17.12</cn>
                                    </apply>
                                    <cn cellml:units="mV">7.0</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="dimensionless">0.3</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i_CaL</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>d</ci>
                                <ci>dp</ci>
                            </apply>
                            <ci>f</ci>
                            <ci>f2</ci>
                            <ci>fca</ci>
                            <ci>fca2</ci>
                            <ci>ibarca</ci>
                        </apply>
                        <apply>
                            <eq/>
                            <ci>tissue</ci>
                            <cn cellml:units="dimensionless">0.0</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <apply>
                            <times/>
                            <ci>d</ci>
                            <ci>f</ci>
                            <ci>f2</ci>
                            <ci>fca</ci>
                            <ci>fca2</ci>
                            <ci>ibarca</ci>
                        </apply>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>ibarca</ci>
                <apply>
                    <times/>
                    <ci>pca</ci>
                    <ci>driving_term_ghk</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>open_prob</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>d</ci>
                                <ci>dp</ci>
                            </apply>
                            <ci>f</ci>
                            <ci>f2</ci>
                            <ci>fca</ci>
                            <ci>fca2</ci>
                        </apply>
                        <apply>
                            <eq/>
                            <ci>tissue</ci>
                            <cn cellml:units="dimensionless">0.0</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <apply>
                            <times/>
                            <ci>d</ci>
                            <ci>f</ci>
                            <ci>f2</ci>
                            <ci>fca</ci>
                            <ci>fca2</ci>
                        </apply>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>taud</ci>
                <apply>
                    <plus/>
                    <cn cellml:units="ms">0.59</cn>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <cn cellml:units="ms">0.8</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <cn cellml:units="per_mV">0.052</cn>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="mV">13.0</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <cn cellml:units="per_mV">0.132</cn>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="mV">13.0</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tauf</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="ms">1.0</cn>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">0.2411</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <power/>
                                        <apply>
                                            <times/>
                                            <cn cellml:units="per_mV">0.045</cn>
                                            <apply>
                                                <minus/>
                                                <ci>V</ci>
                                                <cn cellml:units="mV">9.6914</cn>
                                            </apply>
                                        </apply>
                                        <cn cellml:units="dimensionless">2</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">0.0529</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tauf2</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="ms">1.0</cn>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">0.0423</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <power/>
                                        <apply>
                                            <times/>
                                            <cn cellml:units="per_mV">0.059</cn>
                                            <apply>
                                                <minus/>
                                                <ci>V</ci>
                                                <cn cellml:units="mV">18.5726</cn>
                                            </apply>
                                        </apply>
                                        <cn cellml:units="dimensionless">2</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">0.0054</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>taufca</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <cn cellml:units="ms">5.0</cn>
                            <ci>CaMKactive</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>KmCaMK</ci>
                            <ci>CaMKactive</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <cn cellml:units="ms">1.5</cn>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <divide/>
                                <ci>Ca_ss</ci>
                                <cn cellml:units="mM">0.002</cn>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="ms">0.5</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>taufca2</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <cn cellml:units="ms">300.0</cn>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <minus/>
                                            <ci>i_CaL</ci>
                                        </apply>
                                        <cn cellml:units="A_per_F">0.175</cn>
                                    </apply>
                                    <cn cellml:units="A_per_F">0.04</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="ms">125.0</cn>
                </apply>
            </apply>
        </math>
    </component>
    <component name="calcium_dynamics">
        <variable initial_value="0.05" name="CaMK0" units="dimensionless"/>
        <variable name="CaMKactive" public_interface="out" units="dimensionless"/>
        <variable name="CaMKbound" units="dimensionless"/>
        <variable initial_value="2.11237047739999996e-02" name="CaMKtrap" units="dimensionless"/>
        <variable cmeta:id="Ca_ss" initial_value="1e-09" name="Ca_ss" public_interface="out" units="mM"/>
        <variable initial_value="0.0015" name="Km" units="mM"/>
        <variable initial_value="0.15" name="KmCaMK" public_interface="out" units="dimensionless"/>
        <variable name="time" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>CaMKactive</ci>
                <apply>
                    <plus/>
                    <ci>CaMKbound</ci>
                    <ci>CaMKtrap</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>CaMKbound</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>CaMK0</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <ci>CaMKtrap</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <divide/>
                            <ci>Km</ci>
                            <ci>Ca_ss</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>CaMKtrap</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <cn cellml:units="mS_per_uF">0.05</cn>
                        <ci>CaMKactive</ci>
                        <apply>
                            <minus/>
                            <ci>CaMKactive</ci>
                            <ci>CaMKtrap</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="mS_per_uF">0.00068</cn>
                        <ci>CaMKtrap</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="environment">
        <variable cmeta:id="Ca_o" initial_value="2.0" name="Ca_o" public_interface="out" units="mM"/>
        <variable initial_value="96485.0" name="F" public_interface="out" units="C_per_mol"/>
        <variable initial_value="3.74358835077999996e-02" name="FonRT" public_interface="out" units="per_mV"/>
        <variable cmeta:id="time" name="time" public_interface="out" units="ms"/>
        <variable initial_value="1.0" name="tissue" public_interface="out" units="dimensionless"/>
    </component>
    <component name="membrane">
        <variable cmeta:id="V" name="V" public_interface="out" units="mV"/>
        <variable initial_value="3.0" name="duration" units="ms"/>
        <variable initial_value="0.0" name="offset" units="ms"/>
        <variable name="pace" units="dimensionless"/>
        <variable initial_value="1000.0" name="period" units="ms"/>
        <variable name="time" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>V</ci>
                <apply>
                    <minus/>
                    <cn cellml:units="dimensionless">80.0</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>pace</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <lt/>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <ci>time</ci>
                                    <ci>offset</ci>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>period</ci>
                                    <apply>
                                        <floor/>
                                        <apply>
                                            <divide/>
                                            <apply>
                                                <minus/>
                                                <ci>time</ci>
                                                <ci>offset</ci>
                                            </apply>
                                            <ci>period</ci>
                                        </apply>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>duration</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">0.0</cn>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="L_type_Ca_current" component_2="calcium_dynamics"/>
        <map_variables variable_1="CaMKactive" variable_2="CaMKactive"/>
        <map_variables variable_1="Ca_ss" variable_2="Ca_ss"/>
        <map_variables variable_1="KmCaMK" variable_2="KmCaMK"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_current" component_2="environment"/>
        <map_variables variable_1="Ca_o" variable_2="Ca_o"/>
        <map_variables variable_1="F" variable_2="F"/>
        <map_variables variable_1="FonRT" variable_2="FonRT"/>
        <map_variables variable_1="time" variable_2="time"/>
        <map_variables variable_1="tissue" variable_2="tissue"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_current" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
    </connection>
    <connection>
        <map_components component_1="calcium_dynamics" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="membrane"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#Ca_o">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#Ca_ss">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#V">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#driving_term_ghk">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#i_CaL">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#open_prob">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#time">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
    </rdf:RDF>
</model>
