def model MahajanShiferaw2008_units as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit cm_per_s as
    unit metre {mult: 0.01};
    unit second {expo: -1.0};
  enddef;
  def unit dimensionless_times_1e_minus_3 as
    unit dimensionless {mult: 0.001};
  enddef;
  def unit g_m5_per_s3_per_A_per_mol_times_1e3 as
    unit gram {mult: 1000};
    unit metre {expo: 5.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m3_per_s_per_mol_times_1e6 as
    unit metre {expo: 3.0, mult: 1000000};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mA_per_cm2 as
    unit metre {expo: -2.0, mult: 10};
    unit ampere;
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol4_per_m12 as
    unit metre {expo: -12.0};
    unit mole {expo: 4.0};
  enddef;
  def unit mol_per_m3_per_s as
    unit metre {expo: -3.0};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mol_per_m_per_s_per_A_times_1e_minus_1 as
    unit metre {expo: -1.0, mult: 0.1};
    unit second {expo: -1.0};
    unit ampere {expo: -1.0};
    unit mole;
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit s_A_per_m3_times_1e3 as
    unit metre {expo: -3.0, mult: 1000};
    unit second;
    unit ampere;
  enddef;
  def unit uM as
    unit metre {expo: -3.0, mult: 0.001};
    unit mole;
  enddef;

  def comp Ca as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Ca_NSR: uM {pub: out, init: 1.04450004990522999e+02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_dyad: uM {pub: out, init: 1.71657313068500006e+00};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: uM {pub: out, init: 2.56752008084000005e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#submembrane_space_calcium_concentration
    var Ca_submem: uM {pub: out, init: 2.26941113355000001e-01};
    var bcal: uM {init: 24.0};
    var bmem: uM {init: 15.0};
    var bpxi: dimensionless;
    var bpxs: dimensionless;
    var bsar: uM {init: 42.0};
    var btrop: uM {init: 70.0};
    var csm: mM {pub: out};
    var dCa_JSR: mol_per_m3_per_s {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var dciib: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#submembrane_space_calcium_flux_scaling_from_intrinsic_buffers
    var dcsib: dimensionless;
    var jNaCa: mol_per_m3_per_s {pub: in};
    var jca: mol_per_m3_per_s {pub: in};
    var jd: mol_per_m3_per_s;
    var jleak: mol_per_m3_per_s {pub: in};
    var jup: mol_per_m3_per_s {pub: in};
    var kmem: uM {init: 0.3};
    var ksar: uM {init: 13.0};
    var mempxi: dimensionless;
    var mempxs: dimensionless;
    var sarpxi: dimensionless;
    var sarpxs: dimensionless;
    var spxi: dimensionless;
    var spxs: dimensionless;
    var srkd: uM {init: 0.6};
    var srmax: uM {init: 47.0};
    var taud: ms {init: 4.0};
    var taups: ms {init: 0.5};
    var time: ms {pub: in};
    var tropi: uM {init: 2.21716898949530012e+01};
    var trops: uM {init: 1.98647019498539983e+01};
    var xbi: mol_per_m3_per_s;
    var xbs: mol_per_m3_per_s;
    var xir: mol_per_m3_per_s {pub: in};
    var xiryr: mol_per_m3_per_s {pub: in};
    var xkcal: uM {init: 7.0};
    var xkoff: mS_per_uF {init: 0.0196};
    var xkon: m3_per_s_per_mol_times_1e6 {init: 0.0327};
    ode(Ca_NSR, time) = dCa_JSR;
    ode(Ca_dyad, time) = xiryr-(Ca_dyad-Ca_submem)/taups;
    ode(Ca_i, time) = dciib*(jd-jup+jleak-xbi);
    ode(Ca_submem, time) = dcsib*(50.0{dimensionless}*(xir-jd-jca+jNaCa)-xbs);
    bpxi = bcal*xkcal/((xkcal+Ca_i)*(xkcal+Ca_i));
    bpxs = bcal*xkcal/((xkcal+Ca_submem)*(xkcal+Ca_submem));
    csm = Ca_submem/1000.0{dimensionless_times_1e_minus_3};
    dCa_JSR = -xir+jup-jleak;
    dciib = 1.0{dimensionless}/(1.0{dimensionless}+bpxi+spxi+mempxi+sarpxi);
    dcsib = 1.0{dimensionless}/(1.0{dimensionless}+bpxs+spxs+mempxs+sarpxs);
    jd = (Ca_submem-Ca_i)/taud;
    mempxi = bmem*kmem/((kmem+Ca_i)*(kmem+Ca_i));
    mempxs = bmem*kmem/((kmem+Ca_submem)*(kmem+Ca_submem));
    sarpxi = bsar*ksar/((ksar+Ca_i)*(ksar+Ca_i));
    sarpxs = bsar*ksar/((ksar+Ca_submem)*(ksar+Ca_submem));
    spxi = srmax*srkd/((srkd+Ca_i)*(srkd+Ca_i));
    spxs = srmax*srkd/((srkd+Ca_submem)*(srkd+Ca_submem));
    ode(tropi, time) = xbi;
    ode(trops, time) = xbs;
    xbi = xkon*Ca_i*(btrop-tropi)-xkoff*tropi;
    xbs = xkon*Ca_submem*(btrop-trops)-xkoff*trops;
  enddef;

  def comp Environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {pub: out, init: 1.8};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mmol {pub: out, init: 9.64853415000000041e+01};
    var FonRT: per_mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {pub: out, init: 5.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {pub: out, init: 136.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: J_per_mol_per_K {init: 8.314472};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {init: 308.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
    FonRT = F/(R*T);
  enddef;

  def comp ICaL as
    var Ca_dyad: uM {pub: in};
    var Ca_o: mM {pub: in};
    var F: C_per_mmol {pub: in};
    var FonRT: per_mV {pub: in};
    var Pr: dimensionless;
    var Ps: dimensionless;
    var V: mV {pub: in};
    var alpha: mS_per_uF;
    var beta: mS_per_uF;
    var c1: dimensionless {init: 1.82112520000000017e-05};
    var c2: dimensionless {init: 9.79322592773000045e-01};
    var cat: uM {init: 3.0};
    var cpt: uM {init: 6.09365};
    var csm: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: s_A_per_m3_times_1e3;
    var fca: dimensionless;
    var gca: mol_per_m_per_s_per_A_times_1e_minus_1 {init: 182.0};
    var jca: mol_per_m3_per_s {pub: out};
    var k1: mS_per_uF;
    var k1t: mS_per_uF {init: 0.00413};
    var k2: mS_per_uF {init: 1.03615000000000003e-04};
    var k2t: mS_per_uF {init: 0.00224};
    var k3: mS_per_uF;
    var k3t: mS_per_uF;
    var k4: mS_per_uF;
    var k4t: mS_per_uF;
    var k5: mS_per_uF;
    var k5t: mS_per_uF;
    var k6: mS_per_uF;
    var k6t: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var pca: cm_per_s {init: 0.00054};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var po: dimensionless {pub: out};
    var poi: dimensionless;
    var poinf: dimensionless;
    var r1: mS_per_uF {init: 0.3};
    var r2: mS_per_uF {init: 3.0};
    var recov: ms;
    var rxa: mA_per_cm2 {pub: out};
    var s1: mS_per_uF;
    var s1t: mS_per_uF {init: 0.00195};
    var s2: mS_per_uF;
    var s2t: mS_per_uF;
    var s6: mV {init: 8.0};
    var sx: mV {init: 3.0};
    var sy: mV {init: 4.0};
    var syr: mV {init: 11.32};
    var tau3: ms {init: 3.0};
    var tau_ca: ms;
    var tauba: ms;
    var tauca: ms;
    var taupo: ms {init: 1.0};
    var tca: ms {init: 78.0329};
    var time: ms {pub: in};
    var vth: mV {init: 0.0};
    var vx: mV;
    var vy: mV;
    var vyr: mV;
    var wca: g_m5_per_s3_per_A_per_mol_times_1e3 {pub: in};
    var xi1ba: dimensionless {init: 3.36165960000000017e-05};
    var xi1ca: dimensionless {init: 1.20815348200000003e-03};
    var xi2ba: dimensionless {init: 1.52425946880000007e-02};
    var xi2ca: dimensionless {init: 4.17300846599999962e-03};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var xica: A_per_F {pub: out};
    var za: dimensionless;
    Pr = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-vy)/sy));
    Ps = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-vyr)/syr));
    alpha = poinf/taupo;
    beta = (1.0{dimensionless}-poinf)/taupo;
    ode(c1, time) = alpha*c2+k2*xi1ca+k2t*xi1ba+r2*po-(beta+r1+k1t+k1)*c1;
    ode(c2, time) = beta*c1+k5*xi2ca+k5t*xi2ba-(k6+k6t+alpha)*c2;
    driving_term_ghk = sel
      case abs(za) < 0.001{dimensionless}:
        4.0{dimensionless}*F*FonRT*(csm*exp(za)-0.341{dimensionless}*Ca_o)/(2.0{dimensionless}*FonRT);
      otherwise:
        4.0{dimensionless}*V*F*FonRT*(csm*exp(za)-0.341{dimensionless}*Ca_o)/(exp(za)-1.0{dimensionless});
    endsel;
    fca = 1.0{dimensionless}/(1.0{dimensionless}+pow(cat/Ca_dyad, 3.0{dimensionless}));
    jca = gca*po*rxa;
    k1 = 0.024168{mS_per_uF}*fca;
    k3 = (1.0{dimensionless}-poi)/tau3;
    k3t = k3;
    k4 = k3*alpha/beta*k1/k2*k5/k6;
    k4t = k3t*alpha/beta*k1t/k2t*k5t/k6t;
    k5 = (1.0{dimensionless}-Ps)/tauca;
    k5t = (1.0{dimensionless}-Ps)/tauba;
    k6 = fca*Ps/tauca;
    k6t = Ps/tauba;
    po = 1.0{dimensionless}-xi1ca-xi2ca-xi1ba-xi2ba-c1-c2;
    poi = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-vx)/sx));
    poinf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-vth)/s6));
    recov = 10.0{ms}+4954.0{ms}*exp(V/15.6{mV});
    rxa = pca*driving_term_ghk;
    s1 = 0.0182688{mS_per_uF}*fca;
    s2 = s1*r1/r2*k2/k1;
    s2t = s1t*r1/r2*k2t/k1t;
    tau_ca = tca/(1.0{dimensionless}+pow(Ca_dyad/cpt, 4.0{dimensionless}))+0.1{ms};
    tauba = (recov-450.0{ms})*Pr+450.0{ms};
    tauca = (recov-tau_ca)*Pr+tau_ca;
    vx = -40.0{mV};
    vy = -40.0{mV};
    vyr = -40.0{mV};
    ode(xi1ba, time) = k1t*c1+k4t*xi2ba+s1t*po-(k3t+k2t+s2t)*xi1ba;
    ode(xi1ca, time) = k1*c1+k4*xi2ca+s1*po-(k3+k2+s2)*xi1ca;
    ode(xi2ba, time) = k3t*xi1ba+k6t*c2-(k5t+k4t)*xi2ba;
    ode(xi2ca, time) = k3*xi1ca+k6*c2-(k5+k4)*xi2ca;
    xica = 2.0{dimensionless}*wca*jca;
    za = V*2.0{dimensionless}*FonRT;
  enddef;

  def comp IK1 as
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var aki: mS_per_uF;
    var bki: mS_per_uF;
    var ek: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var gkix: mS_per_uF {init: 0.3};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var xik1: A_per_F {pub: out};
    var xkin: dimensionless;
    aki = 1.02{mS_per_uF}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V-ek-59.215{mV})));
    bki = (0.49124{mS_per_uF}*exp(0.08032{per_mV}*(V-ek+5.476{mV}))+1.0{mS_per_uF}*exp(0.06175{per_mV}*(V-ek-594.31{mV})))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V-ek+4.753{mV})));
    xik1 = gkix*sqrt(K_o/5.4{mM})*xkin*(V-ek);
    xkin = aki/(aki+bki);
  enddef;

  def comp IKr as
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var ek: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance_scaling_factor
    var gkr: mS_per_uF {init: 0.0125};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var gkr_calc: mS_per_uF;
    var rg: dimensionless;
    var taukr: ms;
    var time: ms {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var xikr: A_per_F {pub: out};
    var xkrinf: dimensionless;
    var xkrv1: mS_per_uF;
    var xkrv2: mS_per_uF;
    var xr: dimensionless {init: 7.07423933100000037e-03};
    gkr_calc = gkr*sqrt(K_o/5.4{mM});
    rg = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+33.0{mV})/22.4{mV}));
    taukr = 1.0{dimensionless}/(xkrv1+xkrv2);
    xikr = gkr_calc*xr*rg*(V-ek);
    xkrinf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+50.0{mV})/7.5{mV}));
    xkrv1 = sel
      case abs(V+7.0{mV}) > 0.001{mV}:
        0.00138{mS_per_uF}*1.0{per_mV}*(V+7.0{mV})/(1.0{dimensionless}-exp(-0.123{per_mV}*(V+7.0{mV})));
      otherwise:
        0.00138{mS_per_uF}/0.123{dimensionless};
    endsel;
    xkrv2 = sel
      case abs(V+10.0{mV}) > 0.001{mV}:
        0.00061{mS_per_uF}*1.0{per_mV}*(V+10.0{mV})/(exp(0.145{per_mV}*(V+10.0{mV}))-1.0{dimensionless});
      otherwise:
        0.00061{mS_per_uF}/0.145{dimensionless};
    endsel;
    ode(xr, time) = (xkrinf-xr)/taukr;
  enddef;

  def comp IKs as
    var Ca_i: uM {pub: in};
    var V: mV {pub: in};
    var eks: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var gks: mS_per_uF {init: 0.1386};
    var gksx: dimensionless;
    var tauxs1: ms;
    var tauxs2: ms;
    var time: ms {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var xiks: A_per_F {pub: out};
    var xs1: dimensionless {init: 4.82675871310000032e-02};
    var xs1ss: dimensionless;
    var xs2: dimensionless {init: 1.05468807033000003e-01};
    var xs2ss: dimensionless;
    gksx = 1.0{dimensionless}+0.8{dimensionless}/(1.0{dimensionless}+pow(0.5{uM}/Ca_i, 3.0{dimensionless}));
    tauxs1 = sel
      case abs(V+30.0{mV}) < 0.001{mV}/0.0687{dimensionless}:
        1.0{ms}/(7.19e-05{dimensionless}/0.148{dimensionless}+0.000131{dimensionless}/0.0687{dimensionless});
      otherwise:
        1.0{ms}/(7.19e-05{per_mV}*(V+30.0{mV})/(1.0{dimensionless}-exp(-0.148{per_mV}*(V+30.0{mV})))+0.000131{per_mV}*(V+30.0{mV})/(exp(0.0687{per_mV}*(V+30.0{mV}))-1.0{dimensionless}));
    endsel;
    tauxs2 = 4.0{dimensionless}*tauxs1;
    xiks = gks*gksx*xs1*xs2*(V-eks);
    ode(xs1, time) = (xs1ss-xs1)/tauxs1;
    xs1ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-1.5{mV})/16.7{mV}));
    ode(xs2, time) = (xs2ss-xs2)/tauxs2;
    xs2ss = xs1ss;
  enddef;

  def comp INa as
    var V: mV {pub: in};
    var ah: mS_per_uF;
    var aj: mS_per_uF;
    var am: mS_per_uF;
    var bh: mS_per_uF;
    var bj: mS_per_uF;
    var bm: mS_per_uF;
    var ena: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var gna: mS_per_uF {init: 12.0};
    var h_inf: dimensionless;
    var j_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_h: mV {init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: ms;
    var time: ms {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var xh: dimensionless {init: 9.90691306716000031e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var xina: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var xj: dimensionless {init: 9.93888937282999985e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var xm: dimensionless {init: 1.07545335699999996e-03};
    ah = sel
      case V < -40.0{mV}:
        0.135{mS_per_uF}*exp((80.0{mV}+V-shift_h)/(-6.8{mV}));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    aj = sel
      case V < -40.0{mV}:
        (-127140.0{mS_per_uF}*exp(0.2444{per_mV}*(V-shift_h))-3.474e-05{mS_per_uF}*exp(-0.04391{per_mV}*(V-shift_h)))*1.0{per_mV}*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    am = sel
      case abs(V+47.13{mV}) > 0.001{mV}:
        0.32{mS_per_uF}*1.0{per_mV}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
      otherwise:
        3.2{mS_per_uF};
    endsel;
    bh = sel
      case V < -40.0{mV}:
        3.56{mS_per_uF}*exp(0.079{per_mV}*(V-shift_h))+310000.0{mS_per_uF}*exp(0.35{per_mV}*(V-shift_h));
      otherwise:
        1.0{mS_per_uF}/(0.13{dimensionless}*(1.0{dimensionless}+exp((V+10.66{mV}-shift_h)/(-11.1{mV}))));
    endsel;
    bj = sel
      case V < -40.0{mV}:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*(V-shift_h))/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*(V-shift_h))/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV})));
    endsel;
    bm = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    h_inf = ah*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(ah+bh)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    j_inf = aj*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(aj+bj)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    tau_h = 1.0{dimensionless}/(ah+bh);
    tau_j = 1.0{dimensionless}/(aj+bj);
    ode(xh, time) = (h_inf-xh)/tau_h;
    xina = gna*xh*xj*xm*xm*xm*(V-ena);
    ode(xj, time) = (j_inf-xj)/tau_j;
    ode(xm, time) = am*(1.0{dimensionless}-xm)-bm*xm;
  enddef;

  def comp INaCa as
    var Ca_o: mM {pub: in};
    var Ca_submem: uM {pub: in};
    var FonRT: per_mV {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var V: mV {pub: in};
    var aloss: dimensionless;
    var csm: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var gNaCa: mol_per_m3_per_s {init: 0.84};
    var jNaCa: mol_per_m3_per_s {pub: out};
    var wca: g_m5_per_s3_per_A_per_mol_times_1e3 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var xiNaCa: A_per_F {pub: out};
    var xkdna: uM {init: 0.3};
    var xmcai: mM {init: 0.0036};
    var xmcao: mM {init: 1.3};
    var xmnai: mM {init: 12.3};
    var xmnao: mM {init: 87.5};
    var yz1: mol4_per_m12;
    var yz2: mol4_per_m12;
    var yz3: mol4_per_m12;
    var yz4: mol4_per_m12;
    var zw3: mol4_per_m12;
    var zw4: dimensionless;
    var zw8: mol4_per_m12;
    aloss = 1.0{dimensionless}/(1.0{dimensionless}+pow(xkdna/Ca_submem, 3.0{dimensionless}));
    jNaCa = gNaCa*aloss*zw3/(zw4*zw8);
    xiNaCa = wca*jNaCa;
    yz1 = xmcao*pow(Na_i, 3.0{dimensionless})+pow(xmnao, 3.0{dimensionless})*csm;
    yz2 = pow(xmnai, 3.0{dimensionless})*Ca_o*(1.0{dimensionless}+csm/xmcai);
    yz3 = xmcai*pow(Na_o, 3.0{dimensionless})*(1.0{dimensionless}+pow(Na_i/xmnai, 3.0{dimensionless}));
    yz4 = pow(Na_i, 3.0{dimensionless})*Ca_o+pow(Na_o, 3.0{dimensionless})*csm;
    zw3 = pow(Na_i, 3.0{dimensionless})*Ca_o*exp(V*0.35{dimensionless}*FonRT)-pow(Na_o, 3.0{dimensionless})*csm*exp(V*(0.35{dimensionless}-1.0{dimensionless})*FonRT);
    zw4 = 1.0{dimensionless}+0.2{dimensionless}*exp(V*(0.35{dimensionless}-1.0{dimensionless})*FonRT);
    zw8 = yz1+yz2+yz3+yz4;
  enddef;

  def comp INaK as
    var FonRT: per_mV {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var V: mV {pub: in};
    var fNaK: dimensionless;
    var gNaK: A_per_F {init: 1.5};
    var sigma: dimensionless;
    var xiNaK: A_per_F {pub: out};
    var xkmko: mM {init: 1.5};
    var xkmnai: mM {init: 12.0};
    fNaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FonRT)+0.0365{dimensionless}*sigma*exp(-V*FonRT));
    sigma = (exp(Na_o/67.3{mM})-1.0{dimensionless})/7.0{dimensionless};
    xiNaK = gNaK*fNaK*Na_i/(Na_i+xkmnai)*K_o/(K_o+xkmko);
  enddef;

  def comp Ileak_Iup_Ixfer as
    var Ca_NSR: uM {pub: in};
    var Ca_i: uM {pub: in};
    var cup: uM {init: 0.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var gleak: mS_per_uF {init: 2.069e-05};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var jleak: mol_per_m3_per_s {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var jup: mol_per_m3_per_s {pub: out};
    var kj: uM {init: 50.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var vup: mol_per_m3_per_s {init: 0.4};
    jleak = gleak*Ca_NSR*Ca_NSR/(Ca_NSR*Ca_NSR+kj*kj)*(Ca_NSR*16.667{dimensionless}-Ca_i);
    jup = vup*Ca_i*Ca_i/(Ca_i*Ca_i+cup*cup);
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def comp Irel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_JSR: uM {init: 9.75054636972659949e+01};
    var Ca_NSR: uM {pub: in};
    var Qr: mol_per_m3_per_s;
    var Qr0: mol_per_m3_per_s;
    var V: mV {pub: in};
    var av: mS_per_uF {init: 11.3};
    var ax: per_mV {init: 0.3576};
    var ay: per_mV {init: 0.05};
    var bv: mol_per_m3_per_s;
    var cstar: uM {init: 90.0};
    var dCa_JSR: mol_per_m3_per_s {pub: in};
    var gbarsr: dimensionless {init: 26841.8};
    var gdyad: mol_per_m_per_s_per_A_times_1e_minus_1 {init: 9000.0};
    var gryr: mS_per_uF {init: 2.58079};
    var po: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var release_factor: dimensionless {init: 1.0};
    var rxa: mA_per_cm2 {pub: in};
    var sparkV: dimensionless;
    var spark_rate: mS_per_uF;
    var taua: ms {init: 100.0};
    var taur: ms {init: 30.0};
    var time: ms {pub: in};
    var xicap: mol_per_m3_per_s;
    var xir: mol_per_m3_per_s {pub: out, init: 6.67925726399999989e-03};
    var xirp: mol_per_m3_per_s;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var xiryr: mol_per_m3_per_s {pub: out};
    ode(Ca_JSR, time) = (Ca_NSR-Ca_JSR)/taua;
    Qr = Ca_NSR*Qr0/cstar;
    Qr0 = sel
      case (Ca_JSR > 50.0{uM}) and (Ca_JSR < cstar):
        (Ca_JSR-50.0{uM})/1.0{ms};
      case Ca_JSR >= cstar:
        av*Ca_JSR+bv;
      otherwise:
        0.0{mol_per_m3_per_s};
    endsel;
    bv = (1.0{mS_per_uF}-av)*cstar-50.0{mol_per_m3_per_s};
    sparkV = exp(-ay*(V+30.0{mV}))/(1.0{dimensionless}+exp(-ay*(V+30.0{mV})));
    spark_rate = gryr/1.0{mA_per_cm2}*po*abs(rxa)*sparkV;
    xicap = po*gdyad*abs(rxa);
    ode(xir, time) = spark_rate*Qr-xir*(1.0{dimensionless}-taur*dCa_JSR/Ca_NSR)/taur;
    xirp = po*Qr*abs(rxa)*gbarsr/1.0{mA_per_cm2}*exp(-ax*(V+30.0{mV}))/(1.0{dimensionless}+exp(-ax*(V+30.0{mV})));
    xiryr = release_factor*(xirp+xicap);
  enddef;

  def comp Ito as
    var V: mV {pub: in};
    var ek: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var gtof: mS_per_uF {init: 0.11};
    var gtos: mS_per_uF {init: 0.04};
    var rs_inf: dimensionless;
    var rt1: dimensionless;
    var rt2: dimensionless;
    var rt3: dimensionless;
    var rt4: dimensionless;
    var rt5: dimensionless;
    var time: ms {pub: in};
    var txf: ms;
    var txs: ms;
    var tyf: ms;
    var tys: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var xito: A_per_F {pub: out};
    var xitof: A_per_F;
    var xitos: A_per_F;
    var xtof: dimensionless {init: 3.64359259399999998e-03};
    var xtof_inf: dimensionless;
    var xtos: dimensionless {init: 3.64776906000000012e-03};
    var xtos_inf: dimensionless;
    var ytof: dimensionless {init: 9.93331326441999951e-01};
    var ytof_inf: dimensionless;
    var ytos: dimensionless {init: 1.74403618112000003e-01};
    var ytos_inf: dimensionless;
    rs_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(rt2));
    rt1 = -(V+3.0{mV})/15.0{mV};
    rt2 = (V+33.5{mV})/10.0{mV};
    rt3 = (V+60.0{mV})/10.0{mV};
    rt4 = -V/30.0{mV}*V/30.0{mV};
    rt5 = (V+33.5{mV})/10.0{mV};
    txf = 3.5{ms}*exp(rt4)+1.5{ms};
    txs = 9.0{ms}/(1.0{dimensionless}+exp(-rt1))+0.5{ms};
    tyf = 20.0{ms}/(1.0{dimensionless}+exp(rt5))+20.0{ms};
    tys = 3000.0{ms}/(1.0{dimensionless}+exp(rt3))+30.0{ms};
    xito = xitos+xitof;
    xitof = gtof*xtof*ytof*(V-ek);
    xitos = gtos*xtos*(ytos+0.5{dimensionless}*rs_inf)*(V-ek);
    ode(xtof, time) = (xtof_inf-xtof)/txf;
    xtof_inf = xtos_inf;
    ode(xtos, time) = (xtos_inf-xtos)/txs;
    xtos_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(rt1));
    ode(ytof, time) = (ytof_inf-ytof)/tyf;
    ytof_inf = ytos_inf;
    ode(ytos, time) = (ytos_inf-ytos)/tys;
    ytos_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(rt2));
  enddef;

  def comp Na as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {pub: out, init: 1.14417123116139994e+01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1.0};
    var time: ms {pub: in};
    var wca: g_m5_per_s3_per_A_per_mol_times_1e3 {pub: in};
    var xiNaCa: A_per_F {pub: in};
    var xiNaK: A_per_F {pub: in};
    var xina: A_per_F {pub: in};
    ode(Na_i, time) = -conc_clamp*(xina+3.0{dimensionless}*xiNaK+3.0{dimensionless}*xiNaCa)/(wca*1000.0{dimensionless_times_1e_minus_3});
  enddef;

  def comp cell as
    var Itotal: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -8.71698161694060047e+01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: A_per_F;
    var pace: dimensionless {init: 0.0};
    var past: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {init: 400.0};
    var time: ms {pub: in};
    var wca: g_m5_per_s3_per_A_per_mol_times_1e3 {pub: out, init: 8.0};
    var xiNaCa: A_per_F {pub: in};
    var xiNaK: A_per_F {pub: in};
    var xica: A_per_F {pub: in};
    var xik1: A_per_F {pub: in};
    var xikr: A_per_F {pub: in};
    var xiks: A_per_F {pub: in};
    var xina: A_per_F {pub: in};
    var xito: A_per_F {pub: in};
    Itotal = -(xina+xik1+xikr+xiks+xito+xiNaCa+xica+xiNaK+i_Stim);
    ode(V, time) = Itotal;
    i_Stim = pace*stim_amplitude;
    past = floor(time/stim_period)*stim_period;
    stim_amplitude = -15.0{A_per_F};
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp reversal_potentials as
    var FonRT: per_mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {init: 140.0};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var ek: mV {pub: out};
    var eks: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var ena: mV {pub: out};
    var prNaK: dimensionless {init: 0.01833};
    ek = 1.0{dimensionless}/FonRT*ln(K_o/K_i);
    eks = 1.0{dimensionless}/FonRT*ln((K_o+prNaK*Na_o)/(K_i+prNaK*Na_i));
    ena = 1.0{dimensionless}/FonRT*ln(Na_o/Na_i);
  enddef;

  def comp transmembrane_currents as
  enddef;
  def map between Ca and Environment for
    vars time and time;
  enddef;
  def map between Ca and ICaL for
    vars Ca_dyad and Ca_dyad;
    vars csm and csm;
    vars jca and jca;
  enddef;
  def map between Ca and IKs for
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca and INaCa for
    vars Ca_submem and Ca_submem;
    vars csm and csm;
    vars jNaCa and jNaCa;
  enddef;
  def map between Ca and Ileak_Iup_Ixfer for
    vars Ca_NSR and Ca_NSR;
    vars Ca_i and Ca_i;
    vars jleak and jleak;
    vars jup and jup;
  enddef;
  def map between Ca and Irel for
    vars Ca_NSR and Ca_NSR;
    vars dCa_JSR and dCa_JSR;
    vars xir and xir;
    vars xiryr and xiryr;
  enddef;
  def map between Environment and ICaL for
    vars Ca_o and Ca_o;
    vars F and F;
    vars FonRT and FonRT;
    vars time and time;
  enddef;
  def map between Environment and IK1 for
    vars K_o and K_o;
  enddef;
  def map between Environment and IKr for
    vars K_o and K_o;
    vars time and time;
  enddef;
  def map between Environment and IKs for
    vars time and time;
  enddef;
  def map between Environment and INa for
    vars time and time;
  enddef;
  def map between Environment and INaCa for
    vars Ca_o and Ca_o;
    vars FonRT and FonRT;
    vars Na_o and Na_o;
  enddef;
  def map between Environment and INaK for
    vars FonRT and FonRT;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between Environment and Irel for
    vars time and time;
  enddef;
  def map between Environment and Ito for
    vars time and time;
  enddef;
  def map between Environment and Na for
    vars time and time;
  enddef;
  def map between Environment and cell for
    vars time and time;
  enddef;
  def map between Environment and reversal_potentials for
    vars FonRT and FonRT;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between ICaL and Irel for
    vars po and po;
    vars rxa and rxa;
  enddef;
  def map between ICaL and cell for
    vars V and V;
    vars wca and wca;
    vars xica and xica;
  enddef;
  def map between IK1 and cell for
    vars V and V;
    vars xik1 and xik1;
  enddef;
  def map between IK1 and reversal_potentials for
    vars ek and ek;
  enddef;
  def map between IKr and cell for
    vars V and V;
    vars xikr and xikr;
  enddef;
  def map between IKr and reversal_potentials for
    vars ek and ek;
  enddef;
  def map between IKs and cell for
    vars V and V;
    vars xiks and xiks;
  enddef;
  def map between IKs and reversal_potentials for
    vars eks and eks;
  enddef;
  def map between INa and Na for
    vars xina and xina;
  enddef;
  def map between INa and cell for
    vars V and V;
    vars xina and xina;
  enddef;
  def map between INa and reversal_potentials for
    vars ena and ena;
  enddef;
  def map between INaCa and Na for
    vars Na_i and Na_i;
    vars xiNaCa and xiNaCa;
  enddef;
  def map between INaCa and cell for
    vars V and V;
    vars wca and wca;
    vars xiNaCa and xiNaCa;
  enddef;
  def map between INaK and Na for
    vars Na_i and Na_i;
    vars xiNaK and xiNaK;
  enddef;
  def map between INaK and cell for
    vars V and V;
    vars xiNaK and xiNaK;
  enddef;
  def map between Irel and cell for
    vars V and V;
  enddef;
  def map between Ito and cell for
    vars V and V;
    vars xito and xito;
  enddef;
  def map between Ito and reversal_potentials for
    vars ek and ek;
  enddef;
  def map between Na and cell for
    vars wca and wca;
  enddef;
  def map between Na and reversal_potentials for
    vars Na_i and Na_i;
  enddef;
enddef;
