def model michailova_2005 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit cm_per_s as
    unit metre {mult: 0.01};
    unit second {expo: -1.0};
  enddef;
  def unit dimensionless_times_1e3 as
    unit dimensionless {mult: 1000};
  enddef;
  def unit dimensionless_times_1e_minus_3 as
    unit dimensionless {mult: 0.001};
  enddef;
  def unit m12_per_s_per_mol4 as
    unit metre {expo: 12.0};
    unit second {expo: -1.0};
    unit mole {expo: -4.0};
  enddef;
  def unit m3_per_s_per_mol as
    unit metre {expo: 3.0};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m9_per_s_per_mol3 as
    unit metre {expo: 9.0};
    unit second {expo: -1.0};
    unit mole {expo: -3.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol_per_m3_per_s as
    unit metre {expo: -3.0};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit s2_A_per_g_per_m2 as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit s_A_per_m3 as
    unit metre {expo: -3.0};
    unit second;
    unit ampere;
  enddef;
  def unit s_A_per_m3_times_1e3 as
    unit metre {expo: -3.0, mult: 1000};
    unit second;
    unit ampere;
  enddef;
  def unit uF_per_cm2 as
    unit gram {expo: -1.0, mult: 1e-05};
    unit metre {expo: -4.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit uL as
    unit metre {expo: 3.0, mult: 1e-09};
  enddef;

  def comp ATP_sensitive_potassium_current as
    var ATP_i: mM {pub: in};
    var E_K: mV {pub: in};
    var G_K_ATP: mS_per_uF {init: 0.05};
    var K_o: mM {pub: in};
    var K_o_normal: mM {init: 4.5};
    var MgADP_i: mM {pub: in};
    var V: mV {pub: in};
    var c_MgADP: dimensionless;
    var f_ATP: dimensionless;
    var f_K_ATP: dimensionless;
    var f_MgADP: dimensionless;
    var f_MgADP_: dimensionless;
    var g_K_ATP: mS_per_uF;
    var gd: dimensionless {init: 0.89};
    var go: dimensionless {init: 0.08};
    var i_K_ATP: A_per_F {pub: out};
    var k_ATP: mM {init: 0.6};
    var k_MgADP: mM {init: 0.4};
    c_MgADP = 1.0{dimensionless}-f_MgADP_;
    f_ATP = pow(1.0{dimensionless}-ATP_i/(ATP_i+k_ATP), 4.0{dimensionless});
    f_K_ATP = go*f_ATP*(1.0{dimensionless}-f_MgADP)+gd*f_ATP*f_MgADP;
    f_MgADP = 1.0{dimensionless}-pow(c_MgADP, 4.0{dimensionless});
    f_MgADP_ = sqr(MgADP_i/(MgADP_i+k_MgADP));
    g_K_ATP = G_K_ATP*f_K_ATP*pow(K_o/K_o_normal, 0.24{dimensionless});
    i_K_ATP = g_K_ATP*(V-E_K);
  enddef;

  def comp Ca_and_Mg_buffering_by_ATP as
    var ADP_i: mM {pub: out};
    var ADP_ss: mM {pub: out};
    var ADP_tot: mM {init: 0.005};
    var ATP_i: mM {pub: out};
    var ATP_ss: mM {pub: out};
    var ATP_tot: mM {init: 7.0};
    var CaADP_i: mM {init: 1.1e-07, pub: out};
    var CaADP_ss: mM {init: 1.3e-07, pub: out};
    var CaATP_i: mM {init: 0.000237, pub: out};
    var CaATP_ss: mM {init: 0.00025, pub: out};
    var Ca_i: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var Jxfer_CaADP: mol_per_m3_per_s;
    var Jxfer_CaATP: mol_per_m3_per_s;
    var Jxfer_Mg: mol_per_m3_per_s;
    var Jxfer_MgADP: mol_per_m3_per_s;
    var Jxfer_MgATP: mol_per_m3_per_s;
    var MgADP_i: mM {init: 0.00298, pub: out};
    var MgADP_ss: mM {init: 0.00298};
    var MgATP_i: mM {init: 6.4395, pub: out};
    var MgATP_i0: mM {init: 2.888, pub: out};
    var MgATP_ss: mM {init: 6.4395, pub: out};
    var Mg_i: mM {init: 1.0};
    var Mg_ss: mM {init: 1.0};
    var k_minus_CaADP: hertz {init: 193500.0, pub: out};
    var k_minus_CaATP: hertz {init: 45000.0, pub: out};
    var k_minus_MgADP: hertz {init: 84500.0};
    var k_minus_MgATP: hertz {init: 10875.0};
    var k_plus_CaADP: m3_per_s_per_mol {init: 125000.0, pub: out};
    var k_plus_CaATP: m3_per_s_per_mol {init: 225000.0, pub: out};
    var k_plus_MgADP: m3_per_s_per_mol {init: 125000.0};
    var k_plus_MgATP: m3_per_s_per_mol {init: 125000.0};
    var model_parameters_V_myo: uL {pub: in};
    var model_parameters_V_ss: uL {pub: in};
    var tau_xfer_CaADP: second {init: 0.0534};
    var tau_xfer_CaATP: second {init: 0.0534};
    var tau_xfer_Mg: second {init: 0.0267};
    var tau_xfer_MgADP: second {init: 0.0534};
    var tau_xfer_MgATP: second {init: 0.0534};
    var time: second {pub: in};
    ADP_i = ADP_tot-(CaADP_i+MgADP_i);
    ADP_ss = ADP_tot-(CaADP_ss+MgADP_ss);
    ATP_i = ATP_tot-(CaATP_i+MgATP_i);
    ATP_ss = ATP_tot-(CaATP_ss+MgATP_ss);
    ode(CaADP_i, time) = Jxfer_CaADP+k_plus_CaADP*Ca_i*ADP_i-k_minus_CaADP*CaADP_i;
    ode(CaADP_ss, time) = k_plus_CaADP*Ca_ss*ADP_ss-(Jxfer_CaADP*model_parameters_V_myo/model_parameters_V_ss+k_minus_CaADP*CaADP_ss);
    ode(CaATP_i, time) = Jxfer_CaATP+k_plus_CaATP*Ca_i*ATP_i-k_minus_CaATP*CaATP_i;
    ode(CaATP_ss, time) = k_plus_CaATP*Ca_ss*ATP_ss-(Jxfer_CaATP*model_parameters_V_myo/model_parameters_V_ss+k_minus_CaATP*CaATP_ss);
    Jxfer_CaADP = (CaADP_ss-CaADP_i)/tau_xfer_CaADP;
    Jxfer_CaATP = (CaATP_ss-CaATP_i)/tau_xfer_CaATP;
    Jxfer_Mg = (Mg_ss-Mg_i)/tau_xfer_Mg;
    Jxfer_MgADP = (MgADP_ss-MgADP_i)/tau_xfer_MgADP;
    Jxfer_MgATP = (MgATP_ss-MgATP_i)/tau_xfer_MgATP;
    ode(MgADP_i, time) = Jxfer_MgADP+k_plus_MgADP*Mg_i*ADP_i-k_minus_MgADP*MgADP_i;
    ode(MgADP_ss, time) = k_plus_MgADP*Mg_ss*ADP_ss-(Jxfer_MgADP*model_parameters_V_myo/model_parameters_V_ss+k_minus_MgADP*MgADP_ss);
    ode(MgATP_i, time) = Jxfer_MgATP+k_plus_MgATP*Mg_i*ATP_i-k_minus_MgATP*MgATP_i;
    ode(MgATP_ss, time) = k_plus_MgATP*Mg_ss*ATP_ss-(Jxfer_MgATP*model_parameters_V_myo/model_parameters_V_ss+k_minus_MgATP*MgATP_ss);
    ode(Mg_i, time) = Jxfer_Mg+k_minus_MgATP*MgATP_i+k_minus_MgADP*MgADP_i-(k_plus_MgATP*Mg_i*ATP_i+k_plus_MgADP*Mg_i*ADP_i);
    ode(Mg_ss, time) = k_minus_MgATP*MgATP_ss+k_minus_MgADP*MgADP_ss-(k_plus_MgATP*Mg_ss*ATP_ss+k_plus_MgADP*Mg_ss*ADP_ss+Jxfer_Mg*model_parameters_V_myo/model_parameters_V_ss);
  enddef;

  def comp L_type_Ca_current as
    var C_sc: uF_per_cm2 {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var F: C_per_mmol {pub: in};
    var MgATP_ss: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var Open_Prob: dimensionless;
    var P_Ca: cm_per_s {init: 0.0003594};
    var P_rom: dimensionless;
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var a: dimensionless {init: 2.0};
    var alpha: hertz;
    var alpha_prime: hertz;
    var b: dimensionless {init: 2.0};
    var beta: hertz;
    var beta_prime: hertz;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: s_A_per_m3_times_1e3;
    var f: hertz {init: 300.0};
    var f_Ca: dimensionless;
    var g: hertz {init: 2000.0};
    var gamma: hertz;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca: A_per_F {pub: out};
    var i_Ca_K: A_per_F {pub: out};
    var k_MgATP_ss: mM {init: 1.4};
    var omega: hertz {init: 10.0};
    var p_prime_k: cm_per_s {init: 6.658e-07};
    var time: second {pub: in};
    var v: dimensionless {init: 0.1};
    var v_gamma: hertz;
    var v_omega: hertz;
    var w: dimensionless {init: 0.1};
    var x: dimensionless;
    var y: dimensionless {pub: in};
    var z: dimensionless {init: 0.1};
    Open_Prob = P_rom;
    P_rom = pow(v, 4.0{dimensionless})*y*z*f/(f+g);
    alpha = 400.0{hertz}*exp((V+2.0{mV})/10.0{mV});
    alpha_prime = alpha*a;
    beta = 50.0{hertz}*exp(-(V+2.0{mV})/13.0{mV});
    beta_prime = beta/b;
    driving_term_ghk = 4.0{dimensionless}*V*sqr(F)/(R*T)*(0.001{mM}*exp(F*V/(R*T))-0.34{dimensionless}*Ca_o)/(exp(F*V/(R*T))-1.0{dimensionless});
    f_Ca = 1.0{dimensionless}/(1.0{dimensionless}+pow(k_MgATP_ss/MgATP_ss, 2.6{dimensionless}));
    gamma = 103.75{hertz}*Ca_ss/1.0{mM};
    i_Ca = P_Ca/(1.0{dimensionless_times_1e3}*C_sc)*f_Ca*driving_term_ghk*Open_Prob;
    i_Ca_K = 1.0{s_A_per_m3}*f_Ca*p_prime_k/C_sc*P_rom;
    ode(v, time) = alpha*(1.0{dimensionless}-v)-beta*v;
    v_gamma = gamma*(pow(a, 0.0{dimensionless})*pow(v, 0.0{dimensionless})*pow(1.0{dimensionless}-v, 4.0{dimensionless}-0.0{dimensionless})+pow(a, 1.0{dimensionless})*pow(v, 1.0{dimensionless})*pow(1.0{dimensionless}-v, 4.0{dimensionless}-1.0{dimensionless})+sqr(a)*sqr(v)*pow(1.0{dimensionless}-v, 4.0{dimensionless}-2.0{dimensionless})+pow(a, 3.0{dimensionless})*pow(v, 3.0{dimensionless})*pow(1.0{dimensionless}-v, 4.0{dimensionless}-3.0{dimensionless})+pow(a, 4.0{dimensionless})*pow(v, 4.0{dimensionless})*pow(1.0{dimensionless}-v, 4.0{dimensionless}-4.0{dimensionless})+(-pow(a, 4.0{dimensionless})*pow(v, 4.0{dimensionless})*x));
    v_omega = omega*(pow(b, -0.0{dimensionless})*pow(w, 0.0{dimensionless})*pow(1.0{dimensionless}-w, 4.0{dimensionless}-0.0{dimensionless})+pow(b, -1.0{dimensionless})*pow(w, 1.0{dimensionless})*pow(1.0{dimensionless}-w, 4.0{dimensionless}-1.0{dimensionless})+pow(b, -2.0{dimensionless})*sqr(w)*pow(1.0{dimensionless}-w, 4.0{dimensionless}-2.0{dimensionless})+pow(b, -3.0{dimensionless})*pow(w, 3.0{dimensionless})*pow(1.0{dimensionless}-w, 4.0{dimensionless}-3.0{dimensionless})+pow(b, -4.0{dimensionless})*pow(w, 4.0{dimensionless})*pow(1.0{dimensionless}-w, 4.0{dimensionless}-4.0{dimensionless}));
    ode(w, time) = alpha_prime*(1.0{dimensionless}-w)-beta_prime*w;
    x = f/(f+g);
    ode(z, time) = v_omega*(1.0{dimensionless}-z)-v_gamma*z;
  enddef;

  def comp L_type_Ca_current_y_gate as
    var V: mV {pub: in};
    var tau_y: second;
    var time: second {pub: in};
    var y: dimensionless {init: 0.798, pub: out};
    var y_infinity: dimensionless;
    tau_y = (20.0{second}+600.0{second}/(1.0{dimensionless}+exp((V+20.0{mV})/9.5{mV})))/1000.0{dimensionless};
    ode(y, time) = (y_infinity-y)/tau_y;
    y_infinity = 0.8{dimensionless}/(1.0{dimensionless}+exp((V+12.5{mV})/5.0{mV}))+0.2{dimensionless};
  enddef;

  def comp Na_Ca_exchanger as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var F: C_per_mmol {pub: in};
    var K_NaCa: A_per_F {init: 0.3};
    var K_mCa: mM {init: 1.38};
    var K_mNa: mM {init: 87.5};
    var K_sat: dimensionless {init: 0.2};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var eta: dimensionless {init: 0.35};
    var i_NaCa: A_per_F {pub: out};
    i_NaCa = K_NaCa*5000.0{dimensionless}/((pow(K_mNa, 3.0{dimensionless})+pow(Na_o, 3.0{dimensionless}))*(K_mCa+Ca_o)*(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V*F/(R*T))))*(exp(eta*V*F/(R*T))*pow(Na_i, 3.0{dimensionless})*Ca_o-exp((eta-1.0{dimensionless})*V*F/(R*T))*pow(Na_o, 3.0{dimensionless})*Ca_i);
  enddef;

  def comp RyR_channel as
    var Ca_JSR: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var J_rel: mol_per_m3_per_s {pub: out};
    var P_C1: dimensionless {init: 0.47};
    var P_C2: dimensionless {init: 0.53};
    var P_O1: dimensionless {init: 0.0};
    var P_O2: dimensionless {init: 0.0};
    var k_a_minus: hertz {init: 576.0};
    var k_a_plus: m12_per_s_per_mol4 {init: 1.21500000000000000e+13};
    var k_b_minus: hertz {init: 1930.0};
    var k_b_plus: m9_per_s_per_mol3 {init: 4.05000000000000000e+09};
    var k_c_minus: hertz {init: 0.8};
    var k_c_plus: hertz {init: 100.0};
    var m: dimensionless {init: 3.0};
    var n: dimensionless {init: 4.0};
    var time: second {pub: in};
    var v1: hertz {init: 1800.0};
    J_rel = v1*(P_O1+P_O2)*(Ca_JSR-Ca_ss);
    ode(P_C1, time) = -k_a_plus*pow(Ca_ss, n)*P_C1+k_a_minus*P_O1;
    ode(P_C2, time) = k_c_plus*P_O1-k_c_minus*P_C2;
    ode(P_O1, time) = k_a_plus*pow(Ca_ss, n)*P_C1-(k_a_minus*P_O1+k_b_plus*pow(Ca_ss, m)*P_O1+k_c_plus*P_O1)+k_b_minus*P_O2+k_c_minus*P_C2;
    ode(P_O2, time) = k_b_plus*pow(Ca_ss, m)*P_O1-k_b_minus*P_O2;
  enddef;

  def comp SERCA2a_pump as
    var Ca_NSR: mM {pub: in};
    var Ca_i: mM {pub: in};
    var J_up: mol_per_m3_per_s {pub: out};
    var J_up_winslow: mol_per_m3_per_s;
    var K_SR: dimensionless {init: 1.0};
    var K_fb: mM {init: 0.000168};
    var K_rb: mM {init: 3.29};
    var MgATP_i: mM {pub: in};
    var MgATP_i0: mM {pub: in};
    var N_fb: dimensionless {init: 1.2};
    var N_rb: dimensionless {init: 1.0};
    var Vmaxf: mol_per_m3_per_s {init: 0.0813};
    var Vmaxr: mol_per_m3_per_s {init: 0.318};
    var fb: dimensionless;
    var rb: dimensionless;
    J_up = MgATP_i/MgATP_i0*J_up_winslow;
    J_up_winslow = K_SR*(Vmaxf*fb-Vmaxr*rb)/(1.0{dimensionless}+fb+rb);
    fb = pow(Ca_i/K_fb, N_fb);
    rb = pow(Ca_NSR/K_rb, N_rb);
  enddef;

  def comp calcium_background_current as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var E_Ca: mV;
    var F: C_per_mmol {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_Cab: mS_per_uF {init: 0.0003842};
    var i_Ca_b: A_per_F {pub: out};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_o/Ca_i);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp environment as
    var HTRPNCa: mM {pub: in};
    var LTRPNCa: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp extracellular_ion_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {init: 2.0, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {init: 4.0, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {init: 138.0, pub: out};
  enddef;

  def comp fast_sodium_current as
    var E_Na: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var fast_sodium_current_m_gate_m: dimensionless {pub: in};
    var g_Na: mS_per_uF {init: 12.8};
    var h: dimensionless {pub: in};
    var i_Na: A_per_F {pub: out};
    var j: dimensionless {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    i_Na = g_Na*pow(fast_sodium_current_m_gate_m, 3.0{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_h_gate as
    var V: mV {pub: in};
    var alpha_h: hertz;
    var beta_h: hertz;
    var h: dimensionless {init: 0.988354, pub: out};
    var time: second {pub: in};
    alpha_h = sel
      case V < -40.0{mV}:
        135.0{hertz}*exp((80.0{mV}+V)/(-6.8{mV}));
      otherwise:
        0.0{hertz};
    endsel;
    beta_h = sel
      case V < -40.0{mV}:
        3560.0{hertz}*exp(0.079{per_mV}*V)+310000.0{hertz}*exp(0.35{per_mV}*V);
      otherwise:
        1000.0{dimensionless}/(0.13{second}*(1.0{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
    endsel;
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var V: mV {pub: in};
    var alpha_j: hertz;
    var beta_j: hertz;
    var j: dimensionless {init: 0.99254, pub: out};
    var time: second {pub: in};
    alpha_j = sel
      case V < -40.0{mV}:
        1000.0{dimensionless}*(-(127140.0{s2_A_per_g_per_m2}*exp(0.2444{per_mV}*V)+3.474e-05{s2_A_per_g_per_m2}*exp(-0.04391{per_mV}*V)))*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
      otherwise:
        0.0{hertz};
    endsel;
    beta_j = sel
      case V < -40.0{mV}:
        121.2{hertz}*exp(-0.01052{per_mV}*V)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        300.0{hertz}*exp(-2.535e-07{per_mV}*V)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV})));
    endsel;
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  def comp fast_sodium_current_m_gate as
    var E0_m: mV;
    var V: mV {pub: in};
    var alpha_m: hertz;
    var beta_m: hertz;
    var m: dimensionless {init: 0.0328302, pub: out};
    var time: second {pub: in};
    E0_m = V+47.13{mV};
    alpha_m = sel
      case abs(E0_m) < 1e-05{mV}:
        320.0{hertz}/(0.1{dimensionless}-0.005{per_mV}*E0_m);
      otherwise:
        320.0{s2_A_per_g_per_m2}*E0_m/(1.0{dimensionless}-exp(-0.1{per_mV}*E0_m));
    endsel;
    beta_m = 80.0{hertz}*exp(-V/11.0{mV});
    ode(m, time) = sel
      case V >= -90.0{mV}:
        alpha_m*(1.0{dimensionless}-m)-beta_m*m;
      otherwise:
        0.0{hertz};
    endsel;
  enddef;

  def comp intracellular_Ca_fluxes as
    var Ca_JSR: mM {pub: in};
    var Ca_NSR: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var HTRPNCa: mM {init: 0.98, pub: out};
    var HTRPN_tot: dimensionless {init: 0.14};
    var J_HTRPNCa: mol_per_m3_per_s;
    var J_LTRPNCa: mol_per_m3_per_s;
    var J_tr: mol_per_m3_per_s {pub: out};
    var J_trpn: mol_per_m3_per_s {pub: out};
    var J_xfer: mol_per_m3_per_s {pub: out};
    var LTRPNCa: mM {init: 0.078, pub: out};
    var LTRPN_tot: dimensionless {init: 0.07};
    var k_htrpn_minus: hertz {init: 0.066};
    var k_htrpn_plus: m3_per_s_per_mol {init: 20000.0};
    var k_ltrpn_minus: hertz {init: 40.0};
    var k_ltrpn_plus: m3_per_s_per_mol {init: 40000.0};
    var tau_tr: second {init: 0.0005747};
    var tau_xfer: second {init: 0.0267};
    var time: second {pub: in};
    ode(HTRPNCa, time) = k_htrpn_plus*Ca_i*(1.0{mM}-HTRPNCa)-k_htrpn_minus*HTRPNCa;
    J_HTRPNCa = ode(HTRPNCa, time);
    J_LTRPNCa = ode(LTRPNCa, time);
    J_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    J_trpn = HTRPN_tot*J_HTRPNCa+LTRPN_tot*J_LTRPNCa;
    J_xfer = (Ca_ss-Ca_i)/tau_xfer;
    ode(LTRPNCa, time) = k_ltrpn_plus*Ca_i*(1.0{mM}-LTRPNCa)-k_ltrpn_minus*LTRPNCa;
  enddef;

  def comp intracellular_ion_concentrations as
    var ADP_i: mM {pub: in};
    var ADP_ss: mM {pub: in};
    var ATP_i: mM {pub: in};
    var ATP_ss: mM {pub: in};
    var A_cap: cm2 {init: 0.0001534};
    var CMDN_tot: mM {init: 0.05};
    var CSQN_tot: mM {init: 15.0};
    var C_sc: uF_per_cm2 {pub: in};
    var CaADP_i: mM {pub: in};
    var CaADP_ss: mM {pub: in};
    var CaATP_i: mM {pub: in};
    var CaATP_ss: mM {pub: in};
    var Ca_JSR: mM {init: 0.2616, pub: out};
    var Ca_NSR: mM {init: 0.262, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {init: 8.464e-05, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_ss: mM {init: 0.0001315, pub: out};
    var EGTA_tot: mM {init: 0.0};
    var F: C_per_mmol {pub: in};
    var J_rel: mol_per_m3_per_s {pub: in};
    var J_tr: mol_per_m3_per_s {pub: in};
    var J_trpn: mol_per_m3_per_s {pub: in};
    var J_up: mol_per_m3_per_s {pub: in};
    var J_xfer: mol_per_m3_per_s {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {init: 159.48, pub: out};
    var K_mCMDN: mM {init: 0.00238};
    var K_mCSQN: mM {init: 0.8};
    var K_mEGTA: mM {init: 0.00015};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {init: 10.0, pub: out};
    var V_JSR: uL {init: 1.6e-07};
    var V_NSR: uL {init: 2.1e-06};
    var V_myo: uL {init: 2.584e-05};
    var V_ss: uL {init: 1.2e-09};
    var beta_JSR: dimensionless;
    var beta_SS: dimensionless;
    var beta_i: dimensionless;
    var i_Ca: A_per_F {pub: in};
    var i_Ca_K: A_per_F {pub: in};
    var i_Ca_b: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_K_ATP: A_per_F {pub: in};
    var i_Kp: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Na_b: A_per_F {pub: in};
    var i_p_Ca: A_per_F {pub: in};
    var i_to1: A_per_F {pub: in};
    var k_minus_CaADP: hertz {pub: in};
    var k_minus_CaATP: hertz {pub: in};
    var k_plus_CaADP: m3_per_s_per_mol {pub: in};
    var k_plus_CaATP: m3_per_s_per_mol {pub: in};
    var time: second {pub: in};
    ode(Ca_JSR, time) = beta_JSR*(J_tr-J_rel);
    ode(Ca_NSR, time) = J_up*V_myo/V_NSR-J_tr*V_JSR/V_NSR;
    ode(Ca_i, time) = beta_i*(J_xfer-(J_up+J_trpn)+(-(i_p_Ca+i_Ca_b-2.0{dimensionless}*i_NaCa)*A_cap*C_sc/(2.0{dimensionless}*V_myo*F))+k_minus_CaATP*CaATP_i+k_minus_CaADP*CaADP_i-(k_plus_CaATP*Ca_i*ATP_i+k_plus_CaADP*Ca_i*ADP_i));
    ode(Ca_ss, time) = beta_SS*(J_rel*V_JSR/V_ss+k_minus_CaATP*CaATP_ss+k_minus_CaADP*CaADP_ss-(J_xfer*V_myo/V_ss+i_Ca*A_cap*1.0{uF_per_cm2}/(2.0{dimensionless}*V_ss*F)+k_plus_CaATP*Ca_ss*ATP_ss+k_plus_CaADP*Ca_ss*ADP_ss));
    ode(K_i, time) = -0.0{dimensionless}*(i_Ca_K+i_Kr+i_Ks+i_K1+i_Kp+i_to1+i_K_ATP+i_NaK*(-2.0{dimensionless}))*A_cap*1.0{uF_per_cm2}/(V_myo*F);
    ode(Na_i, time) = -0.0{dimensionless}*(i_Na+i_Na_b+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*A_cap*1.0{uF_per_cm2}/(V_myo*F);
    beta_JSR = 1.0{dimensionless}/(1.0{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
    beta_SS = 1.0{dimensionless}/(1.0{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_ss)+EGTA_tot*K_mEGTA/sqr(K_mEGTA+Ca_ss));
    beta_i = 1.0{dimensionless}/(1.0{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_i)+EGTA_tot*K_mEGTA/sqr(K_mEGTA+Ca_i));
  enddef;

  def comp membrane as
    var C_sc: uF_per_cm2 {init: 0.001, pub: out};
    var F: C_per_mmol {init: 9.64853415000000041e+01, pub: out};
    var R: J_per_mol_per_K {init: 8.314472, pub: out};
    var T: kelvin {init: 310.0, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {init: -96.1638, pub: out};
    var duration: second {init: 0.0005};
    var i_Ca: A_per_F {pub: in};
    var i_Ca_K: A_per_F {pub: in};
    var i_Ca_b: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_K_ATP: A_per_F {pub: in};
    var i_Kp: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Na_b: A_per_F {pub: in};
    var i_p_Ca: A_per_F {pub: in};
    var i_to1: A_per_F {pub: in};
    var offset: second {init: 0.1};
    var pace: dimensionless;
    var period: second {init: 1.0};
    var time: second {pub: in};
    ode(V, time) = -1.0{uF_per_cm2}*1.0{dimensionless_times_1e_minus_3}*(i_Na+i_Ca+i_Ca_K+i_Kr+i_Ks+i_to1+i_K1+i_Kp+i_NaCa+i_NaK+i_p_Ca+i_Na_b+i_Ca_b+i_K_ATP)/C_sc;
    pace = sel
      case time-offset-period*floor((time-offset)/period) < duration:
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
  enddef;

  def comp model_parameters as
    var V_myo: uL {init: 2.584e-05, pub: out};
    var V_ss: uL {init: 1.2e-09, pub: out};
  enddef;

  def comp plateau_potassium_current as
    var E_K: mV {pub: in};
    var Kp_V: dimensionless {pub: in};
    var V: mV {pub: in};
    var g_Kp: mS_per_uF {init: 0.002216};
    var i_Kp: A_per_F {pub: out};
    i_Kp = g_Kp*Kp_V*(V-E_K);
  enddef;

  def comp plateau_potassium_current_Kp_gate as
    var Kp_V: dimensionless {pub: out};
    var V: mV {pub: in};
    Kp_V = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current as
    var E_K: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var R_V: dimensionless;
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var X_kr: dimensionless {pub: in};
    var f_K_o: dimensionless;
    var g_Kr: mS_per_uF {init: 0.0034};
    var i_Kr: A_per_F {pub: out};
    E_K = R*T/F*ln(K_o/K_i);
    R_V = 1.0{dimensionless}/(1.0{dimensionless}+1.4945{dimensionless}*exp(0.0446{per_mV}*V));
    f_K_o = sqrt(K_o/4.0{mM});
    i_Kr = g_Kr*f_K_o*R_V*X_kr*(V-E_K);
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate as
    var K12: dimensionless;
    var K21: dimensionless;
    var V: mV {pub: in};
    var X_kr: dimensionless {init: 0.51, pub: out};
    var X_kr_inf: dimensionless;
    var tau_X_kr: second;
    var tau_factor: dimensionless {init: 1.0};
    var time: second {pub: in};
    K12 = exp(-5.495{dimensionless}+0.1691{per_mV}*V);
    K21 = exp(-7.677{dimensionless}-0.0128{per_mV}*V);
    ode(X_kr, time) = (X_kr_inf-X_kr)/tau_X_kr;
    X_kr_inf = K12/(K12+K21);
    tau_X_kr = 0.001{second}/(K12+K21)+tau_factor*0.027{second};
  enddef;

  def comp sarcolemmal_calcium_pump as
    var Ca_i: mM {pub: in};
    var I_pCa: A_per_F {init: 0.05};
    var K_mpCa: mM {init: 5e-05};
    var MgATP_i: mM {pub: in};
    var MgATP_i0: mM {pub: in};
    var i_p_Ca: A_per_F {pub: out};
    var i_p_Ca_winslow: A_per_F;
    i_p_Ca = MgATP_i/MgATP_i0*i_p_Ca_winslow;
    i_p_Ca_winslow = I_pCa*Ca_i/(K_mpCa+Ca_i);
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current as
    var E_Ks: mV;
    var F: C_per_mmol {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var X_ks: dimensionless {pub: in};
    var g_Ks: mS_per_uF {init: 0.0027134};
    var i_Ks: A_per_F {pub: out};
    E_Ks = R*T/F*ln((K_o+0.01833{dimensionless}*Na_o)/(K_i+0.01833{dimensionless}*Na_i));
    i_Ks = g_Ks*sqr(X_ks)*(V-E_Ks);
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate as
    var V: mV {pub: in};
    var X_ks: dimensionless {init: 0.264, pub: out};
    var X_ks_infinity: dimensionless;
    var tau_X_ks: second;
    var time: second {pub: in};
    ode(X_ks, time) = (X_ks_infinity-X_ks)/tau_X_ks;
    X_ks_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-24.7{mV})/13.6{mV}));
    tau_X_ks = 0.001{second}/(7.19e-05{per_mV}*(V-10.0{mV})/(1.0{dimensionless}-exp(-0.148{per_mV}*(V-10.0{mV})))+0.000131{per_mV}*(V-10.0{mV})/(exp(0.0687{per_mV}*(V-10.0{mV}))-1.0{dimensionless}));
  enddef;

  def comp sodium_background_current as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    var g_Nab: mS_per_uF {init: 0.0031};
    var i_Na_b: A_per_F {pub: out};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  def comp sodium_potassium_pump as
    var F: C_per_mmol {pub: in};
    var I_NaK: A_per_F {init: 0.693};
    var K_mK_o: mM {init: 1.5};
    var K_mNa_i: mM {init: 10.0};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var f_NaK: dimensionless;
    var i_NaK: A_per_F {pub: out};
    var sigma: dimensionless;
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK = I_NaK*f_NaK/(1.0{dimensionless}+pow(K_mNa_i/Na_i, 1.5{dimensionless}))*K_o/(K_o+K_mK_o);
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Na_o/67.3{mM})-1.0{dimensionless});
  enddef;

  def comp time_independent_potassium_current as
    var E_K: mV {pub: in};
    var K1_infinity_V: dimensionless {pub: in};
    var K_mK1: mM {init: 13.0};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var g_K1: mS_per_uF {init: 2.8};
    var i_K1: A_per_F {pub: out};
    i_K1 = g_K1*K1_infinity_V*K_o/(K_o+K_mK1)*(V-E_K);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var E_K: mV {pub: in};
    var F: C_per_mmol {pub: in};
    var K1_infinity_V: dimensionless {pub: out};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    K1_infinity_V = 1.0{dimensionless}/(2.0{dimensionless}+exp(1.5{dimensionless}*F/(R*T)*(V-E_K)));
  enddef;

  def comp transient_outward_potassium_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var X_to1: dimensionless {pub: in};
    var Y_to1: dimensionless {pub: in};
    var g_to1: mS_per_uF {init: 0.23815};
    var i_to1: A_per_F {pub: out};
    i_to1 = g_to1*X_to1*Y_to1*(V-E_K);
  enddef;

  def comp transient_outward_potassium_current_X_to1_gate as
    var V: mV {pub: in};
    var X_to1: dimensionless {init: 2.63, pub: out};
    var alpha_X_to1: hertz;
    var beta_X_to1: hertz;
    var time: second {pub: in};
    ode(X_to1, time) = alpha_X_to1*(1.0{dimensionless}-X_to1)-beta_X_to1*X_to1;
    alpha_X_to1 = 45.16{hertz}*exp(0.03577{per_mV}*V);
    beta_X_to1 = 98.9{hertz}*exp(-0.06237{per_mV}*V);
  enddef;

  def comp transient_outward_potassium_current_Y_to1_gate as
    var V: mV {pub: in};
    var Y_to1: dimensionless {init: 0.99, pub: out};
    var alpha_Y_to1: hertz;
    var beta_Y_to1: hertz;
    var time: second {pub: in};
    ode(Y_to1, time) = alpha_Y_to1*(1.0{dimensionless}-Y_to1)-beta_Y_to1*Y_to1;
    alpha_Y_to1 = 5.415{hertz}*exp(-(V+33.5{mV})/5.0{mV})/(1.0{dimensionless}+0.051335{dimensionless}*exp(-(V+33.5{mV})/5.0{mV}));
    beta_Y_to1 = 5.415{hertz}*exp((V+33.5{mV})/5.0{mV})/(1.0{dimensionless}+0.051335{dimensionless}*exp((V+33.5{mV})/5.0{mV}));
  enddef;
  def map between ATP_sensitive_potassium_current and Ca_and_Mg_buffering_by_ATP for
    vars ATP_i and ATP_i;
    vars MgADP_i and MgADP_i;
  enddef;
  def map between ATP_sensitive_potassium_current and extracellular_ion_concentrations for
    vars K_o and K_o;
  enddef;
  def map between ATP_sensitive_potassium_current and intracellular_ion_concentrations for
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between ATP_sensitive_potassium_current and membrane for
    vars V and V;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between ATP_sensitive_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and L_type_Ca_current for
    vars MgATP_ss and MgATP_ss;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and SERCA2a_pump for
    vars MgATP_i and MgATP_i;
    vars MgATP_i0 and MgATP_i0;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and environment for
    vars time and time;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and intracellular_ion_concentrations for
    vars ADP_i and ADP_i;
    vars ADP_ss and ADP_ss;
    vars ATP_i and ATP_i;
    vars ATP_ss and ATP_ss;
    vars CaADP_i and CaADP_i;
    vars CaADP_ss and CaADP_ss;
    vars CaATP_i and CaATP_i;
    vars CaATP_ss and CaATP_ss;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
    vars k_minus_CaADP and k_minus_CaADP;
    vars k_minus_CaATP and k_minus_CaATP;
    vars k_plus_CaADP and k_plus_CaADP;
    vars k_plus_CaATP and k_plus_CaATP;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and model_parameters for
    vars model_parameters_V_myo and V_myo;
    vars model_parameters_V_ss and V_ss;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and sarcolemmal_calcium_pump for
    vars MgATP_i and MgATP_i;
    vars MgATP_i0 and MgATP_i0;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_y_gate for
    vars y and y;
  enddef;
  def map between L_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between L_type_Ca_current and intracellular_ion_concentrations for
    vars Ca_ss and Ca_ss;
    vars i_Ca and i_Ca;
    vars i_Ca_K and i_Ca_K;
  enddef;
  def map between L_type_Ca_current and membrane for
    vars C_sc and C_sc;
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Ca and i_Ca;
    vars i_Ca_K and i_Ca_K;
  enddef;
  def map between L_type_Ca_current_y_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current_y_gate and membrane for
    vars V and V;
  enddef;
  def map between Na_Ca_exchanger and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between Na_Ca_exchanger and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between RyR_channel and environment for
    vars time and time;
  enddef;
  def map between RyR_channel and intracellular_ion_concentrations for
    vars Ca_JSR and Ca_JSR;
    vars Ca_ss and Ca_ss;
    vars J_rel and J_rel;
  enddef;
  def map between SERCA2a_pump and intracellular_ion_concentrations for
    vars Ca_NSR and Ca_NSR;
    vars Ca_i and Ca_i;
    vars J_up and J_up;
  enddef;
  def map between calcium_background_current and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between calcium_background_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between calcium_background_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between environment and fast_sodium_current_h_gate for
    vars time and time;
  enddef;
  def map between environment and fast_sodium_current_j_gate for
    vars time and time;
  enddef;
  def map between environment and fast_sodium_current_m_gate for
    vars time and time;
  enddef;
  def map between environment and intracellular_Ca_fluxes for
    vars HTRPNCa and HTRPNCa;
    vars LTRPNCa and LTRPNCa;
    vars time and time;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars time and time;
  enddef;
  def map between environment and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars time and time;
  enddef;
  def map between environment and transient_outward_potassium_current_X_to1_gate for
    vars time and time;
  enddef;
  def map between environment and transient_outward_potassium_current_Y_to1_gate for
    vars time and time;
  enddef;
  def map between extracellular_ion_concentrations and fast_sodium_current for
    vars Na_o and Na_o;
  enddef;
  def map between extracellular_ion_concentrations and rapid_activating_delayed_rectifiyer_K_current for
    vars K_o and K_o;
  enddef;
  def map between extracellular_ion_concentrations and slow_activating_delayed_rectifiyer_K_current for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between extracellular_ion_concentrations and sodium_potassium_pump for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between extracellular_ion_concentrations and time_independent_potassium_current for
    vars K_o and K_o;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars fast_sodium_current_m_gate_m and m;
  enddef;
  def map between fast_sodium_current and intracellular_ion_concentrations for
    vars Na_i and Na_i;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current_h_gate and membrane for
    vars V and V;
  enddef;
  def map between fast_sodium_current_j_gate and membrane for
    vars V and V;
  enddef;
  def map between fast_sodium_current_m_gate and membrane for
    vars V and V;
  enddef;
  def map between intracellular_Ca_fluxes and intracellular_ion_concentrations for
    vars Ca_JSR and Ca_JSR;
    vars Ca_NSR and Ca_NSR;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
    vars J_tr and J_tr;
    vars J_trpn and J_trpn;
    vars J_xfer and J_xfer;
  enddef;
  def map between intracellular_ion_concentrations and membrane for
    vars C_sc and C_sc;
    vars F and F;
  enddef;
  def map between intracellular_ion_concentrations and plateau_potassium_current for
    vars i_Kp and i_Kp;
  enddef;
  def map between intracellular_ion_concentrations and rapid_activating_delayed_rectifiyer_K_current for
    vars K_i and K_i;
    vars i_Kr and i_Kr;
  enddef;
  def map between intracellular_ion_concentrations and sarcolemmal_calcium_pump for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between intracellular_ion_concentrations and slow_activating_delayed_rectifiyer_K_current for
    vars K_i and K_i;
    vars Na_i and Na_i;
    vars i_Ks and i_Ks;
  enddef;
  def map between intracellular_ion_concentrations and sodium_background_current for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between intracellular_ion_concentrations and sodium_potassium_pump for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between intracellular_ion_concentrations and time_independent_potassium_current for
    vars i_K1 and i_K1;
  enddef;
  def map between intracellular_ion_concentrations and transient_outward_potassium_current for
    vars i_to1 and i_to1;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and plateau_potassium_current_Kp_gate for
    vars V and V;
  enddef;
  def map between membrane and rapid_activating_delayed_rectifiyer_K_current for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars V and V;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and slow_activating_delayed_rectifiyer_K_current for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars V and V;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and time_independent_potassium_current_K1_gate for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
  enddef;
  def map between membrane and transient_outward_potassium_current for
    vars V and V;
    vars i_to1 and i_to1;
  enddef;
  def map between membrane and transient_outward_potassium_current_X_to1_gate for
    vars V and V;
  enddef;
  def map between membrane and transient_outward_potassium_current_Y_to1_gate for
    vars V and V;
  enddef;
  def map between plateau_potassium_current and plateau_potassium_current_Kp_gate for
    vars Kp_V and Kp_V;
  enddef;
  def map between plateau_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars X_kr and X_kr;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and time_independent_potassium_current_K1_gate for
    vars E_K and E_K;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and transient_outward_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars X_ks and X_ks;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity_V and K1_infinity_V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_X_to1_gate for
    vars X_to1 and X_to1;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_Y_to1_gate for
    vars Y_to1 and Y_to1;
  enddef;
enddef;
