def model pasek_simurda_christe_2006 as
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit cm as
    unit metre {mult: 0.01};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit cm3_per_s as
    unit metre {expo: 3.0, mult: 1e-06};
    unit second {expo: -1.0};
  enddef;
  def unit cm_per_s as
    unit metre {mult: 0.01};
    unit second {expo: -1.0};
  enddef;
  def unit dimensionless_times_1e_minus_3 as
    unit dimensionless {mult: 0.001};
  enddef;
  def unit g_m3_per_s3_per_A2_times_1e1 as
    unit gram {mult: 10};
    unit metre {expo: 3.0};
    unit second {expo: -3.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit m12_per_s_per_mol4 as
    unit metre {expo: 12.0};
    unit second {expo: -1.0};
    unit mole {expo: -4.0};
  enddef;
  def unit m3_per_s_per_mol as
    unit metre {expo: 3.0};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m9_per_s_per_mol3 as
    unit metre {expo: 9.0};
    unit second {expo: -1.0};
    unit mole {expo: -3.0};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mL as
    unit metre {expo: 3.0, mult: 1e-06};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mS as
    unit gram {expo: -1.0, mult: 1e-06};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit mS_per_cm2 as
    unit gram {expo: -1.0, mult: 0.01};
    unit metre {expo: -4.0};
    unit second {expo: 3.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol4_per_m12 as
    unit metre {expo: -12.0};
    unit mole {expo: 4.0};
  enddef;
  def unit mol_per_m3_per_s as
    unit metre {expo: -3.0};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit per_cm as
    unit metre {expo: -1.0, mult: 100};
  enddef;
  def unit per_m2_times_1e4 as
    unit metre {expo: -2.0, mult: 10000};
  enddef;
  def unit per_m3_per_s_times_1e6 as
    unit metre {expo: -3.0, mult: 1000000};
    unit second {expo: -1.0};
  enddef;
  def unit per_m3_times_1e6 as
    unit metre {expo: -3.0, mult: 1000000};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV2 as
    unit gram {expo: -2.0};
    unit metre {expo: -4.0};
    unit second {expo: 6.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit s2_A_per_g_per_m2 as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit s_A_per_m3 as
    unit metre {expo: -3.0};
    unit second;
    unit ampere;
  enddef;
  def unit uA as
    unit ampere {mult: 1e-06};
  enddef;
  def unit uA_per_cm2 as
    unit metre {expo: -2.0, mult: 0.01};
    unit ampere;
  enddef;
  def unit uF as
    unit gram {expo: -1.0, mult: 1e-09};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit uF_per_cm2 as
    unit gram {expo: -1.0, mult: 1e-05};
    unit metre {expo: -4.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;

  def comp CaSRrel as
    var CaSRrel: mM {pub: out, init: 1.335789};
    var JCaSRrel_JCaSRrel: mol_per_m3_per_s {pub: in};
    var Jtr_Jtr: mol_per_m3_per_s {pub: in};
    var VSRrel: mL {pub: in};
    var time: second {pub: in};
    ode(CaSRrel, time) = 1.0{mL}/(1.0{dimensionless}+15.0{mM}*0.8{mM}/sqr(0.8{mM}+CaSRrel))*(Jtr_Jtr-JCaSRrel_JCaSRrel)/VSRrel;
  enddef;

  def comp CaSRup as
    var CaSRup: mM {pub: out, init: 1.5374352};
    var JCaSRup_JCaSRup: mol_per_m3_per_s {pub: in};
    var Jtr_Jtr: mol_per_m3_per_s {pub: in};
    var VSRup: mL {pub: in};
    var time: second {pub: in};
    ode(CaSRup, time) = (JCaSRup_JCaSRup-Jtr_Jtr)/(1.0{per_m3_times_1e6}*VSRup);
  enddef;

  def comp JCaSRrel as
    var CaSRrel_CaSRrel: mM {pub: in};
    var Cass: mM {pub: in};
    var F1: dimensionless {init: 1.46122759999999990e-01};
    var F2: dimensionless {init: 1.04960249999999991e-03};
    var F3: dimensionless {init: 9.42144049999999992e-08};
    var F4: dimensionless {init: 8.52830340000000020e-01};
    var JCaSRrel: mol_per_m3_per_s {pub: out};
    var VSRrel: mL {pub: in};
    var kam: hertz {init: 576.0};
    var kap: m12_per_s_per_mol4 {init: 1.21500000000000000e+13};
    var kbm: hertz {init: 1930.0};
    var kbp: m9_per_s_per_mol3 {init: 4.05000000000000000e+09};
    var kcm: hertz {init: 0.8};
    var kcp: hertz {init: 18.0};
    var time: second {pub: in};
    ode(F1, time) = F2*kam-F1*kap*pow(Cass, 4.0{dimensionless});
    ode(F2, time) = F1*kap*pow(Cass, 4.0{dimensionless})+F3*kbm+F4*kcm-F2*(kam+kbp*pow(Cass, 3.0{dimensionless})+kcp);
    ode(F3, time) = F2*kbp*pow(Cass, 3.0{dimensionless})-F3*kbm;
    ode(F4, time) = F2*kcp-F4*kcm;
    JCaSRrel = 1800.0{per_m3_per_s_times_1e6}*VSRrel*(F2+F3)*(CaSRrel_CaSRrel-Cass);
  enddef;

  def comp JCaSRup as
    var CaSRup_CaSRup: mM {pub: in};
    var Cai: mM {pub: in};
    var JCaSRup: mol_per_m3_per_s {pub: out};
    var Vmyo: mL {pub: in};
    JCaSRup = 1.0{per_m3_per_s_times_1e6}*Vmyo*(0.04{mM}*10.0{dimensionless}*pow(Cai/0.000168{mM}, 1.2{dimensionless})-0.9{mM}*CaSRup_CaSRup/3.29{mM})/(1.0{dimensionless}+pow(Cai/0.000168{mM}, 1.2{dimensionless})+CaSRup_CaSRup/3.29{mM});
  enddef;

  def comp JCad as
    var Cai: mM {pub: in};
    var Cass: mM {pub: in};
    var JCad: mol_per_m3_per_s {pub: out};
    var Vmyo: mL {pub: in};
    var taud: second {init: 0.003125};
    JCad = 1.0{per_m3_times_1e6}*(Cass-Cai)*Vmyo/taud;
  enddef;

  def comp Jtr as
    var CaSRrel_CaSRrel: mM {pub: in};
    var CaSRup_CaSRup: mM {pub: in};
    var Jtr: mol_per_m3_per_s {pub: out};
    var VSRrel: mL {pub: in};
    var tautr: second {init: 0.03448};
    Jtr = 1.0{per_m3_times_1e6}*VSRrel/tautr*(CaSRup_CaSRup-CaSRrel_CaSRrel);
  enddef;

  def comp Vms as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var Vms: mV {pub: out};
    Vms = -90.0{dimensionless};
  enddef;

  def comp Vmt as
    var Vms_Vms: mV {pub: in};
    var Vmt: mV {pub: out};
    Vmt = Vms_Vms;
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp i_Cabs as
    var E_Cas: mV {pub: in};
    var Vms_Vms: mV {pub: in};
    var gCabs: mS {pub: in};
    var i_Cabs: uA {pub: out};
    i_Cabs = gCabs*(Vms_Vms-E_Cas);
  enddef;

  def comp i_Cabt as
    var E_Cat: mV {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var gCabt: mS {pub: in};
    var i_Cabt: uA {pub: out};
    i_Cabt = gCabt*(Vmt_Vmt-E_Cat);
  enddef;

  def comp i_Cas as
    var C1: dimensionless {init: 0.9999433};
    var C1inf: dimensionless;
    var C2: dimensionless {init: 9.99947460000000010e-01};
    var C2inf: dimensionless;
    var Cae: mM {pub: in};
    var Cai: mM {pub: in};
    var Cass: mM {pub: in};
    var Ccast: dimensionless {init: 9.65619489999999976e-03};
    var Ccastinf: dimensionless;
    var Co: dimensionless {init: 2.22926239999999996e-06};
    var Coinf: dimensionless;
    var E_Cas: mV {pub: out};
    var F: C_per_mol {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vms_Vms: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: s_A_per_m3 {pub: out};
    var gCas: cm3_per_s {pub: in};
    var i_Cas: uA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var open_prob: dimensionless {pub: out};
    var tauC1: second;
    var tauC2: second;
    var tauCcast: second {init: 0.009};
    var tauCo: second;
    var time: second {pub: in};
    ode(C1, time) = (C1inf-C1)/tauC1;
    C1inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vms_Vms+26.7{mV})/5.4{mV}));
    ode(C2, time) = (C2inf-C2)/tauC2;
    C2inf = C1inf;
    ode(Ccast, time) = (Ccastinf-Ccast)/tauCcast;
    Ccastinf = 1.0{dimensionless}/(1.0{dimensionless}+Cass/0.01{mM});
    ode(Co, time) = (Coinf-Co)/tauCo;
    Coinf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(Vms_Vms+15.3{mV})/5.0{mV}));
    E_Cas = ln(Cae/Cai)*R*T/(2.0{dimensionless}*F);
    driving_term_ghk = 4.0{dimensionless}*Vms_Vms*sqr(F)/(R*T)*(Cass*exp(2.0{dimensionless}*Vms_Vms*F/(R*T))-0.341{dimensionless}*Cae)/(exp(2.0{dimensionless}*Vms_Vms*F/(R*T))-1.0{dimensionless});
    i_Cas = gCas*driving_term_ghk*open_prob;
    open_prob = Co*((0.9{dimensionless}+Ccast/10.0{dimensionless})*C1+(0.1{dimensionless}-Ccast/10.0{dimensionless})*C2);
    tauC1 = 0.105{second}*exp(-sqr((Vms_Vms+45.0{mV})/12.0{mV}))+0.04{second}/(1.0{dimensionless}+exp((-Vms_Vms+25.0{mV})/25.0{mV}))+0.015{second}/(1.0{dimensionless}+exp((Vms_Vms+75.0{mV})/25.0{mV}));
    tauC2 = 0.041{second}*exp(-sqr((Vms_Vms+47.0{mV})/12.0{mV}))+0.08{second}/(1.0{dimensionless}+exp(-(Vms_Vms+55.0{mV})/5.0{mV}))+0.015{second}/(1.0{dimensionless}+exp((Vms_Vms+75.0{mV})/25.0{mV}));
    tauCo = 0.00025{second}+0.00305{second}*exp(-0.0045{per_mV2}*sqr(Vms_Vms+7.0{mV}))+0.00105{second}*exp(-0.002{per_mV2}*sqr(Vms_Vms-18.0{mV}));
  enddef;

  def comp i_Cat as
    var C1: dimensionless {init: 0.9999433};
    var C1inf: dimensionless;
    var C2: dimensionless {init: 9.99947460000000010e-01};
    var C2inf: dimensionless;
    var Cai: mM {pub: in};
    var Cass: mM {pub: in};
    var Cat: mM {pub: in};
    var Ccast: dimensionless {init: 9.65619490000000025e-01};
    var Ccastinf: dimensionless;
    var Co: dimensionless {init: 2.22926550000000020e-06};
    var Coinf: dimensionless;
    var E_Cat: mV {pub: out};
    var F: C_per_mol {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var driving_term_ghk: s_A_per_m3;
    var gCat: cm3_per_s {pub: in};
    var i_Cat: uA {pub: out};
    var open_prob: dimensionless;
    var tauC1: second;
    var tauC2: second;
    var tauCcast: second {init: 0.009};
    var tauCo: second;
    var time: second {pub: in};
    ode(C1, time) = (C1inf-C1)/tauC1;
    C1inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vmt_Vmt+26.7{mV})/5.4{mV}));
    ode(C2, time) = (C2inf-C2)/tauC2;
    C2inf = C1inf;
    ode(Ccast, time) = (Ccastinf-Ccast)/tauCcast;
    Ccastinf = 1.0{dimensionless}/(1.0{dimensionless}+Cass/0.01{mM});
    ode(Co, time) = (Coinf-Co)/tauCo;
    Coinf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(Vmt_Vmt+15.3{mV})/5.0{mV}));
    E_Cat = ln(Cat/Cai)*R*T/(2.0{dimensionless}*F);
    driving_term_ghk = 4.0{dimensionless}*Vmt_Vmt*sqr(F)/(R*T)*(Cass*exp(2.0{dimensionless}*Vmt_Vmt*F/(R*T))-0.341{dimensionless}*Cat)/(exp(2.0{dimensionless}*Vmt_Vmt*F/(R*T))-1.0{dimensionless});
    i_Cat = gCat*driving_term_ghk*open_prob;
    open_prob = Co*((0.9{dimensionless}+Ccast/10.0{dimensionless})*C1+(0.1{dimensionless}-Ccast/10.0{dimensionless})*C2);
    tauC1 = 0.105{second}*exp(-sqr((Vmt_Vmt+45.0{mV})/12.0{mV}))+0.04{second}/(1.0{dimensionless}+exp((-Vmt_Vmt+25.0{mV})/25.0{mV}))+0.015{second}/(1.0{dimensionless}+exp((Vmt_Vmt+75.0{mV})/25.0{mV}));
    tauC2 = 0.041{second}*exp(-sqr((Vmt_Vmt+47.0{mV})/12.0{mV}))+0.08{second}/(1.0{dimensionless}+exp(-(Vmt_Vmt+55.0{mV})/5.0{mV}))+0.015{second}/(1.0{dimensionless}+exp((Vmt_Vmt+75.0{mV})/25.0{mV}));
    tauCo = 0.00025{second}+0.00305{second}*exp(-0.0045{per_mV2}*sqr(Vmt_Vmt+7.0{mV}))+0.00105{second}*exp(-0.002{per_mV2}*sqr(Vmt_Vmt-18.0{mV}));
  enddef;

  def comp i_K1s as
    var E_Ks: mV {pub: in};
    var F: C_per_mol {pub: in};
    var Ke: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vms_Vms: mV {pub: in};
    var gK1s: mS {pub: in};
    var i_K1s: uA {pub: out};
    i_K1s = gK1s*(Vms_Vms-E_Ks-1.73{mV})/(1.0{dimensionless}+exp(1.613{dimensionless}*F/(R*T)*(Vms_Vms-E_Ks-1.73{mV}))*(1.0{dimensionless}+exp((Ke-0.9988{mM})/(-0.124{mM}))));
  enddef;

  def comp i_K1t as
    var E_Kt: mV {pub: in};
    var F: C_per_mol {pub: in};
    var Kt: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var gK1t: mS {pub: in};
    var i_K1t: uA {pub: out};
    i_K1t = gK1t*(Vmt_Vmt-E_Kt-1.73{mV})/(1.0{dimensionless}+exp(1.613{dimensionless}*F/(R*T)*(Vmt_Vmt-E_Kt-1.73{mV}))*(1.0{dimensionless}+exp((Kt-0.9988{mM})/(-0.124{mM}))));
  enddef;

  def comp i_Kbs as
    var E_Ks: mV {pub: in};
    var Vms_Vms: mV {pub: in};
    var gKbs: mS {pub: in};
    var i_Kbs: uA {pub: out};
    i_Kbs = gKbs*(Vms_Vms-E_Ks);
  enddef;

  def comp i_Kbt as
    var E_Kt: mV {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var gKbt: mS {pub: in};
    var i_Kbt: uA {pub: out};
    i_Kbt = gKbt*(Vmt_Vmt-E_Kt);
  enddef;

  def comp i_Kfs as
    var E_Ks: mV {pub: in};
    var E_Nas: mV {pub: in};
    var Vms_Vms: mV {pub: in};
    var gKfs: mS {pub: in};
    var i_Kfs: uA {pub: out};
    var qs: dimensionless {pub: in};
    i_Kfs = gKfs*qs*(0.2{dimensionless}*(Vms_Vms-E_Nas)+0.8{dimensionless}*(Vms_Vms-E_Ks));
  enddef;

  def comp i_Kfs_qs_gate as
    var Vms_Vms: mV {pub: in};
    var qinfs: dimensionless;
    var qs: dimensionless {pub: out, init: 2.38792969999999981e-03};
    var tauqs: second;
    var time: second {pub: in};
    qinfs = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vms_Vms+138.6{mV})/10.48{mV}));
    ode(qs, time) = (qinfs-qs)/tauqs;
    tauqs = 1.0{second}/(0.11885{dimensionless}*exp((Vms_Vms+80.0{mV})/28.37{mV})+0.5623{dimensionless}*exp(-(Vms_Vms+80.0{mV})/14.19{mV}));
  enddef;

  def comp i_Kft as
    var E_Kt: mV {pub: in};
    var E_Nat: mV {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var gKft: mS {pub: in};
    var i_Kft: uA {pub: out};
    var qt: dimensionless {pub: in};
    i_Kft = gKft*qt*(0.2{dimensionless}*(Vmt_Vmt-E_Nat)+0.8{dimensionless}*(Vmt_Vmt-E_Kt));
  enddef;

  def comp i_Kft_qt_gate as
    var Vmt_Vmt: mV {pub: in};
    var qinft: dimensionless;
    var qt: dimensionless {pub: out, init: 2.38785739999999988e-03};
    var tauqt: second;
    var time: second {pub: in};
    qinft = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vmt_Vmt+138.6{mV})/10.48{mV}));
    ode(qt, time) = (qinft-qt)/tauqt;
    tauqt = 1.0{second}/(0.11885{dimensionless}*exp((Vmt_Vmt+80.0{mV})/28.37{mV})+0.5623{dimensionless}*exp(-(Vmt_Vmt+80.0{mV})/14.19{mV}));
  enddef;

  def comp i_Ksts as
    var E_Ks: mV {pub: in};
    var Vms_Vms: mV {pub: in};
    var gKsts: mS {pub: in};
    var i_Ksts: uA {pub: out};
    var rsts: dimensionless {pub: in};
    var ssts: dimensionless {pub: in};
    i_Ksts = gKsts*rsts*ssts*(Vms_Vms-E_Ks);
  enddef;

  def comp i_Ksts_rsts_gate as
    var Vms_Vms: mV {pub: in};
    var rstinfs: dimensionless;
    var rsts: dimensionless {pub: out, init: 2.94085140000000010e-03};
    var taursts: second;
    var time: second {pub: in};
    rstinfs = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(Vms_Vms+11.5{mV})/11.82{mV}));
    ode(rsts, time) = (rstinfs-rsts)/taursts;
    taursts = 10.0{second}/(45.16{dimensionless}*exp(0.03577{per_mV}*(Vms_Vms+50.0{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(Vms_Vms+38.0{mV})));
  enddef;

  def comp i_Ksts_ssts_gate as
    var Vms_Vms: mV {pub: in};
    var sstinfs: dimensionless;
    var ssts: dimensionless {pub: out, init: 2.43514310000000012e-01};
    var taussts: second {init: 2.1};
    var time: second {pub: in};
    sstinfs = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vms_Vms+87.5{mV})/10.3{mV}));
    ode(ssts, time) = (sstinfs-ssts)/taussts;
  enddef;

  def comp i_Kstt as
    var E_Kt: mV {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var gKstt: mS {pub: in};
    var i_Kstt: uA {pub: out};
    var rstt: dimensionless {pub: in};
    var sstt: dimensionless {pub: in};
    i_Kstt = gKstt*rstt*sstt*(Vmt_Vmt-E_Kt);
  enddef;

  def comp i_Kstt_rstt_gate as
    var Vmt_Vmt: mV {pub: in};
    var rstinft: dimensionless;
    var rstt: dimensionless {pub: out, init: 2.94085339999999992e-03};
    var taurstt: second;
    var time: second {pub: in};
    rstinft = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(Vmt_Vmt+11.5{mV})/11.82{mV}));
    ode(rstt, time) = (rstinft-rstt)/taurstt;
    taurstt = 10.0{second}/(45.16{dimensionless}*exp(0.03577{per_mV}*(Vmt_Vmt+50.0{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(Vmt_Vmt+38.0{mV})));
  enddef;

  def comp i_Kstt_sstt_gate as
    var Vmt_Vmt: mV {pub: in};
    var sstinft: dimensionless;
    var sstt: dimensionless {pub: out, init: 2.43514260000000010e-01};
    var tausstt: second {init: 2.1};
    var time: second {pub: in};
    sstinft = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vmt_Vmt+87.5{mV})/10.3{mV}));
    ode(sstt, time) = (sstinft-sstt)/tausstt;
  enddef;

  def comp i_Ktos as
    var E_Ks: mV {pub: out};
    var F: C_per_mol {pub: in};
    var Ke: mM {pub: in};
    var Ki: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vms_Vms: mV {pub: in};
    var gKtos: mS {pub: in};
    var i_Ktos: uA {pub: out};
    var rs: dimensionless {pub: in};
    var ss: dimensionless {pub: in};
    var sss: dimensionless {pub: in};
    E_Ks = ln(Ke/Ki)*R*T/F;
    i_Ktos = gKtos*rs*(0.886{dimensionless}*ss+0.114{dimensionless}*sss)*(Vms_Vms-E_Ks);
  enddef;

  def comp i_Ktos_rs_gate as
    var Vms_Vms: mV {pub: in};
    var rinfs: dimensionless;
    var rs: dimensionless {pub: out, init: 2.21693059999999997e-03};
    var taurs: second;
    var time: second {pub: in};
    rinfs = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vms_Vms+10.6{mV})/(-11.42{mV})));
    ode(rs, time) = (rinfs-rs)/taurs;
    taurs = 1.0{second}/(45.16{dimensionless}*exp(0.03577{per_mV}*(Vms_Vms+50.0{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(Vms_Vms+38.0{mV})));
  enddef;

  def comp i_Ktos_ss_gate as
    var Vms_Vms: mV {pub: in};
    var sinfs: dimensionless;
    var ss: dimensionless {pub: out, init: 6.25976309999999980e-01};
    var tauss: second;
    var time: second {pub: in};
    sinfs = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vms_Vms+45.3{mV})/6.8841{mV}));
    ode(ss, time) = (sinfs-ss)/tauss;
    tauss = 0.35{second}*exp(-sqr(0.0666{per_mV}*(Vms_Vms+70.0{mV})))+0.035{second};
  enddef;

  def comp i_Ktos_sss_gate as
    var Vms_Vms: mV {pub: in};
    var ssinfs: dimensionless;
    var sss: dimensionless {pub: out, init: 1.68549270000000001e-01};
    var tausss: second;
    var time: second {pub: in};
    ssinfs = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vms_Vms+45.3{mV})/6.8841{mV}));
    ode(sss, time) = (ssinfs-sss)/tausss;
    tausss = 3.7{second}*exp(-sqr(0.0333{per_mV}*(Vms_Vms+70.0{mV})))+0.035{second};
  enddef;

  def comp i_Ktot as
    var E_Kt: mV {pub: out};
    var F: C_per_mol {pub: in};
    var Ki: mM {pub: in};
    var Kt: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var gKtot: mS {pub: in};
    var i_Ktot: uA {pub: out};
    var rt: dimensionless {pub: in};
    var sst: dimensionless {pub: in};
    var st: dimensionless {pub: in};
    E_Kt = ln(Kt/Ki)*R*T/F;
    i_Ktot = gKtot*rt*(0.886{dimensionless}*st+0.114{dimensionless}*sst)*(Vmt_Vmt-E_Kt);
  enddef;

  def comp i_Ktot_rt_gate as
    var Vmt_Vmt: mV {pub: in};
    var rinft: dimensionless;
    var rt: dimensionless {pub: out, init: 2.21693200000000002e-03};
    var taurt: second;
    var time: second {pub: in};
    rinft = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vmt_Vmt+10.6{mV})/(-11.42{mV})));
    ode(rt, time) = (rinft-rt)/taurt;
    taurt = 1.0{second}/(45.16{dimensionless}*exp(0.03577{per_mV}*(Vmt_Vmt+50.0{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(Vmt_Vmt+38.0{mV})));
  enddef;

  def comp i_Ktot_sst_gate as
    var Vmt_Vmt: mV {pub: in};
    var ssinft: dimensionless;
    var sst: dimensionless {pub: out, init: 1.68526759999999998e-01};
    var tausst: second;
    var time: second {pub: in};
    ssinft = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vmt_Vmt+45.3{mV})/6.8841{mV}));
    ode(sst, time) = (ssinft-sst)/tausst;
    tausst = 3.7{second}*exp(-sqr(0.0333{per_mV}*(Vmt_Vmt+70.0{mV})))+0.035{second};
  enddef;

  def comp i_Ktot_st_gate as
    var Vmt_Vmt: mV {pub: in};
    var sinft: dimensionless;
    var st: dimensionless {pub: out, init: 6.25977840000000008e-01};
    var taust: second;
    var time: second {pub: in};
    sinft = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vmt_Vmt+45.3{mV})/6.8841{mV}));
    ode(st, time) = (sinft-st)/taust;
    taust = 0.35{second}*exp(-sqr(0.0666{per_mV}*(Vmt_Vmt+70.0{mV})))+0.035{second};
  enddef;

  def comp i_NaCas as
    var Cae: mM {pub: in};
    var Cai: mM {pub: in};
    var Nae: mM {pub: in};
    var Nai: mM {pub: in};
    var Vms_Vms: mV {pub: in};
    var i_NaCa_maxs: uA {pub: in};
    var i_NaCas: uA {pub: out};
    i_NaCas = i_NaCa_maxs*(exp(0.0187{per_mV}*Vms_Vms)*pow(Nai, 3.0{dimensionless})*Cae-exp(-0.0187{per_mV}*Vms_Vms)*pow(Nae, 3.0{dimensionless})*Cai)/(1.0{mol4_per_m12}+0.0001{dimensionless}*(pow(Nae, 3.0{dimensionless})*Cai+pow(Nai, 3.0{dimensionless})*Cae));
  enddef;

  def comp i_NaCat as
    var Cai: mM {pub: in};
    var Cat: mM {pub: in};
    var Nai: mM {pub: in};
    var Nat: mM {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var i_NaCa_maxt: uA {pub: in};
    var i_NaCat: uA {pub: out};
    i_NaCat = i_NaCa_maxt*(exp(0.0187{per_mV}*Vmt_Vmt)*pow(Nai, 3.0{dimensionless})*Cat-exp(-0.0187{per_mV}*Vmt_Vmt)*pow(Nat, 3.0{dimensionless})*Cai)/(1.0{mol4_per_m12}+0.0001{dimensionless}*(pow(Nat, 3.0{dimensionless})*Cai+pow(Nai, 3.0{dimensionless})*Cat));
  enddef;

  def comp i_NaKs as
    var F: C_per_mol {pub: in};
    var Ke: mM {pub: in};
    var Nae: mM {pub: in};
    var Nai: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vms_Vms: mV {pub: in};
    var i_NaK_maxs: uA {pub: in};
    var i_NaKs: uA {pub: out};
    i_NaKs = i_NaK_maxs/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*Vms_Vms*F/(R*T))+0.0365{dimensionless}*1.0{dimensionless}/7.0{dimensionless}*(exp(Nae/67.3{mM})-1.0{dimensionless})*exp(-Vms_Vms*F/(R*T)))*1.0{dimensionless}/(1.0{dimensionless}+pow(10.0{mM}/Nai, 1.5{dimensionless}))*Ke/(Ke+1.5{mM});
  enddef;

  def comp i_NaKt as
    var F: C_per_mol {pub: in};
    var Kt: mM {pub: in};
    var Nai: mM {pub: in};
    var Nat: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var i_NaK_maxt: uA {pub: in};
    var i_NaKt: uA {pub: out};
    i_NaKt = i_NaK_maxt/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*Vmt_Vmt*F/(R*T))+0.0365{dimensionless}*1.0{dimensionless}/7.0{dimensionless}*(exp(Nat/67.3{mM})-1.0{dimensionless})*exp(-Vmt_Vmt*F/(R*T)))*1.0{dimensionless}/(1.0{dimensionless}+pow(10.0{mM}/Nai, 1.5{dimensionless}))*Kt/(Kt+1.5{mM});
  enddef;

  def comp i_Nabs as
    var E_Nas: mV {pub: in};
    var Vms_Vms: mV {pub: in};
    var gNabs: mS {pub: in};
    var i_Nabs: uA {pub: out};
    i_Nabs = gNabs*(Vms_Vms-E_Nas);
  enddef;

  def comp i_Nabt as
    var E_Nat: mV {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var gNabt: mS {pub: in};
    var i_Nabt: uA {pub: out};
    i_Nabt = gNabt*(Vmt_Vmt-E_Nat);
  enddef;

  def comp i_Nas as
    var E_Nas: mV {pub: out};
    var F: C_per_mol {pub: in};
    var Ke: mM {pub: in};
    var Ki: mM {pub: in};
    var Nae: mM {pub: in};
    var Nai: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vms_Vms: mV {pub: in};
    var gNas: mS {pub: in};
    var i_Nas: uA {pub: out};
    var i_Nas_h_gate_h: dimensionless {pub: in};
    var i_Nas_m_gate_m: dimensionless {pub: in};
    E_Nas = ln(Nae/Nai)*R*T/F;
    i_Nas = gNas*pow(i_Nas_m_gate_m, 3.0{dimensionless})*i_Nas_h_gate_h*(Vms_Vms-ln((Nae+0.12{dimensionless}*Ke)/(Nai+0.12{dimensionless}*Ki))*R*T/F);
  enddef;

  def comp i_Nas_h_gate as
    var Vms_Vms: mV {pub: in};
    var alpha_h: hertz;
    var beta_h: hertz;
    var h: dimensionless {pub: out, init: 5.89251810000000042e-01};
    var time: second {pub: in};
    alpha_h = 284.4{hertz}/(1.0{dimensionless}+exp(0.0812{per_mV}*(Vms_Vms+115.9{mV})));
    beta_h = 18.77{s2_A_per_g_per_m2}*(Vms_Vms+64.4{mV})/(1.0{dimensionless}-exp(-0.22{per_mV}*(Vms_Vms+64.4{mV})));
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp i_Nas_m_gate as
    var Vms_Vms: mV {pub: in};
    var alpha_m: hertz;
    var beta_m: hertz;
    var m: dimensionless {pub: out, init: 1.49564820000000006e-06};
    var time: second {pub: in};
    alpha_m = 117.26{s2_A_per_g_per_m2}*(Vms_Vms+59.3{mV})/(1.0{dimensionless}-exp(-0.55{per_mV}*(Vms_Vms+59.3{mV})));
    beta_m = 3800.0{hertz}*exp(-0.072{per_mV}*(Vms_Vms+61.0{mV}));
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp i_Nat as
    var E_Nat: mV {pub: out};
    var F: C_per_mol {pub: in};
    var Ki: mM {pub: in};
    var Kt: mM {pub: in};
    var Nai: mM {pub: in};
    var Nat: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var gNat: mS {pub: in};
    var i_Nat: uA {pub: out};
    var i_Nat_h_gate_h: dimensionless {pub: in};
    var i_Nat_m_gate_m: dimensionless {pub: in};
    E_Nat = ln(Nat/Nai)*R*T/F;
    i_Nat = gNat*pow(i_Nat_m_gate_m, 3.0{dimensionless})*i_Nat_h_gate_h*(Vmt_Vmt-ln((Nat+0.12{dimensionless}*Kt)/(Nai+0.12{dimensionless}*Ki))*R*T/F);
  enddef;

  def comp i_Nat_h_gate as
    var Vmt_Vmt: mV {pub: in};
    var alpha_h: hertz;
    var beta_h: hertz;
    var h: dimensionless {pub: out, init: 5.89249249999999947e-01};
    var time: second {pub: in};
    alpha_h = 284.4{hertz}/(1.0{dimensionless}+exp(0.0812{per_mV}*(Vmt_Vmt+115.9{mV})));
    beta_h = 18.77{s2_A_per_g_per_m2}*(Vmt_Vmt+64.4{mV})/(1.0{dimensionless}-exp(-0.22{per_mV}*(Vmt_Vmt+64.4{mV})));
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp i_Nat_m_gate as
    var Vmt_Vmt: mV {pub: in};
    var alpha_m: hertz;
    var beta_m: hertz;
    var m: dimensionless {pub: out, init: 1.49565450000000005e-06};
    var time: second {pub: in};
    alpha_m = 117.26{s2_A_per_g_per_m2}*(Vmt_Vmt+59.3{mV})/(1.0{dimensionless}-exp(-0.55{per_mV}*(Vmt_Vmt+59.3{mV})));
    beta_m = 3800.0{hertz}*exp(-0.072{per_mV}*(Vmt_Vmt+61.0{mV}));
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp i_Stim as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: second {init: 0.001};
    var i_Stim: uA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: second {init: 0.0};
    var past: second;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: second {init: 0.2};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: uA {init: 0.0052};
    var stim_period: second {init: 0.2};
    var time: second {pub: in};
    i_Stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*stim_amplitude;
    past = floor(time/stim_period)*stim_period;
  enddef;

  def comp i_circ as
    var Rst: ohm {pub: in};
    var Vms_Vms: mV {pub: in};
    var Vmt_Vmt: mV {pub: in};
    var i_circ: uA;
    i_circ = 1000.0{dimensionless_times_1e_minus_3}*(Vmt_Vmt/Rst-Vms_Vms/Rst);
  enddef;

  def comp i_pCas as
    var Cai: mM {pub: in};
    var i_pCa_maxs: uA {pub: in};
    var i_pCas: uA {pub: out};
    i_pCas = i_pCa_maxs*Cai/(0.0004{mM}+Cai);
  enddef;

  def comp i_pCat as
    var Cai: mM {pub: in};
    var i_pCa_maxt: uA {pub: in};
    var i_pCat: uA {pub: out};
    i_pCat = i_pCa_maxt*Cai/(0.0004{mM}+Cai);
  enddef;

  def comp ical_tot as
    var gCas: cm3_per_s {pub: in};
    var gCat: cm3_per_s {pub: in};
    var i_Cas_driving_term_ghk: s_A_per_m3 {pub: in};
    var i_Cas_open_prob: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var ica_tot: uA;
    ica_tot = (gCas+gCat)*i_Cas_driving_term_ghk*i_Cas_open_prob;
  enddef;

  def comp ion_concentrations as
    var BTRH: mM {init: 9.91214609999999996e-01};
    var BTRL: mM {init: 1.99257689999999994e-02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: mM {pub: out, init: 2.28472920000000001e-04};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Cass: mM {pub: out, init: 3.49386689999999986e-04};
    var Cat: mM {pub: out, init: 1.1906442};
    var F: C_per_mol {pub: in};
    var JCaSRrel_JCaSRrel: mol_per_m3_per_s {pub: in};
    var JCaSRup_JCaSRup: mol_per_m3_per_s {pub: in};
    var JCad_JCad: mol_per_m3_per_s {pub: in};
    var JteCa: mol_per_m3_per_s {pub: in};
    var JteK: mol_per_m3_per_s {pub: in};
    var JteNa: mol_per_m3_per_s {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: mM {pub: out, init: 124.94394};
    var Kt: mM {pub: out, init: 5.3450263};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: mM {pub: out, init: 19.426568};
    var Nat: mM {pub: out, init: 139.98172};
    var Vd: mL {pub: in};
    var Vmyo: mL {pub: in};
    var Vt: mL {pub: in};
    var dBTRH: mol_per_m3_per_s;
    var dBTRL: mol_per_m3_per_s;
    var i_Cabs_i_Cabs: uA {pub: in};
    var i_Cabt_i_Cabt: uA {pub: in};
    var i_Cas_i_Cas: uA {pub: in};
    var i_Cat_i_Cat: uA {pub: in};
    var i_K1s_i_K1s: uA {pub: in};
    var i_K1t_i_K1t: uA {pub: in};
    var i_Kbs_i_Kbs: uA {pub: in};
    var i_Kbt_i_Kbt: uA {pub: in};
    var i_Kfs_i_Kfs: uA {pub: in};
    var i_Kft_i_Kft: uA {pub: in};
    var i_Ksts_i_Ksts: uA {pub: in};
    var i_Kstt_i_Kstt: uA {pub: in};
    var i_Ktos_i_Ktos: uA {pub: in};
    var i_Ktot_i_Ktot: uA {pub: in};
    var i_NaCas_i_NaCas: uA {pub: in};
    var i_NaCat_i_NaCat: uA {pub: in};
    var i_NaKs_i_NaKs: uA {pub: in};
    var i_NaKt_i_NaKt: uA {pub: in};
    var i_Nabs_i_Nabs: uA {pub: in};
    var i_Nabt_i_Nabt: uA {pub: in};
    var i_Nas_i_Nas: uA {pub: in};
    var i_Nat_i_Nat: uA {pub: in};
    var i_Stim_i_Stim: uA {pub: in};
    var i_pCas_i_pCas: uA {pub: in};
    var i_pCat_i_pCat: uA {pub: in};
    var time: second {pub: in};
    ode(BTRH, time) = dBTRH;
    ode(BTRL, time) = dBTRL;
    ode(Cai, time) = 1.0{dimensionless}/(1.0{dimensionless}+0.05{mM}*0.00238{mM}/sqr(0.00238{mM}+Cai))*((-2.0{dimensionless}*(i_NaCas_i_NaCas+i_NaCat_i_NaCat)+i_Cabs_i_Cabs+i_Cabt_i_Cabt+i_pCas_i_pCas+i_pCat_i_pCat)/(-2.0{dimensionless}*F*Vmyo)+1.0{mL}*(JCad_JCad-JCaSRup_JCaSRup)/Vmyo-dBTRH*0.14{dimensionless}-dBTRL*0.07{dimensionless});
    ode(Cass, time) = 1.0{dimensionless}/(1.0{dimensionless}+0.05{mM}*0.00238{mM}/sqr(0.00238{mM}+Cass))*(-(i_Cas_i_Cas+i_Cat_i_Cat)/(2.0{dimensionless}*F*Vd)+1.0{mL}*JCaSRrel_JCaSRrel/Vd-1.0{mL}*JCad_JCad/Vd);
    ode(Cat, time) = ((-2.0{dimensionless}*i_NaCat_i_NaCat+i_Cat_i_Cat+i_Cabt_i_Cabt+i_pCat_i_pCat)/(2.0{dimensionless}*F)-1.0{mL}*JteCa)/Vt;
    ode(Ki, time) = -(-i_Stim_i_Stim+i_Kfs_i_Kfs+i_Kft_i_Kft+i_Ksts_i_Ksts+i_Kstt_i_Kstt+i_K1s_i_K1s+i_K1t_i_K1t+i_Kbs_i_Kbs+i_Kbt_i_Kbt-2.0{dimensionless}*i_NaKs_i_NaKs-2.0{dimensionless}*i_NaKt_i_NaKt+i_Ktos_i_Ktos+i_Ktot_i_Ktot)/(F*Vmyo);
    ode(Kt, time) = ((i_Kft_i_Kft+i_Kstt_i_Kstt+i_K1t_i_K1t+i_Kbt_i_Kbt-2.0{dimensionless}*i_NaKt_i_NaKt+i_Ktot_i_Ktot)/F-1.0{mL}*JteK)/Vt;
    ode(Nai, time) = -(i_Nas_i_Nas+i_Nat_i_Nat+i_Nabs_i_Nabs+i_Nabt_i_Nabt+3.0{dimensionless}*i_NaCas_i_NaCas+3.0{dimensionless}*i_NaCat_i_NaCat+3.0{dimensionless}*i_NaKs_i_NaKs+3.0{dimensionless}*i_NaKt_i_NaKt)/(F*Vmyo);
    ode(Nat, time) = ((i_Nat_i_Nat+i_Nabt_i_Nabt+3.0{dimensionless}*i_NaCat_i_NaCat+3.0{dimensionless}*i_NaKt_i_NaKt)/F-1.0{mL}*JteNa)/Vt;
    dBTRH = 20000.0{m3_per_s_per_mol}*Cai*(1.0{mM}-BTRH)-0.07{hertz}*BTRH;
    dBTRL = 40000.0{m3_per_s_per_mol}*Cai*(1.0{mM}-BTRL)-BTRL*40.0{hertz};
  enddef;

  def comp membrane_permeabilities as
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var fCabt: dimensionless {init: 0.56};
    var fCat: dimensionless {init: 0.87};
    var fK1t: dimensionless {init: 0.56};
    var fKbt: dimensionless {init: 0.56};
    var fKft: dimensionless {init: 0.56};
    var fKstt: dimensionless {init: 0.76};
    var fKtot: dimensionless {init: 0.56};
    var fNaCat: dimensionless {init: 0.81};
    var fNaKt: dimensionless {init: 0.59};
    var fNabt: dimensionless {init: 0.56};
    var fNat: dimensionless {init: 0.56};
    var fpCat: dimensionless {init: 0.56};
    var gCa: cm_per_s {init: 0.00021};
    var gCab: mS_per_cm2 {init: 0.000648};
    var gCabs: mS {pub: out};
    var gCabt: mS {pub: out};
    var gCas: cm3_per_s {pub: out};
    var gCat: cm3_per_s {pub: out};
    var gK1: mS_per_cm2 {init: 0.24};
    var gK1s: mS {pub: out};
    var gK1t: mS {pub: out};
    var gKb: mS_per_cm2 {init: 0.00138};
    var gKbs: mS {pub: out};
    var gKbt: mS {pub: out};
    var gKf: mS_per_cm2 {init: 0.0145};
    var gKfs: mS {pub: out};
    var gKft: mS {pub: out};
    var gKst: mS_per_cm2 {init: 0.07};
    var gKsts: mS {pub: out};
    var gKstt: mS {pub: out};
    var gKto: mS_per_cm2 {init: 0.35};
    var gKtos: mS {pub: out};
    var gKtot: mS {pub: out};
    var gNa: mS_per_cm2 {init: 10.0};
    var gNab: mS_per_cm2 {init: 0.0008015};
    var gNabs: mS {pub: out};
    var gNabt: mS {pub: out};
    var gNas: mS {pub: out};
    var gNat: mS {pub: out};
    var i_NaCa_max: uA_per_cm2 {init: 0.00018};
    var i_NaCa_maxs: uA {pub: out};
    var i_NaCa_maxt: uA {pub: out};
    var i_NaK_max: uA_per_cm2 {init: 1.0};
    var i_NaK_maxs: uA {pub: out};
    var i_NaK_maxt: uA {pub: out};
    var i_pCa_max: uA_per_cm2 {init: 0.85};
    var i_pCa_maxs: uA {pub: out};
    var i_pCa_maxt: uA {pub: out};
    gCabs = gCab*(Sms+Smt)*(1.0{dimensionless}-fCabt);
    gCabt = gCab*(Sms+Smt)*fCabt;
    gCas = gCa*(Sms+Smt)*(1.0{dimensionless}-fCat);
    gCat = gCa*(Sms+Smt)*fCat;
    gK1s = gK1*(Sms+Smt)*(1.0{dimensionless}-fK1t);
    gK1t = gK1*(Sms+Smt)*fK1t;
    gKbs = gKb*(Sms+Smt)*(1.0{dimensionless}-fKbt);
    gKbt = gKb*(Sms+Smt)*fKbt;
    gKfs = gKf*(Sms+Smt)*(1.0{dimensionless}-fKft);
    gKft = gKf*(Sms+Smt)*fKft;
    gKsts = gKst*(Sms+Smt)*(1.0{dimensionless}-fKstt);
    gKstt = gKst*(Sms+Smt)*fKstt;
    gKtos = gKto*(Sms+Smt)*(1.0{dimensionless}-fKtot);
    gKtot = gKto*(Sms+Smt)*fKtot;
    gNabs = gNab*(Sms+Smt)*(1.0{dimensionless}-fNabt);
    gNabt = gNab*(Sms+Smt)*fNabt;
    gNas = gNa*(Sms+Smt)*(1.0{dimensionless}-fNat);
    gNat = gNa*(Sms+Smt)*fNat;
    i_NaCa_maxs = i_NaCa_max*(Sms+Smt)*(1.0{dimensionless}-fNaCat);
    i_NaCa_maxt = i_NaCa_max*(Sms+Smt)*fNaCat;
    i_NaK_maxs = i_NaK_max*(Sms+Smt)*(1.0{dimensionless}-fNaKt);
    i_NaK_maxt = i_NaK_max*(Sms+Smt)*fNaKt;
    i_pCa_maxs = i_pCa_max*(Sms+Smt)*(1.0{dimensionless}-fpCat);
    i_pCa_maxt = i_pCa_max*(Sms+Smt)*fpCat;
  enddef;

  def comp model_parameters as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cae: mM {pub: out, init: 1.2};
    var Cms: uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cmt: uF;
    var F: C_per_mol {pub: out, init: 96500.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ke: mM {pub: out, init: 5.4};
    var Lt: cm;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nae: mM {pub: out, init: 140.0};
    var R: mJ_per_mol_per_K {pub: out, init: 8310.0};
    var Rot: g_m3_per_s3_per_A2_times_1e1 {init: 83.33};
    var Rst: ohm {pub: out};
    var Sms: cm2 {pub: out};
    var Smt: cm2 {pub: out};
    var Smtot: cm2 {init: 0.0001};
    var T: kelvin {pub: out, init: 295.0};
    var VSRrel: mL {pub: out};
    var VSRup: mL {pub: out};
    var Vc: mL;
    var Vd: mL {pub: out};
    var Vmyo: mL {pub: out};
    var Vt: mL {pub: out};
    var pt: dimensionless;
    var ptcm: per_m2_times_1e4 {init: 3.00000000000000000e+07};
    var radiust: cm {init: 1.5e-05};
    Cms = Sms*1.0{uF_per_cm2};
    Cmt = Smt*1.0{uF_per_cm2};
    Lt = Smt/(2.0{dimensionless}*3.14159{dimensionless}*radiust*pt);
    Rst = Rot*Lt/2.0{dimensionless}/(3.14159{dimensionless}*sqr(radiust)*pt);
    Sms = Smtot-4400.0{per_cm}*Vc;
    Smt = Smtot-Sms;
    VSRrel = Vc*0.0035{dimensionless};
    VSRup = Vc*0.0315{dimensionless};
    Vc = Smtot/7850.0{per_cm};
    Vd = Vc*7.5e-05{dimensionless};
    Vmyo = Vc*0.585{dimensionless};
    Vt = 3.14159{dimensionless}*sqr(radiust)*Lt*pt;
    pt = ptcm*Sms;
  enddef;

  def comp t_tubular_ion_fluxes as
    var Cae: mM {pub: in};
    var Cat: mM {pub: in};
    var JteCa: mol_per_m3_per_s {pub: out};
    var JteK: mol_per_m3_per_s {pub: out};
    var JteNa: mol_per_m3_per_s {pub: out};
    var Ke: mM {pub: in};
    var Kt: mM {pub: in};
    var Nae: mM {pub: in};
    var Nat: mM {pub: in};
    var Vt: mL {pub: in};
    var tauCa: second {init: 0.5};
    var tauK: second {init: 0.15};
    var tauNa: second {init: 0.15};
    JteCa = 1.0{per_m3_times_1e6}*Vt/tauCa*(Cat-Cae);
    JteK = 1.0{per_m3_times_1e6}*Vt/tauK*(Kt-Ke);
    JteNa = 1.0{per_m3_times_1e6}*Vt/tauNa*(Nat-Nae);
  enddef;
  def map between CaSRrel and JCaSRrel for
    vars CaSRrel and CaSRrel_CaSRrel;
    vars JCaSRrel_JCaSRrel and JCaSRrel;
  enddef;
  def map between CaSRrel and Jtr for
    vars CaSRrel and CaSRrel_CaSRrel;
    vars Jtr_Jtr and Jtr;
  enddef;
  def map between CaSRrel and environment for
    vars time and time;
  enddef;
  def map between CaSRrel and model_parameters for
    vars VSRrel and VSRrel;
  enddef;
  def map between CaSRup and JCaSRup for
    vars CaSRup and CaSRup_CaSRup;
    vars JCaSRup_JCaSRup and JCaSRup;
  enddef;
  def map between CaSRup and Jtr for
    vars CaSRup and CaSRup_CaSRup;
    vars Jtr_Jtr and Jtr;
  enddef;
  def map between CaSRup and environment for
    vars time and time;
  enddef;
  def map between CaSRup and model_parameters for
    vars VSRup and VSRup;
  enddef;
  def map between JCaSRrel and environment for
    vars time and time;
  enddef;
  def map between JCaSRrel and ion_concentrations for
    vars Cass and Cass;
    vars JCaSRrel and JCaSRrel_JCaSRrel;
  enddef;
  def map between JCaSRrel and model_parameters for
    vars VSRrel and VSRrel;
  enddef;
  def map between JCaSRup and ion_concentrations for
    vars Cai and Cai;
    vars JCaSRup and JCaSRup_JCaSRup;
  enddef;
  def map between JCaSRup and model_parameters for
    vars Vmyo and Vmyo;
  enddef;
  def map between JCad and ion_concentrations for
    vars Cai and Cai;
    vars Cass and Cass;
    vars JCad and JCad_JCad;
  enddef;
  def map between JCad and model_parameters for
    vars Vmyo and Vmyo;
  enddef;
  def map between Jtr and model_parameters for
    vars VSRrel and VSRrel;
  enddef;
  def map between Vms and Vmt for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Cabs for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Cas for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_K1s for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Kbs for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Kfs for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Kfs_qs_gate for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Ksts for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Ksts_rsts_gate for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Ksts_ssts_gate for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Ktos for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Ktos_rs_gate for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Ktos_ss_gate for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Ktos_sss_gate for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_NaCas for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_NaKs for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Nabs for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Nas for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Nas_h_gate for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_Nas_m_gate for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vms and i_circ for
    vars Vms and Vms_Vms;
  enddef;
  def map between Vmt and i_Cabt for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Cat for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_K1t for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Kbt for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Kft for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Kft_qt_gate for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Kstt for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Kstt_rstt_gate for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Kstt_sstt_gate for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Ktot for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Ktot_rt_gate for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Ktot_sst_gate for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Ktot_st_gate for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_NaCat for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_NaKt for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Nabt for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Nat for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Nat_h_gate for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_Nat_m_gate for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between Vmt and i_circ for
    vars Vmt and Vmt_Vmt;
  enddef;
  def map between environment and i_Cas for
    vars time and time;
  enddef;
  def map between environment and i_Cat for
    vars time and time;
  enddef;
  def map between environment and i_Kfs_qs_gate for
    vars time and time;
  enddef;
  def map between environment and i_Kft_qt_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ksts_rsts_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ksts_ssts_gate for
    vars time and time;
  enddef;
  def map between environment and i_Kstt_rstt_gate for
    vars time and time;
  enddef;
  def map between environment and i_Kstt_sstt_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ktos_rs_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ktos_ss_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ktos_sss_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ktot_rt_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ktot_sst_gate for
    vars time and time;
  enddef;
  def map between environment and i_Ktot_st_gate for
    vars time and time;
  enddef;
  def map between environment and i_Nas_h_gate for
    vars time and time;
  enddef;
  def map between environment and i_Nas_m_gate for
    vars time and time;
  enddef;
  def map between environment and i_Nat_h_gate for
    vars time and time;
  enddef;
  def map between environment and i_Nat_m_gate for
    vars time and time;
  enddef;
  def map between environment and i_Stim for
    vars time and time;
  enddef;
  def map between environment and ion_concentrations for
    vars time and time;
  enddef;
  def map between i_Cabs and i_Cas for
    vars E_Cas and E_Cas;
  enddef;
  def map between i_Cabs and ion_concentrations for
    vars i_Cabs and i_Cabs_i_Cabs;
  enddef;
  def map between i_Cabs and membrane_permeabilities for
    vars gCabs and gCabs;
  enddef;
  def map between i_Cabt and i_Cat for
    vars E_Cat and E_Cat;
  enddef;
  def map between i_Cabt and ion_concentrations for
    vars i_Cabt and i_Cabt_i_Cabt;
  enddef;
  def map between i_Cabt and membrane_permeabilities for
    vars gCabt and gCabt;
  enddef;
  def map between i_Cas and ical_tot for
    vars driving_term_ghk and i_Cas_driving_term_ghk;
    vars open_prob and i_Cas_open_prob;
  enddef;
  def map between i_Cas and ion_concentrations for
    vars Cai and Cai;
    vars Cass and Cass;
    vars i_Cas and i_Cas_i_Cas;
  enddef;
  def map between i_Cas and membrane_permeabilities for
    vars gCas and gCas;
  enddef;
  def map between i_Cas and model_parameters for
    vars Cae and Cae;
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_Cat and ion_concentrations for
    vars Cai and Cai;
    vars Cass and Cass;
    vars Cat and Cat;
    vars i_Cat and i_Cat_i_Cat;
  enddef;
  def map between i_Cat and membrane_permeabilities for
    vars gCat and gCat;
  enddef;
  def map between i_Cat and model_parameters for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_K1s and i_Ktos for
    vars E_Ks and E_Ks;
  enddef;
  def map between i_K1s and ion_concentrations for
    vars i_K1s and i_K1s_i_K1s;
  enddef;
  def map between i_K1s and membrane_permeabilities for
    vars gK1s and gK1s;
  enddef;
  def map between i_K1s and model_parameters for
    vars F and F;
    vars Ke and Ke;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_K1t and i_Ktot for
    vars E_Kt and E_Kt;
  enddef;
  def map between i_K1t and ion_concentrations for
    vars Kt and Kt;
    vars i_K1t and i_K1t_i_K1t;
  enddef;
  def map between i_K1t and membrane_permeabilities for
    vars gK1t and gK1t;
  enddef;
  def map between i_K1t and model_parameters for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_Kbs and i_Ktos for
    vars E_Ks and E_Ks;
  enddef;
  def map between i_Kbs and ion_concentrations for
    vars i_Kbs and i_Kbs_i_Kbs;
  enddef;
  def map between i_Kbs and membrane_permeabilities for
    vars gKbs and gKbs;
  enddef;
  def map between i_Kbt and i_Ktot for
    vars E_Kt and E_Kt;
  enddef;
  def map between i_Kbt and ion_concentrations for
    vars i_Kbt and i_Kbt_i_Kbt;
  enddef;
  def map between i_Kbt and membrane_permeabilities for
    vars gKbt and gKbt;
  enddef;
  def map between i_Kfs and i_Kfs_qs_gate for
    vars qs and qs;
  enddef;
  def map between i_Kfs and i_Ktos for
    vars E_Ks and E_Ks;
  enddef;
  def map between i_Kfs and i_Nas for
    vars E_Nas and E_Nas;
  enddef;
  def map between i_Kfs and ion_concentrations for
    vars i_Kfs and i_Kfs_i_Kfs;
  enddef;
  def map between i_Kfs and membrane_permeabilities for
    vars gKfs and gKfs;
  enddef;
  def map between i_Kft and i_Kft_qt_gate for
    vars qt and qt;
  enddef;
  def map between i_Kft and i_Ktot for
    vars E_Kt and E_Kt;
  enddef;
  def map between i_Kft and i_Nat for
    vars E_Nat and E_Nat;
  enddef;
  def map between i_Kft and ion_concentrations for
    vars i_Kft and i_Kft_i_Kft;
  enddef;
  def map between i_Kft and membrane_permeabilities for
    vars gKft and gKft;
  enddef;
  def map between i_Ksts and i_Ksts_rsts_gate for
    vars rsts and rsts;
  enddef;
  def map between i_Ksts and i_Ksts_ssts_gate for
    vars ssts and ssts;
  enddef;
  def map between i_Ksts and i_Ktos for
    vars E_Ks and E_Ks;
  enddef;
  def map between i_Ksts and ion_concentrations for
    vars i_Ksts and i_Ksts_i_Ksts;
  enddef;
  def map between i_Ksts and membrane_permeabilities for
    vars gKsts and gKsts;
  enddef;
  def map between i_Kstt and i_Kstt_rstt_gate for
    vars rstt and rstt;
  enddef;
  def map between i_Kstt and i_Kstt_sstt_gate for
    vars sstt and sstt;
  enddef;
  def map between i_Kstt and i_Ktot for
    vars E_Kt and E_Kt;
  enddef;
  def map between i_Kstt and ion_concentrations for
    vars i_Kstt and i_Kstt_i_Kstt;
  enddef;
  def map between i_Kstt and membrane_permeabilities for
    vars gKstt and gKstt;
  enddef;
  def map between i_Ktos and i_Ktos_rs_gate for
    vars rs and rs;
  enddef;
  def map between i_Ktos and i_Ktos_ss_gate for
    vars ss and ss;
  enddef;
  def map between i_Ktos and i_Ktos_sss_gate for
    vars sss and sss;
  enddef;
  def map between i_Ktos and ion_concentrations for
    vars Ki and Ki;
    vars i_Ktos and i_Ktos_i_Ktos;
  enddef;
  def map between i_Ktos and membrane_permeabilities for
    vars gKtos and gKtos;
  enddef;
  def map between i_Ktos and model_parameters for
    vars F and F;
    vars Ke and Ke;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_Ktot and i_Ktot_rt_gate for
    vars rt and rt;
  enddef;
  def map between i_Ktot and i_Ktot_sst_gate for
    vars sst and sst;
  enddef;
  def map between i_Ktot and i_Ktot_st_gate for
    vars st and st;
  enddef;
  def map between i_Ktot and ion_concentrations for
    vars Ki and Ki;
    vars Kt and Kt;
    vars i_Ktot and i_Ktot_i_Ktot;
  enddef;
  def map between i_Ktot and membrane_permeabilities for
    vars gKtot and gKtot;
  enddef;
  def map between i_Ktot and model_parameters for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_NaCas and ion_concentrations for
    vars Cai and Cai;
    vars Nai and Nai;
    vars i_NaCas and i_NaCas_i_NaCas;
  enddef;
  def map between i_NaCas and membrane_permeabilities for
    vars i_NaCa_maxs and i_NaCa_maxs;
  enddef;
  def map between i_NaCas and model_parameters for
    vars Cae and Cae;
    vars Nae and Nae;
  enddef;
  def map between i_NaCat and ion_concentrations for
    vars Cai and Cai;
    vars Cat and Cat;
    vars Nai and Nai;
    vars Nat and Nat;
    vars i_NaCat and i_NaCat_i_NaCat;
  enddef;
  def map between i_NaCat and membrane_permeabilities for
    vars i_NaCa_maxt and i_NaCa_maxt;
  enddef;
  def map between i_NaKs and ion_concentrations for
    vars Nai and Nai;
    vars i_NaKs and i_NaKs_i_NaKs;
  enddef;
  def map between i_NaKs and membrane_permeabilities for
    vars i_NaK_maxs and i_NaK_maxs;
  enddef;
  def map between i_NaKs and model_parameters for
    vars F and F;
    vars Ke and Ke;
    vars Nae and Nae;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_NaKt and ion_concentrations for
    vars Kt and Kt;
    vars Nai and Nai;
    vars Nat and Nat;
    vars i_NaKt and i_NaKt_i_NaKt;
  enddef;
  def map between i_NaKt and membrane_permeabilities for
    vars i_NaK_maxt and i_NaK_maxt;
  enddef;
  def map between i_NaKt and model_parameters for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_Nabs and i_Nas for
    vars E_Nas and E_Nas;
  enddef;
  def map between i_Nabs and ion_concentrations for
    vars i_Nabs and i_Nabs_i_Nabs;
  enddef;
  def map between i_Nabs and membrane_permeabilities for
    vars gNabs and gNabs;
  enddef;
  def map between i_Nabt and i_Nat for
    vars E_Nat and E_Nat;
  enddef;
  def map between i_Nabt and ion_concentrations for
    vars i_Nabt and i_Nabt_i_Nabt;
  enddef;
  def map between i_Nabt and membrane_permeabilities for
    vars gNabt and gNabt;
  enddef;
  def map between i_Nas and i_Nas_h_gate for
    vars i_Nas_h_gate_h and h;
  enddef;
  def map between i_Nas and i_Nas_m_gate for
    vars i_Nas_m_gate_m and m;
  enddef;
  def map between i_Nas and ion_concentrations for
    vars Ki and Ki;
    vars Nai and Nai;
    vars i_Nas and i_Nas_i_Nas;
  enddef;
  def map between i_Nas and membrane_permeabilities for
    vars gNas and gNas;
  enddef;
  def map between i_Nas and model_parameters for
    vars F and F;
    vars Ke and Ke;
    vars Nae and Nae;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_Nat and i_Nat_h_gate for
    vars i_Nat_h_gate_h and h;
  enddef;
  def map between i_Nat and i_Nat_m_gate for
    vars i_Nat_m_gate_m and m;
  enddef;
  def map between i_Nat and ion_concentrations for
    vars Ki and Ki;
    vars Kt and Kt;
    vars Nai and Nai;
    vars Nat and Nat;
    vars i_Nat and i_Nat_i_Nat;
  enddef;
  def map between i_Nat and membrane_permeabilities for
    vars gNat and gNat;
  enddef;
  def map between i_Nat and model_parameters for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between i_Stim and ion_concentrations for
    vars i_Stim and i_Stim_i_Stim;
  enddef;
  def map between i_circ and model_parameters for
    vars Rst and Rst;
  enddef;
  def map between i_pCas and ion_concentrations for
    vars Cai and Cai;
    vars i_pCas and i_pCas_i_pCas;
  enddef;
  def map between i_pCas and membrane_permeabilities for
    vars i_pCa_maxs and i_pCa_maxs;
  enddef;
  def map between i_pCat and ion_concentrations for
    vars Cai and Cai;
    vars i_pCat and i_pCat_i_pCat;
  enddef;
  def map between i_pCat and membrane_permeabilities for
    vars i_pCa_maxt and i_pCa_maxt;
  enddef;
  def map between ical_tot and membrane_permeabilities for
    vars gCas and gCas;
    vars gCat and gCat;
  enddef;
  def map between ion_concentrations and model_parameters for
    vars F and F;
    vars Vd and Vd;
    vars Vmyo and Vmyo;
    vars Vt and Vt;
  enddef;
  def map between ion_concentrations and t_tubular_ion_fluxes for
    vars Cat and Cat;
    vars JteCa and JteCa;
    vars JteK and JteK;
    vars JteNa and JteNa;
    vars Kt and Kt;
    vars Nat and Nat;
  enddef;
  def map between membrane_permeabilities and model_parameters for
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between model_parameters and t_tubular_ion_fluxes for
    vars Cae and Cae;
    vars Ke and Ke;
    vars Nae and Nae;
    vars Vt and Vt;
  enddef;
enddef;
