def model priebe_beuckelmann_1998 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit pF as
    unit gram {expo: -1.0, mult: 1e-15};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit um as
    unit metre {mult: 1e-06};
  enddef;
  def unit um3 as
    unit metre {expo: 3.0, mult: 1e-18};
  enddef;

  def comp ICa as
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#calcium_reversal_potential
    var E_Ca: mV {pub: out};
    var FonRT: per_mV {pub: in};
    var V: mV {pub: in};
    var d: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_ohmic_driving_term
    var driving_term_ohmic: mV;
    var f: dimensionless {pub: in};
    var f_Ca: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_Ca_max: mS_per_uF {init: 0.064};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_Ca: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var open_prob: dimensionless;
    E_Ca = ln(Cao/Cai)/(2.0{dimensionless}*FonRT);
    driving_term_ohmic = V-E_Ca;
    i_Ca = g_Ca_max*open_prob*driving_term_ohmic;
    open_prob = d*f*f_Ca;
  enddef;

  def comp ICa_d_gate as
    var V: mV {pub: in};
    var alpha_d: mS_per_uF;
    var beta_d: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {pub: out, init: 2.50653215966786014e-10};
    var time: ms {pub: in};
    alpha_d = 14.9859{mS_per_uF}/(16.6813{dimensionless}*sqrt(2.0{dimensionless}*3.14159265358979312e+00{dimensionless}))*exp(-sqr((V-22.36{mV})/16.6813{mV})/2.0{dimensionless});
    beta_d = 0.1471{mS_per_uF}-5.3{mS_per_uF}/(14.93{dimensionless}*sqrt(2.0{dimensionless}*3.14159265358979312e+00{dimensionless}))*exp(-sqr((V-6.2744{mV})/14.93{mV})/2.0{dimensionless});
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;

  def comp ICa_f_Ca_gate as
    var Cai: mM {pub: in};
    var Km_Ca: mM {init: 0.0006};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var f_Ca: dimensionless {pub: out};
    f_Ca = Km_Ca/(Km_Ca+Cai);
  enddef;

  def comp ICa_f_gate as
    var V: mV {pub: in};
    var alpha_f: mS_per_uF;
    var beta_f: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {pub: out, init: 9.21303768505480014e-01};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: ms;
    var time: ms {pub: in};
    alpha_f = 0.006872{mS_per_uF}/(1.0{dimensionless}+exp((V-6.1546{mV})/6.1223{mV}));
    beta_f = (0.0687{mS_per_uF}*exp(-0.1081{per_mV}*(V+9.8255{mV}))+0.0112{mS_per_uF})/(1.0{dimensionless}+exp(-0.2779{per_mV}*(V+9.8255{mV})))+0.0005474{mS_per_uF};
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
    tau_f = 1.0{dimensionless}/(alpha_f+beta_f);
  enddef;

  def comp ICab as
    var E_Ca: mV {pub: in};
    var V: mV {pub: in};
    var failing: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current_conductance
    var g_b_Ca_max: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current
    var i_b_Ca: A_per_F {pub: out};
    g_b_Ca_max = sel
      case failing == 0.0{dimensionless}:
        0.00085{mS_per_uF};
      otherwise:
        0.0013{mS_per_uF};
    endsel;
    i_b_Ca = g_b_Ca_max*(V-E_Ca);
  enddef;

  def comp IK1 as
    var E_K1: mV {pub: out};
    var FonRT: per_mV {pub: in};
    var K1_infinity: dimensionless {pub: in};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var V: mV {pub: in};
    var failing: dimensionless {pub: in};
    var g_K1_max: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1_scale: dimensionless {init: 1.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: A_per_F {pub: out};
    E_K1 = ln(Ko/Ki)/FonRT;
    g_K1_max = sel
      case failing == 0.0{dimensionless}:
        2.5{mS_per_uF};
      otherwise:
        2.0{mS_per_uF};
    endsel;
    i_K1 = g_K1_max*g_K1_scale*K1_infinity*(V-E_K1);
  enddef;

  def comp IK1_K1_gate as
    var E_K1: mV {pub: in};
    var K1_infinity: dimensionless {pub: out};
    var V: mV {pub: in};
    var alpha_K1: mS_per_uF;
    var beta_K1: mS_per_uF;
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
    alpha_K1 = 0.1{mS_per_uF}/(1.0{dimensionless}+exp(0.06{per_mV}*(V-(E_K1+200.0{mV}))));
    beta_K1 = (3.0{mS_per_uF}*exp(0.0002{per_mV}*(V+100.0{mV}+(-E_K1)))+1.0{mS_per_uF}*exp(0.1{per_mV}*(V-(10.0{mV}+E_K1))))/(1.0{dimensionless}+exp(-0.5{per_mV}*(V-E_K1)));
  enddef;

  def comp IKr as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: mV;
    var FonRT: per_mV {pub: in};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var V: mV {pub: in};
    var Xr: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr_max: mS_per_uF {init: 0.015};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: A_per_F {pub: out};
    var rik: dimensionless;
    E_K = ln(Ko/Ki)/FonRT;
    i_Kr = g_Kr_max*Xr*rik*(V-E_K);
    rik = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+26.0{mV})/23.0{mV}));
  enddef;

  def comp IKr_Xr_gate as
    var V: mV {pub: in};
    var Xr: dimensionless {pub: out, init: 2.15523048438940999e-04};
    var alpha_Xr: mS_per_uF;
    var beta_Xr: mS_per_uF;
    var time: ms {pub: in};
    ode(Xr, time) = alpha_Xr*(1.0{dimensionless}-Xr)-beta_Xr*Xr;
    alpha_Xr = 0.005{mS_per_uF}*exp(0.0005266{per_mV}*(V+4.067{mV}))/(1.0{dimensionless}+exp(-0.1262{per_mV}*(V+4.067{mV})));
    beta_Xr = 0.016{mS_per_uF}*exp(0.0016{per_mV}*(V+65.66{mV}))/(1.0{dimensionless}+exp(0.0783{per_mV}*(V+65.66{mV})));
  enddef;

  def comp IKs as
    var E_Ks: mV;
    var FonRT: per_mV {pub: in};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var V: mV {pub: in};
    var Xs: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks_max: mS_per_uF {init: 0.02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: A_per_F {pub: out};
    E_Ks = ln((0.01833{dimensionless}*Nao+Ko)/(0.01833{dimensionless}*Nai+Ki))/FonRT;
    i_Ks = g_Ks_max*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp IKs_Xs_gate as
    var V: mV {pub: in};
    var Xs: dimensionless {pub: out, init: 8.85658064818146962e-03};
    var alpha_Xs: mS_per_uF;
    var beta_Xs: mS_per_uF;
    var time: ms {pub: in};
    ode(Xs, time) = alpha_Xs*(1.0{dimensionless}-Xs)-beta_Xs*Xs;
    alpha_Xs = 0.003013{mS_per_uF}/(1.0{dimensionless}+exp((7.4454{mV}-(V+10.0{mV}))/14.3171{mV}));
    beta_Xs = 0.00587{mS_per_uF}/(1.0{dimensionless}+exp((5.95{mV}+V+10.0{mV})/15.82{mV}));
  enddef;

  def comp INa as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: mV {pub: out};
    var FonRT: per_mV {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: mS_per_uF {init: 16.0};
    var h: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: A_per_F {pub: out};
    var j: dimensionless {pub: in};
    var m: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {pub: out, init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: mV {pub: out, init: 0.0};
    E_Na = ln(Nao/Nai)/FonRT;
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp INaCa as
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var K_NaCa: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var K_NaCa_normal: A_per_F {init: 1000.0};
    var K_mCa: mM {init: 1.38};
    var K_mNa: mM {init: 87.5};
    var K_sat: dimensionless {init: 0.1};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var V: mV {pub: in};
    var eta: dimensionless {init: 0.35};
    var failing: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: A_per_F {pub: out};
    K_NaCa = sel
      case failing == 0.0{dimensionless}:
        K_NaCa_normal;
      otherwise:
        1650.0{A_per_F};
    endsel;
    i_NaCa = K_NaCa*1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless}))*1.0{dimensionless}/(K_mCa+Cao)*1.0{dimensionless}/(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V*FonRT))*(exp(eta*V*FonRT)*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V*FonRT)*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  def comp INaK as
    var FonRT: per_mV {pub: in};
    var I_NaK_max: A_per_F;
    var K_mKo: mM {init: 1.5};
    var K_mNai: mM {init: 10.0};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var V: mV {pub: in};
    var f_NaK: dimensionless;
    var failing: dimensionless {pub: in};
    var i_NaK: A_per_F {pub: out};
    var sigma: dimensionless;
    I_NaK_max = sel
      case failing == 0.0{dimensionless}:
        1.3{A_per_F};
      otherwise:
        0.75{A_per_F};
    endsel;
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FonRT)+0.0365{dimensionless}*sigma*exp(-V*FonRT));
    i_NaK = I_NaK_max*f_NaK*1.0{dimensionless}/(1.0{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless}))*Ko/(Ko+K_mKo);
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{mM})-1.0{dimensionless});
  enddef;

  def comp INa_h_gate as
    var V: mV {pub: in};
    var alpha_h: mS_per_uF;
    var beta_h: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {pub: out, init: 9.95865529216237055e-01};
    var h_inf: dimensionless;
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var shift_INa_inact: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: ms;
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40.0{mV}:
        0.135{mS_per_uF}*exp((80.0{mV}+V-shift_INa_inact)/(-6.8{mV}));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    beta_h = sel
      case V < -40.0{mV}:
        3.56{mS_per_uF}*exp(0.079{per_mV}*(V-shift_INa_inact))+310000.0{mS_per_uF}*exp(0.35{per_mV}*(V-shift_INa_inact));
      otherwise:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp(-(V+10.66{mV}+shift_INa_inact)/11.1{mV})));
    endsel;
    ode(h, time) = (h_inf-h)/tau_h;
    h_inf = alpha_h*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(alpha_h+beta_h)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    tau_h = 1.0{dimensionless}/(alpha_h+beta_h);
  enddef;

  def comp INa_j_gate as
    var V: mV {pub: in};
    var alpha_j: mS_per_uF;
    var beta_j: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {pub: out, init: 9.97011204496202952e-01};
    var j_inf: dimensionless;
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var shift_INa_inact: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: ms;
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40.0{mV}:
        (-127140.0{per_mV_per_ms}*exp(0.244{per_mV}*(V-shift_INa_inact))-3.474e-05{per_mV_per_ms}*exp(-0.04391{per_mV}*(V-shift_INa_inact)))*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}-shift_INa_inact)));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    beta_j = sel
      case V < -40.0{mV}:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}-shift_INa_inact)));
      otherwise:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV}-shift_INa_inact)));
    endsel;
    ode(j, time) = (j_inf-j)/tau_j;
    j_inf = alpha_j*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/(alpha_j+beta_j)+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    tau_j = 1.0{dimensionless}/(alpha_j+beta_j);
  enddef;

  def comp INa_m_gate as
    var V: mV {pub: in};
    var alpha_m: mS_per_uF;
    var beta_m: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {pub: out, init: 5.85525582501575013e-04};
    var time: ms {pub: in};
    alpha_m = sel
      case abs(V+47.13{mV}) > 0.001{mV}:
        0.32{per_mV_per_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
      otherwise:
        3.2{mS_per_uF};
    endsel;
    beta_m = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp INab as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    var failing: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current_conductance
    var g_b_Na_max: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current
    var i_b_Na: A_per_F {pub: out};
    g_b_Na_max = sel
      case failing == 0.0{dimensionless}:
        0.001{mS_per_uF};
      otherwise:
        0.0{mS_per_uF};
    endsel;
    i_b_Na = g_b_Na_max*(V-E_Na);
  enddef;

  def comp Ileak as
    var Ca_NSR: mM {pub: in};
    var K_leak: mS_per_uF;
    var failing: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var i_leak: mM_per_ms {pub: out};
    K_leak = sel
      case failing == 0.0{dimensionless}:
        0.00026{mS_per_uF};
      otherwise:
        0.00017{mS_per_uF};
    endsel;
    i_leak = K_leak*Ca_NSR;
  enddef;

  def comp Ionic_concentrations as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_JSR: mM {pub: out, init: 2.5};
    var Ca_JSR_bufc: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var Ca_NSR: mM {pub: out, init: 2.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: mM {pub: out, init: 0.0002};
    var Cai_bufc: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: mM {pub: out, init: 2.0};
    var Cm: pF {pub: in};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: mM {pub: out, init: 140.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: mM {pub: out, init: 4.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: mM {pub: out, init: 10.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: mM {pub: out, init: 138.0};
    var V_JSR: um3;
    var V_NSR: um3;
    var V_myo: um3 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {init: 1.0};
    var i_Ca: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Stim: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_leak: mM_per_ms {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_to: A_per_F {pub: in};
    var i_tr: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    var preplength: um {init: 100.0};
    var radius: um {init: 11.0};
    var time: ms {pub: in};
    var volume: um3;
    ode(Ca_JSR, time) = Ca_JSR_bufc*(i_tr-i_rel);
    ode(Ca_NSR, time) = -1.0{dimensionless}*(i_leak+V_JSR/V_NSR*i_tr-i_up);
    ode(Cai, time) = Cai_bufc*(-Cm*(i_Ca-2.0{dimensionless}*i_NaCa+i_b_Ca)/(2.0{dimensionless}*V_myo*F)+i_rel*V_JSR/V_myo+(i_leak-i_up)*V_NSR/V_myo);
    ode(Ki, time) = -conc_clamp*Cm*(i_to+i_Kr+i_K1+i_Stim+i_Ks-2.0{dimensionless}*i_NaK)/(V_myo*F);
    ode(Nai, time) = -conc_clamp*Cm*(i_Na+i_b_Na+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})/(V_myo*F);
    V_JSR = 0.0048{dimensionless}*volume;
    V_NSR = 0.0552{dimensionless}*volume;
    V_myo = 0.68{dimensionless}*volume;
    volume = 3.14159265358979312e+00{dimensionless}*preplength*sqr(radius);
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def comp Irel as
    var APtrack: dimensionless {init: -1.37215899708899994e-136};
    var APtrack2: dimensionless {init: -7.58517896402760972e-136};
    var APtrack3: dimensionless {init: 4.82035353592763998e-05};
    var CSQNthresh: mM {init: 0.7};
    var Ca_JSR: mM {pub: in};
    var Cai: mM {pub: in};
    var Cainfluxtrack: mM {init: -7.71120176147330993e-138};
    var Cm: pF {pub: in};
    var F: C_per_mmol {pub: in};
    var G_rel: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var G_rel_max: mS_per_uF {init: 22.0};
    var G_rel_overload: mS_per_uF {init: 3.0};
    var K_mCSQN: mM {pub: in};
    var K_mrel: mM {init: 0.0008};
    var Logicthresh: dimensionless {init: 0.98};
    var OVRLDtrack: dimensionless {init: 1e-06};
    var OVRLDtrack2: dimensionless {init: 1e-06};
    var OVRLDtrack3: dimensionless {init: 1e-06};
    var V_myo: um3 {pub: in};
    var dVdt: A_per_F {pub: in};
    var delta_Ca_ith: mM {init: 5e-06};
    var i_Ca: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: mM_per_ms {pub: out};
    var time: ms {pub: in};
    ode(APtrack, time) = sel
      case dVdt > 150.0{A_per_F}:
        100.0{mS_per_uF}*(1.0{dimensionless}-APtrack)-0.5{mS_per_uF}*APtrack;
      otherwise:
        -0.5{mS_per_uF}*APtrack;
    endsel;
    ode(APtrack2, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100.0{mS_per_uF}*(1.0{dimensionless}-APtrack2)-0.5{mS_per_uF}*APtrack2;
      otherwise:
        -0.5{mS_per_uF}*APtrack2;
    endsel;
    ode(APtrack3, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100.0{mS_per_uF}*(1.0{dimensionless}-APtrack3)-0.5{mS_per_uF}*APtrack3;
      otherwise:
        -0.01{mS_per_uF}*APtrack3;
    endsel;
    ode(Cainfluxtrack, time) = sel
      case APtrack > 0.2{dimensionless}:
        -Cm*(i_Ca-i_NaCa+i_b_Ca)/(2.0{dimensionless}*V_myo*F);
      case (APtrack2 > 0.01{dimensionless}) and (APtrack <= 0.2{dimensionless}):
        0.0{mM_per_ms};
      otherwise:
        -0.5{mS_per_uF}*Cainfluxtrack;
    endsel;
    G_rel = sel
      case Cainfluxtrack > delta_Ca_ith:
        1.0{dimensionless}*G_rel_max*(Cainfluxtrack-delta_Ca_ith)/(K_mrel+Cainfluxtrack-delta_Ca_ith)*(1.0{dimensionless}-APtrack2)*APtrack2;
      case (Cainfluxtrack <= delta_Ca_ith) and (OVRLDtrack2 > 0.0{dimensionless}):
        0.0{dimensionless}*G_rel_overload*(1.0{dimensionless}-OVRLDtrack2)*OVRLDtrack2;
      otherwise:
        0.0{mS_per_uF};
    endsel;
    ode(OVRLDtrack, time) = sel
      case ((1.0{mM}/(1.0{dimensionless}+K_mCSQN/Ca_JSR) > CSQNthresh) and (OVRLDtrack3 < 0.37{dimensionless})) and (APtrack3 < 0.37{dimensionless}):
        0.0{dimensionless}*50.0{mS_per_uF}*(1.0{dimensionless}-OVRLDtrack);
      otherwise:
        -0.0{dimensionless}*0.5{mS_per_uF}*OVRLDtrack;
    endsel;
    ode(OVRLDtrack2, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack2 < Logicthresh):
        0.0{dimensionless}*50.0{mS_per_uF}*(1.0{dimensionless}-OVRLDtrack2);
      otherwise:
        -0.0{dimensionless}*0.5{mS_per_uF}*OVRLDtrack2;
    endsel;
    ode(OVRLDtrack3, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack3 < Logicthresh):
        0.0{dimensionless}*50.0{mS_per_uF}*(1.0{dimensionless}-OVRLDtrack3);
      otherwise:
        -0.0{dimensionless}*0.01{mS_per_uF}*OVRLDtrack3;
    endsel;
    i_rel = G_rel*(Ca_JSR-Cai);
  enddef;

  def comp Ito as
    var E_to: mV;
    var FonRT: per_mV {pub: in};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var V: mV {pub: in};
    var failing: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to_max: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance_scaling_factor
    var g_to_max_factor: dimensionless {init: 1.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: A_per_F {pub: out};
    var r: dimensionless {pub: in};
    var t: dimensionless {pub: in};
    E_to = ln((0.043{dimensionless}*Nao+Ko)/(0.043{dimensionless}*Nai+Ki))/FonRT;
    g_to_max = sel
      case failing == 0.0{dimensionless}:
        g_to_max_factor*0.3{mS_per_uF};
      otherwise:
        g_to_max_factor*0.191{mS_per_uF};
    endsel;
    i_to = g_to_max*r*t*(V-E_to);
  enddef;

  def comp Ito_r_gate as
    var V: mV {pub: in};
    var alpha_r: mS_per_uF;
    var beta_r: mS_per_uF;
    var r: dimensionless {pub: out, init: 1.75032478501027003e-05};
    var time: ms {pub: in};
    alpha_r = 0.5266{mS_per_uF}*exp(-0.0166{per_mV}*(V-42.2912{mV}))/(1.0{dimensionless}+exp(-0.0943{per_mV}*(V-42.2912{mV})));
    beta_r = (5.186e-05{per_mV_per_ms}*V+0.5149{mS_per_uF}*exp(-0.1344{per_mV}*(V-5.0027{mV})))/(1.0{dimensionless}+exp(-0.1348{per_mV}*(V-5.186e-05{mV})));
    ode(r, time) = alpha_r*(1.0{dimensionless}-r)-beta_r*r;
  enddef;

  def comp Ito_t_gate as
    var V: mV {pub: in};
    var alpha_t: mS_per_uF;
    var beta_t: mS_per_uF;
    var t: dimensionless {pub: out, init: 9.99897251531650988e-01};
    var time: ms {pub: in};
    alpha_t = (5.612e-05{per_mV_per_ms}*V+0.0721{mS_per_uF}*exp(-0.173{per_mV}*(V+34.2531{mV})))/(1.0{dimensionless}+exp(-0.1732{per_mV}*(V+34.2531{mV})));
    beta_t = (0.0001215{per_mV_per_ms}*V+0.0767{mS_per_uF}*exp(-1.66e-09{per_mV}*(V+34.0235{mV})))/(1.0{dimensionless}+exp(-0.1604{per_mV}*(V+34.0235{mV})));
    ode(t, time) = alpha_t*(1.0{dimensionless}-t)-beta_t*t;
  enddef;

  def comp Itr as
    var Ca_JSR: mM {pub: in};
    var Ca_NSR: mM {pub: in};
    var i_tr: mM_per_ms {pub: out};
    var tau_tr: ms {init: 180.0};
    i_tr = 1.0{dimensionless}*(Ca_NSR-Ca_JSR)/tau_tr;
  enddef;

  def comp Iup as
    var Cai: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var I_up_max: mM_per_ms;
    var K_mup: mM {init: 0.00092};
    var failing: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var i_up: mM_per_ms {pub: out};
    I_up_max = sel
      case failing == 0.0{dimensionless}:
        0.0045{mM_per_ms};
      otherwise:
        0.0015{mM_per_ms};
    endsel;
    i_up = I_up_max*Cai/(Cai+K_mup);
  enddef;

  def comp calcium_buffers_in_the_JSR as
    var CSQN_max: mM {init: 10.0};
    var Ca_JSR: mM {pub: in};
    var Ca_JSR_bufc: dimensionless {pub: out};
    var K_mCSQN: mM {pub: out, init: 0.8};
    Ca_JSR_bufc = 1.0{dimensionless}/(1.0{dimensionless}+CSQN_max*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
  enddef;

  def comp calcium_buffers_in_the_myoplasm as
    var CMDN_max: mM {init: 0.05};
    var Cai: mM {pub: in};
    var Cai_bufc: dimensionless {pub: out};
    var K_mCMDN: mM {init: 0.00238};
    var K_mTn: mM {init: 0.0005};
    var Tn_max: mM {init: 0.07};
    var buffon: dimensionless {init: 1.0};
    Cai_bufc = 1.0{dimensionless}/(1.0{dimensionless}+buffon*(CMDN_max*K_mCMDN/sqr(K_mCMDN+Cai)+Tn_max*K_mTn/sqr(K_mTn+Cai)));
  enddef;

  def comp cell as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: pF {pub: out, init: 153.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mmol {pub: out, init: 96.4867};
    var FonRT: per_mV {pub: out};
    var I_tot: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: J_per_mol_per_K {init: 8.3143};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {init: 310.15};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -9.07796417483134945e+01};
    var dVdt: A_per_F {pub: out};
    var failing: dimensionless {pub: out, init: 0.0};
    var i_Ca: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: A_per_F {pub: out};
    var i_b_Ca: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_to: A_per_F {pub: in};
    var pace: dimensionless {init: 0.0};
    var past: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {init: 2000.0};
    var time: ms {pub: in};
    FonRT = F/(R*T);
    I_tot = i_Na+i_Ca+i_to+i_Kr+i_Ks+i_K1+i_NaCa+i_NaK+i_b_Na+i_b_Ca+i_Stim;
    ode(V, time) = dVdt;
    dVdt = -1.0{dimensionless}*I_tot;
    i_Stim = pace*stim_amplitude;
    past = floor(time/stim_period)*stim_period;
    stim_amplitude = -15.0{A_per_F};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp transmembrane_currents as
  enddef;
  def map between ICa and ICa_d_gate for
    vars d and d;
  enddef;
  def map between ICa and ICa_f_Ca_gate for
    vars f_Ca and f_Ca;
  enddef;
  def map between ICa and ICa_f_gate for
    vars f and f;
  enddef;
  def map between ICa and ICab for
    vars E_Ca and E_Ca;
  enddef;
  def map between ICa and Ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca and i_Ca;
  enddef;
  def map between ICa and Irel for
    vars i_Ca and i_Ca;
  enddef;
  def map between ICa and cell for
    vars FonRT and FonRT;
    vars V and V;
    vars i_Ca and i_Ca;
  enddef;
  def map between ICa_d_gate and cell for
    vars V and V;
  enddef;
  def map between ICa_d_gate and environment for
    vars time and time;
  enddef;
  def map between ICa_f_Ca_gate and Ionic_concentrations for
    vars Cai and Cai;
  enddef;
  def map between ICa_f_gate and cell for
    vars V and V;
  enddef;
  def map between ICa_f_gate and environment for
    vars time and time;
  enddef;
  def map between ICab and Ionic_concentrations for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between ICab and Irel for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between ICab and cell for
    vars V and V;
    vars failing and failing;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between IK1 and IK1_K1_gate for
    vars E_K1 and E_K1;
    vars K1_infinity and K1_infinity;
  enddef;
  def map between IK1 and Ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between IK1 and cell for
    vars FonRT and FonRT;
    vars V and V;
    vars failing and failing;
    vars i_K1 and i_K1;
  enddef;
  def map between IK1_K1_gate and cell for
    vars V and V;
  enddef;
  def map between IKr and IKr_Xr_gate for
    vars Xr and Xr;
  enddef;
  def map between IKr and Ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_Kr and i_Kr;
  enddef;
  def map between IKr and cell for
    vars FonRT and FonRT;
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between IKr_Xr_gate and cell for
    vars V and V;
  enddef;
  def map between IKr_Xr_gate and environment for
    vars time and time;
  enddef;
  def map between IKs and IKs_Xs_gate for
    vars Xs and Xs;
  enddef;
  def map between IKs and Ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_Ks and i_Ks;
  enddef;
  def map between IKs and cell for
    vars FonRT and FonRT;
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between IKs_Xs_gate and cell for
    vars V and V;
  enddef;
  def map between IKs_Xs_gate and environment for
    vars time and time;
  enddef;
  def map between INa and INa_h_gate for
    vars h and h;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between INa and INa_j_gate for
    vars j and j;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between INa and INa_m_gate for
    vars m and m;
  enddef;
  def map between INa and INab for
    vars E_Na and E_Na;
  enddef;
  def map between INa and Ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_Na and i_Na;
  enddef;
  def map between INa and cell for
    vars FonRT and FonRT;
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between INaCa and Ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between INaCa and Irel for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between INaCa and cell for
    vars FonRT and FonRT;
    vars V and V;
    vars failing and failing;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between INaK and Ionic_concentrations for
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaK and i_NaK;
  enddef;
  def map between INaK and cell for
    vars FonRT and FonRT;
    vars V and V;
    vars failing and failing;
    vars i_NaK and i_NaK;
  enddef;
  def map between INa_h_gate and cell for
    vars V and V;
  enddef;
  def map between INa_h_gate and environment for
    vars time and time;
  enddef;
  def map between INa_j_gate and cell for
    vars V and V;
  enddef;
  def map between INa_j_gate and environment for
    vars time and time;
  enddef;
  def map between INa_m_gate and cell for
    vars V and V;
  enddef;
  def map between INa_m_gate and environment for
    vars time and time;
  enddef;
  def map between INab and Ionic_concentrations for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between INab and cell for
    vars V and V;
    vars failing and failing;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between Ileak and Ionic_concentrations for
    vars Ca_NSR and Ca_NSR;
    vars i_leak and i_leak;
  enddef;
  def map between Ileak and cell for
    vars failing and failing;
  enddef;
  def map between Ionic_concentrations and Irel for
    vars Ca_JSR and Ca_JSR;
    vars Cai and Cai;
    vars V_myo and V_myo;
    vars i_rel and i_rel;
  enddef;
  def map between Ionic_concentrations and Ito for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_to and i_to;
  enddef;
  def map between Ionic_concentrations and Itr for
    vars Ca_JSR and Ca_JSR;
    vars Ca_NSR and Ca_NSR;
    vars i_tr and i_tr;
  enddef;
  def map between Ionic_concentrations and Iup for
    vars Cai and Cai;
    vars i_up and i_up;
  enddef;
  def map between Ionic_concentrations and calcium_buffers_in_the_JSR for
    vars Ca_JSR and Ca_JSR;
    vars Ca_JSR_bufc and Ca_JSR_bufc;
  enddef;
  def map between Ionic_concentrations and calcium_buffers_in_the_myoplasm for
    vars Cai and Cai;
    vars Cai_bufc and Cai_bufc;
  enddef;
  def map between Ionic_concentrations and cell for
    vars Cm and Cm;
    vars F and F;
    vars i_Stim and i_Stim;
  enddef;
  def map between Ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between Irel and calcium_buffers_in_the_JSR for
    vars K_mCSQN and K_mCSQN;
  enddef;
  def map between Irel and cell for
    vars Cm and Cm;
    vars F and F;
    vars dVdt and dVdt;
  enddef;
  def map between Irel and environment for
    vars time and time;
  enddef;
  def map between Ito and Ito_r_gate for
    vars r and r;
  enddef;
  def map between Ito and Ito_t_gate for
    vars t and t;
  enddef;
  def map between Ito and cell for
    vars FonRT and FonRT;
    vars V and V;
    vars failing and failing;
    vars i_to and i_to;
  enddef;
  def map between Ito_r_gate and cell for
    vars V and V;
  enddef;
  def map between Ito_r_gate and environment for
    vars time and time;
  enddef;
  def map between Ito_t_gate and cell for
    vars V and V;
  enddef;
  def map between Ito_t_gate and environment for
    vars time and time;
  enddef;
  def map between Iup and cell for
    vars failing and failing;
  enddef;
  def map between cell and environment for
    vars time and time;
  enddef;
enddef;
