def model tentusscher_model_2006_epi as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit L_per_F_per_ms_times_1e0 as
    unit gram;
    unit metre {expo: 5.0};
    unit second {expo: -5.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit g_mol_per_m_per_s3_per_A as
    unit gram;
    unit metre {expo: -1.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
    unit mole;
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mV2 as
    unit gram {expo: 2.0};
    unit metre {expo: 4.0};
    unit second {expo: -6.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit pF as
    unit gram {expo: -1.0, mult: 1e-15};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit per_mM2_per_ms as
    unit metre {expo: 6.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole {expo: -2.0};
  enddef;
  def unit per_mM_per_ms as
    unit metre {expo: 3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit s_A_per_m3_times_1e3 as
    unit metre {expo: -3.0, mult: 1000};
    unit second;
    unit ampere;
  enddef;
  def unit um3 as
    unit metre {expo: 3.0, mult: 1e-18};
  enddef;

  def comp L_type_Ca_current as
    var Ca_o: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var F: C_per_mmol {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var V_high: mV {init: 15.001};
    var V_low: mV {init: 14.999};
    var d: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: s_A_per_m3_times_1e3;
    var f: dimensionless {pub: in};
    var f2: dimensionless {pub: in};
    var fCass: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_CaL: L_per_F_per_ms_times_1e0 {init: 0.0398};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_CaL: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var open_prob: dimensionless;
    var temp: g_mol_per_m_per_s3_per_A;
    driving_term_ghk = temp*4.0{dimensionless}*sqr(F)/(R*T);
    i_CaL = g_CaL*open_prob*driving_term_ghk;
    open_prob = d*f*f2*fCass;
    temp = sel
      case (V < V_low) or (V > V_high):
        (V-15.0{mV})*(0.25{dimensionless}*Ca_ss*exp(2.0{dimensionless}*(V-15.0{mV})*F/(R*T))-Ca_o)/(exp(2.0{dimensionless}*(V-15.0{mV})*F/(R*T))-1.0{dimensionless});
      otherwise:
        ((V_low-15.0{mV})*(0.25{dimensionless}*Ca_ss*exp(2.0{dimensionless}*(V_low-15.0{mV})*F/(R*T))-Ca_o)/(exp(2.0{dimensionless}*(V_low-15.0{mV})*F/(R*T))-1.0{dimensionless})+(V_high-15.0{mV})*(0.25{dimensionless}*Ca_ss*exp(2.0{dimensionless}*(V_high-15.0{mV})*F/(R*T))-Ca_o)/(exp(2.0{dimensionless}*(V_high-15.0{mV})*F/(R*T))-1.0{dimensionless}))/2.0{dimensionless};
    endsel;
  enddef;

  def comp L_type_Ca_current_d_gate as
    var V: mV {pub: in};
    var alpha_d: dimensionless;
    var beta_d: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {pub: out, init: 3.373e-05};
    var d_inf: dimensionless;
    var gamma_d: ms;
    var tau_d: ms;
    var time: ms {pub: in};
    alpha_d = 1.4{dimensionless}/(1.0{dimensionless}+exp((-35.0{mV}-V)/13.0{mV}))+0.25{dimensionless};
    beta_d = 1.4{dimensionless}/(1.0{dimensionless}+exp((V+5.0{mV})/5.0{mV}));
    ode(d, time) = (d_inf-d)/tau_d;
    d_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((-8.0{mV}-V)/7.5{mV}));
    gamma_d = 1.0{ms}/(1.0{dimensionless}+exp((50.0{mV}-V)/20.0{mV}));
    tau_d = 1.0{ms}*alpha_d*beta_d+gamma_d;
  enddef;

  def comp L_type_Ca_current_f2_gate as
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate
    var f2: dimensionless {pub: out, init: 0.9755};
    var f2_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f2_gate_tau
    var tau_f2: ms;
    var time: ms {pub: in};
    ode(f2, time) = (f2_inf-f2)/tau_f2;
    f2_inf = 0.67{dimensionless}/(1.0{dimensionless}+exp((V+35.0{mV})/7.0{mV}))+0.33{dimensionless};
    tau_f2 = 562.0{ms}*exp(-sqr(V+27.0{mV})/240.0{mV2})+31.0{ms}/(1.0{dimensionless}+exp((25.0{mV}-V)/10.0{mV}))+80.0{ms}/(1.0{dimensionless}+exp((V+30.0{mV})/10.0{mV}));
  enddef;

  def comp L_type_Ca_current_fCass_gate as
    var Ca_ss: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var fCass: dimensionless {pub: out, init: 0.9953};
    var fCass_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate_tau
    var tau_fCass: ms;
    var time: ms {pub: in};
    ode(fCass, time) = (fCass_inf-fCass)/tau_fCass;
    fCass_inf = 0.6{dimensionless}/(1.0{dimensionless}+sqr(Ca_ss/0.05{mM}))+0.4{dimensionless};
    tau_fCass = 80.0{ms}/(1.0{dimensionless}+sqr(Ca_ss/0.05{mM}))+2.0{ms};
  enddef;

  def comp L_type_Ca_current_f_gate as
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {pub: out, init: 0.7888};
    var f_inf: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate_tau
    var tau_f: ms;
    var time: ms {pub: in};
    ode(f, time) = (f_inf-f)/tau_f;
    f_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+20.0{mV})/7.0{mV}));
    tau_f = 1102.5{ms}*exp(-sqr(V+27.0{mV})/225.0{mV2})+200.0{ms}/(1.0{dimensionless}+exp((13.0{mV}-V)/10.0{mV}))+180.0{ms}/(1.0{dimensionless}+exp((V+30.0{mV})/10.0{mV}))+20.0{ms};
  enddef;

  def comp calcium_background_current as
    var E_Ca: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current_conductance
    var g_bca: mS_per_uF {init: 0.000592};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current
    var i_b_Ca: A_per_F {pub: out};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp calcium_dynamics as
    var Buf_c: mM {init: 0.2};
    var Buf_sr: mM {init: 10.0};
    var Buf_ss: mM {init: 0.4};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var Ca_SR: mM {init: 3.64};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {pub: out, init: 0.000126};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var Ca_i_bufc: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {pub: out, init: 2.0};
    var Ca_sr_bufsr: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Ca_ss: mM {pub: out, init: 0.00036};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_flux_scaling_from_intrinsic_buffers
    var Ca_ss_bufss: dimensionless;
    var Cm: pF {pub: in};
    var EC: mM {init: 1.5};
    var F: C_per_mmol {pub: in};
    var K_buf_c: mM {init: 0.001};
    var K_buf_sr: mM {init: 0.3};
    var K_buf_ss: mM {init: 0.00025};
    var K_up: mM {init: 0.00025};
    var O: dimensionless;
    var R_prime: dimensionless {init: 0.9073};
    var V_c: um3 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current_max
    var V_leak: mS_per_uF {init: 0.00036};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var V_rel: mS_per_uF {init: 0.102};
    var V_sr: um3 {init: 1094.0};
    var V_ss: um3 {init: 54.68};
    var V_xfer: mS_per_uF {init: 0.0038};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
    var Vmax_up: mM_per_ms {init: 0.006375};
    var i_CaL: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var i_leak: mM_per_ms;
    var i_p_Ca: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var i_rel: mM_per_ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var i_up: mM_per_ms;
    var i_xfer: mM_per_ms;
    var k1: per_mM2_per_ms;
    var k1_prime: per_mM2_per_ms {init: 0.15};
    var k2: per_mM_per_ms;
    var k2_prime: per_mM_per_ms {init: 0.045};
    var k3: mS_per_uF {init: 0.06};
    var k4: mS_per_uF {init: 0.005};
    var kcasr: dimensionless;
    var max_sr: dimensionless {init: 2.5};
    var min_sr: dimensionless {init: 1.0};
    var time: ms {pub: in};
    ode(Ca_SR, time) = Ca_sr_bufsr*(i_up-(i_rel+i_leak));
    ode(Ca_i, time) = Ca_i_bufc*((i_leak-i_up)*V_sr/V_c+i_xfer-(i_b_Ca+i_p_Ca-2.0{dimensionless}*i_NaCa)*Cm/(2.0{dimensionless}*V_c*F));
    Ca_i_bufc = 1.0{dimensionless}/(1.0{dimensionless}+Buf_c*K_buf_c/sqr(Ca_i+K_buf_c));
    Ca_sr_bufsr = 1.0{dimensionless}/(1.0{dimensionless}+Buf_sr*K_buf_sr/sqr(Ca_SR+K_buf_sr));
    ode(Ca_ss, time) = Ca_ss_bufss*(-i_CaL*Cm/(2.0{dimensionless}*V_ss*F)+i_rel*V_sr/V_ss-i_xfer*V_c/V_ss);
    Ca_ss_bufss = 1.0{dimensionless}/(1.0{dimensionless}+Buf_ss*K_buf_ss/sqr(Ca_ss+K_buf_ss));
    O = k1*sqr(Ca_ss)*R_prime/(k3+k1*sqr(Ca_ss));
    ode(R_prime, time) = -k2*Ca_ss*R_prime+k4*(1.0{dimensionless}-R_prime);
    i_leak = V_leak*(Ca_SR-Ca_i);
    i_rel = V_rel*O*(Ca_SR-Ca_ss);
    i_up = Vmax_up/(1.0{dimensionless}+sqr(K_up)/sqr(Ca_i));
    i_xfer = V_xfer*(Ca_ss-Ca_i);
    k1 = k1_prime/kcasr;
    k2 = k2_prime*kcasr;
    kcasr = max_sr-(max_sr-min_sr)/(1.0{dimensionless}+sqr(EC/Ca_SR));
  enddef;

  def comp calcium_pump_current as
    var Ca_i: mM {pub: in};
    var K_pCa: mM {init: 0.0005};
    var g_pCa: A_per_F {init: 0.1238};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var i_p_Ca: A_per_F {pub: out};
    i_p_Ca = g_pCa*Ca_i/(Ca_i+K_pCa);
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp fast_sodium_current as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: mS_per_uF {init: 14.838};
    var h: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: A_per_F {pub: out};
    var j: dimensionless {pub: in};
    var m: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation
    var perc_reduced_inact_for_IpNa: dimensionless {pub: out, init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift_INa_inact: mV {pub: out, init: 0.0};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_h_gate as
    var V: mV {pub: in};
    var alpha_h: mS_per_uF;
    var beta_h: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var h: dimensionless {pub: out, init: 0.7444};
    var h_inf: dimensionless;
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var shift_INa_inact: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau
    var tau_h: ms;
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40.0{mV}+shift_INa_inact:
        0.057{mS_per_uF}*exp(-(V+80.0{mV}-shift_INa_inact)/6.8{mV});
      otherwise:
        0.0{mS_per_uF};
    endsel;
    beta_h = sel
      case V < -40.0{mV}+shift_INa_inact:
        2.7{mS_per_uF}*exp(0.079{per_mV}*(V-shift_INa_inact))+310000.0{mS_per_uF}*exp(0.3485{per_mV}*(V-shift_INa_inact));
      otherwise:
        0.77{mS_per_uF}/(0.13{dimensionless}*(1.0{dimensionless}+exp((V+10.66{mV}-shift_INa_inact)/(-11.1{mV}))));
    endsel;
    ode(h, time) = (h_inf-h)/tau_h;
    h_inf = 1.0{dimensionless}*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/sqr(1.0{dimensionless}+exp((V+71.55{mV}-shift_INa_inact)/7.43{mV}))+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    tau_h = 1.0{dimensionless}/(alpha_h+beta_h);
  enddef;

  def comp fast_sodium_current_j_gate as
    var V: mV {pub: in};
    var alpha_j: mS_per_uF;
    var beta_j: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate
    var j: dimensionless {pub: out, init: 0.7045};
    var j_inf: dimensionless;
    var perc_reduced_inact_for_IpNa: dimensionless {pub: in};
    var shift_INa_inact: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau
    var tau_j: ms;
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40.0{mV}+shift_INa_inact:
        (-25428.0{mS_per_uF}*exp(0.2444{per_mV}*(V-shift_INa_inact))-6.948e-06{mS_per_uF}*exp(-0.04391{per_mV}*(V-shift_INa_inact)))*(V+37.78{mV})/1.0{mV}/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}-shift_INa_inact)));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    beta_j = sel
      case V < -40.0{mV}+shift_INa_inact:
        0.02424{mS_per_uF}*exp(-0.01052{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}-shift_INa_inact)));
      otherwise:
        0.6{mS_per_uF}*exp(0.057{per_mV}*(V-shift_INa_inact))/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV}-shift_INa_inact)));
    endsel;
    ode(j, time) = (j_inf-j)/tau_j;
    j_inf = 1.0{dimensionless}*(1.0{dimensionless}-perc_reduced_inact_for_IpNa/100.0{dimensionless})/sqr(1.0{dimensionless}+exp((V+71.55{mV}-shift_INa_inact)/7.43{mV}))+perc_reduced_inact_for_IpNa/100.0{dimensionless};
    tau_j = 1.0{dimensionless}/(alpha_j+beta_j);
  enddef;

  def comp fast_sodium_current_m_gate as
    var V: mV {pub: in};
    var alpha_m: dimensionless;
    var beta_m: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var m: dimensionless {pub: out, init: 0.00172};
    var m_inf: dimensionless;
    var tau_m: ms;
    var time: ms {pub: in};
    alpha_m = 1.0{dimensionless}/(1.0{dimensionless}+exp((-60.0{mV}-V)/5.0{mV}));
    beta_m = 0.1{dimensionless}/(1.0{dimensionless}+exp((V+35.0{mV})/5.0{mV}))+0.1{dimensionless}/(1.0{dimensionless}+exp((V-50.0{mV})/200.0{mV}));
    ode(m, time) = (m_inf-m)/tau_m;
    m_inf = 1.0{dimensionless}/sqr(1.0{dimensionless}+exp((-56.86{mV}-V)/9.03{mV}));
    tau_m = 1.0{ms}*alpha_m*beta_m;
  enddef;

  def comp inward_rectifier_potassium_current as
    var E_K: mV {pub: in};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var alpha_K1: dimensionless;
    var beta_K1: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance_scaling_factor
    var g_K1: mS_per_uF {init: 5.405};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1_total: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: A_per_F {pub: out};
    var xK1_inf: dimensionless;
    alpha_K1 = 0.1{dimensionless}/(1.0{dimensionless}+exp(0.06{per_mV}*(V-E_K-200.0{mV})));
    beta_K1 = (3.0{dimensionless}*exp(0.0002{per_mV}*(V-E_K+100.0{mV}))+exp(0.1{per_mV}*(V-E_K-10.0{mV})))/(1.0{dimensionless}+exp(-0.5{per_mV}*(V-E_K)));
    g_K1_total = g_K1*sqrt(K_o/5.4{mM});
    i_K1 = g_K1_total*xK1_inf*(V-E_K);
    xK1_inf = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: pF {pub: out, init: 185.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mmol {pub: out, init: 96.485};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: J_per_mol_per_K {pub: out, init: 8.314};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {pub: out, init: 310.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -85.23};
    var V_c: um3 {pub: out, init: 16404.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: ms {init: 1.0};
    var i_CaL: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: A_per_F {pub: out};
    var i_b_Ca: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_p_Ca: A_per_F {pub: in};
    var i_p_K: A_per_F {pub: in};
    var i_to: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: ms {init: 100.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: ms {init: 1000.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: A_per_F;
    var time: ms {pub: in};
    ode(V, time) = -1.0{dimensionless}/1.0{dimensionless}*(i_K1+i_to+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_b_Na+i_NaCa+i_b_Ca+i_p_K+i_p_Ca+i_Stim);
    i_Stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*stim_amplitude;
    stim_amplitude = -52.0{A_per_F};
  enddef;

  def comp potassium_dynamics as
    var Cm: pF {pub: in};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {pub: out, init: 136.89};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {pub: out, init: 5.4};
    var V_c: um3 {pub: in};
    var conc_clamp: dimensionless {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Stim: A_per_F {pub: in};
    var i_p_K: A_per_F {pub: in};
    var i_to: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(K_i, time) = -conc_clamp*(i_K1+i_to+i_Kr+i_Ks+i_p_K+i_Stim-2.0{dimensionless}*i_NaK)/(V_c*F)*Cm;
  enddef;

  def comp potassium_pump_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_pump_current_conductance
    var g_pK: mS_per_uF {init: 0.0146};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_pump_current
    var i_p_K: A_per_F {pub: out};
    i_p_K = g_pK*(V-E_K)/(1.0{dimensionless}+exp((25.0{mV}-V)/5.98{mV}));
  enddef;

  def comp rapid_time_dependent_potassium_current as
    var E_K: mV {pub: in};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var Xr1: dimensionless {pub: in};
    var Xr2: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance_scaling_factor
    var g_Kr: mS_per_uF {init: 0.153};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr_total: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: A_per_F {pub: out};
    g_Kr_total = g_Kr*sqrt(K_o/5.4{mM});
    i_Kr = g_Kr_total*Xr1*Xr2*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr1_gate as
    var V: mV {pub: in};
    var Xr1: dimensionless {pub: out, init: 0.00621};
    var alpha_xr1: dimensionless;
    var beta_xr1: dimensionless;
    var tau_xr1: ms;
    var time: ms {pub: in};
    var xr1_inf: dimensionless;
    ode(Xr1, time) = (xr1_inf-Xr1)/tau_xr1;
    alpha_xr1 = 450.0{dimensionless}/(1.0{dimensionless}+exp((-45.0{mV}-V)/10.0{mV}));
    beta_xr1 = 6.0{dimensionless}/(1.0{dimensionless}+exp((V+30.0{mV})/11.5{mV}));
    tau_xr1 = 1.0{ms}*alpha_xr1*beta_xr1;
    xr1_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((-26.0{mV}-V)/7.0{mV}));
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr2_gate as
    var V: mV {pub: in};
    var Xr2: dimensionless {pub: out, init: 0.4712};
    var alpha_xr2: dimensionless;
    var beta_xr2: dimensionless;
    var tau_xr2: ms;
    var time: ms {pub: in};
    var xr2_inf: dimensionless;
    ode(Xr2, time) = (xr2_inf-Xr2)/tau_xr2;
    alpha_xr2 = 3.0{dimensionless}/(1.0{dimensionless}+exp((-60.0{mV}-V)/20.0{mV}));
    beta_xr2 = 1.12{dimensionless}/(1.0{dimensionless}+exp((V-60.0{mV})/20.0{mV}));
    tau_xr2 = 1.0{ms}*alpha_xr2*beta_xr2;
    xr2_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+88.0{mV})/24.0{mV}));
  enddef;

  def comp reversal_potentials as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#calcium_reversal_potential
    var E_Ca: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: mV {pub: out};
    var E_Ks: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var P_kna: dimensionless {init: 0.03};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Na = R*T/F*ln(Na_o/Na_i);
  enddef;

  def comp slow_time_dependent_potassium_current as
    var E_Ks: mV {pub: in};
    var V: mV {pub: in};
    var Xs: dimensionless {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: mS_per_uF {init: 0.392};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: A_per_F {pub: out};
    i_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp slow_time_dependent_potassium_current_Xs_gate as
    var V: mV {pub: in};
    var Xs: dimensionless {pub: out, init: 0.0095};
    var alpha_xs: dimensionless;
    var beta_xs: dimensionless;
    var tau_xs: ms;
    var time: ms {pub: in};
    var xs_inf: dimensionless;
    ode(Xs, time) = (xs_inf-Xs)/tau_xs;
    alpha_xs = 1400.0{dimensionless}/sqrt(1.0{dimensionless}+exp((5.0{mV}-V)/6.0{mV}));
    beta_xs = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-35.0{mV})/15.0{mV}));
    tau_xs = 1.0{ms}*alpha_xs*beta_xs+80.0{ms};
    xs_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((-5.0{mV}-V)/14.0{mV}));
  enddef;

  def comp sodium_background_current as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current_conductance
    var g_bna: mS_per_uF {init: 0.00029};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current
    var i_b_Na: A_per_F {pub: out};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp sodium_calcium_exchanger_current as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var K_NaCa: A_per_F {init: 1000.0};
    var K_sat: dimensionless {init: 0.1};
    var Km_Ca: mM {init: 1.38};
    var Km_Nai: mM {init: 87.5};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var alpha: dimensionless {init: 2.5};
    var gamma: dimensionless {init: 0.35};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NaCa: A_per_F {pub: out};
    i_NaCa = K_NaCa*(exp(gamma*V*F/(R*T))*pow(Na_i, 3.0{dimensionless})*Ca_o-exp((gamma-1.0{dimensionless})*V*F/(R*T))*pow(Na_o, 3.0{dimensionless})*Ca_i*alpha)/((pow(Km_Nai, 3.0{dimensionless})+pow(Na_o, 3.0{dimensionless}))*(Km_Ca+Ca_o)*(1.0{dimensionless}+K_sat*exp((gamma-1.0{dimensionless})*V*F/(R*T))));
  enddef;

  def comp sodium_dynamics as
    var Cm: pF {pub: in};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {pub: out, init: 8.604};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {pub: out, init: 140.0};
    var V_c: um3 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#concentration_clamp_onoff
    var conc_clamp: dimensionless {pub: out, init: 1.0};
    var i_Na: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(Na_i, time) = -conc_clamp*(i_Na+i_b_Na+3.0{dimensionless}*i_NaK+3.0{dimensionless}*i_NaCa)/(V_c*F)*Cm;
  enddef;

  def comp sodium_potassium_pump_current as
    var F: C_per_mmol {pub: in};
    var K_mNa: mM {init: 40.0};
    var K_mk: mM {init: 1.0};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var P_NaK: A_per_F {init: 2.724};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var i_NaK: A_per_F {pub: out};
    i_NaK = P_NaK*K_o/(K_o+K_mk)*Na_i/(Na_i+K_mNa)/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T)));
  enddef;

  def comp transient_outward_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var g_to: mS_per_uF {init: 0.294};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var i_to: A_per_F {pub: out};
    var r: dimensionless {pub: in};
    var s: dimensionless {pub: in};
    i_to = g_to*r*s*(V-E_K);
  enddef;

  def comp transient_outward_current_r_gate as
    var V: mV {pub: in};
    var r: dimensionless {pub: out, init: 2.42e-08};
    var r_inf: dimensionless;
    var tau_r: ms;
    var time: ms {pub: in};
    ode(r, time) = (r_inf-r)/tau_r;
    r_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((20.0{mV}-V)/6.0{mV}));
    tau_r = 9.5{ms}*exp(-sqr(V+40.0{mV})/1800.0{mV2})+0.8{ms};
  enddef;

  def comp transient_outward_current_s_gate as
    var V: mV {pub: in};
    var s: dimensionless {pub: out, init: 0.999998};
    var s_inf: dimensionless;
    var tau_s: ms;
    var time: ms {pub: in};
    ode(s, time) = (s_inf-s)/tau_s;
    s_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+20.0{mV})/5.0{mV}));
    tau_s = 85.0{ms}*exp(-sqr(V+45.0{mV})/320.0{mV2})+5.0{ms}/(1.0{dimensionless}+exp((V-20.0{mV})/5.0{mV}))+3.0{ms};
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_d_gate for
    vars d and d;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f2_gate for
    vars f2 and f2;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_fCass_gate for
    vars fCass and fCass;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f_gate for
    vars f and f;
  enddef;
  def map between L_type_Ca_current and calcium_dynamics for
    vars Ca_o and Ca_o;
    vars Ca_ss and Ca_ss;
    vars i_CaL and i_CaL;
  enddef;
  def map between L_type_Ca_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_CaL and i_CaL;
  enddef;
  def map between L_type_Ca_current_d_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current_d_gate and membrane for
    vars V and V;
  enddef;
  def map between L_type_Ca_current_f2_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current_f2_gate and membrane for
    vars V and V;
  enddef;
  def map between L_type_Ca_current_fCass_gate and calcium_dynamics for
    vars Ca_ss and Ca_ss;
  enddef;
  def map between L_type_Ca_current_fCass_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current_f_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current_f_gate and membrane for
    vars V and V;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between calcium_background_current and membrane for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between calcium_background_current and reversal_potentials for
    vars E_Ca and E_Ca;
  enddef;
  def map between calcium_dynamics and calcium_pump_current for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and membrane for
    vars Cm and Cm;
    vars F and F;
    vars V_c and V_c;
  enddef;
  def map between calcium_dynamics and reversal_potentials for
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
  enddef;
  def map between calcium_dynamics and sodium_calcium_exchanger_current for
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between calcium_pump_current and membrane for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between environment and fast_sodium_current_h_gate for
    vars time and time;
  enddef;
  def map between environment and fast_sodium_current_j_gate for
    vars time and time;
  enddef;
  def map between environment and fast_sodium_current_m_gate for
    vars time and time;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and potassium_dynamics for
    vars time and time;
  enddef;
  def map between environment and rapid_time_dependent_potassium_current_Xr1_gate for
    vars time and time;
  enddef;
  def map between environment and rapid_time_dependent_potassium_current_Xr2_gate for
    vars time and time;
  enddef;
  def map between environment and slow_time_dependent_potassium_current_Xs_gate for
    vars time and time;
  enddef;
  def map between environment and sodium_dynamics for
    vars time and time;
  enddef;
  def map between environment and transient_outward_current_r_gate for
    vars time and time;
  enddef;
  def map between environment and transient_outward_current_s_gate for
    vars time and time;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars perc_reduced_inact_for_IpNa and perc_reduced_inact_for_IpNa;
    vars shift_INa_inact and shift_INa_inact;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
  enddef;
  def map between fast_sodium_current and membrane for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and reversal_potentials for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and sodium_dynamics for
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current_h_gate and membrane for
    vars V and V;
  enddef;
  def map between fast_sodium_current_j_gate and membrane for
    vars V and V;
  enddef;
  def map between fast_sodium_current_m_gate and membrane for
    vars V and V;
  enddef;
  def map between inward_rectifier_potassium_current and membrane for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between inward_rectifier_potassium_current and potassium_dynamics for
    vars K_o and K_o;
    vars i_K1 and i_K1;
  enddef;
  def map between inward_rectifier_potassium_current and reversal_potentials for
    vars E_K and E_K;
  enddef;
  def map between membrane and potassium_dynamics for
    vars Cm and Cm;
    vars F and F;
    vars V_c and V_c;
    vars i_Stim and i_Stim;
  enddef;
  def map between membrane and potassium_pump_current for
    vars V and V;
    vars i_p_K and i_p_K;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current_Xr1_gate for
    vars V and V;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current_Xr2_gate for
    vars V and V;
  enddef;
  def map between membrane and reversal_potentials for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current_Xs_gate for
    vars V and V;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and sodium_calcium_exchanger_current for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between membrane and sodium_dynamics for
    vars Cm and Cm;
    vars F and F;
    vars V_c and V_c;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and transient_outward_current_r_gate for
    vars V and V;
  enddef;
  def map between membrane and transient_outward_current_s_gate for
    vars V and V;
  enddef;
  def map between potassium_dynamics and potassium_pump_current for
    vars i_p_K and i_p_K;
  enddef;
  def map between potassium_dynamics and rapid_time_dependent_potassium_current for
    vars K_o and K_o;
    vars i_Kr and i_Kr;
  enddef;
  def map between potassium_dynamics and reversal_potentials for
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between potassium_dynamics and slow_time_dependent_potassium_current for
    vars i_Ks and i_Ks;
  enddef;
  def map between potassium_dynamics and sodium_dynamics for
    vars conc_clamp and conc_clamp;
  enddef;
  def map between potassium_dynamics and sodium_potassium_pump_current for
    vars K_o and K_o;
    vars i_NaK and i_NaK;
  enddef;
  def map between potassium_dynamics and transient_outward_current for
    vars i_to and i_to;
  enddef;
  def map between potassium_pump_current and reversal_potentials for
    vars E_K and E_K;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr1_gate for
    vars Xr1 and Xr1;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr2_gate for
    vars Xr2 and Xr2;
  enddef;
  def map between rapid_time_dependent_potassium_current and reversal_potentials for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_time_dependent_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and sodium_dynamics for
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_Xs_gate for
    vars Xs and Xs;
  enddef;
  def map between sodium_background_current and sodium_dynamics for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between sodium_calcium_exchanger_current and sodium_dynamics for
    vars Na_i and Na_i;
    vars Na_o and Na_o;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sodium_dynamics and sodium_potassium_pump_current for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
  enddef;
enddef;
