<?xml version='1.0'?>
<model name="zeng_1995" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="A_per_F">
        <unit multiplier="1000" units="gram"/>
        <unit exponent="2.0" units="metre"/>
        <unit exponent="-4.0" units="second"/>
        <unit exponent="-1.0" units="ampere"/>
    </units>
    <units name="C_per_mol">
        <unit units="second"/>
        <unit units="ampere"/>
        <unit exponent="-1.0" units="mole"/>
    </units>
    <units name="cm2_per_uF">
        <unit multiplier="100000" units="gram"/>
        <unit exponent="4.0" units="metre"/>
        <unit exponent="-4.0" units="second"/>
        <unit exponent="-2.0" units="ampere"/>
    </units>
    <units name="cm_per_s">
        <unit multiplier="0.01" units="metre"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="mJ_per_mol_per_K">
        <unit units="gram"/>
        <unit exponent="2.0" units="metre"/>
        <unit exponent="-2.0" units="second"/>
        <unit exponent="-1.0" units="kelvin"/>
        <unit exponent="-1.0" units="mole"/>
    </units>
    <units name="mM">
        <unit exponent="-3.0" units="metre"/>
        <unit units="mole"/>
    </units>
    <units name="mS_per_uF">
        <unit exponent="-1.0" multiplier="1000" units="second"/>
    </units>
    <units name="mV">
        <unit units="gram"/>
        <unit exponent="2.0" units="metre"/>
        <unit exponent="-3.0" units="second"/>
        <unit exponent="-1.0" units="ampere"/>
    </units>
    <units name="mm2">
        <unit exponent="2.0" multiplier="1e-06" units="metre"/>
    </units>
    <units name="ms">
        <unit multiplier="0.001" units="second"/>
    </units>
    <units name="per_mV">
        <unit exponent="-1.0" units="gram"/>
        <unit exponent="-2.0" units="metre"/>
        <unit exponent="3.0" units="second"/>
        <unit units="ampere"/>
    </units>
    <units name="per_mV_per_ms">
        <unit exponent="-1.0" multiplier="1000" units="gram"/>
        <unit exponent="-2.0" units="metre"/>
        <unit exponent="2.0" units="second"/>
        <unit units="ampere"/>
    </units>
    <units name="s_A_per_m3">
        <unit exponent="-3.0" units="metre"/>
        <unit units="second"/>
        <unit units="ampere"/>
    </units>
    <units name="uF">
        <unit exponent="-1.0" multiplier="1e-09" units="gram"/>
        <unit exponent="-2.0" units="metre"/>
        <unit exponent="4.0" units="second"/>
        <unit exponent="2.0" units="ampere"/>
    </units>
    <units name="uF_per_cm2">
        <unit exponent="-1.0" multiplier="1e-05" units="gram"/>
        <unit exponent="-4.0" units="metre"/>
        <unit exponent="4.0" units="second"/>
        <unit exponent="2.0" units="ampere"/>
    </units>
    <units name="uL">
        <unit exponent="3.0" multiplier="1e-09" units="metre"/>
    </units>
    <component name="L_type_Ca_channel">
        <variable name="Cai" public_interface="in" units="mM"/>
        <variable name="Cao" public_interface="in" units="mM"/>
        <variable name="F" public_interface="in" units="C_per_mol"/>
        <variable name="Ki" public_interface="in" units="mM"/>
        <variable name="Ko" public_interface="in" units="mM"/>
        <variable name="Nai" public_interface="in" units="mM"/>
        <variable name="Nao" public_interface="in" units="mM"/>
        <variable initial_value="0.00054" name="P_Ca" units="cm_per_s"/>
        <variable initial_value="1.93e-07" name="P_K" units="cm_per_s"/>
        <variable initial_value="6.75e-07" name="P_Na" units="cm_per_s"/>
        <variable name="R" public_interface="in" units="mJ_per_mol_per_K"/>
        <variable name="T" public_interface="in" units="kelvin"/>
        <variable name="V" public_interface="in" units="mV"/>
        <variable name="d" public_interface="in" units="dimensionless"/>
        <variable cmeta:id="L_type_Ca_channel_driving_term_ghk" name="driving_term_ghk" units="s_A_per_m3"/>
        <variable name="driving_term_ghk_Ca" units="s_A_per_m3"/>
        <variable name="driving_term_ghk_K" units="s_A_per_m3"/>
        <variable name="driving_term_ghk_Na" units="s_A_per_m3"/>
        <variable name="f" public_interface="in" units="dimensionless"/>
        <variable name="f_Ca" public_interface="in" units="dimensionless"/>
        <variable initial_value="1.0" name="gamma_Cai" units="dimensionless"/>
        <variable initial_value="0.34" name="gamma_Cao" units="dimensionless"/>
        <variable initial_value="0.75" name="gamma_Ki" units="dimensionless"/>
        <variable initial_value="0.75" name="gamma_Ko" units="dimensionless"/>
        <variable initial_value="0.75" name="gamma_Nai" units="dimensionless"/>
        <variable initial_value="0.75" name="gamma_Nao" units="dimensionless"/>
        <variable cmeta:id="L_type_Ca_channel_i_Ca_L" name="i_Ca_L" units="A_per_F"/>
        <variable cmeta:id="L_type_Ca_channel_open_prob" name="open_prob" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>driving_term_ghk</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="uF_per_cm2">1.0</cn>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>P_Ca</ci>
                                <ci>driving_term_ghk_Ca</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>P_K</ci>
                                <ci>driving_term_ghk_K</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>P_Na</ci>
                                <ci>driving_term_ghk_Na</ci>
                            </apply>
                        </apply>
                    </apply>
                    <ci>P_Ca</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>driving_term_ghk_Ca</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <apply>
                                    <power/>
                                    <cn cellml:units="dimensionless">2.0</cn>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <ci>V</ci>
                                <apply>
                                    <power/>
                                    <ci>F</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>R</ci>
                                <ci>T</ci>
                            </apply>
                        </apply>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>gamma_Cai</ci>
                                <ci>Cai</ci>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <cn cellml:units="dimensionless">2.0</cn>
                                            <ci>V</ci>
                                            <ci>F</ci>
                                        </apply>
                                        <apply>
                                            <times/>
                                            <ci>R</ci>
                                            <ci>T</ci>
                                        </apply>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>gamma_Cao</ci>
                                <ci>Cao</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <cn cellml:units="dimensionless">2.0</cn>
                                    <ci>V</ci>
                                    <ci>F</ci>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>R</ci>
                                    <ci>T</ci>
                                </apply>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1.0</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>driving_term_ghk_K</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <apply>
                                    <power/>
                                    <cn cellml:units="dimensionless">1.0</cn>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <ci>V</ci>
                                <apply>
                                    <power/>
                                    <ci>F</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>R</ci>
                                <ci>T</ci>
                            </apply>
                        </apply>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>gamma_Ki</ci>
                                <ci>Ki</ci>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <cn cellml:units="dimensionless">1.0</cn>
                                            <ci>V</ci>
                                            <ci>F</ci>
                                        </apply>
                                        <apply>
                                            <times/>
                                            <ci>R</ci>
                                            <ci>T</ci>
                                        </apply>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>gamma_Ko</ci>
                                <ci>Ko</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <cn cellml:units="dimensionless">1.0</cn>
                                    <ci>V</ci>
                                    <ci>F</ci>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>R</ci>
                                    <ci>T</ci>
                                </apply>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1.0</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>driving_term_ghk_Na</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <apply>
                                    <power/>
                                    <cn cellml:units="dimensionless">1.0</cn>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <ci>V</ci>
                                <apply>
                                    <power/>
                                    <ci>F</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>R</ci>
                                <ci>T</ci>
                            </apply>
                        </apply>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <ci>gamma_Nai</ci>
                                <ci>Nai</ci>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <cn cellml:units="dimensionless">1.0</cn>
                                            <ci>V</ci>
                                            <ci>F</ci>
                                        </apply>
                                        <apply>
                                            <times/>
                                            <ci>R</ci>
                                            <ci>T</ci>
                                        </apply>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>gamma_Nao</ci>
                                <ci>Nao</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <cn cellml:units="dimensionless">1.0</cn>
                                    <ci>V</ci>
                                    <ci>F</ci>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>R</ci>
                                    <ci>T</ci>
                                </apply>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1.0</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i_Ca_L</ci>
                <apply>
                    <times/>
                    <cn cellml:units="cm2_per_uF">1.0</cn>
                    <ci>P_Ca</ci>
                    <ci>driving_term_ghk</ci>
                    <ci>open_prob</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>open_prob</ci>
                <apply>
                    <times/>
                    <ci>d</ci>
                    <ci>f</ci>
                    <ci>f_Ca</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="L_type_Ca_channel_d_gate">
        <variable name="V" public_interface="in" units="mV"/>
        <variable name="alpha_d" units="mS_per_uF"/>
        <variable name="beta_d" units="mS_per_uF"/>
        <variable initial_value="0.0" name="d" public_interface="out" units="dimensionless"/>
        <variable name="d_infinity" units="dimensionless"/>
        <variable name="tau_d" units="ms"/>
        <variable name="time" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>alpha_d</ci>
                <apply>
                    <divide/>
                    <ci>d_infinity</ci>
                    <ci>tau_d</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta_d</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <ci>d_infinity</ci>
                    </apply>
                    <ci>tau_d</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>d</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_d</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <ci>d</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_d</ci>
                        <ci>d</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>d_infinity</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="mV">10.0</cn>
                                    </apply>
                                </apply>
                                <cn cellml:units="mV">6.24</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_d</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>d_infinity</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <plus/>
                                            <ci>V</ci>
                                            <cn cellml:units="mV">10.0</cn>
                                        </apply>
                                    </apply>
                                    <cn cellml:units="mV">6.24</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="per_mV_per_ms">0.035</cn>
                        <apply>
                            <plus/>
                            <ci>V</ci>
                            <cn cellml:units="mV">10.0</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="L_type_Ca_channel_f_Ca_gate">
        <variable name="Cai" public_interface="in" units="mM"/>
        <variable initial_value="0.0006" name="Km_Ca" units="mM"/>
        <variable name="f_Ca" public_interface="out" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_Ca</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <divide/>
                            <ci>Cai</ci>
                            <ci>Km_Ca</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="L_type_Ca_channel_f_gate">
        <variable name="V" public_interface="in" units="mV"/>
        <variable name="alpha_f" units="mS_per_uF"/>
        <variable name="beta_f" units="mS_per_uF"/>
        <variable initial_value="1.0" name="f" public_interface="out" units="dimensionless"/>
        <variable name="f_infinity" units="dimensionless"/>
        <variable name="tau_f" units="ms"/>
        <variable name="time" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>alpha_f</ci>
                <apply>
                    <divide/>
                    <ci>f_infinity</ci>
                    <ci>tau_f</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta_f</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <ci>f_infinity</ci>
                    </apply>
                    <ci>tau_f</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>f</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_f</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <ci>f</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_f</ci>
                        <ci>f</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>f_infinity</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="mV">35.06</cn>
                                    </apply>
                                    <cn cellml:units="mV">8.6</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">0.6</cn>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1.0</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <cn cellml:units="mV">50.0</cn>
                                        <ci>V</ci>
                                    </apply>
                                    <cn cellml:units="mV">20.0</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_f</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="ms">1.0</cn>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">0.0197</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <power/>
                                        <apply>
                                            <times/>
                                            <cn cellml:units="per_mV">0.0337</cn>
                                            <apply>
                                                <plus/>
                                                <ci>V</ci>
                                                <cn cellml:units="mV">10.0</cn>
                                            </apply>
                                        </apply>
                                        <cn cellml:units="dimensionless">2</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">0.02</cn>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="calcium_buffers_in_the_myoplasm">
        <variable cmeta:id="calcium_buffers_in_the_myoplasm_Cai" initial_value="0.0" name="Cai" public_interface="out" units="mM"/>
    </component>
    <component name="environment">
        <variable cmeta:id="environment_time" name="time" public_interface="out" units="ms"/>
    </component>
    <component name="ionic_concentrations">
        <variable initial_value="0.000153" name="A_cap" units="mm2"/>
        <variable cmeta:id="ionic_concentrations_Cao" initial_value="1.8" name="Cao" public_interface="out" units="mM"/>
        <variable cmeta:id="ionic_concentrations_Ki" initial_value="140.0" name="Ki" public_interface="out" units="mM"/>
        <variable cmeta:id="ionic_concentrations_Ko" initial_value="5.4" name="Ko" public_interface="out" units="mM"/>
        <variable cmeta:id="ionic_concentrations_Nai" initial_value="10.0" name="Nai" public_interface="out" units="mM"/>
        <variable cmeta:id="ionic_concentrations_Nao" initial_value="140.0" name="Nao" public_interface="out" units="mM"/>
        <variable initial_value="0.0" name="R_A_V" units="dimensionless"/>
        <variable initial_value="0.0" name="V_cleft" units="uL"/>
        <variable initial_value="0.0" name="V_myo" units="uL"/>
    </component>
    <component name="membrane">
        <variable cmeta:id="membrane_Cm" initial_value="1.0" name="Cm" units="uF"/>
        <variable initial_value="96500.0" name="F" public_interface="out" units="C_per_mol"/>
        <variable name="I_st" units="A_per_F"/>
        <variable initial_value="8314.0" name="R" public_interface="out" units="mJ_per_mol_per_K"/>
        <variable initial_value="310.0" name="T" public_interface="out" units="kelvin"/>
        <variable cmeta:id="membrane_V" initial_value="-84.624" name="V" public_interface="out" units="mV"/>
        <variable name="time" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_st</ci>
                <apply>
                    <minus/>
                    <cn cellml:units="A_per_F">100.0</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>V</ci>
                </apply>
                <apply>
                    <minus/>
                    <cn cellml:units="dimensionless">90.0</cn>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="L_type_Ca_channel" component_2="L_type_Ca_channel_d_gate"/>
        <map_variables variable_1="d" variable_2="d"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel" component_2="L_type_Ca_channel_f_Ca_gate"/>
        <map_variables variable_1="f_Ca" variable_2="f_Ca"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel" component_2="L_type_Ca_channel_f_gate"/>
        <map_variables variable_1="f" variable_2="f"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel" component_2="calcium_buffers_in_the_myoplasm"/>
        <map_variables variable_1="Cai" variable_2="Cai"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel" component_2="ionic_concentrations"/>
        <map_variables variable_1="Cao" variable_2="Cao"/>
        <map_variables variable_1="Ki" variable_2="Ki"/>
        <map_variables variable_1="Ko" variable_2="Ko"/>
        <map_variables variable_1="Nai" variable_2="Nai"/>
        <map_variables variable_1="Nao" variable_2="Nao"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel" component_2="membrane"/>
        <map_variables variable_1="F" variable_2="F"/>
        <map_variables variable_1="R" variable_2="R"/>
        <map_variables variable_1="T" variable_2="T"/>
        <map_variables variable_1="V" variable_2="V"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel_d_gate" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel_d_gate" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel_f_Ca_gate" component_2="calcium_buffers_in_the_myoplasm"/>
        <map_variables variable_1="Cai" variable_2="Cai"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel_f_gate" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="L_type_Ca_channel_f_gate" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="membrane"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#dyadic_buffer" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#K_on" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#cyto_buffer" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#cyto_buffer_flux" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#submembrane_buffer" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#delta_max" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#submembrane_buffer_flux" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#dyadic_buffer_flux" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:local#K_d" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_time" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_voltage" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_calcium_cass" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_calcium_cad" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#initial_calcium_cai" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:fc:local#conductance_scale_factor" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#holding" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v1" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v7" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c4" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c5" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c0" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#tx2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#tx1" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t3" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t0" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t1" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c3" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#vmax" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c8" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v4" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v6" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v8" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c6" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t5" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t8" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v3" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t6" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c7" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t4" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#c1" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#vmin" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v0" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#t7" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="dummy:name#v5" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <oxmeta:Annotation xmlns:oxmeta="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#" rdf:about="urn:temp-names#membrane_total_sodium_current" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#CustomAnnotations"/>
        </oxmeta:Annotation>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#environment_time">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#L_type_Ca_channel_i_Ca_L">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_Cm">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#membrane_V">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#calcium_buffers_in_the_myoplasm_Cai">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ionic_concentrations_Ki">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ionic_concentrations_Nai">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ionic_concentrations_Cao">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ionic_concentrations_Ko">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#ionic_concentrations_Nao">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#L_type_Ca_channel_open_prob">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#L_type_Ca_channel_driving_term_ghk">
            <bqbiol:is xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
    </rdf:RDF>
</model>
